<?xml version='1.0' encoding='UTF-8'?>
<!--#This model was automatically generated with the circulatory_autogen software-->
<!--# https://github.com/FinbarArgus/circulatory_autogen -->
<model name="CardiovascularSystem" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="3compartment_parameters.cellml">
        <component component_ref="parameters" name="parameters"/>
        <component component_ref="parameters_global" name="parameters_global"/>
    </import>
    <component name="environment">
        <variable name="time" public_interface="out" units="second"/>
    </component>
    <!--#STARTGENBELOW-->
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;units&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<import xlink:href="3compartment_units.cellml">
    <units name="s2" units_ref="s2"/>
    <units name="Hz" units_ref="Hz"/>
    <units name="millis" units_ref="millis"/>
    <units name="per_millis" units_ref="per_millis"/>
    <units name="mm" units_ref="mm"/>
    <units name="m2" units_ref="m2"/>
    <units name="mm2" units_ref="mm2"/>
    <units name="m3" units_ref="m3"/>
    <units name="m4" units_ref="m4"/>
    <units name="mm3" units_ref="mm3"/>
    <units name="J_per_s" units_ref="J_per_s"/>
    <units name="mol_per_s" units_ref="mol_per_s"/>
    <units name="mmol_per_s" units_ref="mmol_per_s"/>
    <units name="umol_per_s" units_ref="umol_per_s"/>
    <units name="C_per_s" units_ref="C_per_s"/>
    <units name="mC_per_s" units_ref="mC_per_s"/>
    <units name="uC_per_s" units_ref="uC_per_s"/>
    <units name="nC_per_s" units_ref="nC_per_s"/>
    <units name="Cm_per_millis" units_ref="Cm_per_millis"/>
    <units name="m_per_s" units_ref="m_per_s"/>
    <units name="mm_per_s" units_ref="mm_per_s"/>
    <units name="um_per_s" units_ref="um_per_s"/>
    <units name="rad_per_s" units_ref="rad_per_s"/>
    <units name="m3_per_s" units_ref="m3_per_s"/>
    <units name="mL" units_ref="mL"/>
    <units name="per_milliL_s" units_ref="per_milliL_s"/>
    <units name="s_per_m3" units_ref="s_per_m3"/>
    <units name="s_per_milliV" units_ref="s_per_milliV"/>
    <units name="s_per_millis" units_ref="s_per_millis"/>
    <units name="millis_per_s" units_ref="millis_per_s"/>
    <units name="mm3_per_s" units_ref="mm3_per_s"/>
    <units name="l_per_s" units_ref="l_per_s"/>
    <units name="per_ml_s" units_ref="per_ml_s"/>
    <units name="per_m3_s" units_ref="per_m3_s"/>
    <units name="J_per_mol" units_ref="J_per_mol"/>
    <units name="J_per_kmol_K" units_ref="J_per_kmol_K"/>
    <units name="J_per_M" units_ref="J_per_M"/>
    <units name="J_per_C" units_ref="J_per_C"/>
    <units name="J_per_C_s" units_ref="J_per_C_s"/>
    <units name="J_per_m" units_ref="J_per_m"/>
    <units name="J_per_m3" units_ref="J_per_m3"/>
    <units name="mmHg" units_ref="mmHg"/>
    <units name="per_mmHg" units_ref="per_mmHg"/>
    <units name="mmHg2" units_ref="mmHg2"/>
    <units name="Pa_per_mmHg" units_ref="Pa_per_mmHg"/>
    <units name="m3_per_J" units_ref="m3_per_J"/>
    <units name="J_per_m3s" units_ref="J_per_m3s"/>
    <units name="m3_per_Js" units_ref="m3_per_Js"/>
    <units name="J2_per_m6" units_ref="J2_per_m6"/>
    <units name="Js2_per_C2" units_ref="Js2_per_C2"/>
    <units name="Js2_per_mol2" units_ref="Js2_per_mol2"/>
    <units name="Js_per_mol2" units_ref="Js_per_mol2"/>
    <units name="Js_per_C2" units_ref="Js_per_C2"/>
    <units name="J_per_mol2" units_ref="J_per_mol2"/>
    <units name="C2_per_J_s" units_ref="C2_per_J_s"/>
    <units name="J_per_C2" units_ref="J_per_C2"/>
    <units name="C2_per_J" units_ref="C2_per_J"/>
    <units name="mol_per_m3" units_ref="mol_per_m3"/>
    <units name="M" units_ref="M"/>
    <units name="mM" units_ref="mM"/>
    <units name="milliM" units_ref="milliM"/>
    <units name="uM" units_ref="uM"/>
    <units name="kg_per_m3" units_ref="kg_per_m3"/>
    <units name="m3_per_kg" units_ref="m3_per_kg"/>
    <units name="per_m3" units_ref="per_m3"/>
    <units name="mol_per_m2_s" units_ref="mol_per_m2_s"/>
    <units name="mM_m_per_s" units_ref="mM_m_per_s"/>
    <units name="J_per_m2_s" units_ref="J_per_m2_s"/>
    <units name="Js_per_m4" units_ref="Js_per_m4"/>
    <units name="mM_per_s" units_ref="mM_per_s"/>
    <units name="per_s" units_ref="per_s"/>
    <units name="per_s2" units_ref="per_s2"/>
    <units name="per_mM_s" units_ref="per_mM_s"/>
    <units name="m6_per_mol2_s" units_ref="m6_per_mol2_s"/>
    <units name="m3_per_mol" units_ref="m3_per_mol"/>
    <units name="mol_per_m3_s" units_ref="mol_per_m3_s"/>
    <units name="per_mol" units_ref="per_mol"/>
    <units name="J_per_mol_K" units_ref="J_per_mol_K"/>
    <units name="m2_per_s" units_ref="m2_per_s"/>
    <units name="per_C" units_ref="per_C"/>
    <units name="per_m" units_ref="per_m"/>
    <units name="per_mM" units_ref="per_mM"/>
    <units name="Js2_per_m2" units_ref="Js2_per_m2"/>
    <units name="Js_per_m2" units_ref="Js_per_m2"/>
    <units name="J_per_m2" units_ref="J_per_m2"/>
    <units name="m_per_s2" units_ref="m_per_s2"/>
    <units name="rad_per_s2" units_ref="rad_per_s2"/>
    <units name="Js_per_m3" units_ref="Js_per_m3"/>
    <units name="Js2_per_m5" units_ref="Js2_per_m5"/>
    <units name="m5_per_Js2" units_ref="m5_per_Js2"/>
    <units name="J_per_m6" units_ref="J_per_m6"/>
    <units name="m6_per_J" units_ref="m6_per_J"/>
    <units name="m6_per_Js" units_ref="m6_per_Js"/>
    <units name="mm6_per_J" units_ref="mm6_per_J"/>
    <units name="Js2_per_m9" units_ref="Js2_per_m9"/>
    <units name="m6s_per_J" units_ref="m6s_per_J"/>
    <units name="Js_per_m6" units_ref="Js_per_m6"/>
    <units name="Js2_per_m6" units_ref="Js2_per_m6"/>
    <units name="m3_per_s2" units_ref="m3_per_s2"/>
    <units name="mm3_per_s2" units_ref="mm3_per_s2"/>
    <units name="per_mm3" units_ref="per_mm3"/>
    <units name="UnitValve" units_ref="UnitValve"/>
    <units name="J_per_m9" units_ref="J_per_m9"/>
    <units name="milliV" units_ref="milliV"/>
    <units name="per_milliV" units_ref="per_milliV"/>
    <units name="millis_per_milliV" units_ref="millis_per_milliV"/>
    <units name="per_V" units_ref="per_V"/>
    <units name="milliV_per_V" units_ref="milliV_per_V"/>
    <units name="V_per_milliV" units_ref="V_per_milliV"/>
    <units name="V_per_s" units_ref="V_per_s"/>
    <units name="milliV_per_kiloV" units_ref="milliV_per_kiloV"/>
    <units name="V2" units_ref="V2"/>
    <units name="milliV2" units_ref="milliV2"/>
    <units name="millimol" units_ref="millimol"/>
    <units name="millimolar" units_ref="millimolar"/>
    <units name="per_millimolar" units_ref="per_millimolar"/>
    <units name="per_millimolar_s" units_ref="per_millimolar_s"/>
    <units name="per_millimolar2_s" units_ref="per_millimolar2_s"/>
    <units name="millimolar_per_s" units_ref="millimolar_per_s"/>
    <units name="millimolar_per_megamolar" units_ref="millimolar_per_megamolar"/>
    <units name="per_millimol_milliS" units_ref="per_millimol_milliS"/>
    <units name="per_millimol_millis" units_ref="per_millimol_millis"/>
    <units name="per_millimol_s" units_ref="per_millimol_s"/>
    <units name="microm" units_ref="microm"/>
    <units name="microS" units_ref="microS"/>
    <units name="microm3" units_ref="microm3"/>
    <units name="m3_per_microm3" units_ref="m3_per_microm3"/>
    <units name="picoF" units_ref="picoF"/>
    <units name="S_per_F" units_ref="S_per_F"/>
    <units name="m3_per_Fs" units_ref="m3_per_Fs"/>
    <units name="A_per_F" units_ref="A_per_F"/>
    <units name="megaOhm" units_ref="megaOhm"/>
    <units name="nanoA" units_ref="nanoA"/>
    <units name="nanoA_per_milliA" units_ref="nanoA_per_milliA"/>
    <units name="nanoA_per_A" units_ref="nanoA_per_A"/>
    <units name="A_per_nanoA" units_ref="A_per_nanoA"/>
    <units name="C_per_mol" units_ref="C_per_mol"/>
    <units name="m3_per_J_millis" units_ref="m3_per_J_millis"/>
    <units name="m3_per_mol_millis" units_ref="m3_per_mol_millis"/>
    <units name="m3_per_millimol_s" units_ref="m3_per_millimol_s"/>
    <units name="millimol_per_m3" units_ref="millimol_per_m3"/>
    <units name="mmol_per_l" units_ref="mmol_per_l"/>
    <units name="l_per_mmol" units_ref="l_per_mmol"/>
    <units name="l_per_mmol_per_s" units_ref="l_per_mmol_per_s"/>
    <units name="l2_per_mmol_per_s" units_ref="l2_per_mmol_per_s"/>
    <units name="mmol_per_s2" units_ref="mmol_per_s2"/>
    <units name="mmol" units_ref="mmol"/>
    <units name="mmol_per_l_per_s" units_ref="mmol_per_l_per_s"/>
    <units name="Hz2" units_ref="Hz2"/>
    <units name="cm" units_ref="cm"/>
    <units name="J_per_m4_s" units_ref="J_per_m4_s"/>
    <units name="m3_per_mol_per_sec" units_ref="m3_per_mol_per_sec"/>
    <units name="mol_per_m3_per_kPa" units_ref="mol_per_m3_per_kPa"/>
    <units name="mol_per_m3_per_Pa" units_ref="mol_per_m3_per_Pa"/>
    <units name="m3_per_mol_per_s" units_ref="m3_per_mol_per_s"/>
    <units name="mol_per_m3_per_s" units_ref="mol_per_m3_per_s"/>
    <units name="dim" units_ref="dim"/>
    <units name="fmol" units_ref="fmol"/>
    <units name="per_fmol" units_ref="per_fmol"/>
    <units name="nJ_per_s" units_ref="nJ_per_s"/>
    <units name="fmol_per_s" units_ref="fmol_per_s"/>
    <units name="nC_per_fmol" units_ref="nC_per_fmol"/>
    <units name="nC" units_ref="nC"/>
    <units name="nJ_per_fmol" units_ref="nJ_per_fmol"/>
    <units name="nJ_per_nC" units_ref="nJ_per_nC"/>
    <units name="fC" units_ref="fC"/>
    <units name="fF" units_ref="fF"/>
    <units name="volt_per_sec" units_ref="volt_per_sec"/>
    <units name="J_per_K_per_mol" units_ref="J_per_K_per_mol"/>
    <units name="nS" units_ref="nS"/>
    <units name="nSmV" units_ref="nSmV"/>
    <units name="per_ms" units_ref="per_ms"/>
    <units name="mM4" units_ref="mM4"/>
    <units name="mM_per_ms" units_ref="mM_per_ms"/>
    <units name="mMms" units_ref="mMms"/>
    <units name="per_mMms" units_ref="per_mMms"/>
    <units name="molar" units_ref="molar"/>
    <units name="micromolar" units_ref="micromolar"/>
    <units name="nanomolar" units_ref="nanomolar"/>
    <units name="ms" units_ref="ms"/>
    <units name="m_cubed" units_ref="m_cubed"/>
    <units name="mV" units_ref="mV"/>
    <units name="m_cubed_per_second" units_ref="m_cubed_per_second"/>
    <units name="micromolar_m_cubed" units_ref="micromolar_m_cubed"/>
    <units name="C" units_ref="C"/>
    <units name="C_per_millimol" units_ref="C_per_millimol"/>
    <units name="picoA" units_ref="picoA"/>
    <units name="picoA_per_picoFarad" units_ref="picoA_per_picoFarad"/>
    <units name="microL" units_ref="microL"/>
    <units name="picoFarad" units_ref="picoFarad"/>
    <units name="cm3_per_second" units_ref="cm3_per_second"/>
    <units name="um3_per_second" units_ref="um3_per_second"/>
    <units name="m3mM" units_ref="m3mM"/>
    <units name="ms2" units_ref="ms2"/>
    <units name="nM3_per_ps" units_ref="nM3_per_ps"/>
    <units name="per_s_squared_m_cubed" units_ref="per_s_squared_m_cubed"/>
    <units name="per_meters_cubed" units_ref="per_meters_cubed"/>
    <units name="umeter3" units_ref="umeter3"/>
    <units name="mill1" units_ref="mill1"/>
    <units name="picoV" units_ref="picoV"/>
    <units name="pic0" units_ref="pic0"/>
    <units name="nanoV" units_ref="nanoV"/>
    <units name="nan0" units_ref="nan0"/>
    <units name="kPa" units_ref="kPa"/>
    <units name="L_per_s" units_ref="L_per_s"/>
    <units name="L_per_s_per_kPa" units_ref="L_per_s_per_kPa"/>
    <units name="kPa_per_L" units_ref="kPa_per_L"/>
    <units name="L_per_kPa" units_ref="L_per_kPa"/>
    <units name="kPa_s_per_L" units_ref="kPa_s_per_L"/>
</import>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;imports&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<import xlink:href="3compartment_modules.cellml">
    <component component_ref="vp_ven_simple_type" name="pvn_module"/>
</import>
<import xlink:href="3compartment_modules.cellml">
    <component component_ref="vp_simple_type" name="par_module"/>
</import>
<import xlink:href="3compartment_modules.cellml">
    <component component_ref="heart_Ca_input" name="heart_module"/>
</import>
<import xlink:href="3compartment_modules.cellml">
    <component component_ref="vv_simple_type" name="aortic_root_module"/>
</import>
<import xlink:href="3compartment_modules.cellml">
    <component component_ref="pp_T_fixed_I_type" name="systemic_T_module"/>
</import>
<import xlink:href="3compartment_modules.cellml">
    <component component_ref="vp_ven_simple_type" name="venous_svc_module"/>
</import>
<import xlink:href="3compartment_modules.cellml">
    <component component_ref="volume_sum" name="volume_sum_module"/>
</import>
<import xlink:href="3compartment_modules.cellml">
    <component component_ref="zero_flow" name="zero_flow_module"/>
</import>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;vessel mappings&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="zero_flow_module" component_2="heart_module"/>
   <map_variables variable_1="v_zero" variable_2="v_ivc"/>
</connection>
<connection>
   <map_components component_1="pvn_module" component_2="heart_module"/>
   <map_variables variable_1="v" variable_2="v_pvn"/>
   <map_variables variable_1="u_out" variable_2="u_la"/>
</connection>
<connection>
   <map_components component_1="par_module" component_2="pvn_module"/>
   <map_variables variable_1="v" variable_2="v_in"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="heart_module" component_2="aortic_root_module"/>
   <map_variables variable_1="v_aov" variable_2="v_in"/>
   <map_variables variable_1="u_root" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="heart_module" component_2="par_module"/>
   <map_variables variable_1="v_puv" variable_2="v_in"/>
   <map_variables variable_1="u_par" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="aortic_root_module" component_2="systemic_T_module"/>
   <map_variables variable_1="v_out" variable_2="v"/>
   <map_variables variable_1="u_d" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="venous_svc_module" component_2="heart_module"/>
   <map_variables variable_1="v" variable_2="v_svc"/>
   <map_variables variable_1="u_out" variable_2="u_ra"/>
</connection>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;terminal venous connection&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="systemic_T_module" component_2="venous_svc_module"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="systemic_T_module" component_2="terminal_venous_connection"/>
   <map_variables variable_1="v_T" variable_2="v_systemic_T"/>
</connection>
<connection>
   <map_components component_1="terminal_venous_connection" component_2="venous_svc_module"/>
   <map_variables variable_1="v_venous_svc" variable_2="v_in"/>
</connection>
<component name="terminal_venous_connection">
<variable name="v_systemic_T" public_interface="in" units="m3_per_s"/>
<variable name="v_venous_svc" public_interface="out" units="m3_per_s"/>
<math xmlns="http://www.w3.org/1998/Math/MathML">
   <apply>
       <eq/>
       <ci>v_venous_svc</ci>
            <ci>v_systemic_T</ci>
   </apply>
</math>
</component>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;generic junction connection&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<component name="generic_junction_connection">
</component>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;applying multiport operations for ports&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="pvn_module" component_2="sum_blood_volume"/>
   <map_variables variable_1="q" variable_2="q_pvn"/>
</connection>
<connection>
   <map_components component_1="par_module" component_2="sum_blood_volume"/>
   <map_variables variable_1="q" variable_2="q_par"/>
</connection>
<connection>
   <map_components component_1="heart_module" component_2="sum_blood_volume"/>
   <map_variables variable_1="q_heart" variable_2="q_heart"/>
</connection>
<connection>
   <map_components component_1="aortic_root_module" component_2="sum_blood_volume"/>
   <map_variables variable_1="q" variable_2="q_aortic_root"/>
</connection>
<connection>
   <map_components component_1="systemic_T_module" component_2="sum_blood_volume"/>
   <map_variables variable_1="q" variable_2="q_systemic_T"/>
</connection>
<connection>
   <map_components component_1="venous_svc_module" component_2="sum_blood_volume"/>
   <map_variables variable_1="q" variable_2="q_venous_svc"/>
</connection>
<connection>
   <map_components component_1="sum_blood_volume" component_2="volume_sum_module"/>
   <map_variables variable_1="q_volume_sum_sum" variable_2="q"/>
</connection>
<component name="sum_blood_volume">
<variable name="q_volume_sum_sum" public_interface="out" units="m3"/>
<variable name="q_pvn" public_interface="in" units="m3"/>
<variable name="q_par" public_interface="in" units="m3"/>
<variable name="q_heart" public_interface="in" units="m3"/>
<variable name="q_aortic_root" public_interface="in" units="m3"/>
<variable name="q_systemic_T" public_interface="in" units="m3"/>
<variable name="q_venous_svc" public_interface="in" units="m3"/>
<math xmlns="http://www.w3.org/1998/Math/MathML">
   <apply>
       <eq/>
       <ci>q_volume_sum_sum</ci>
       <apply>
           <plus/>
            <ci>q_pvn</ci>
            <ci>q_par</ci>
            <ci>q_heart</ci>
            <ci>q_aortic_root</ci>
            <ci>q_systemic_T</ci>
            <ci>q_venous_svc</ci>
       </apply>
   </apply>
</math>
</component>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;access_variables&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<component name="pvn">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="u_ext" public_interface="in" units="J_per_m3"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
   <variable name="q_C_init" public_interface="in" units="m3"/>
   <variable name="q_C_change" public_interface="in" units="m3"/>
   <variable name="q_C" public_interface="in" units="m3"/>
   <variable name="q" public_interface="in" units="m3"/>
   <variable name="q_us_0" public_interface="in" units="m3"/>
   <variable name="q_us_wCont" public_interface="in" units="m3"/>
   <variable name="Delta_q_us" public_interface="in" units="dimensionless"/>
   <variable name="Delta_C" public_interface="in" units="dimensionless"/>
</component>
<component name="par">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="q_C" public_interface="in" units="m3"/>
   <variable name="q_0" public_interface="in" units="m3"/>
   <variable name="q" public_interface="in" units="m3"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
   <variable name="u_ext" public_interface="in" units="J_per_m3"/>
   <variable name="u_0" public_interface="in" units="J_per_m3"/>
</component>
<component name="heart">
   <variable name="rho" public_interface="in" units="Js2_per_m5"/>
   <variable name="T" public_interface="in" units="second"/>
   <variable name="mt" public_interface="in" units="dimensionless"/>
   <variable name="u_ra" public_interface="in" units="J_per_m3"/>
   <variable name="u_rv" public_interface="in" units="J_per_m3"/>
   <variable name="u_la" public_interface="in" units="J_per_m3"/>
   <variable name="u_lv" public_interface="in" units="J_per_m3"/>
   <variable name="q_ra" public_interface="in" units="m3"/>
   <variable name="q_rv" public_interface="in" units="m3"/>
   <variable name="q_la" public_interface="in" units="m3"/>
   <variable name="q_lv" public_interface="in" units="m3"/>
   <variable name="q_ra_us" public_interface="in" units="m3"/>
   <variable name="q_rv_us" public_interface="in" units="m3"/>
   <variable name="q_la_us" public_interface="in" units="m3"/>
   <variable name="q_lv_us" public_interface="in" units="m3"/>
   <variable name="q_ra_init" public_interface="in" units="m3"/>
   <variable name="q_rv_init" public_interface="in" units="m3"/>
   <variable name="q_la_init" public_interface="in" units="m3"/>
   <variable name="q_lv_init" public_interface="in" units="m3"/>
   <variable name="T_ac" public_interface="in" units="second"/>
   <variable name="T_ar" public_interface="in" units="second"/>
   <variable name="t_astart" public_interface="in" units="second"/>
   <variable name="t_astart_norm" public_interface="in" units="dimensionless"/>
   <variable name="chi_a" public_interface="in" units="dimensionless"/>
   <variable name="chi_afloor" public_interface="in" units="dimensionless"/>
   <variable name="T_vc" public_interface="in" units="second"/>
   <variable name="T_vr" public_interface="in" units="second"/>
   <variable name="t_vstart" public_interface="in" units="second"/>
   <variable name="t_vstart_norm" public_interface="in" units="dimensionless"/>
   <variable name="E_ra_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_ra_B" public_interface="in" units="J_per_m6"/>
   <variable name="E_rv_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_rv_B" public_interface="in" units="J_per_m6"/>
   <variable name="E_la_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_la_B" public_interface="in" units="J_per_m6"/>
   <variable name="E_lv_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_lv_B" public_interface="in" units="J_per_m6"/>
   <variable name="e_a" public_interface="in" units="dimensionless"/>
   <variable name="e_v" public_interface="in" units="dimensionless"/>
   <variable name="v_trv" public_interface="in" units="m3_per_s"/>
   <variable name="v_puv" public_interface="in" units="m3_per_s"/>
   <variable name="v_miv" public_interface="in" units="m3_per_s"/>
   <variable name="v_aov" public_interface="in" units="m3_per_s"/>
   <variable name="K_vo_trv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_puv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_miv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_aov" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_trv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_puv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_miv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_aov" public_interface="in" units="m3_per_Js"/>
   <variable name="M_rg_trv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_puv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_miv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_aov" public_interface="in" units="dimensionless"/>
   <variable name="M_st_trv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_puv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_miv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_aov" public_interface="in" units="dimensionless"/>
   <variable name="l_eff" public_interface="in" units="metre"/>
   <variable name="A_nn_trv" public_interface="in" units="m2"/>
   <variable name="A_nn_puv" public_interface="in" units="m2"/>
   <variable name="A_nn_miv" public_interface="in" units="m2"/>
   <variable name="A_nn_aov" public_interface="in" units="m2"/>
   <variable name="A_eff_trv" public_interface="in" units="m2"/>
   <variable name="A_eff_puv" public_interface="in" units="m2"/>
   <variable name="A_eff_miv" public_interface="in" units="m2"/>
   <variable name="A_eff_aov" public_interface="in" units="m2"/>
   <variable name="q_heart" public_interface="in" units="m3"/>
</component>
<component name="aortic_root">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="u_d" public_interface="in" units="J_per_m3"/>
   <variable name="u_C" public_interface="in" units="J_per_m3"/>
   <variable name="u_C_d" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="q_C" public_interface="in" units="m3"/>
   <variable name="q_C_d" public_interface="in" units="m3"/>
   <variable name="q_0" public_interface="in" units="m3"/>
   <variable name="q" public_interface="in" units="m3"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="u_ext" public_interface="in" units="J_per_m3"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
   <variable name="u_0" public_interface="in" units="J_per_m3"/>
</component>
<component name="systemic_T">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="u_C" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="v_T" public_interface="in" units="m3_per_s"/>
   <variable name="R_T" public_interface="in" units="Js_per_m6"/>
   <variable name="C_T" public_interface="in" units="m6_per_J"/>
   <variable name="u_ext" public_interface="in" units="J_per_m3"/>
   <variable name="q" public_interface="in" units="m3"/>
   <variable name="q_us" public_interface="in" units="m3"/>
   <variable name="q_init" public_interface="in" units="m3"/>
</component>
<component name="venous_svc">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="u_ext" public_interface="in" units="J_per_m3"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
   <variable name="q_C_init" public_interface="in" units="m3"/>
   <variable name="q_C_change" public_interface="in" units="m3"/>
   <variable name="q_C" public_interface="in" units="m3"/>
   <variable name="q" public_interface="in" units="m3"/>
   <variable name="q_us_0" public_interface="in" units="m3"/>
   <variable name="q_us_wCont" public_interface="in" units="m3"/>
   <variable name="Delta_q_us" public_interface="in" units="dimensionless"/>
   <variable name="Delta_C" public_interface="in" units="dimensionless"/>
</component>
<component name="volume_sum">
   <variable name="q" public_interface="in" units="m3"/>
</component>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;global_parameters_access&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<component name="global">
   <variable name="rho" public_interface="in" units="Js2_per_m5"/>
   <variable name="T" public_interface="in" units="second"/>
   <variable name="q_ra_us" public_interface="in" units="m3"/>
   <variable name="q_rv_us" public_interface="in" units="m3"/>
   <variable name="q_la_us" public_interface="in" units="m3"/>
   <variable name="q_lv_us" public_interface="in" units="m3"/>
   <variable name="q_ra_init" public_interface="in" units="m3"/>
   <variable name="q_rv_init" public_interface="in" units="m3"/>
   <variable name="q_la_init" public_interface="in" units="m3"/>
   <variable name="q_lv_init" public_interface="in" units="m3"/>
   <variable name="T_ac" public_interface="in" units="second"/>
   <variable name="T_ar" public_interface="in" units="second"/>
   <variable name="t_astart" public_interface="in" units="second"/>
   <variable name="T_vc" public_interface="in" units="second"/>
   <variable name="T_vr" public_interface="in" units="second"/>
   <variable name="t_vstart" public_interface="in" units="second"/>
   <variable name="E_ra_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_ra_B" public_interface="in" units="J_per_m6"/>
   <variable name="E_rv_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_rv_B" public_interface="in" units="J_per_m6"/>
   <variable name="E_la_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_la_B" public_interface="in" units="J_per_m6"/>
   <variable name="E_lv_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_lv_B" public_interface="in" units="J_per_m6"/>
   <variable name="K_vo_trv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_puv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_miv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_aov" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_trv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_puv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_miv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_aov" public_interface="in" units="m3_per_Js"/>
   <variable name="M_rg_trv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_puv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_miv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_aov" public_interface="in" units="dimensionless"/>
   <variable name="M_st_trv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_puv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_miv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_aov" public_interface="in" units="dimensionless"/>
   <variable name="l_eff" public_interface="in" units="metre"/>
   <variable name="A_nn_trv" public_interface="in" units="m2"/>
   <variable name="A_nn_puv" public_interface="in" units="m2"/>
   <variable name="A_nn_miv" public_interface="in" units="m2"/>
   <variable name="A_nn_aov" public_interface="in" units="m2"/>
</component>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;own vessel mappings&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="pvn" component_2="pvn_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="u_ext" variable_2="u_ext"/>
   <map_variables variable_1="I" variable_2="I"/>
   <map_variables variable_1="q_C_init" variable_2="q_C_init"/>
   <map_variables variable_1="q_C_change" variable_2="q_C_change"/>
   <map_variables variable_1="q_C" variable_2="q_C"/>
   <map_variables variable_1="q" variable_2="q"/>
   <map_variables variable_1="q_us_0" variable_2="q_us_0"/>
   <map_variables variable_1="q_us_wCont" variable_2="q_us_wCont"/>
   <map_variables variable_1="Delta_q_us" variable_2="Delta_q_us"/>
   <map_variables variable_1="Delta_C" variable_2="Delta_C"/>
</connection>
<connection>
   <map_components component_1="par" component_2="par_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="q_C" variable_2="q_C"/>
   <map_variables variable_1="q_0" variable_2="q_0"/>
   <map_variables variable_1="q" variable_2="q"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="I" variable_2="I"/>
   <map_variables variable_1="u_ext" variable_2="u_ext"/>
   <map_variables variable_1="u_0" variable_2="u_0"/>
</connection>
<connection>
   <map_components component_1="heart" component_2="heart_module"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="T" variable_2="T"/>
   <map_variables variable_1="mt" variable_2="mt"/>
   <map_variables variable_1="u_ra" variable_2="u_ra"/>
   <map_variables variable_1="u_rv" variable_2="u_rv"/>
   <map_variables variable_1="u_la" variable_2="u_la"/>
   <map_variables variable_1="u_lv" variable_2="u_lv"/>
   <map_variables variable_1="q_ra" variable_2="q_ra"/>
   <map_variables variable_1="q_rv" variable_2="q_rv"/>
   <map_variables variable_1="q_la" variable_2="q_la"/>
   <map_variables variable_1="q_lv" variable_2="q_lv"/>
   <map_variables variable_1="q_ra_us" variable_2="q_ra_us"/>
   <map_variables variable_1="q_rv_us" variable_2="q_rv_us"/>
   <map_variables variable_1="q_la_us" variable_2="q_la_us"/>
   <map_variables variable_1="q_lv_us" variable_2="q_lv_us"/>
   <map_variables variable_1="q_ra_init" variable_2="q_ra_init"/>
   <map_variables variable_1="q_rv_init" variable_2="q_rv_init"/>
   <map_variables variable_1="q_la_init" variable_2="q_la_init"/>
   <map_variables variable_1="q_lv_init" variable_2="q_lv_init"/>
   <map_variables variable_1="T_ac" variable_2="T_ac"/>
   <map_variables variable_1="T_ar" variable_2="T_ar"/>
   <map_variables variable_1="t_astart" variable_2="t_astart"/>
   <map_variables variable_1="t_astart_norm" variable_2="t_astart_norm"/>
   <map_variables variable_1="chi_a" variable_2="chi_a"/>
   <map_variables variable_1="chi_afloor" variable_2="chi_afloor"/>
   <map_variables variable_1="T_vc" variable_2="T_vc"/>
   <map_variables variable_1="T_vr" variable_2="T_vr"/>
   <map_variables variable_1="t_vstart" variable_2="t_vstart"/>
   <map_variables variable_1="t_vstart_norm" variable_2="t_vstart_norm"/>
   <map_variables variable_1="E_ra_A" variable_2="E_ra_A"/>
   <map_variables variable_1="E_ra_B" variable_2="E_ra_B"/>
   <map_variables variable_1="E_rv_A" variable_2="E_rv_A"/>
   <map_variables variable_1="E_rv_B" variable_2="E_rv_B"/>
   <map_variables variable_1="E_la_A" variable_2="E_la_A"/>
   <map_variables variable_1="E_la_B" variable_2="E_la_B"/>
   <map_variables variable_1="E_lv_A" variable_2="E_lv_A"/>
   <map_variables variable_1="E_lv_B" variable_2="E_lv_B"/>
   <map_variables variable_1="e_a" variable_2="e_a"/>
   <map_variables variable_1="e_v" variable_2="e_v"/>
   <map_variables variable_1="v_trv" variable_2="v_trv"/>
   <map_variables variable_1="v_puv" variable_2="v_puv"/>
   <map_variables variable_1="v_miv" variable_2="v_miv"/>
   <map_variables variable_1="v_aov" variable_2="v_aov"/>
   <map_variables variable_1="K_vo_trv" variable_2="K_vo_trv"/>
   <map_variables variable_1="K_vo_puv" variable_2="K_vo_puv"/>
   <map_variables variable_1="K_vo_miv" variable_2="K_vo_miv"/>
   <map_variables variable_1="K_vo_aov" variable_2="K_vo_aov"/>
   <map_variables variable_1="K_vc_trv" variable_2="K_vc_trv"/>
   <map_variables variable_1="K_vc_puv" variable_2="K_vc_puv"/>
   <map_variables variable_1="K_vc_miv" variable_2="K_vc_miv"/>
   <map_variables variable_1="K_vc_aov" variable_2="K_vc_aov"/>
   <map_variables variable_1="M_rg_trv" variable_2="M_rg_trv"/>
   <map_variables variable_1="M_rg_puv" variable_2="M_rg_puv"/>
   <map_variables variable_1="M_rg_miv" variable_2="M_rg_miv"/>
   <map_variables variable_1="M_rg_aov" variable_2="M_rg_aov"/>
   <map_variables variable_1="M_st_trv" variable_2="M_st_trv"/>
   <map_variables variable_1="M_st_puv" variable_2="M_st_puv"/>
   <map_variables variable_1="M_st_miv" variable_2="M_st_miv"/>
   <map_variables variable_1="M_st_aov" variable_2="M_st_aov"/>
   <map_variables variable_1="l_eff" variable_2="l_eff"/>
   <map_variables variable_1="A_nn_trv" variable_2="A_nn_trv"/>
   <map_variables variable_1="A_nn_puv" variable_2="A_nn_puv"/>
   <map_variables variable_1="A_nn_miv" variable_2="A_nn_miv"/>
   <map_variables variable_1="A_nn_aov" variable_2="A_nn_aov"/>
   <map_variables variable_1="A_eff_trv" variable_2="A_eff_trv"/>
   <map_variables variable_1="A_eff_puv" variable_2="A_eff_puv"/>
   <map_variables variable_1="A_eff_miv" variable_2="A_eff_miv"/>
   <map_variables variable_1="A_eff_aov" variable_2="A_eff_aov"/>
   <map_variables variable_1="q_heart" variable_2="q_heart"/>
</connection>
<connection>
   <map_components component_1="aortic_root" component_2="aortic_root_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="u_d" variable_2="u_d"/>
   <map_variables variable_1="u_C" variable_2="u_C"/>
   <map_variables variable_1="u_C_d" variable_2="u_C_d"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="q_C" variable_2="q_C"/>
   <map_variables variable_1="q_C_d" variable_2="q_C_d"/>
   <map_variables variable_1="q_0" variable_2="q_0"/>
   <map_variables variable_1="q" variable_2="q"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="u_ext" variable_2="u_ext"/>
   <map_variables variable_1="I" variable_2="I"/>
   <map_variables variable_1="u_0" variable_2="u_0"/>
</connection>
<connection>
   <map_components component_1="systemic_T" component_2="systemic_T_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="u_C" variable_2="u_C"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="v_T" variable_2="v_T"/>
   <map_variables variable_1="R_T" variable_2="R_T"/>
   <map_variables variable_1="C_T" variable_2="C_T"/>
   <map_variables variable_1="u_ext" variable_2="u_ext"/>
   <map_variables variable_1="q" variable_2="q"/>
   <map_variables variable_1="q_us" variable_2="q_us"/>
   <map_variables variable_1="q_init" variable_2="q_init"/>
</connection>
<connection>
   <map_components component_1="venous_svc" component_2="venous_svc_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="u_ext" variable_2="u_ext"/>
   <map_variables variable_1="I" variable_2="I"/>
   <map_variables variable_1="q_C_init" variable_2="q_C_init"/>
   <map_variables variable_1="q_C_change" variable_2="q_C_change"/>
   <map_variables variable_1="q_C" variable_2="q_C"/>
   <map_variables variable_1="q" variable_2="q"/>
   <map_variables variable_1="q_us_0" variable_2="q_us_0"/>
   <map_variables variable_1="q_us_wCont" variable_2="q_us_wCont"/>
   <map_variables variable_1="Delta_q_us" variable_2="Delta_q_us"/>
   <map_variables variable_1="Delta_C" variable_2="Delta_C"/>
</connection>
<connection>
   <map_components component_1="volume_sum" component_2="volume_sum_module"/>
   <map_variables variable_1="q" variable_2="q"/>
</connection>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;own global parameters mapping&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="global" component_2="parameters_global"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="T" variable_2="T"/>
   <map_variables variable_1="q_ra_us" variable_2="q_ra_us"/>
   <map_variables variable_1="q_rv_us" variable_2="q_rv_us"/>
   <map_variables variable_1="q_la_us" variable_2="q_la_us"/>
   <map_variables variable_1="q_lv_us" variable_2="q_lv_us"/>
   <map_variables variable_1="q_ra_init" variable_2="q_ra_init"/>
   <map_variables variable_1="q_rv_init" variable_2="q_rv_init"/>
   <map_variables variable_1="q_la_init" variable_2="q_la_init"/>
   <map_variables variable_1="q_lv_init" variable_2="q_lv_init"/>
   <map_variables variable_1="T_ac" variable_2="T_ac"/>
   <map_variables variable_1="T_ar" variable_2="T_ar"/>
   <map_variables variable_1="t_astart" variable_2="t_astart"/>
   <map_variables variable_1="T_vc" variable_2="T_vc"/>
   <map_variables variable_1="T_vr" variable_2="T_vr"/>
   <map_variables variable_1="t_vstart" variable_2="t_vstart"/>
   <map_variables variable_1="E_ra_A" variable_2="E_ra_A"/>
   <map_variables variable_1="E_ra_B" variable_2="E_ra_B"/>
   <map_variables variable_1="E_rv_A" variable_2="E_rv_A"/>
   <map_variables variable_1="E_rv_B" variable_2="E_rv_B"/>
   <map_variables variable_1="E_la_A" variable_2="E_la_A"/>
   <map_variables variable_1="E_la_B" variable_2="E_la_B"/>
   <map_variables variable_1="E_lv_A" variable_2="E_lv_A"/>
   <map_variables variable_1="E_lv_B" variable_2="E_lv_B"/>
   <map_variables variable_1="K_vo_trv" variable_2="K_vo_trv"/>
   <map_variables variable_1="K_vo_puv" variable_2="K_vo_puv"/>
   <map_variables variable_1="K_vo_miv" variable_2="K_vo_miv"/>
   <map_variables variable_1="K_vo_aov" variable_2="K_vo_aov"/>
   <map_variables variable_1="K_vc_trv" variable_2="K_vc_trv"/>
   <map_variables variable_1="K_vc_puv" variable_2="K_vc_puv"/>
   <map_variables variable_1="K_vc_miv" variable_2="K_vc_miv"/>
   <map_variables variable_1="K_vc_aov" variable_2="K_vc_aov"/>
   <map_variables variable_1="M_rg_trv" variable_2="M_rg_trv"/>
   <map_variables variable_1="M_rg_puv" variable_2="M_rg_puv"/>
   <map_variables variable_1="M_rg_miv" variable_2="M_rg_miv"/>
   <map_variables variable_1="M_rg_aov" variable_2="M_rg_aov"/>
   <map_variables variable_1="M_st_trv" variable_2="M_st_trv"/>
   <map_variables variable_1="M_st_puv" variable_2="M_st_puv"/>
   <map_variables variable_1="M_st_miv" variable_2="M_st_miv"/>
   <map_variables variable_1="M_st_aov" variable_2="M_st_aov"/>
   <map_variables variable_1="l_eff" variable_2="l_eff"/>
   <map_variables variable_1="A_nn_trv" variable_2="A_nn_trv"/>
   <map_variables variable_1="A_nn_puv" variable_2="A_nn_puv"/>
   <map_variables variable_1="A_nn_miv" variable_2="A_nn_miv"/>
   <map_variables variable_1="A_nn_aov" variable_2="A_nn_aov"/>
</connection>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;parameters mapping to modules&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="parameters" component_2="pvn_module"/>
   <map_variables variable_1="R_pvn" variable_2="R"/>
   <map_variables variable_1="C_pvn" variable_2="C"/>
   <map_variables variable_1="u_ext_pvn" variable_2="u_ext"/>
   <map_variables variable_1="I_pvn" variable_2="I"/>
   <map_variables variable_1="q_C_init_pvn" variable_2="q_C_init"/>
   <map_variables variable_1="q_us_0_pvn" variable_2="q_us_0"/>
   <map_variables variable_1="Delta_q_us_pvn" variable_2="Delta_q_us"/>
   <map_variables variable_1="Delta_C_pvn" variable_2="Delta_C"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="par_module"/>
   <map_variables variable_1="q_0_par" variable_2="q_0"/>
   <map_variables variable_1="R_par" variable_2="R"/>
   <map_variables variable_1="C_par" variable_2="C"/>
   <map_variables variable_1="I_par" variable_2="I"/>
   <map_variables variable_1="u_ext_par" variable_2="u_ext"/>
   <map_variables variable_1="u_0_par" variable_2="u_0"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="heart_module"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="T" variable_2="T"/>
   <map_variables variable_1="q_ra_us" variable_2="q_ra_us"/>
   <map_variables variable_1="q_rv_us" variable_2="q_rv_us"/>
   <map_variables variable_1="q_la_us" variable_2="q_la_us"/>
   <map_variables variable_1="q_lv_us" variable_2="q_lv_us"/>
   <map_variables variable_1="q_ra_init" variable_2="q_ra_init"/>
   <map_variables variable_1="q_rv_init" variable_2="q_rv_init"/>
   <map_variables variable_1="q_la_init" variable_2="q_la_init"/>
   <map_variables variable_1="q_lv_init" variable_2="q_lv_init"/>
   <map_variables variable_1="T_ac" variable_2="T_ac"/>
   <map_variables variable_1="T_ar" variable_2="T_ar"/>
   <map_variables variable_1="t_astart" variable_2="t_astart"/>
   <map_variables variable_1="T_vc" variable_2="T_vc"/>
   <map_variables variable_1="T_vr" variable_2="T_vr"/>
   <map_variables variable_1="t_vstart" variable_2="t_vstart"/>
   <map_variables variable_1="E_ra_A" variable_2="E_ra_A"/>
   <map_variables variable_1="E_ra_B" variable_2="E_ra_B"/>
   <map_variables variable_1="E_rv_A" variable_2="E_rv_A"/>
   <map_variables variable_1="E_rv_B" variable_2="E_rv_B"/>
   <map_variables variable_1="E_la_A" variable_2="E_la_A"/>
   <map_variables variable_1="E_la_B" variable_2="E_la_B"/>
   <map_variables variable_1="E_lv_A" variable_2="E_lv_A"/>
   <map_variables variable_1="E_lv_B" variable_2="E_lv_B"/>
   <map_variables variable_1="K_vo_trv" variable_2="K_vo_trv"/>
   <map_variables variable_1="K_vo_puv" variable_2="K_vo_puv"/>
   <map_variables variable_1="K_vo_miv" variable_2="K_vo_miv"/>
   <map_variables variable_1="K_vo_aov" variable_2="K_vo_aov"/>
   <map_variables variable_1="K_vc_trv" variable_2="K_vc_trv"/>
   <map_variables variable_1="K_vc_puv" variable_2="K_vc_puv"/>
   <map_variables variable_1="K_vc_miv" variable_2="K_vc_miv"/>
   <map_variables variable_1="K_vc_aov" variable_2="K_vc_aov"/>
   <map_variables variable_1="M_rg_trv" variable_2="M_rg_trv"/>
   <map_variables variable_1="M_rg_puv" variable_2="M_rg_puv"/>
   <map_variables variable_1="M_rg_miv" variable_2="M_rg_miv"/>
   <map_variables variable_1="M_rg_aov" variable_2="M_rg_aov"/>
   <map_variables variable_1="M_st_trv" variable_2="M_st_trv"/>
   <map_variables variable_1="M_st_puv" variable_2="M_st_puv"/>
   <map_variables variable_1="M_st_miv" variable_2="M_st_miv"/>
   <map_variables variable_1="M_st_aov" variable_2="M_st_aov"/>
   <map_variables variable_1="l_eff" variable_2="l_eff"/>
   <map_variables variable_1="A_nn_trv" variable_2="A_nn_trv"/>
   <map_variables variable_1="A_nn_puv" variable_2="A_nn_puv"/>
   <map_variables variable_1="A_nn_miv" variable_2="A_nn_miv"/>
   <map_variables variable_1="A_nn_aov" variable_2="A_nn_aov"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="aortic_root_module"/>
   <map_variables variable_1="q_0_aortic_root" variable_2="q_0"/>
   <map_variables variable_1="R_aortic_root" variable_2="R"/>
   <map_variables variable_1="C_aortic_root" variable_2="C"/>
   <map_variables variable_1="u_ext_aortic_root" variable_2="u_ext"/>
   <map_variables variable_1="I_aortic_root" variable_2="I"/>
   <map_variables variable_1="u_0_aortic_root" variable_2="u_0"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="systemic_T_module"/>
   <map_variables variable_1="R_T_systemic_T" variable_2="R_T"/>
   <map_variables variable_1="C_T_systemic_T" variable_2="C_T"/>
   <map_variables variable_1="u_ext_systemic_T" variable_2="u_ext"/>
   <map_variables variable_1="q_us_systemic_T" variable_2="q_us"/>
   <map_variables variable_1="q_init_systemic_T" variable_2="q_init"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="venous_svc_module"/>
   <map_variables variable_1="R_venous_svc" variable_2="R"/>
   <map_variables variable_1="C_venous_svc" variable_2="C"/>
   <map_variables variable_1="u_ext_venous_svc" variable_2="u_ext"/>
   <map_variables variable_1="I_venous_svc" variable_2="I"/>
   <map_variables variable_1="q_C_init_venous_svc" variable_2="q_C_init"/>
   <map_variables variable_1="q_us_0_venous_svc" variable_2="q_us_0"/>
   <map_variables variable_1="Delta_q_us_venous_svc" variable_2="Delta_q_us"/>
   <map_variables variable_1="Delta_C_venous_svc" variable_2="Delta_C"/>
</connection>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;time mapping&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="environment" component_2="pvn_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="par_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="heart_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="aortic_root_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="systemic_T_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="venous_svc_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="volume_sum_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
</model>
