<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="CardiovascularSystem">
  <units name="s2">
    <unit exponent="2" units="second"/>
  </units>
  <units name="Hz">
    <unit exponent="-1" units="second"/>
  </units>
  <units name="millis">
    <unit prefix="milli" units="second"/>
  </units>
  <units name="per_millis">
    <unit exponent="-1" units="millis"/>
  </units>
  <units name="mm">
    <unit prefix="milli" units="metre"/>
  </units>
  <units name="m2">
    <unit exponent="2" units="metre"/>
  </units>
  <units name="mm2">
    <unit exponent="2" prefix="milli" units="metre"/>
  </units>
  <units name="m3">
    <unit exponent="3" units="metre"/>
  </units>
  <units name="m4">
    <unit exponent="4" units="metre"/>
  </units>
  <units name="mm3">
    <unit exponent="3" prefix="milli" units="metre"/>
  </units>
  <units name="J_per_s">
    <unit units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mol_per_s">
    <unit units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mmol_per_s">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="umol_per_s">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="C_per_s">
    <unit units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mC_per_s">
    <unit prefix="milli" units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="uC_per_s">
    <unit prefix="micro" units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="nC_per_s">
    <unit prefix="nano" units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="Cm_per_millis">
    <unit units="coulomb"/>
    <unit units="metre"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="m_per_s">
    <unit units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mm_per_s">
    <unit prefix="milli" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="um_per_s">
    <unit prefix="milli" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="rad_per_s">
    <unit units="radian"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3_per_s">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mL">
    <unit prefix="milli" units="litre"/>
  </units>
  <units name="per_milliL_s">
    <unit exponent="-1" prefix="milli" units="litre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="s_per_m3">
    <unit units="second"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="s_per_milliV">
    <unit units="second"/>
    <unit exponent="-1" prefix="milli" units="volt"/>
  </units>
  <units name="s_per_millis">
    <unit units="second"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="millis_per_s">
    <unit prefix="milli" units="second"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mm3_per_s">
    <unit exponent="3" prefix="milli" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="l_per_s">
    <unit units="litre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_ml_s">
    <unit exponent="-1" prefix="milli" units="litre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_m3_s">
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J_per_mol">
    <unit units="joule"/>
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="J_per_kmol_K">
    <unit units="joule"/>
    <unit exponent="-1" prefix="kilo" units="mole"/>
    <unit exponent="-1" units="kelvin"/>
  </units>
  <units name="J_per_M">
    <unit units="J_per_mol"/>
  </units>
  <units name="J_per_C">
    <unit units="joule"/>
    <unit exponent="-1" units="coulomb"/>
  </units>
  <units name="J_per_C_s">
    <unit units="joule"/>
    <unit exponent="-1" units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J_per_m">
    <unit units="joule"/>
    <unit exponent="-1" units="metre"/>
  </units>
  <units name="J_per_m3">
    <unit units="joule"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="mmHg">
    <unit multiplier="133.32" units="pascal"/>
  </units>
  <units name="per_mmHg">
    <unit exponent="-1" units="mmHg"/>
  </units>
  <units name="mmHg2">
    <unit exponent="2" units="mmHg"/>
  </units>
  <units name="Pa_per_mmHg">
    <unit units="pascal"/>
    <unit exponent="-1" units="mmHg"/>
  </units>
  <units name="m3_per_J">
    <unit exponent="-1" units="joule"/>
    <unit exponent="3" units="metre"/>
  </units>
  <units name="J_per_m3s">
    <unit units="joule"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3_per_Js">
    <unit exponent="-1" units="joule"/>
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J2_per_m6">
    <unit exponent="2" units="joule"/>
    <unit exponent="-6" units="metre"/>
  </units>
  <units name="Js2_per_C2">
    <unit exponent="2" units="second"/>
    <unit units="joule"/>
    <unit exponent="-2" units="coulomb"/>
  </units>
  <units name="Js2_per_mol2">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-2" units="mole"/>
  </units>
  <units name="Js_per_mol2">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-2" units="mole"/>
  </units>
  <units name="Js_per_C2">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-2" units="coulomb"/>
  </units>
  <units name="J_per_mol2">
    <unit units="joule"/>
    <unit exponent="-2" units="mole"/>
  </units>
  <units name="C2_per_J_s">
    <unit exponent="2" units="coulomb"/>
    <unit exponent="-1" units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J_per_C2">
    <unit units="joule"/>
    <unit exponent="-2" units="coulomb"/>
  </units>
  <units name="C2_per_J">
    <unit units="joule"/>
    <unit exponent="-2" units="coulomb"/>
  </units>
  <units name="mol_per_m3">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="M">
    <unit units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="mM">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="milliM">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="uM">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="kg_per_m3">
    <unit units="kilogram"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="m3_per_kg">
    <unit exponent="-1" units="kilogram"/>
    <unit exponent="3" units="metre"/>
  </units>
  <units name="per_m3">
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="mol_per_m2_s">
    <unit units="mole"/>
    <unit exponent="-2" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mM_m_per_s">
    <unit units="mM"/>
    <unit units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J_per_m2_s">
    <unit units="joule"/>
    <unit exponent="-2" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="Js_per_m4">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-4" units="metre"/>
  </units>
  <units name="mM_per_s">
    <unit units="mM"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_s">
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_s2">
    <unit exponent="-2" units="second"/>
  </units>
  <units name="per_mM_s">
    <unit exponent="-1" units="mM"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m6_per_mol2_s">
    <unit exponent="6" units="metre"/>
    <unit exponent="-2" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3_per_mol">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="mol_per_m3_s">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_mol">
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="J_per_mol_K">
    <unit units="joule"/>
    <unit exponent="-1" units="mole"/>
    <unit exponent="-1" units="kelvin"/>
  </units>
  <units name="m2_per_s">
    <unit exponent="2" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_C">
    <unit exponent="-1" units="coulomb"/>
  </units>
  <units name="per_m">
    <unit exponent="-1" units="metre"/>
  </units>
  <units name="per_mM">
    <unit exponent="-1" units="mM"/>
  </units>
  <units name="Js2_per_m2">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-2" units="metre"/>
  </units>
  <units name="Js_per_m2">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-2" units="metre"/>
  </units>
  <units name="J_per_m2">
    <unit units="joule"/>
    <unit exponent="-2" units="metre"/>
  </units>
  <units name="m_per_s2">
    <unit units="metre"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="rad_per_s2">
    <unit units="radian"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="Js_per_m3">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="Js2_per_m5">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-5" units="metre"/>
  </units>
  <units name="m5_per_Js2">
    <unit exponent="-1" units="joule"/>
    <unit exponent="-2" units="second"/>
    <unit exponent="5" units="metre"/>
  </units>
  <units name="J_per_m6">
    <unit units="joule"/>
    <unit exponent="-6" units="metre"/>
  </units>
  <units name="m6_per_J">
    <unit exponent="6" units="metre"/>
    <unit exponent="-1" units="joule"/>
  </units>
  <units name="m6_per_Js">
    <unit exponent="6" units="metre"/>
    <unit exponent="-1" units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mm6_per_J">
    <unit exponent="6" prefix="milli" units="metre"/>
    <unit exponent="-1" units="joule"/>
  </units>
  <units name="Js2_per_m9">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-9" units="metre"/>
  </units>
  <units name="m6s_per_J">
    <unit units="second"/>
    <unit exponent="6" units="metre"/>
    <unit exponent="-1" units="joule"/>
  </units>
  <units name="Js_per_m6">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-6" units="metre"/>
  </units>
  <units name="Js2_per_m6">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-6" units="metre"/>
  </units>
  <units name="m3_per_s2">
    <unit exponent="3" units="metre"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="mm3_per_s2">
    <unit exponent="3" prefix="milli" units="metre"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="per_mm3">
    <unit exponent="-3" prefix="milli" units="metre"/>
  </units>
  <units name="UnitValve">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="second"/>
    <unit exponent="-0.5" units="J_per_m3"/>
  </units>
  <units name="J_per_m9">
    <unit units="joule"/>
    <unit exponent="-9" units="metre"/>
  </units>
  <units name="milliV">
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="per_milliV">
    <unit exponent="-1" units="milliV"/>
  </units>
  <units name="millis_per_milliV">
    <unit exponent="-1" units="milliV"/>
    <unit units="millis"/>
  </units>
  <units name="per_V">
    <unit exponent="-1" units="volt"/>
  </units>
  <units name="milliV_per_V">
    <unit units="milliV"/>
    <unit exponent="-1" units="volt"/>
  </units>
  <units name="V_per_milliV">
    <unit units="volt"/>
    <unit exponent="-1" units="milliV"/>
  </units>
  <units name="V_per_s">
    <unit units="volt"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="milliV_per_kiloV">
    <unit prefix="milli" units="volt"/>
    <unit exponent="-1" prefix="kilo" units="volt"/>
  </units>
  <units name="V2">
    <unit exponent="2" units="volt"/>
  </units>
  <units name="milliV2">
    <unit exponent="2" prefix="milli" units="volt"/>
  </units>
  <units name="millimol">
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="millimolar">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="per_millimolar">
    <unit exponent="-1" units="millimolar"/>
  </units>
  <units name="per_millimolar_s">
    <unit exponent="-1" units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_millimolar2_s">
    <unit exponent="-2" units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="millimolar_per_s">
    <unit units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="millimolar_per_megamolar">
    <unit units="millimolar"/>
    <unit exponent="-1" prefix="mega" units="mole"/>
    <unit units="litre"/>
  </units>
  <units name="per_millimol_milliS">
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" prefix="milli" units="siemens"/>
  </units>
  <units name="per_millimol_millis">
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="per_millimol_s">
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="microm">
    <unit prefix="micro" units="metre"/>
  </units>
  <units name="microS">
    <unit prefix="micro" units="siemens"/>
  </units>
  <units name="microm3">
    <unit exponent="3" units="microm"/>
  </units>
  <units name="m3_per_microm3">
    <unit units="m3"/>
    <unit exponent="-1" units="microm3"/>
  </units>
  <units name="picoF">
    <unit prefix="pico" units="farad"/>
  </units>
  <units name="S_per_F">
    <unit units="siemens"/>
    <unit exponent="-1" units="farad"/>
  </units>
  <units name="m3_per_Fs">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="farad"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="A_per_F">
    <unit units="ampere"/>
    <unit exponent="-1" units="farad"/>
  </units>
  <units name="megaOhm">
    <unit prefix="mega" units="ohm"/>
  </units>
  <units name="nanoA">
    <unit prefix="nano" units="ampere"/>
  </units>
  <units name="nanoA_per_milliA">
    <unit prefix="nano" units="ampere"/>
    <unit exponent="-1" prefix="milli" units="ampere"/>
  </units>
  <units name="nanoA_per_A">
    <unit prefix="nano" units="ampere"/>
    <unit exponent="-1" units="ampere"/>
  </units>
  <units name="A_per_nanoA">
    <unit exponent="-1" prefix="nano" units="ampere"/>
    <unit units="ampere"/>
  </units>
  <units name="C_per_mol">
    <unit units="coulomb"/>
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="m3_per_J_millis">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="joule"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="m3_per_mol_millis">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="mole"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="m3_per_millimol_s">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="second"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
  </units>
  <units name="millimol_per_m3">
    <unit exponent="-3" units="metre"/>
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="mmol_per_l">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="l_per_mmol">
    <unit units="litre"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
  </units>
  <units name="l_per_mmol_per_s">
    <unit units="litre"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="l2_per_mmol_per_s">
    <unit exponent="2" units="litre"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mmol_per_s2">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="mmol">
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="mmol_per_l_per_s">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="Hz2">
    <unit exponent="-2" units="second"/>
  </units>
  <units name="cm">
    <unit prefix="centi" units="metre"/>
  </units>
  <units name="J_per_m4_s">
    <unit exponent="-4" units="metre"/>
    <unit units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3_per_mol_per_sec">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mol_per_m3_per_kPa">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" prefix="kilo" units="pascal"/>
  </units>
  <units name="mol_per_m3_per_Pa">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="pascal"/>
  </units>
  <units name="m3_per_mol_per_s">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mol_per_m3_per_s">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="dim">
    <unit units="dimensionless"/>
  </units>
  <units name="fmol">
    <unit prefix="femto" units="mole"/>
  </units>
  <units name="per_fmol">
    <unit exponent="-1" units="fmol"/>
  </units>
  <units name="nJ_per_s">
    <unit prefix="nano" units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="fmol_per_s">
    <unit units="fmol"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="nC_per_fmol">
    <unit prefix="nano" units="coulomb"/>
    <unit exponent="-1" units="fmol"/>
  </units>
  <units name="nC">
    <unit prefix="nano" units="coulomb"/>
  </units>
  <units name="nJ_per_fmol">
    <unit prefix="nano" units="joule"/>
    <unit exponent="-1" units="fmol"/>
  </units>
  <units name="nJ_per_nC">
    <unit prefix="nano" units="joule"/>
    <unit exponent="-1" units="nC"/>
  </units>
  <units name="fC">
    <unit prefix="femto" units="coulomb"/>
  </units>
  <units name="fF">
    <unit prefix="femto" units="farad"/>
  </units>
  <units name="volt_per_sec">
    <unit exponent="-1" units="second"/>
    <unit units="volt"/>
  </units>
  <units name="J_per_K_per_mol">
    <unit units="joule"/>
    <unit exponent="-1" units="kelvin"/>
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="nS">
    <unit prefix="nano" units="siemens"/>
  </units>
  <units name="nSmV">
    <unit units="nS"/>
    <unit units="mV"/>
  </units>
  <units name="per_ms">
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="mM4">
    <unit exponent="4" units="mM"/>
  </units>
  <units name="mM_per_ms">
    <unit units="mM"/>
    <unit exponent="-1" units="ms"/>
  </units>
  <units name="mMms">
    <unit units="mM"/>
    <unit units="ms"/>
  </units>
  <units name="per_mMms">
    <unit exponent="-1" units="mMms"/>
  </units>
  <units name="molar">
    <unit units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="micromolar">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="nanomolar">
    <unit prefix="nano" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="ms">
    <unit prefix="milli" units="second"/>
  </units>
  <units name="m_cubed">
    <unit prefix="kilo" units="metre"/>
  </units>
  <units name="mV">
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="m_cubed_per_second">
    <unit units="m_cubed"/>
    <unit units="per_s"/>
  </units>
  <units name="micromolar_m_cubed">
    <unit units="micromolar"/>
    <unit units="m_cubed"/>
  </units>
  <units name="C">
    <unit units="ampere"/>
    <unit units="second"/>
  </units>
  <units name="C_per_millimol">
    <unit units="C"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
  </units>
  <units name="picoA">
    <unit prefix="pico" units="ampere"/>
  </units>
  <units name="picoA_per_picoFarad">
    <unit units="picoA"/>
    <unit exponent="-1" units="picoFarad"/>
  </units>
  <units name="microL">
    <unit prefix="micro" units="litre"/>
  </units>
  <units name="picoFarad">
    <unit prefix="pico" units="farad"/>
  </units>
  <units name="cm3_per_second">
    <unit exponent="3" prefix="centi" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="um3_per_second">
    <unit exponent="3" prefix="micro" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3mM">
    <unit exponent="3" units="metre"/>
    <unit units="mM"/>
  </units>
  <units name="ms2">
    <unit exponent="2" units="ms"/>
  </units>
  <units name="nM3_per_ps">
    <unit exponent="3" prefix="nano" units="metre"/>
    <unit exponent="-1" prefix="pico" units="second"/>
  </units>
  <units name="per_s_squared_m_cubed">
    <unit exponent="-2" units="second"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="per_meters_cubed">
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="umeter3">
    <unit exponent="3" prefix="micro" units="metre"/>
  </units>
  <units name="mill1">
    <unit exponent="-1" units="volt"/>
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="picoV">
    <unit prefix="pico" units="volt"/>
  </units>
  <units name="pic0">
    <unit exponent="-1" units="volt"/>
    <unit units="picoV"/>
  </units>
  <units name="nanoV">
    <unit prefix="nano" units="volt"/>
  </units>
  <units name="nan0">
    <unit exponent="-1" units="volt"/>
    <unit units="nanoV"/>
  </units>
  <units name="kPa">
    <unit prefix="kilo" units="pascal"/>
  </units>
  <units name="L_per_s">
    <unit exponent="3" prefix="deci" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="L_per_s_per_kPa">
    <unit exponent="3" prefix="deci" units="metre"/>
    <unit exponent="-1" units="second"/>
    <unit exponent="-1" prefix="kilo" units="pascal"/>
  </units>
  <units name="kPa_per_L">
    <unit prefix="kilo" units="pascal"/>
    <unit exponent="-3" prefix="deci" units="metre"/>
  </units>
  <units name="L_per_kPa">
    <unit exponent="3" prefix="deci" units="metre"/>
    <unit exponent="-1" prefix="kilo" units="pascal"/>
  </units>
  <units name="kPa_s_per_L">
    <unit prefix="kilo" units="pascal"/>
    <unit units="second"/>
    <unit exponent="-3" prefix="deci" units="metre"/>
  </units>
  <component name="parameters">
    <variable name="R_T1_terminal_1" units="Js_per_m6" initial_value="68123000" interface="public"/>
    <variable name="R_T2_terminal_1" units="Js_per_m6" initial_value="3101300000" interface="public"/>
    <variable name="C_T_terminal_1" units="m6_per_J" initial_value="3.6664e-10" interface="public"/>
    <variable name="u_ext_terminal_1" units="J_per_m3" initial_value="0" interface="public"/>
    <variable name="q_init_terminal_1" units="m3" initial_value="0" interface="public"/>
    <variable name="q_us_terminal_1" units="m3" initial_value="0" interface="public"/>
    <variable name="v_in_terminal_1" units="m3_per_s" initial_value="0.1" interface="public"/>
    <variable name="u_out_terminal_1" units="J_per_m3" initial_value="0" interface="public"/>
    <variable name="Delta_R_terminal_1" units="Js_per_m6" initial_value="0" interface="public"/>
    <variable name="R_local_multiplier_terminal_1" units="dimensionless" initial_value="1" interface="public"/>
    <variable name="R_T1_terminal_2" units="Js_per_m6" initial_value="68123000" interface="public"/>
    <variable name="R_T2_terminal_2" units="Js_per_m6" initial_value="3101300000" interface="public"/>
    <variable name="C_T_terminal_2" units="m6_per_J" initial_value="3.6664e-10" interface="public"/>
    <variable name="u_ext_terminal_2" units="J_per_m3" initial_value="0" interface="public"/>
    <variable name="q_init_terminal_2" units="m3" initial_value="0" interface="public"/>
    <variable name="q_us_terminal_2" units="m3" initial_value="0" interface="public"/>
    <variable name="v_in_terminal_2" units="m3_per_s" initial_value="0.1" interface="public"/>
    <variable name="u_out_terminal_2" units="J_per_m3" initial_value="0" interface="public"/>
    <variable name="Delta_R_terminal_2" units="Js_per_m6" initial_value="0" interface="public"/>
    <variable name="R_local_multiplier_terminal_2" units="dimensionless" initial_value="1" interface="public"/>
  </component>
  <component name="parameters_global"/>
  <component name="environment">
    <variable name="time" units="second" interface="public"/>
  </component>
  <component name="terminal_1_module">
    <variable name="t" units="second" interface="public"/>
    <variable name="R_T1" units="Js_per_m6" interface="public"/>
    <variable name="R_T2" units="Js_per_m6" interface="public"/>
    <variable name="C_T" units="m6_per_J" interface="public"/>
    <variable name="u_ext" units="J_per_m3" interface="public"/>
    <variable name="u" units="J_per_m3" interface="public"/>
    <variable name="u_C" units="J_per_m3" interface="public"/>
    <variable name="v_in" units="m3_per_s" interface="public"/>
    <variable name="v_T" units="m3_per_s" interface="public"/>
    <variable name="u_out" units="J_per_m3" interface="public"/>
    <variable name="q_init" units="m3" interface="public"/>
    <variable name="q_us" units="m3" interface="public"/>
    <variable name="q" units="m3" initial_value="q_init" interface="public"/>
    <variable name="R_T1_wCont" units="Js_per_m6" interface="public"/>
    <variable name="R_T2_wCont" units="Js_per_m6" interface="public"/>
    <variable name="Delta_R" units="Js_per_m6" interface="public"/>
    <variable name="R_local_multiplier" units="dimensionless" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q</ci>
        </apply>
        <apply>
          <minus/>
          <ci>v_in</ci>
          <ci>v_T</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u_C</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>q</ci>
            <ci>q_us</ci>
          </apply>
          <ci>C_T</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u</ci>
        <apply>
          <plus/>
          <ci>u_C</ci>
          <ci>u_ext</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_T</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>u</ci>
            <ci>u_out</ci>
          </apply>
          <ci>R_T2_wCont</ci>
        </apply>
      </apply>
      <!-- The below assumes that Delta_R1 is proportional to R1 etc-->
      <apply>
        <eq/>
        <ci>R_T1_wCont</ci>
        <apply>
          <times/>
          <apply>
            <plus/>
            <ci>R_T1</ci>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci>Delta_R</ci>
                <ci>R_T1</ci>
              </apply>
              <apply>
                <plus/>
                <ci>R_T1</ci>
                <ci>R_T2</ci>
              </apply>
            </apply>
          </apply>
          <ci>R_local_multiplier</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>R_T2_wCont</ci>
        <apply>
          <times/>
          <apply>
            <plus/>
            <ci>R_T2</ci>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci>Delta_R</ci>
                <ci>R_T2</ci>
              </apply>
              <apply>
                <plus/>
                <ci>R_T1</ci>
                <ci>R_T2</ci>
              </apply>
            </apply>
          </apply>
          <ci>R_local_multiplier</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="terminal_2_module">
    <variable name="t" units="second" interface="public"/>
    <variable name="R_T1" units="Js_per_m6" interface="public"/>
    <variable name="R_T2" units="Js_per_m6" interface="public"/>
    <variable name="C_T" units="m6_per_J" interface="public"/>
    <variable name="u_ext" units="J_per_m3" interface="public"/>
    <variable name="u" units="J_per_m3" interface="public"/>
    <variable name="u_C" units="J_per_m3" interface="public"/>
    <variable name="v_in" units="m3_per_s" interface="public"/>
    <variable name="v_T" units="m3_per_s" interface="public"/>
    <variable name="u_out" units="J_per_m3" interface="public"/>
    <variable name="q_init" units="m3" interface="public"/>
    <variable name="q_us" units="m3" interface="public"/>
    <variable name="q" units="m3" initial_value="q_init" interface="public"/>
    <variable name="R_T1_wCont" units="Js_per_m6" interface="public"/>
    <variable name="R_T2_wCont" units="Js_per_m6" interface="public"/>
    <variable name="Delta_R" units="Js_per_m6" interface="public"/>
    <variable name="R_local_multiplier" units="dimensionless" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q</ci>
        </apply>
        <apply>
          <minus/>
          <ci>v_in</ci>
          <ci>v_T</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u_C</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>q</ci>
            <ci>q_us</ci>
          </apply>
          <ci>C_T</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u</ci>
        <apply>
          <plus/>
          <ci>u_C</ci>
          <ci>u_ext</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_T</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>u</ci>
            <ci>u_out</ci>
          </apply>
          <ci>R_T2_wCont</ci>
        </apply>
      </apply>
      <!-- The below assumes that Delta_R1 is proportional to R1 etc-->
      <apply>
        <eq/>
        <ci>R_T1_wCont</ci>
        <apply>
          <times/>
          <apply>
            <plus/>
            <ci>R_T1</ci>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci>Delta_R</ci>
                <ci>R_T1</ci>
              </apply>
              <apply>
                <plus/>
                <ci>R_T1</ci>
                <ci>R_T2</ci>
              </apply>
            </apply>
          </apply>
          <ci>R_local_multiplier</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>R_T2_wCont</ci>
        <apply>
          <times/>
          <apply>
            <plus/>
            <ci>R_T2</ci>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci>Delta_R</ci>
                <ci>R_T2</ci>
              </apply>
              <apply>
                <plus/>
                <ci>R_T1</ci>
                <ci>R_T2</ci>
              </apply>
            </apply>
          </apply>
          <ci>R_local_multiplier</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="terminal_venous_connection">
    <variable name="v_terminal_1" units="m3_per_s" interface="public"/>
    <variable name="v_terminal_2" units="m3_per_s" interface="public"/>
  </component>
  <component name="generic_junction_connection"/>
  <component name="sum_blood_volume"/>
  <component name="terminal_1">
    <variable name="u" units="J_per_m3" interface="public"/>
    <variable name="u_C" units="J_per_m3" interface="public"/>
    <variable name="v_T" units="m3_per_s" interface="public"/>
    <variable name="R_T1" units="Js_per_m6" interface="public"/>
    <variable name="R_T1_wCont" units="Js_per_m6" interface="public"/>
    <variable name="R_T2" units="Js_per_m6" interface="public"/>
    <variable name="C_T" units="m6_per_J" interface="public"/>
    <variable name="u_ext" units="J_per_m3" interface="public"/>
    <variable name="q_init" units="m3" interface="public"/>
    <variable name="q_us" units="m3" interface="public"/>
    <variable name="q" units="m3" interface="public"/>
    <variable name="v_in" units="m3_per_s" interface="public"/>
    <variable name="u_out" units="J_per_m3" interface="public"/>
    <variable name="Delta_R" units="Js_per_m6" interface="public"/>
    <variable name="R_local_multiplier" units="dimensionless" interface="public"/>
  </component>
  <component name="terminal_2">
    <variable name="u" units="J_per_m3" interface="public"/>
    <variable name="u_C" units="J_per_m3" interface="public"/>
    <variable name="v_T" units="m3_per_s" interface="public"/>
    <variable name="R_T1" units="Js_per_m6" interface="public"/>
    <variable name="R_T1_wCont" units="Js_per_m6" interface="public"/>
    <variable name="R_T2" units="Js_per_m6" interface="public"/>
    <variable name="C_T" units="m6_per_J" interface="public"/>
    <variable name="u_ext" units="J_per_m3" interface="public"/>
    <variable name="q_init" units="m3" interface="public"/>
    <variable name="q_us" units="m3" interface="public"/>
    <variable name="q" units="m3" interface="public"/>
    <variable name="v_in" units="m3_per_s" interface="public"/>
    <variable name="u_out" units="J_per_m3" interface="public"/>
    <variable name="Delta_R" units="Js_per_m6" interface="public"/>
    <variable name="R_local_multiplier" units="dimensionless" interface="public"/>
  </component>
  <component name="global"/>
  <connection component_1="parameters" component_2="terminal_1_module">
    <map_variables variable_1="R_T1_terminal_1" variable_2="R_T1"/>
    <map_variables variable_1="R_T2_terminal_1" variable_2="R_T2"/>
    <map_variables variable_1="C_T_terminal_1" variable_2="C_T"/>
    <map_variables variable_1="u_ext_terminal_1" variable_2="u_ext"/>
    <map_variables variable_1="q_init_terminal_1" variable_2="q_init"/>
    <map_variables variable_1="q_us_terminal_1" variable_2="q_us"/>
    <map_variables variable_1="v_in_terminal_1" variable_2="v_in"/>
    <map_variables variable_1="u_out_terminal_1" variable_2="u_out"/>
    <map_variables variable_1="Delta_R_terminal_1" variable_2="Delta_R"/>
    <map_variables variable_1="R_local_multiplier_terminal_1" variable_2="R_local_multiplier"/>
  </connection>
  <connection component_1="parameters" component_2="terminal_2_module">
    <map_variables variable_1="R_T1_terminal_2" variable_2="R_T1"/>
    <map_variables variable_1="R_T2_terminal_2" variable_2="R_T2"/>
    <map_variables variable_1="C_T_terminal_2" variable_2="C_T"/>
    <map_variables variable_1="u_ext_terminal_2" variable_2="u_ext"/>
    <map_variables variable_1="q_init_terminal_2" variable_2="q_init"/>
    <map_variables variable_1="q_us_terminal_2" variable_2="q_us"/>
    <map_variables variable_1="v_in_terminal_2" variable_2="v_in"/>
    <map_variables variable_1="u_out_terminal_2" variable_2="u_out"/>
    <map_variables variable_1="Delta_R_terminal_2" variable_2="Delta_R"/>
    <map_variables variable_1="R_local_multiplier_terminal_2" variable_2="R_local_multiplier"/>
  </connection>
  <connection component_1="environment" component_2="terminal_1_module">
    <map_variables variable_1="time" variable_2="t"/>
  </connection>
  <connection component_1="environment" component_2="terminal_2_module">
    <map_variables variable_1="time" variable_2="t"/>
  </connection>
  <connection component_1="terminal_1_module" component_2="terminal_1">
    <map_variables variable_1="R_T1" variable_2="R_T1"/>
    <map_variables variable_1="R_T2" variable_2="R_T2"/>
    <map_variables variable_1="C_T" variable_2="C_T"/>
    <map_variables variable_1="u_ext" variable_2="u_ext"/>
    <map_variables variable_1="u" variable_2="u"/>
    <map_variables variable_1="u_C" variable_2="u_C"/>
    <map_variables variable_1="v_in" variable_2="v_in"/>
    <map_variables variable_1="v_T" variable_2="v_T"/>
    <map_variables variable_1="u_out" variable_2="u_out"/>
    <map_variables variable_1="q_init" variable_2="q_init"/>
    <map_variables variable_1="q_us" variable_2="q_us"/>
    <map_variables variable_1="q" variable_2="q"/>
    <map_variables variable_1="R_T1_wCont" variable_2="R_T1_wCont"/>
    <map_variables variable_1="Delta_R" variable_2="Delta_R"/>
    <map_variables variable_1="R_local_multiplier" variable_2="R_local_multiplier"/>
  </connection>
  <connection component_1="terminal_1_module" component_2="terminal_venous_connection">
    <map_variables variable_1="v_T" variable_2="v_terminal_1"/>
  </connection>
  <connection component_1="terminal_2_module" component_2="terminal_2">
    <map_variables variable_1="R_T1" variable_2="R_T1"/>
    <map_variables variable_1="R_T2" variable_2="R_T2"/>
    <map_variables variable_1="C_T" variable_2="C_T"/>
    <map_variables variable_1="u_ext" variable_2="u_ext"/>
    <map_variables variable_1="u" variable_2="u"/>
    <map_variables variable_1="u_C" variable_2="u_C"/>
    <map_variables variable_1="v_in" variable_2="v_in"/>
    <map_variables variable_1="v_T" variable_2="v_T"/>
    <map_variables variable_1="u_out" variable_2="u_out"/>
    <map_variables variable_1="q_init" variable_2="q_init"/>
    <map_variables variable_1="q_us" variable_2="q_us"/>
    <map_variables variable_1="q" variable_2="q"/>
    <map_variables variable_1="R_T1_wCont" variable_2="R_T1_wCont"/>
    <map_variables variable_1="Delta_R" variable_2="Delta_R"/>
    <map_variables variable_1="R_local_multiplier" variable_2="R_local_multiplier"/>
  </connection>
  <connection component_1="terminal_2_module" component_2="terminal_venous_connection">
    <map_variables variable_1="v_T" variable_2="v_terminal_2"/>
  </connection>
</model>
