def model modules as
  // ------------module_units------------//
  def import using "control_phys_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_s2 using unit per_s2;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit mmol_per_l using unit mmol_per_l;
    unit l_per_mmol using unit l_per_mmol;
    unit l_per_mmol_per_s using unit l_per_mmol_per_s;
    unit l2_per_mmol_per_s using unit l2_per_mmol_per_s;
    unit mmol_per_s2 using unit mmol_per_s2;
    unit mmol using unit mmol;
    unit mmol_per_l_per_s using unit mmol_per_l_per_s;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
  enddef;

  def comp tissue_GE_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p_init: dimensionless {pub: in};
    var C_CO2_p_init: dimensionless {pub: in};
    var C_O2_p: dimensionless {init: C_O2_p_init, pub: out};
    var C_CO2_p: dimensionless {init: C_CO2_p_init, pub: out};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////module for O2 and CO2 calculation in a pulmonary system///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pulmonary_GE_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: out};
    var M_CO2: m3_per_s {pub: out};
    var C_O2_v: dimensionless {pub: in};
    var C_CO2_v: dimensionless {pub: in};
    var C_CO2_p_init: dimensionless {pub: in};
    var C_O2_p_init: dimensionless {pub: in};
    var C_O2_p: dimensionless {init: C_O2_p_init, pub: out};
    var d_C_O2_p_dt: Hz {pub: out};
    var C_CO2_p: dimensionless {init: C_CO2_p_init, pub: out};
    // New params
    var k_O2: m6_per_Js {pub: in};
    var k_CO2: m6_per_Js {pub: in};
    var P_O2_A: J_per_m3 {pub: in};
    var P_CO2_A: J_per_m3 {pub: in};
    var shunt_fraction: dimensionless {pub: in};
    // New vars
    var P_O2_p: J_per_m3 {pub: out};
    var P_CO2_p: J_per_m3 {pub: out};
    var C_O2_a: dimensionless {pub: out};
    var C_CO2_a: dimensionless {pub: out};
    var v_p: m3_per_s {pub: out};
    var v_sh: m3_per_s {pub: out};
    M_O2 = k_O2*(P_O2_A-P_O2_p);
    M_CO2 = k_CO2*(P_CO2_A-P_CO2_p);
    ode(C_O2_p, t) = (v_p*(C_O2_v-C_O2_p)+M_O2)/q_0;
    d_C_O2_p_dt = (v_p*(C_CO2_v-C_CO2_p)+M_CO2)/q_0;
    ode(C_CO2_p, t) = d_C_O2_p_dt;
    // from inverted dissociation
    P_O2_p = r_1+sqrt(sqr(r_1)-s_1)+overcap_solubility*C_O2_p_extra_ub;
    P_CO2_p = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    // flows from shunt todo model this??
    v_p = v*(1{dimensionless}-shunt_fraction);
    v_sh = v*shunt_fraction;
    // calculate arterial gas concentration due to pulmonary shunt
    // the 0 should be dimensionless (m3_per_s -> dim)
    C_O2_a = max((v_p*C_O2_p+v_sh*C_O2_v)/v, 0{dimensionless});
    C_CO2_a = max((v_p*C_CO2_p+v_sh*C_CO2_v)/v, 0{dimensionless});
    // ____________ inverted dissociation curve below here___________
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    // including the below to avoid divide by zero problems. This probably isn't needed.
    var C_O2_p_capped: dimensionless {pub: out};
    var C_CO2_p_capped: dimensionless {pub: out};
    var C_O2_p_extra_ub: dimensionless {pub: out};
    var overcap_solubility: J_per_m3 {pub: in};
    var saturation_cap: dimensionless {pub: in};
    C_O2_p_capped = min(C_O2_sat*saturation_cap, C_O2_p);
    C_CO2_p_capped = min(C_CO2_sat*saturation_cap, C_CO2_p);
    // This is the amount that is extra in the plasma due to capping the amount that can be saturated.
    C_O2_p_extra_ub = max(C_O2_p-C_O2_sat*saturation_cap, 0{dimensionless});
    d_1 = max(k_1*pow(C_O2_p_capped/(C_O2_sat-C_O2_p_capped), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_p_capped/(C_CO2_sat-C_CO2_p_capped), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp gas_transport_simple_type as
    var t: second {pub: in};
    var C_O2_in: dimensionless {pub: in};
    var C_CO2_in: dimensionless {pub: in};
    var C_CO2_out_init: dimensionless {pub: in};
    var C_O2_out_init: dimensionless {pub: in};
    var C_O2_out: dimensionless {init: C_O2_out_init, pub: out};
    var C_CO2_out: dimensionless {init: C_CO2_out_init, pub: out};
    var dot_C_CO2_out: per_s {pub: out};
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    ode(C_O2_out, t) = v*(C_O2_in-C_O2_out)/q_0;
    dot_C_CO2_out = v*(C_CO2_in-C_CO2_out)/q_0;
    ode(C_CO2_out, t) = dot_C_CO2_out;
    // from inverted dissociation
    var P_O2_out: J_per_m3 {pub: out};
    var P_CO2_out: J_per_m3 {pub: out};
    P_O2_out = r_1+sqrt(sqr(r_1)-s_1)+overcap_solubility*C_O2_out_extra_ub;
    P_CO2_out = d_2*(1{dimensionless}+alpha_2*P_O2_out)/(1{dimensionless}+beta_2*P_O2_out);
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    // including the below to avoid divide by zero problems.
    var C_O2_out_capped: dimensionless {pub: out};
    var C_CO2_out_capped: dimensionless {pub: out};
    var C_O2_out_extra_ub: dimensionless {pub: out};
    var overcap_solubility: J_per_m3 {pub: in};
    var saturation_cap: dimensionless {pub: in};
    C_O2_out_capped = min(C_O2_sat*saturation_cap, C_O2_out);
    C_CO2_out_capped = min(C_CO2_sat*saturation_cap, C_CO2_out);
    // This is the amount that is extra in the plasma due to capping the amount that can be saturated.
    C_O2_out_extra_ub = max(C_O2_out-C_O2_sat*saturation_cap, 0{dimensionless});
    d_1 = max(k_1*pow(C_O2_out_capped/(C_O2_sat-C_O2_out_capped), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_out_capped/(C_CO2_sat-C_CO2_out_capped), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp respiratory_gas_transport_type as
    var t: second {pub: in};
    // constants
    var F_O2_i: dimensionless {pub: in};
    var F_CO2_i: dimensionless {pub: in};
    var P_atm: J_per_m3 {pub: in};
    var P_ws: J_per_m3 {pub: in};
    var F_O2_D_init: dimensionless {pub: in};
    var F_O2_A_init: dimensionless {pub: in};
    var F_CO2_D_init: dimensionless {pub: in};
    var F_CO2_A_init: dimensionless {pub: in};
    // This K causes a loss in mass? fix when turning into bond-graph
    var K_LOSSES: dimensionless {pub: in};
    // volume fractions
    var F_O2_D: dimensionless {init: F_O2_D_init, pub: out};
    var F_CO2_D: dimensionless {init: F_CO2_D_init, pub: out};
    var F_O2_A: dimensionless {init: F_O2_A_init, pub: out};
    var F_CO2_A: dimensionless {init: F_CO2_A_init, pub: out};
    // partial pressures, outputs to the pulmonary gas exchange model
    var P_O2_A: J_per_m3 {pub: out};
    var P_CO2_A: J_per_m3 {pub: out};
    // inputs from lung model
    var v_ml: m3_per_s {pub: in};
    var v_bA: m3_per_s {pub: in};
    var q_D: m3 {pub: in};
    var q_A: m3 {pub: in};
    // inputs from pulmonary gas exchange model
    var M_O2: m3_per_s {pub: in};
    var M_CO2: m3_per_s {pub: in};
    ode(F_O2_D, t) = (max(v_ml, 0{m3_per_s})*(F_O2_i-F_O2_D)-max(-v_bA, 0{m3_per_s})*(F_O2_D-F_O2_A))/q_D;
    ode(F_CO2_D, t) = (max(v_ml, 0{m3_per_s})*(F_CO2_i-F_CO2_D)-max(-v_bA, 0{m3_per_s})*(F_CO2_D-F_CO2_A))/q_D;
    ode(F_O2_A, t) = (max(v_bA, 0{m3_per_s})*(F_O2_D-F_O2_A)-K_LOSSES*M_O2)/q_A;
    ode(F_CO2_A, t) = (max(v_bA, 0{m3_per_s})*(F_CO2_D-F_CO2_A)-K_LOSSES*M_CO2)/q_A;
    P_O2_A = F_O2_A*(P_atm-P_ws);
    P_CO2_A = F_CO2_A*(P_atm-P_ws);
  enddef;

  def comp baroreceptor_type as
    var t: second {pub: in};
    var P_sys: J_per_m3 {pub: in};
    var P_baro_init: J_per_m3 {pub: in};
    var P_baro: J_per_m3 {init: P_baro_init, pub: out};
    var f_ab: per_s {pub: out};
    var dP_sys_dt: J_per_m3s {pub: in};
    // Constants
    var P_nom: J_per_m3 {pub: in};
    var f_ab_min: per_s {pub: in};
    var f_ab_max: per_s {pub: in};
    var k_ab: J_per_m3 {pub: in};
    var tau_zb: second {pub: in};
    var tau_pb: second {pub: in};
    ode(P_baro, t) = (P_sys+tau_zb*dP_sys_dt-P_baro)/tau_pb;
    f_ab = (f_ab_min+f_ab_max*exp((P_baro-P_nom)/k_ab))/(1{dimensionless}+exp((P_baro-P_nom)/k_ab));
  enddef;

  def comp chemoreceptor_type as
    var t: second {pub: in};
    // inp variables
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var dot_C_CO2_a: per_s {pub: in};
    // output variables
    var X_O2: dimensionless {pub: out};
    var phi_stat: per_s {pub: out};
    var phi_CO2_dyn: per_s {init: 0.0, pub: out};
    var f_c_stat: per_s {pub: out};
    var f_c_dyn: per_s {pub: out};
    var f_apc: per_s {pub: out};
    var phi_apc: per_s {init: 0.0, pub: out};
    var P_O2_a: J_per_m3 {pub: out};
    // Constants
    var AA: dimensionless {pub: in};
    var BB: dimensionless {pub: in};
    var C_CO2_a_nom: dimensionless {pub: in};
    var K_O2: dimensionless {pub: in};
    var K_CO2: per_s {pub: in};
    var K_stat: per_s {pub: in};
    var K_dyn: per_s {pub: in};
    var tau_cap: second {pub: in};
    var tau_CO2_cc_dyn: dimensionless {pub: in};
    // equations
    X_O2 = AA*(1{dimensionless}-S_O2_a)+BB;
    phi_stat = K_CO2*(C_CO2_a-C_CO2_a_nom)*K_O2*(1{dimensionless}-exp(-X_O2/K_O2));
    f_c_stat = sel
      case C_CO2_a >= C_CO2_a_nom:
        K_stat*(1{dimensionless}-exp(-phi_stat/K_stat));
      otherwise:
        0{per_s};
    endsel;
    ode(phi_CO2_dyn, t) = (dot_C_CO2_a*tau_CO2_cc_dyn-phi_CO2_dyn)/tau_cap;
    f_c_dyn = K_dyn*(1{dimensionless}-exp(-phi_CO2_dyn/K_dyn));
    ode(phi_apc, t) = (f_c_stat+f_c_dyn-phi_apc)/tau_cap;
    f_apc = max(phi_apc, 0{per_s});
    // Calculate saturation
    var C_O2_a_diss: dimensionless {pub: out};
    var S_O2_a: dimensionless {pub: out};
    var Hgb: kg_per_m3 {pub: in};
    var alpha_O2: m3_per_J {pub: in};
    // should be handled in parameter.csv  = 2.33e-7 (per_pascal)
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1)+overcap_solubility*C_O2_a_extra_ub;
    // P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    // TODO I need to check this, it is different to the Ursino papers and to the gas exchange modules.
    C_O2_a_diss = sel
      case C_O2_sat-Hgb*1.34e-3{m3_per_kg}-P_O2_a*alpha_O2 >= 0{dimensionless}:
        P_O2_a*alpha_O2;
      otherwise:
        C_O2_sat-Hgb*1.34e-3{m3_per_kg};
    endsel;
    S_O2_a = (C_O2_a-C_O2_a_diss)/(Hgb*1.34e-3{m3_per_kg});
    // ____________ inverted dissociation curve below here___________
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    // including the below to avoid divide by zero problems. This probably isn't needed.
    var C_O2_a_capped: dimensionless {pub: out};
    var C_CO2_a_capped: dimensionless {pub: out};
    var C_O2_a_extra_ub: dimensionless {pub: out};
    var overcap_solubility: J_per_m3 {pub: in};
    var saturation_cap: dimensionless {pub: in};
    C_O2_a_capped = min(C_O2_sat*saturation_cap, C_O2_a);
    C_CO2_a_capped = min(C_CO2_sat*saturation_cap, C_CO2_a);
    // This is the amount that is extra in the plasma due to capping the amount that can be saturated.
    C_O2_a_extra_ub = max(C_O2_a-C_O2_sat*saturation_cap, 0{dimensionless});
    d_1 = max(k_1*pow(C_O2_a_capped/(C_O2_sat-C_O2_a_capped), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a_capped/(C_CO2_sat-C_CO2_a_capped), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp afferent_to_vagal_efferent_type as
    var t: second {pub: in};
    // Constants
    var f_ev_0: per_s {pub: in};
    var f_ev_inf: per_s {pub: in};
    var f_ab_0: per_s {pub: in};
    var theta_v: per_s {pub: in};
    var W_cv: dimensionless {pub: in};
    // var W_pv: dimensionless {pub: in}; not yet including lung stretch receptor effects
    var k_ev: per_s {pub: in};
    // Variables
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    // var f_ap: per_s {pub: in};
    var f_v: per_s {pub: out};
    f_v = (f_ev_0+f_ev_inf*exp((f_ab-f_ab_0)/k_ev))/(1{dimensionless}+exp((f_ab-f_ab_0)/k_ev))+W_cv*f_apc-theta_v;
    // + W_pv*f_ap
  enddef;

  def comp afferent_to_sympathetic_efferent_type as
    var t: second {pub: in};
    // Constants
    var f_es_0: per_s {pub: in};
    var f_es_inf: per_s {pub: in};
    var f_es_max: per_s {pub: in};
    var k_es: second {pub: in};
    // should be changed to second
    // var theta_s: per_s {pub: in}; //currently ignoring CNS
    var W_bs: dimensionless {pub: in};
    var W_cs: dimensionless {pub: in};
    // var W_cp: dimensionless {pub: in}; TODO cardiopulmonary and lungstretch signals need to be included.
    // var W_ls: dimensionless {pub: in};
    // Variables
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    // var f_ap: per_s {pub: in};
    var f_s_premax: per_s {pub: out};
    var f_s: per_s {pub: out};
    f_s_premax = f_es_inf+(f_es_0-f_es_inf)*exp(k_es*(W_bs*f_ab+W_cs*f_apc));
    // + w_cp*f_cp + w_ls*f_ls));
    // IGNORING CNS and LUNG STRETCH
    f_s = sel
      case f_s_premax <= f_es_max:
        f_s_premax;
      otherwise:
        f_es_max;
    endsel;
  enddef;

  def comp efferent_resistance_effector_Argus_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: dimensionless {pub: in};
    var f_es_min: per_s {pub: in};
    var f_es_mid: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: dimensionless {pub: out};
    var sigma_theta: per_s {init: 0.0, pub: out};
    // Delta_theta now multiplies by the baseline resistance to calculate how much to add to allow for easier calibration.
    // Equations
    ode(sigma_theta, t) = (max(f_s-f_es_min, 0{per_s})-sigma_theta)/tau_theta;
    Delta_theta = G_theta*sigma_theta/(f_es_mid+sigma_theta);
  enddef;

  def comp efferent_heart_elastance_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: J_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: J_per_m6 {init: 0.0, pub: out};
    var sigma_theta: J_per_m6 {pub: out};
    // Equations
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp efferent_venous_us_volume_and_compliance_effector_Argus_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // IMPORTANT: THIS MODULE HAS BEEN MODIFIED TO CONTROL COMPLIANCE INSTEAD OF UNSTRESSED VOLUME. PARAMS ARE UNVALIDATED
    // Constants
    var G_theta_us: dimensionless {pub: in};
    var G_theta_compliance: dimensionless {pub: in};
    var f_es_min: per_s {pub: in};
    var f_es_mid: per_s {pub: in};
    var tau_theta_us: second {pub: in};
    var tau_theta_compliance: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta_us: dimensionless {pub: out};
    var sigma_theta_us: per_s {init: 0.0, pub: out};
    var Delta_theta_compliance: dimensionless {pub: out};
    var sigma_theta_compliance: per_s {init: 0.0, pub: out};
    // Equations
    // TODO for both of the below, it probably shouln't be additive. It should be impossible to get to negative.
    // changed the below from ln to hill function so we can limit the amount it can change compliance and us volume. Now G_theta_us is the maximum amount of change
    // that can occur to the us volume
    // G_theta is now a max proportion of us volume or compliance that can be decreased.
    ode(sigma_theta_us, t) = (max(f_s-f_es_min, 0{per_s})-sigma_theta_us)/tau_theta_us;
    Delta_theta_us = G_theta_compliance*sigma_theta_us/(f_es_mid+sigma_theta_us);
    ode(sigma_theta_compliance, t) = (max(f_s-f_es_min, 0{per_s})-sigma_theta_compliance)/tau_theta_compliance;
    Delta_theta_compliance = G_theta_compliance*sigma_theta_compliance/(f_es_mid+sigma_theta_compliance);
  enddef;

  def comp efferent_heart_period_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_Ts: second {pub: in};
    var G_Tv: s2 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_Ts: second {pub: in};
    var tau_Tv: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var f_v: per_s {pub: in};
    var Delta_Ts: second {init: 0.0, pub: out};
    var Delta_Tv: second {init: 0.0, pub: out};
    var Delta_T: second {pub: out};
    var sigma_Ts: second {pub: out};
    var sigma_Tv: second {pub: out};
    // Equations
    sigma_Ts = sel
      case f_s >= f_es_min:
        G_Ts*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_Ts, t) = (-Delta_Ts+sigma_Ts)/tau_Ts;
    sigma_Tv = G_Tv*f_v;
    // DELAY IGNORED
    ode(Delta_Tv, t) = (-Delta_Tv+sigma_Tv)/tau_Tv;
    Delta_T = Delta_Tv+Delta_Ts;
  enddef;

  def comp local_flow_control_muscle_type as
    var t: second {pub: in};
    var x_O2: dimensionless {init: 0.0, pub: out};
    var phi_P_CO2_a: dimensionless {pub: out};
    var x_CO2: dimensionless {init: 0.0, pub: out};
    var C_O2_p: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var R_local_multiplier: dimensionless {pub: out};
    var P_O2_a: J_per_m3 {pub: in};
    // Constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var k_CO2_m: J_per_m3 {pub: in};
    var C_O2_vm_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_m: dimensionless {pub: in};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vm_nom)/tau_O2;
    phi_P_CO2_a = (1{dimensionless}-exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m))/(1{dimensionless}+exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m));
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    R_local_multiplier = (1{dimensionless}+x_CO2)/(1{dimensionless}-g_O2_m*x_O2);
  enddef;

  def comp local_flow_control_brain_type as
    var t: second {pub: in};
    var x_O2: dimensionless {init: 0.0, pub: out};
    var phi_P_CO2_a: dimensionless {pub: out};
    var x_CO2: dimensionless {init: 0.0, pub: out};
    var C_O2_p: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var R_local_multiplier: dimensionless {pub: out};
    var P_O2_a: J_per_m3 {pub: in};
    var G_p: dimensionless {pub: out};
    // Constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    // Unit consistancy in ln() - may need to add the unit
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(1{m3_per_J}*P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(1{m3_per_J}*P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
  enddef;

  def comp pv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp pp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    q = q_C+q_0;
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v_in-v);
  enddef;

  def comp vp_ven_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {init: q_C_init, pub: out};
    var q_C: m3 {pub: out};
    var q: m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: out};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
    var C_wCont: m6_per_J {pub: out};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont;
    u = u_C+u_ext+R_v*(v_in-v);
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;

  def comp pp_T_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var Delta_R: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = R_T*(1{dimensionless}+Delta_R)*R_local_multiplier;
  enddef;

  def comp pv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp vv_2in2out_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_ext+u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_0+u_ext+u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // 2in1out merge vv

  def comp vv_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_ext+u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_0+u_ext+u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;
  // 2in1out merge vp

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp heart_simple_wCont as
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless;
    // var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless;
    // var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    var T_wCont: second {pub: out};
    var T_ac_wCont: second {pub: out};
    var T_ar_wCont: second {pub: out};
    var T_vc_wCont: second {pub: out};
    var T_vr_wCont: second {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // q_lv_init sometimes gets identified, the others are set arbitrarily to zero normally,
    // identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar_wCont;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_ac_wCont-T_ar_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr_wCont;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_vc_wCont-T_vr_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T_wCont;
    mt = s-floor(s);
    // control effects Assume all subperiods scale linearly for now. TODO IMPROVE THIS
    var Delta_T: second {pub: in};
    var T_min: second {pub: in};
    T_wCont = max(T+Delta_T, T_min);
    T_ac_wCont = T_ac*T_wCont/T;
    T_ar_wCont = T_ar*T_wCont/T;
    T_vc_wCont = T_vc*T_wCont/T;
    T_vr_wCont = T_vr*T_wCont/T;
    // Elastance Functions
    // TODO FIGURE OUT A REALISTIC WAY TO CONTROL t_astart and t_vstart so that it changes with changes in period
    t_astart_norm = t_astart/T;
    // T_ac_norm = T_ac/T;
    // T_ar_norm = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm = T_vc/T;
    // T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Control from sympathetic
    var E_rv_A_wCont: J_per_m6 {pub: out};
    var E_lv_A_wCont: J_per_m6 {pub: out};
    var Delta_E_rv: J_per_m6 {pub: in};
    var Delta_E_lv: J_per_m6 {pub: in};
    E_rv_A_wCont = E_rv_A+Delta_E_rv;
    E_lv_A_wCont = E_lv_A+Delta_E_lv;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A_wCont+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A_wCont+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp simple_lung_bond_graph_type as
    var t: second {pub: in};
    // ______  Pressures _________
    // atmospheric/mouth pressure
    var P_m: J_per_m3 {pub: in};
    // larynx pressure
    var P_l: J_per_m3 {pub: out};
    // trachea pressure
    var P_t: J_per_m3 {pub: out};
    // bronchea pressure
    var P_b: J_per_m3 {pub: out};
    // Alveolar pressure
    var P_A: J_per_m3 {pub: out};
    // Pleural pressure
    var P_pl: J_per_m3 {pub: out};
    // resp muscle pressure
    var P_mus: J_per_m3 {pub: out};
    var P_mus_min: J_per_m3 {pub: in};
    var P_mus_min_wCont: J_per_m3 {pub: out};
    var P_plEE: J_per_m3 {pub: in};
    var Delta_P_mus: J_per_m3 {pub: in};
    // ______  volumes_________
    // larynx volume
    var q_l: m3 {init: 1.0e-2, pub: out};
    var q_t: m3 {init: 1.0e-3, pub: out};
    var q_b: m3 {init: 1.0e-3, pub: out};
    var q_A_stressed: m3 {init: 0.0, pub: out};
    var q_A: m3 {pub: out};
    var q_pl: m3 {init: 0.0, pub: out};
    var q_D: m3 {pub: out};
    var q_str: m3 {pub: out};
    // ______  flows _________
    var v_ml: m3_per_s {pub: out};
    var v_lt: m3_per_s {pub: out};
    var v_tb: m3_per_s {pub: out};
    var v_bA: m3_per_s {pub: out};
    var v_twall: m3_per_s {pub: out};
    var v_bwall: m3_per_s {pub: out};
    var v_plwall: m3_per_s {pub: out};
    // ______  Resistances_________
    var R_ml: Js_per_m6 {pub: in};
    var R_lt: Js_per_m6 {pub: in};
    var R_tb: Js_per_m6 {pub: in};
    var R_bA: Js_per_m6 {pub: in};
    var alpha_LR: dimensionless {pub: in};
    var R_plwall: Js_per_m6 {pub: in};
    // ______  Compliances_________
    var C_l: m6_per_J {pub: in};
    var C_t: m6_per_J {pub: in};
    var C_b: m6_per_J {pub: in};
    var C_A: m6_per_J {pub: in};
    var C_pl: m6_per_J {pub: in};
    // periods/times
    var t_floor: second {pub: out};
    var T_resp: second {pub: in};
    var Delta_RR_resp: per_s {pub: in};
    var T_resp_wCont: second {pub: out};
    var T_I: second {pub: out};
    var T_E: second {pub: out};
    var tau: second {pub: out};
    var IE_ratio: dimensionless {pub: in};
    // unstressed volumes
    var q_l_us: m3 {pub: in};
    var q_t_us: m3 {pub: in};
    var q_b_us: m3 {pub: in};
    var q_A_us: m3 {pub: in};
    // flags to turn control on and off
    var flag_RR_control: dimensionless {pub: in};
    var flag_P_mus_control: dimensionless {pub: in};
    // TODO check this doesn't cause issues.
    T_resp_wCont = 1{dimensionless}/(1{dimensionless}/T_resp+flag_RR_control*Delta_RR_resp);
    // We keep T_E and T_I based on T_resp, not T_resp control, then move through t_floor faster or slower
    // as calculated below.
    T_E = T_resp/(1{dimensionless}+IE_ratio);
    T_I = T_E*IE_ratio;
    tau = T_E/5{dimensionless};
    // TODO split this into submodules
    v_ml = (P_m-P_l)/(R_ml*alpha_LR);
    ode(q_l, t) = v_ml-v_lt;
    P_l = q_l/C_l;
    v_lt = (P_l-P_t)/(R_lt*alpha_LR);
    v_twall = v_lt-v_tb;
    ode(q_t, t) = v_twall;
    P_t = q_t/C_t+P_pl;
    v_tb = (P_t-P_b)/(R_tb*alpha_LR);
    v_bwall = v_tb-v_bA;
    ode(q_b, t) = v_bwall;
    P_b = q_b/C_b+P_pl;
    // removing pleural pressure from bronchioles
    // allows us to use q_b for a volume for stretch. This makes it varies about zero,
    // meaning we don't need a threshold, or the threshold can be zero.
    // However, it's not physiological, so I am trying to fix it here.
    // calculate the amount of stretched volume above baseline level.
    // assuming a quater of the way from end expiratory pressure to min is baseline.
    q_str = q_b+C_b*(P_plEE+(P_mus_min-P_plEE)/4{dimensionless});
    // TODO change lung diagram.
    v_bA = (P_b-P_A)/(R_bA*alpha_LR);
    // v_Awall = v_bA
    ode(q_A_stressed, t) = v_bA;
    P_A = q_A_stressed/C_A+P_pl;
    ode(q_pl, t) = v_plwall-v_twall-v_bwall-v_bA;
    P_pl = q_pl/C_pl;
    v_plwall = (P_mus-P_pl)/R_plwall;
    // Dead space volume
    // it shouldn't reach q_D_min but we have this here so the model doesn't crash if it does
    // should include more realistic tube laws that allow collapse instead.
    var q_D_min: m3 {pub: in};
    q_D = max(q_l+q_t+q_b+q_l_us+q_t_us+q_b_us, q_D_min);
    q_A = q_A_stressed+q_A_us;
    // TODO + unstressed volume
    var s: dimensionless {init: 0.0, pub: out};
    var s_floor: dimensionless {pub: out};
    // calculate normalised time through this period
    ode(s, t) = 1{dimensionless}/T_resp_wCont;
    s_floor = s-floor(s);
    // unnormalise (t_floor goes from 0 to T_resp, not T_resp_wCont)
    t_floor = s_floor*T_resp;
    // TODO swap this muscle model for the one used in ben tal and smith 2008
    P_mus_min_wCont = P_mus_min+flag_P_mus_control*Delta_P_mus;
    // This is the controlled end expiratiory pressure
    var P_mus_max_wCont: J_per_m3 {pub: out};
    // the unit of the 0 should be J_per_m3 instead of dimensionless
    P_mus_max_wCont = P_plEE+max(-flag_P_mus_control*Delta_P_mus, 0{J_per_m3});
    P_mus = sel
      case t_floor < T_I:
        P_mus_max_wCont-(P_mus_min_wCont-P_mus_max_wCont)/(T_I*T_E)*sqr(t_floor)+(P_mus_min_wCont-P_mus_max_wCont)*T_resp/(T_I*T_E)*t_floor;
      otherwise:
        P_mus_max_wCont+(P_mus_min_wCont-P_mus_max_wCont)/(1{dimensionless}-exp(-T_E/tau))*(exp(-(t_floor-T_I)/tau)-exp(-T_E/tau));
    endsel;
  enddef;
enddef;
