// #This model was automatically generated with the circulatory_autogen software
// # https://github.com/FinbarArgus/circulatory_autogen
def model CardiovascularSystem as
  def import using "generic_junction_test2_open_loop_parameters.cellml" for
    comp parameters using comp parameters;
    comp parameters_global using comp parameters_global;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // #STARTGENBELOW
  // ------------units------------//
  def import using "generic_junction_test2_open_loop_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_s2 using unit per_s2;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit mmol_per_l using unit mmol_per_l;
    unit l_per_mmol using unit l_per_mmol;
    unit l_per_mmol_per_s using unit l_per_mmol_per_s;
    unit l2_per_mmol_per_s using unit l2_per_mmol_per_s;
    unit mmol_per_s2 using unit mmol_per_s2;
    unit mmol using unit mmol;
    unit mmol_per_l_per_s using unit mmol_per_l_per_s;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
  enddef;
  // ------------imports------------//
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp input_flow_aorticroot_module using comp adan_flow_interp_BC_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp aortic_arch_I_module using comp vv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp brachiocephalic_trunk_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp aortic_arch_II_module using comp pp_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp subclavian_R_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp common_carotid_R_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp vertebral_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp subclavian_R_II_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp axillary_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp brachial_R_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp radial_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp ulnar_R_I_module using comp pp_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp common_interosseous_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp ulnar_R_II_module using comp vv_Min_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_interosseous_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp external_carotid_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp internal_carotid_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp common_carotid_L_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp aortic_arch_III_module using comp vv_MinNout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp external_carotid_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp internal_carotid_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp subclavian_L_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp aortic_arch_IV_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp vertebral_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp subclavian_L_II_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp axillary_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp brachial_L_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp radial_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp ulnar_L_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp common_interosseous_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp ulnar_L_II_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_interosseous_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp thoracic_aorta_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_intercostal_T6_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp thoracic_aorta_II_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_intercostal_T6_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp thoracic_aorta_III_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_intercostal_T7_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp thoracic_aorta_IV_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_intercostal_T7_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp thoracic_aorta_V_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp thoracic_aorta_VI_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp celiac_trunk_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp abdominal_aorta_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp common_hepatic_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp splenic_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp left_gastric_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp splenic_II_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp superior_mesenteric_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp abdominal_aorta_II_module using comp pp_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp renal_L_module using comp vv_Min_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp abdominal_aorta_III_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp renal_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp abdominal_aorta_IV_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp inferior_mesenteric_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp abdominal_aorta_V_module using comp pp_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp common_iliac_R_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp common_iliac_L_module using comp vv_MinNout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp external_iliac_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp internal_iliac_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp femoral_R_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp profunda_femoris_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp femoral_R_II_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp popliteal_R_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp anterior_tibial_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp popliteal_R_II_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp tibiofibular_trunk_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_tibial_R_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp external_iliac_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp internal_iliac_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp femoral_L_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp profunda_femoris_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp femoral_L_II_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp popliteal_L_I_module using comp pv_Nout_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp anterior_tibial_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp popliteal_L_II_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp tibiofibular_trunk_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_tibial_L_module using comp pv_nonlinear_visco_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp external_carotid_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp internal_carotid_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp vertebral_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp radial_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_interosseous_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp ulnar_R_II_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp external_carotid_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp internal_carotid_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp vertebral_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp radial_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_interosseous_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp ulnar_L_II_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_intercostal_T6_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_intercostal_T6_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_intercostal_T7_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_intercostal_T7_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp common_hepatic_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp left_gastric_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp splenic_II_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp superior_mesenteric_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp renal_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp renal_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp inferior_mesenteric_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp internal_iliac_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp profunda_femoris_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp anterior_tibial_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_tibial_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp internal_iliac_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp profunda_femoris_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp anterior_tibial_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp posterior_tibial_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_aortic_arch_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_brachiocephalic_trunk_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_aortic_arch_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_subclavian_R_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_common_carotid_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_vertebral_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_subclavian_R_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_axillary_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_brachial_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_radial_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_ulnar_R_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_common_interosseous_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_ulnar_R_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_posterior_interosseous_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_external_carotid_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_internal_carotid_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_common_carotid_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_aortic_arch_III_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_external_carotid_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_internal_carotid_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_subclavian_L_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_aortic_arch_IV_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_vertebral_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_subclavian_L_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_axillary_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_brachial_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_radial_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_ulnar_L_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_common_interosseous_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_ulnar_L_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_posterior_interosseous_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_thoracic_aorta_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_posterior_intercostal_T6_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_thoracic_aorta_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_posterior_intercostal_T6_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_thoracic_aorta_III_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_posterior_intercostal_T7_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_thoracic_aorta_IV_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_posterior_intercostal_T7_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_thoracic_aorta_V_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_thoracic_aorta_VI_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_celiac_trunk_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_abdominal_aorta_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_common_hepatic_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_splenic_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_left_gastric_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_splenic_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_superior_mesenteric_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_abdominal_aorta_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_renal_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_abdominal_aorta_III_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_renal_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_abdominal_aorta_IV_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_inferior_mesenteric_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_abdominal_aorta_V_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_common_iliac_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_common_iliac_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_external_iliac_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_internal_iliac_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_femoral_R_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_profunda_femoris_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_femoral_R_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_popliteal_R_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_anterior_tibial_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_popliteal_R_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_tibiofibular_trunk_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_posterior_tibial_R_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_external_iliac_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_internal_iliac_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_femoral_L_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_profunda_femoris_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_femoral_L_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_popliteal_L_I_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_anterior_tibial_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_popliteal_L_II_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_tibiofibular_trunk_L_module using comp material_prop_visco_const_type;
  enddef;
  def import using "generic_junction_test2_open_loop_modules.cellml" for
    comp K_tube_posterior_tibial_L_module using comp material_prop_visco_const_type;
  enddef;
  // ------------vessel mappings------------//
  def map between input_flow_aorticroot_module and aortic_arch_I_module for
    vars v and v_in;
    vars P and u;
  enddef;
  def map between aortic_arch_I_module and K_tube_aortic_arch_I_module for
    vars l and l;
  enddef;
  def map between aortic_arch_I_module and K_tube_aortic_arch_I_module for
    vars r_0 and r_0;
  enddef;
  def map between aortic_arch_I_module and K_tube_aortic_arch_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between aortic_arch_I_module and K_tube_aortic_arch_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between brachiocephalic_trunk_module and K_tube_brachiocephalic_trunk_module for
    vars l and l;
  enddef;
  def map between brachiocephalic_trunk_module and K_tube_brachiocephalic_trunk_module for
    vars r_0 and r_0;
  enddef;
  def map between brachiocephalic_trunk_module and K_tube_brachiocephalic_trunk_module for
    vars K_tube and K_tube;
  enddef;
  def map between brachiocephalic_trunk_module and K_tube_brachiocephalic_trunk_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between aortic_arch_II_module and K_tube_aortic_arch_II_module for
    vars l and l;
  enddef;
  def map between aortic_arch_II_module and K_tube_aortic_arch_II_module for
    vars r_0 and r_0;
  enddef;
  def map between aortic_arch_II_module and K_tube_aortic_arch_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between aortic_arch_II_module and K_tube_aortic_arch_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between subclavian_R_I_module and K_tube_subclavian_R_I_module for
    vars l and l;
  enddef;
  def map between subclavian_R_I_module and K_tube_subclavian_R_I_module for
    vars r_0 and r_0;
  enddef;
  def map between subclavian_R_I_module and K_tube_subclavian_R_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between subclavian_R_I_module and K_tube_subclavian_R_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_carotid_R_module and K_tube_common_carotid_R_module for
    vars l and l;
  enddef;
  def map between common_carotid_R_module and K_tube_common_carotid_R_module for
    vars r_0 and r_0;
  enddef;
  def map between common_carotid_R_module and K_tube_common_carotid_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between common_carotid_R_module and K_tube_common_carotid_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between vertebral_R_module and vertebral_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between vertebral_R_module and K_tube_vertebral_R_module for
    vars l and l;
  enddef;
  def map between vertebral_R_module and K_tube_vertebral_R_module for
    vars r_0 and r_0;
  enddef;
  def map between vertebral_R_module and K_tube_vertebral_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between vertebral_R_module and K_tube_vertebral_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between subclavian_R_II_module and axillary_R_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R_II_module and K_tube_subclavian_R_II_module for
    vars l and l;
  enddef;
  def map between subclavian_R_II_module and K_tube_subclavian_R_II_module for
    vars r_0 and r_0;
  enddef;
  def map between subclavian_R_II_module and K_tube_subclavian_R_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between subclavian_R_II_module and K_tube_subclavian_R_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between axillary_R_module and brachial_R_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between axillary_R_module and K_tube_axillary_R_module for
    vars l and l;
  enddef;
  def map between axillary_R_module and K_tube_axillary_R_module for
    vars r_0 and r_0;
  enddef;
  def map between axillary_R_module and K_tube_axillary_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between axillary_R_module and K_tube_axillary_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between brachial_R_module and K_tube_brachial_R_module for
    vars l and l;
  enddef;
  def map between brachial_R_module and K_tube_brachial_R_module for
    vars r_0 and r_0;
  enddef;
  def map between brachial_R_module and K_tube_brachial_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between brachial_R_module and K_tube_brachial_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between radial_R_module and radial_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between radial_R_module and K_tube_radial_R_module for
    vars l and l;
  enddef;
  def map between radial_R_module and K_tube_radial_R_module for
    vars r_0 and r_0;
  enddef;
  def map between radial_R_module and K_tube_radial_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between radial_R_module and K_tube_radial_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between ulnar_R_I_module and K_tube_ulnar_R_I_module for
    vars l and l;
  enddef;
  def map between ulnar_R_I_module and K_tube_ulnar_R_I_module for
    vars r_0 and r_0;
  enddef;
  def map between ulnar_R_I_module and K_tube_ulnar_R_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between ulnar_R_I_module and K_tube_ulnar_R_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_interosseous_R_module and posterior_interosseous_R_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_interosseous_R_module and K_tube_common_interosseous_R_module for
    vars l and l;
  enddef;
  def map between common_interosseous_R_module and K_tube_common_interosseous_R_module for
    vars r_0 and r_0;
  enddef;
  def map between common_interosseous_R_module and K_tube_common_interosseous_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between common_interosseous_R_module and K_tube_common_interosseous_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between ulnar_R_II_module and ulnar_R_II_T_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between ulnar_R_II_module and K_tube_ulnar_R_II_module for
    vars l and l;
  enddef;
  def map between ulnar_R_II_module and K_tube_ulnar_R_II_module for
    vars r_0 and r_0;
  enddef;
  def map between ulnar_R_II_module and K_tube_ulnar_R_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between ulnar_R_II_module and K_tube_ulnar_R_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_interosseous_R_module and posterior_interosseous_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between posterior_interosseous_R_module and K_tube_posterior_interosseous_R_module for
    vars l and l;
  enddef;
  def map between posterior_interosseous_R_module and K_tube_posterior_interosseous_R_module for
    vars r_0 and r_0;
  enddef;
  def map between posterior_interosseous_R_module and K_tube_posterior_interosseous_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between posterior_interosseous_R_module and K_tube_posterior_interosseous_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between external_carotid_R_module and external_carotid_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_carotid_R_module and K_tube_external_carotid_R_module for
    vars l and l;
  enddef;
  def map between external_carotid_R_module and K_tube_external_carotid_R_module for
    vars r_0 and r_0;
  enddef;
  def map between external_carotid_R_module and K_tube_external_carotid_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between external_carotid_R_module and K_tube_external_carotid_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between internal_carotid_R_module and internal_carotid_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R_module and K_tube_internal_carotid_R_module for
    vars l and l;
  enddef;
  def map between internal_carotid_R_module and K_tube_internal_carotid_R_module for
    vars r_0 and r_0;
  enddef;
  def map between internal_carotid_R_module and K_tube_internal_carotid_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between internal_carotid_R_module and K_tube_internal_carotid_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_carotid_L_module and K_tube_common_carotid_L_module for
    vars l and l;
  enddef;
  def map between common_carotid_L_module and K_tube_common_carotid_L_module for
    vars r_0 and r_0;
  enddef;
  def map between common_carotid_L_module and K_tube_common_carotid_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between common_carotid_L_module and K_tube_common_carotid_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between aortic_arch_III_module and K_tube_aortic_arch_III_module for
    vars l and l;
  enddef;
  def map between aortic_arch_III_module and K_tube_aortic_arch_III_module for
    vars r_0 and r_0;
  enddef;
  def map between aortic_arch_III_module and K_tube_aortic_arch_III_module for
    vars K_tube and K_tube;
  enddef;
  def map between aortic_arch_III_module and K_tube_aortic_arch_III_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between external_carotid_L_module and external_carotid_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_carotid_L_module and K_tube_external_carotid_L_module for
    vars l and l;
  enddef;
  def map between external_carotid_L_module and K_tube_external_carotid_L_module for
    vars r_0 and r_0;
  enddef;
  def map between external_carotid_L_module and K_tube_external_carotid_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between external_carotid_L_module and K_tube_external_carotid_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between internal_carotid_L_module and internal_carotid_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L_module and K_tube_internal_carotid_L_module for
    vars l and l;
  enddef;
  def map between internal_carotid_L_module and K_tube_internal_carotid_L_module for
    vars r_0 and r_0;
  enddef;
  def map between internal_carotid_L_module and K_tube_internal_carotid_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between internal_carotid_L_module and K_tube_internal_carotid_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between subclavian_L_I_module and K_tube_subclavian_L_I_module for
    vars l and l;
  enddef;
  def map between subclavian_L_I_module and K_tube_subclavian_L_I_module for
    vars r_0 and r_0;
  enddef;
  def map between subclavian_L_I_module and K_tube_subclavian_L_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between subclavian_L_I_module and K_tube_subclavian_L_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between aortic_arch_IV_module and thoracic_aorta_I_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_IV_module and K_tube_aortic_arch_IV_module for
    vars l and l;
  enddef;
  def map between aortic_arch_IV_module and K_tube_aortic_arch_IV_module for
    vars r_0 and r_0;
  enddef;
  def map between aortic_arch_IV_module and K_tube_aortic_arch_IV_module for
    vars K_tube and K_tube;
  enddef;
  def map between aortic_arch_IV_module and K_tube_aortic_arch_IV_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between vertebral_L_module and vertebral_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between vertebral_L_module and K_tube_vertebral_L_module for
    vars l and l;
  enddef;
  def map between vertebral_L_module and K_tube_vertebral_L_module for
    vars r_0 and r_0;
  enddef;
  def map between vertebral_L_module and K_tube_vertebral_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between vertebral_L_module and K_tube_vertebral_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between subclavian_L_II_module and axillary_L_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L_II_module and K_tube_subclavian_L_II_module for
    vars l and l;
  enddef;
  def map between subclavian_L_II_module and K_tube_subclavian_L_II_module for
    vars r_0 and r_0;
  enddef;
  def map between subclavian_L_II_module and K_tube_subclavian_L_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between subclavian_L_II_module and K_tube_subclavian_L_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between axillary_L_module and brachial_L_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between axillary_L_module and K_tube_axillary_L_module for
    vars l and l;
  enddef;
  def map between axillary_L_module and K_tube_axillary_L_module for
    vars r_0 and r_0;
  enddef;
  def map between axillary_L_module and K_tube_axillary_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between axillary_L_module and K_tube_axillary_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between brachial_L_module and K_tube_brachial_L_module for
    vars l and l;
  enddef;
  def map between brachial_L_module and K_tube_brachial_L_module for
    vars r_0 and r_0;
  enddef;
  def map between brachial_L_module and K_tube_brachial_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between brachial_L_module and K_tube_brachial_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between radial_L_module and radial_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between radial_L_module and K_tube_radial_L_module for
    vars l and l;
  enddef;
  def map between radial_L_module and K_tube_radial_L_module for
    vars r_0 and r_0;
  enddef;
  def map between radial_L_module and K_tube_radial_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between radial_L_module and K_tube_radial_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between ulnar_L_I_module and K_tube_ulnar_L_I_module for
    vars l and l;
  enddef;
  def map between ulnar_L_I_module and K_tube_ulnar_L_I_module for
    vars r_0 and r_0;
  enddef;
  def map between ulnar_L_I_module and K_tube_ulnar_L_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between ulnar_L_I_module and K_tube_ulnar_L_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_interosseous_L_module and posterior_interosseous_L_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_interosseous_L_module and K_tube_common_interosseous_L_module for
    vars l and l;
  enddef;
  def map between common_interosseous_L_module and K_tube_common_interosseous_L_module for
    vars r_0 and r_0;
  enddef;
  def map between common_interosseous_L_module and K_tube_common_interosseous_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between common_interosseous_L_module and K_tube_common_interosseous_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between ulnar_L_II_module and ulnar_L_II_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ulnar_L_II_module and K_tube_ulnar_L_II_module for
    vars l and l;
  enddef;
  def map between ulnar_L_II_module and K_tube_ulnar_L_II_module for
    vars r_0 and r_0;
  enddef;
  def map between ulnar_L_II_module and K_tube_ulnar_L_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between ulnar_L_II_module and K_tube_ulnar_L_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_interosseous_L_module and posterior_interosseous_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between posterior_interosseous_L_module and K_tube_posterior_interosseous_L_module for
    vars l and l;
  enddef;
  def map between posterior_interosseous_L_module and K_tube_posterior_interosseous_L_module for
    vars r_0 and r_0;
  enddef;
  def map between posterior_interosseous_L_module and K_tube_posterior_interosseous_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between posterior_interosseous_L_module and K_tube_posterior_interosseous_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_I_module and K_tube_thoracic_aorta_I_module for
    vars l and l;
  enddef;
  def map between thoracic_aorta_I_module and K_tube_thoracic_aorta_I_module for
    vars r_0 and r_0;
  enddef;
  def map between thoracic_aorta_I_module and K_tube_thoracic_aorta_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between thoracic_aorta_I_module and K_tube_thoracic_aorta_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_intercostal_T6_R_module and posterior_intercostal_T6_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T6_R_module and K_tube_posterior_intercostal_T6_R_module for
    vars l and l;
  enddef;
  def map between posterior_intercostal_T6_R_module and K_tube_posterior_intercostal_T6_R_module for
    vars r_0 and r_0;
  enddef;
  def map between posterior_intercostal_T6_R_module and K_tube_posterior_intercostal_T6_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between posterior_intercostal_T6_R_module and K_tube_posterior_intercostal_T6_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_II_module and K_tube_thoracic_aorta_II_module for
    vars l and l;
  enddef;
  def map between thoracic_aorta_II_module and K_tube_thoracic_aorta_II_module for
    vars r_0 and r_0;
  enddef;
  def map between thoracic_aorta_II_module and K_tube_thoracic_aorta_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between thoracic_aorta_II_module and K_tube_thoracic_aorta_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_intercostal_T6_L_module and posterior_intercostal_T6_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T6_L_module and K_tube_posterior_intercostal_T6_L_module for
    vars l and l;
  enddef;
  def map between posterior_intercostal_T6_L_module and K_tube_posterior_intercostal_T6_L_module for
    vars r_0 and r_0;
  enddef;
  def map between posterior_intercostal_T6_L_module and K_tube_posterior_intercostal_T6_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between posterior_intercostal_T6_L_module and K_tube_posterior_intercostal_T6_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_III_module and K_tube_thoracic_aorta_III_module for
    vars l and l;
  enddef;
  def map between thoracic_aorta_III_module and K_tube_thoracic_aorta_III_module for
    vars r_0 and r_0;
  enddef;
  def map between thoracic_aorta_III_module and K_tube_thoracic_aorta_III_module for
    vars K_tube and K_tube;
  enddef;
  def map between thoracic_aorta_III_module and K_tube_thoracic_aorta_III_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_intercostal_T7_R_module and posterior_intercostal_T7_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T7_R_module and K_tube_posterior_intercostal_T7_R_module for
    vars l and l;
  enddef;
  def map between posterior_intercostal_T7_R_module and K_tube_posterior_intercostal_T7_R_module for
    vars r_0 and r_0;
  enddef;
  def map between posterior_intercostal_T7_R_module and K_tube_posterior_intercostal_T7_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between posterior_intercostal_T7_R_module and K_tube_posterior_intercostal_T7_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_IV_module and K_tube_thoracic_aorta_IV_module for
    vars l and l;
  enddef;
  def map between thoracic_aorta_IV_module and K_tube_thoracic_aorta_IV_module for
    vars r_0 and r_0;
  enddef;
  def map between thoracic_aorta_IV_module and K_tube_thoracic_aorta_IV_module for
    vars K_tube and K_tube;
  enddef;
  def map between thoracic_aorta_IV_module and K_tube_thoracic_aorta_IV_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_intercostal_T7_L_module and posterior_intercostal_T7_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T7_L_module and K_tube_posterior_intercostal_T7_L_module for
    vars l and l;
  enddef;
  def map between posterior_intercostal_T7_L_module and K_tube_posterior_intercostal_T7_L_module for
    vars r_0 and r_0;
  enddef;
  def map between posterior_intercostal_T7_L_module and K_tube_posterior_intercostal_T7_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between posterior_intercostal_T7_L_module and K_tube_posterior_intercostal_T7_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_V_module and thoracic_aorta_VI_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_V_module and K_tube_thoracic_aorta_V_module for
    vars l and l;
  enddef;
  def map between thoracic_aorta_V_module and K_tube_thoracic_aorta_V_module for
    vars r_0 and r_0;
  enddef;
  def map between thoracic_aorta_V_module and K_tube_thoracic_aorta_V_module for
    vars K_tube and K_tube;
  enddef;
  def map between thoracic_aorta_V_module and K_tube_thoracic_aorta_V_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_VI_module and K_tube_thoracic_aorta_VI_module for
    vars l and l;
  enddef;
  def map between thoracic_aorta_VI_module and K_tube_thoracic_aorta_VI_module for
    vars r_0 and r_0;
  enddef;
  def map between thoracic_aorta_VI_module and K_tube_thoracic_aorta_VI_module for
    vars K_tube and K_tube;
  enddef;
  def map between thoracic_aorta_VI_module and K_tube_thoracic_aorta_VI_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between celiac_trunk_module and K_tube_celiac_trunk_module for
    vars l and l;
  enddef;
  def map between celiac_trunk_module and K_tube_celiac_trunk_module for
    vars r_0 and r_0;
  enddef;
  def map between celiac_trunk_module and K_tube_celiac_trunk_module for
    vars K_tube and K_tube;
  enddef;
  def map between celiac_trunk_module and K_tube_celiac_trunk_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_I_module and K_tube_abdominal_aorta_I_module for
    vars l and l;
  enddef;
  def map between abdominal_aorta_I_module and K_tube_abdominal_aorta_I_module for
    vars r_0 and r_0;
  enddef;
  def map between abdominal_aorta_I_module and K_tube_abdominal_aorta_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between abdominal_aorta_I_module and K_tube_abdominal_aorta_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_hepatic_module and common_hepatic_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_hepatic_module and K_tube_common_hepatic_module for
    vars l and l;
  enddef;
  def map between common_hepatic_module and K_tube_common_hepatic_module for
    vars r_0 and r_0;
  enddef;
  def map between common_hepatic_module and K_tube_common_hepatic_module for
    vars K_tube and K_tube;
  enddef;
  def map between common_hepatic_module and K_tube_common_hepatic_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between splenic_I_module and K_tube_splenic_I_module for
    vars l and l;
  enddef;
  def map between splenic_I_module and K_tube_splenic_I_module for
    vars r_0 and r_0;
  enddef;
  def map between splenic_I_module and K_tube_splenic_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between splenic_I_module and K_tube_splenic_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between left_gastric_module and left_gastric_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between left_gastric_module and K_tube_left_gastric_module for
    vars l and l;
  enddef;
  def map between left_gastric_module and K_tube_left_gastric_module for
    vars r_0 and r_0;
  enddef;
  def map between left_gastric_module and K_tube_left_gastric_module for
    vars K_tube and K_tube;
  enddef;
  def map between left_gastric_module and K_tube_left_gastric_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between splenic_II_module and splenic_II_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between splenic_II_module and K_tube_splenic_II_module for
    vars l and l;
  enddef;
  def map between splenic_II_module and K_tube_splenic_II_module for
    vars r_0 and r_0;
  enddef;
  def map between splenic_II_module and K_tube_splenic_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between splenic_II_module and K_tube_splenic_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between superior_mesenteric_module and superior_mesenteric_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_module and K_tube_superior_mesenteric_module for
    vars l and l;
  enddef;
  def map between superior_mesenteric_module and K_tube_superior_mesenteric_module for
    vars r_0 and r_0;
  enddef;
  def map between superior_mesenteric_module and K_tube_superior_mesenteric_module for
    vars K_tube and K_tube;
  enddef;
  def map between superior_mesenteric_module and K_tube_superior_mesenteric_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_II_module and K_tube_abdominal_aorta_II_module for
    vars l and l;
  enddef;
  def map between abdominal_aorta_II_module and K_tube_abdominal_aorta_II_module for
    vars r_0 and r_0;
  enddef;
  def map between abdominal_aorta_II_module and K_tube_abdominal_aorta_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between abdominal_aorta_II_module and K_tube_abdominal_aorta_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between renal_L_module and renal_L_T_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between renal_L_module and K_tube_renal_L_module for
    vars l and l;
  enddef;
  def map between renal_L_module and K_tube_renal_L_module for
    vars r_0 and r_0;
  enddef;
  def map between renal_L_module and K_tube_renal_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between renal_L_module and K_tube_renal_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_III_module and K_tube_abdominal_aorta_III_module for
    vars l and l;
  enddef;
  def map between abdominal_aorta_III_module and K_tube_abdominal_aorta_III_module for
    vars r_0 and r_0;
  enddef;
  def map between abdominal_aorta_III_module and K_tube_abdominal_aorta_III_module for
    vars K_tube and K_tube;
  enddef;
  def map between abdominal_aorta_III_module and K_tube_abdominal_aorta_III_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between renal_R_module and renal_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between renal_R_module and K_tube_renal_R_module for
    vars l and l;
  enddef;
  def map between renal_R_module and K_tube_renal_R_module for
    vars r_0 and r_0;
  enddef;
  def map between renal_R_module and K_tube_renal_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between renal_R_module and K_tube_renal_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_IV_module and K_tube_abdominal_aorta_IV_module for
    vars l and l;
  enddef;
  def map between abdominal_aorta_IV_module and K_tube_abdominal_aorta_IV_module for
    vars r_0 and r_0;
  enddef;
  def map between abdominal_aorta_IV_module and K_tube_abdominal_aorta_IV_module for
    vars K_tube and K_tube;
  enddef;
  def map between abdominal_aorta_IV_module and K_tube_abdominal_aorta_IV_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between inferior_mesenteric_module and inferior_mesenteric_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between inferior_mesenteric_module and K_tube_inferior_mesenteric_module for
    vars l and l;
  enddef;
  def map between inferior_mesenteric_module and K_tube_inferior_mesenteric_module for
    vars r_0 and r_0;
  enddef;
  def map between inferior_mesenteric_module and K_tube_inferior_mesenteric_module for
    vars K_tube and K_tube;
  enddef;
  def map between inferior_mesenteric_module and K_tube_inferior_mesenteric_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_V_module and K_tube_abdominal_aorta_V_module for
    vars l and l;
  enddef;
  def map between abdominal_aorta_V_module and K_tube_abdominal_aorta_V_module for
    vars r_0 and r_0;
  enddef;
  def map between abdominal_aorta_V_module and K_tube_abdominal_aorta_V_module for
    vars K_tube and K_tube;
  enddef;
  def map between abdominal_aorta_V_module and K_tube_abdominal_aorta_V_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_iliac_R_module and K_tube_common_iliac_R_module for
    vars l and l;
  enddef;
  def map between common_iliac_R_module and K_tube_common_iliac_R_module for
    vars r_0 and r_0;
  enddef;
  def map between common_iliac_R_module and K_tube_common_iliac_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between common_iliac_R_module and K_tube_common_iliac_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_iliac_L_module and K_tube_common_iliac_L_module for
    vars l and l;
  enddef;
  def map between common_iliac_L_module and K_tube_common_iliac_L_module for
    vars r_0 and r_0;
  enddef;
  def map between common_iliac_L_module and K_tube_common_iliac_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between common_iliac_L_module and K_tube_common_iliac_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between external_iliac_R_module and femoral_R_I_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_R_module and K_tube_external_iliac_R_module for
    vars l and l;
  enddef;
  def map between external_iliac_R_module and K_tube_external_iliac_R_module for
    vars r_0 and r_0;
  enddef;
  def map between external_iliac_R_module and K_tube_external_iliac_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between external_iliac_R_module and K_tube_external_iliac_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between internal_iliac_R_module and internal_iliac_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_iliac_R_module and K_tube_internal_iliac_R_module for
    vars l and l;
  enddef;
  def map between internal_iliac_R_module and K_tube_internal_iliac_R_module for
    vars r_0 and r_0;
  enddef;
  def map between internal_iliac_R_module and K_tube_internal_iliac_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between internal_iliac_R_module and K_tube_internal_iliac_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between femoral_R_I_module and K_tube_femoral_R_I_module for
    vars l and l;
  enddef;
  def map between femoral_R_I_module and K_tube_femoral_R_I_module for
    vars r_0 and r_0;
  enddef;
  def map between femoral_R_I_module and K_tube_femoral_R_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between femoral_R_I_module and K_tube_femoral_R_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between profunda_femoris_R_module and profunda_femoris_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between profunda_femoris_R_module and K_tube_profunda_femoris_R_module for
    vars l and l;
  enddef;
  def map between profunda_femoris_R_module and K_tube_profunda_femoris_R_module for
    vars r_0 and r_0;
  enddef;
  def map between profunda_femoris_R_module and K_tube_profunda_femoris_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between profunda_femoris_R_module and K_tube_profunda_femoris_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between femoral_R_II_module and popliteal_R_I_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_R_II_module and K_tube_femoral_R_II_module for
    vars l and l;
  enddef;
  def map between femoral_R_II_module and K_tube_femoral_R_II_module for
    vars r_0 and r_0;
  enddef;
  def map between femoral_R_II_module and K_tube_femoral_R_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between femoral_R_II_module and K_tube_femoral_R_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between popliteal_R_I_module and K_tube_popliteal_R_I_module for
    vars l and l;
  enddef;
  def map between popliteal_R_I_module and K_tube_popliteal_R_I_module for
    vars r_0 and r_0;
  enddef;
  def map between popliteal_R_I_module and K_tube_popliteal_R_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between popliteal_R_I_module and K_tube_popliteal_R_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between anterior_tibial_R_module and anterior_tibial_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between anterior_tibial_R_module and K_tube_anterior_tibial_R_module for
    vars l and l;
  enddef;
  def map between anterior_tibial_R_module and K_tube_anterior_tibial_R_module for
    vars r_0 and r_0;
  enddef;
  def map between anterior_tibial_R_module and K_tube_anterior_tibial_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between anterior_tibial_R_module and K_tube_anterior_tibial_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between popliteal_R_II_module and tibiofibular_trunk_R_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between popliteal_R_II_module and K_tube_popliteal_R_II_module for
    vars l and l;
  enddef;
  def map between popliteal_R_II_module and K_tube_popliteal_R_II_module for
    vars r_0 and r_0;
  enddef;
  def map between popliteal_R_II_module and K_tube_popliteal_R_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between popliteal_R_II_module and K_tube_popliteal_R_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between tibiofibular_trunk_R_module and posterior_tibial_R_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between tibiofibular_trunk_R_module and K_tube_tibiofibular_trunk_R_module for
    vars l and l;
  enddef;
  def map between tibiofibular_trunk_R_module and K_tube_tibiofibular_trunk_R_module for
    vars r_0 and r_0;
  enddef;
  def map between tibiofibular_trunk_R_module and K_tube_tibiofibular_trunk_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between tibiofibular_trunk_R_module and K_tube_tibiofibular_trunk_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_tibial_R_module and posterior_tibial_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between posterior_tibial_R_module and K_tube_posterior_tibial_R_module for
    vars l and l;
  enddef;
  def map between posterior_tibial_R_module and K_tube_posterior_tibial_R_module for
    vars r_0 and r_0;
  enddef;
  def map between posterior_tibial_R_module and K_tube_posterior_tibial_R_module for
    vars K_tube and K_tube;
  enddef;
  def map between posterior_tibial_R_module and K_tube_posterior_tibial_R_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between external_iliac_L_module and femoral_L_I_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_L_module and K_tube_external_iliac_L_module for
    vars l and l;
  enddef;
  def map between external_iliac_L_module and K_tube_external_iliac_L_module for
    vars r_0 and r_0;
  enddef;
  def map between external_iliac_L_module and K_tube_external_iliac_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between external_iliac_L_module and K_tube_external_iliac_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between internal_iliac_L_module and internal_iliac_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_iliac_L_module and K_tube_internal_iliac_L_module for
    vars l and l;
  enddef;
  def map between internal_iliac_L_module and K_tube_internal_iliac_L_module for
    vars r_0 and r_0;
  enddef;
  def map between internal_iliac_L_module and K_tube_internal_iliac_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between internal_iliac_L_module and K_tube_internal_iliac_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between femoral_L_I_module and K_tube_femoral_L_I_module for
    vars l and l;
  enddef;
  def map between femoral_L_I_module and K_tube_femoral_L_I_module for
    vars r_0 and r_0;
  enddef;
  def map between femoral_L_I_module and K_tube_femoral_L_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between femoral_L_I_module and K_tube_femoral_L_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between profunda_femoris_L_module and profunda_femoris_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between profunda_femoris_L_module and K_tube_profunda_femoris_L_module for
    vars l and l;
  enddef;
  def map between profunda_femoris_L_module and K_tube_profunda_femoris_L_module for
    vars r_0 and r_0;
  enddef;
  def map between profunda_femoris_L_module and K_tube_profunda_femoris_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between profunda_femoris_L_module and K_tube_profunda_femoris_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between femoral_L_II_module and popliteal_L_I_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_L_II_module and K_tube_femoral_L_II_module for
    vars l and l;
  enddef;
  def map between femoral_L_II_module and K_tube_femoral_L_II_module for
    vars r_0 and r_0;
  enddef;
  def map between femoral_L_II_module and K_tube_femoral_L_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between femoral_L_II_module and K_tube_femoral_L_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between popliteal_L_I_module and K_tube_popliteal_L_I_module for
    vars l and l;
  enddef;
  def map between popliteal_L_I_module and K_tube_popliteal_L_I_module for
    vars r_0 and r_0;
  enddef;
  def map between popliteal_L_I_module and K_tube_popliteal_L_I_module for
    vars K_tube and K_tube;
  enddef;
  def map between popliteal_L_I_module and K_tube_popliteal_L_I_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between anterior_tibial_L_module and anterior_tibial_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between anterior_tibial_L_module and K_tube_anterior_tibial_L_module for
    vars l and l;
  enddef;
  def map between anterior_tibial_L_module and K_tube_anterior_tibial_L_module for
    vars r_0 and r_0;
  enddef;
  def map between anterior_tibial_L_module and K_tube_anterior_tibial_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between anterior_tibial_L_module and K_tube_anterior_tibial_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between popliteal_L_II_module and tibiofibular_trunk_L_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L_II_module and K_tube_popliteal_L_II_module for
    vars l and l;
  enddef;
  def map between popliteal_L_II_module and K_tube_popliteal_L_II_module for
    vars r_0 and r_0;
  enddef;
  def map between popliteal_L_II_module and K_tube_popliteal_L_II_module for
    vars K_tube and K_tube;
  enddef;
  def map between popliteal_L_II_module and K_tube_popliteal_L_II_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between tibiofibular_trunk_L_module and posterior_tibial_L_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between tibiofibular_trunk_L_module and K_tube_tibiofibular_trunk_L_module for
    vars l and l;
  enddef;
  def map between tibiofibular_trunk_L_module and K_tube_tibiofibular_trunk_L_module for
    vars r_0 and r_0;
  enddef;
  def map between tibiofibular_trunk_L_module and K_tube_tibiofibular_trunk_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between tibiofibular_trunk_L_module and K_tube_tibiofibular_trunk_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_tibial_L_module and posterior_tibial_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between posterior_tibial_L_module and K_tube_posterior_tibial_L_module for
    vars l and l;
  enddef;
  def map between posterior_tibial_L_module and K_tube_posterior_tibial_L_module for
    vars r_0 and r_0;
  enddef;
  def map between posterior_tibial_L_module and K_tube_posterior_tibial_L_module for
    vars K_tube and K_tube;
  enddef;
  def map between posterior_tibial_L_module and K_tube_posterior_tibial_L_module for
    vars K_tube_visco and K_tube_visco;
  enddef;
  // ------------terminal venous connection------------//
  def map between external_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_R_T;
  enddef;
  def map between internal_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_internal_carotid_R_T;
  enddef;
  def map between vertebral_R_T_module and terminal_venous_connection for
    vars v_T and v_vertebral_R_T;
  enddef;
  def map between radial_R_T_module and terminal_venous_connection for
    vars v_T and v_radial_R_T;
  enddef;
  def map between posterior_interosseous_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_interosseous_R_T;
  enddef;
  def map between ulnar_R_II_T_module and terminal_venous_connection for
    vars v_T and v_ulnar_R_II_T;
  enddef;
  def map between external_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_L_T;
  enddef;
  def map between internal_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_internal_carotid_L_T;
  enddef;
  def map between vertebral_L_T_module and terminal_venous_connection for
    vars v_T and v_vertebral_L_T;
  enddef;
  def map between radial_L_T_module and terminal_venous_connection for
    vars v_T and v_radial_L_T;
  enddef;
  def map between posterior_interosseous_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_interosseous_L_T;
  enddef;
  def map between ulnar_L_II_T_module and terminal_venous_connection for
    vars v_T and v_ulnar_L_II_T;
  enddef;
  def map between posterior_intercostal_T6_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T6_R_T;
  enddef;
  def map between posterior_intercostal_T6_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T6_L_T;
  enddef;
  def map between posterior_intercostal_T7_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T7_R_T;
  enddef;
  def map between posterior_intercostal_T7_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T7_L_T;
  enddef;
  def map between common_hepatic_T_module and terminal_venous_connection for
    vars v_T and v_common_hepatic_T;
  enddef;
  def map between left_gastric_T_module and terminal_venous_connection for
    vars v_T and v_left_gastric_T;
  enddef;
  def map between splenic_II_T_module and terminal_venous_connection for
    vars v_T and v_splenic_II_T;
  enddef;
  def map between superior_mesenteric_T_module and terminal_venous_connection for
    vars v_T and v_superior_mesenteric_T;
  enddef;
  def map between renal_L_T_module and terminal_venous_connection for
    vars v_T and v_renal_L_T;
  enddef;
  def map between renal_R_T_module and terminal_venous_connection for
    vars v_T and v_renal_R_T;
  enddef;
  def map between inferior_mesenteric_T_module and terminal_venous_connection for
    vars v_T and v_inferior_mesenteric_T;
  enddef;
  def map between internal_iliac_R_T_module and terminal_venous_connection for
    vars v_T and v_internal_iliac_R_T;
  enddef;
  def map between profunda_femoris_R_T_module and terminal_venous_connection for
    vars v_T and v_profunda_femoris_R_T;
  enddef;
  def map between anterior_tibial_R_T_module and terminal_venous_connection for
    vars v_T and v_anterior_tibial_R_T;
  enddef;
  def map between posterior_tibial_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_tibial_R_T;
  enddef;
  def map between internal_iliac_L_T_module and terminal_venous_connection for
    vars v_T and v_internal_iliac_L_T;
  enddef;
  def map between profunda_femoris_L_T_module and terminal_venous_connection for
    vars v_T and v_profunda_femoris_L_T;
  enddef;
  def map between anterior_tibial_L_T_module and terminal_venous_connection for
    vars v_T and v_anterior_tibial_L_T;
  enddef;
  def map between posterior_tibial_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_tibial_L_T;
  enddef;

  def comp terminal_venous_connection as
    var v_external_carotid_R_T: m3_per_s {pub: in};
    var v_internal_carotid_R_T: m3_per_s {pub: in};
    var v_vertebral_R_T: m3_per_s {pub: in};
    var v_radial_R_T: m3_per_s {pub: in};
    var v_posterior_interosseous_R_T: m3_per_s {pub: in};
    var v_ulnar_R_II_T: m3_per_s {pub: in};
    var v_external_carotid_L_T: m3_per_s {pub: in};
    var v_internal_carotid_L_T: m3_per_s {pub: in};
    var v_vertebral_L_T: m3_per_s {pub: in};
    var v_radial_L_T: m3_per_s {pub: in};
    var v_posterior_interosseous_L_T: m3_per_s {pub: in};
    var v_ulnar_L_II_T: m3_per_s {pub: in};
    var v_posterior_intercostal_T6_R_T: m3_per_s {pub: in};
    var v_posterior_intercostal_T6_L_T: m3_per_s {pub: in};
    var v_posterior_intercostal_T7_R_T: m3_per_s {pub: in};
    var v_posterior_intercostal_T7_L_T: m3_per_s {pub: in};
    var v_common_hepatic_T: m3_per_s {pub: in};
    var v_left_gastric_T: m3_per_s {pub: in};
    var v_splenic_II_T: m3_per_s {pub: in};
    var v_superior_mesenteric_T: m3_per_s {pub: in};
    var v_renal_L_T: m3_per_s {pub: in};
    var v_renal_R_T: m3_per_s {pub: in};
    var v_inferior_mesenteric_T: m3_per_s {pub: in};
    var v_internal_iliac_R_T: m3_per_s {pub: in};
    var v_profunda_femoris_R_T: m3_per_s {pub: in};
    var v_anterior_tibial_R_T: m3_per_s {pub: in};
    var v_posterior_tibial_R_T: m3_per_s {pub: in};
    var v_internal_iliac_L_T: m3_per_s {pub: in};
    var v_profunda_femoris_L_T: m3_per_s {pub: in};
    var v_anterior_tibial_L_T: m3_per_s {pub: in};
    var v_posterior_tibial_L_T: m3_per_s {pub: in};
  enddef;
  // ------------generic junction connection------------//
  def map between aortic_arch_I_module and brachiocephalic_trunk_module for
    vars u_d and u_in;
  enddef;
  def map between brachiocephalic_trunk_module and generic_junction_connection for
    vars v and v_brachiocephalic_trunk_Nout;
  enddef;
  def map between aortic_arch_I_module and aortic_arch_II_module for
    vars u_d and u_in;
  enddef;
  def map between aortic_arch_II_module and generic_junction_connection for
    vars v and v_aortic_arch_II_Nout;
  enddef;
  def map between generic_junction_connection and aortic_arch_I_module for
    vars v_aortic_arch_I_sum_Nout and v_out_sum;
  enddef;
  def map between brachiocephalic_trunk_module and subclavian_R_I_module for
    vars u and u_in;
  enddef;
  def map between subclavian_R_I_module and generic_junction_connection for
    vars v and v_subclavian_R_I_Nout;
  enddef;
  def map between brachiocephalic_trunk_module and common_carotid_R_module for
    vars u and u_in;
  enddef;
  def map between common_carotid_R_module and generic_junction_connection for
    vars v and v_common_carotid_R_Nout;
  enddef;
  def map between generic_junction_connection and brachiocephalic_trunk_module for
    vars v_brachiocephalic_trunk_sum_Nout and v_out_sum;
  enddef;
  def map between subclavian_R_I_module and vertebral_R_module for
    vars u and u_in;
  enddef;
  def map between vertebral_R_module and generic_junction_connection for
    vars v and v_vertebral_R_Nout;
  enddef;
  def map between subclavian_R_I_module and subclavian_R_II_module for
    vars u and u_in;
  enddef;
  def map between subclavian_R_II_module and generic_junction_connection for
    vars v and v_subclavian_R_II_Nout;
  enddef;
  def map between generic_junction_connection and subclavian_R_I_module for
    vars v_subclavian_R_I_sum_Nout and v_out_sum;
  enddef;
  def map between common_carotid_R_module and external_carotid_R_module for
    vars u and u_in;
  enddef;
  def map between external_carotid_R_module and generic_junction_connection for
    vars v and v_external_carotid_R_Nout;
  enddef;
  def map between common_carotid_R_module and internal_carotid_R_module for
    vars u and u_in;
  enddef;
  def map between internal_carotid_R_module and generic_junction_connection for
    vars v and v_internal_carotid_R_Nout;
  enddef;
  def map between generic_junction_connection and common_carotid_R_module for
    vars v_common_carotid_R_sum_Nout and v_out_sum;
  enddef;
  def map between brachial_R_module and radial_R_module for
    vars u and u_in;
  enddef;
  def map between radial_R_module and generic_junction_connection for
    vars v and v_radial_R_Nout;
  enddef;
  def map between brachial_R_module and ulnar_R_I_module for
    vars u and u_in;
  enddef;
  def map between ulnar_R_I_module and generic_junction_connection for
    vars v and v_ulnar_R_I_Nout;
  enddef;
  def map between generic_junction_connection and brachial_R_module for
    vars v_brachial_R_sum_Nout and v_out_sum;
  enddef;
  def map between ulnar_R_II_module and ulnar_R_I_module for
    vars u and u_out;
  enddef;
  def map between ulnar_R_I_module and generic_junction_connection for
    vars v_d and v_d_ulnar_R_I_Min;
  enddef;
  def map between ulnar_R_II_module and common_interosseous_R_module for
    vars u and u_in;
  enddef;
  def map between common_interosseous_R_module and generic_junction_connection for
    vars v and v_common_interosseous_R_Min;
  enddef;
  def map between generic_junction_connection and ulnar_R_II_module for
    vars v_ulnar_R_II_sum_Min and v_in_sum;
  enddef;
  def map between common_carotid_L_module and external_carotid_L_module for
    vars u and u_in;
  enddef;
  def map between external_carotid_L_module and generic_junction_connection for
    vars v and v_external_carotid_L_Nout;
  enddef;
  def map between common_carotid_L_module and internal_carotid_L_module for
    vars u and u_in;
  enddef;
  def map between internal_carotid_L_module and generic_junction_connection for
    vars v and v_internal_carotid_L_Nout;
  enddef;
  def map between generic_junction_connection and common_carotid_L_module for
    vars v_common_carotid_L_sum_Nout and v_out_sum;
  enddef;
  def map between aortic_arch_III_module and aortic_arch_II_module for
    vars u and u_out;
  enddef;
  def map between aortic_arch_II_module and generic_junction_connection for
    vars v_d and v_d_aortic_arch_II_Min;
  enddef;
  def map between aortic_arch_III_module and common_carotid_L_module for
    vars u and u_in;
  enddef;
  def map between common_carotid_L_module and generic_junction_connection for
    vars v and v_common_carotid_L_Min;
  enddef;
  def map between aortic_arch_III_module and subclavian_L_I_module for
    vars u_d and u_in;
  enddef;
  def map between subclavian_L_I_module and generic_junction_connection for
    vars v and v_subclavian_L_I_Nout;
  enddef;
  def map between aortic_arch_III_module and aortic_arch_IV_module for
    vars u_d and u_in;
  enddef;
  def map between aortic_arch_IV_module and generic_junction_connection for
    vars v and v_aortic_arch_IV_Nout;
  enddef;
  def map between generic_junction_connection and aortic_arch_III_module for
    vars v_aortic_arch_III_sum_Min and v_in_sum;
  enddef;
  def map between generic_junction_connection and aortic_arch_III_module for
    vars v_aortic_arch_III_sum_Nout and v_out_sum;
  enddef;
  def map between subclavian_L_I_module and vertebral_L_module for
    vars u and u_in;
  enddef;
  def map between vertebral_L_module and generic_junction_connection for
    vars v and v_vertebral_L_Nout;
  enddef;
  def map between subclavian_L_I_module and subclavian_L_II_module for
    vars u and u_in;
  enddef;
  def map between subclavian_L_II_module and generic_junction_connection for
    vars v and v_subclavian_L_II_Nout;
  enddef;
  def map between generic_junction_connection and subclavian_L_I_module for
    vars v_subclavian_L_I_sum_Nout and v_out_sum;
  enddef;
  def map between brachial_L_module and radial_L_module for
    vars u and u_in;
  enddef;
  def map between radial_L_module and generic_junction_connection for
    vars v and v_radial_L_Nout;
  enddef;
  def map between brachial_L_module and ulnar_L_I_module for
    vars u and u_in;
  enddef;
  def map between ulnar_L_I_module and generic_junction_connection for
    vars v and v_ulnar_L_I_Nout;
  enddef;
  def map between generic_junction_connection and brachial_L_module for
    vars v_brachial_L_sum_Nout and v_out_sum;
  enddef;
  def map between ulnar_L_I_module and common_interosseous_L_module for
    vars u and u_in;
  enddef;
  def map between common_interosseous_L_module and generic_junction_connection for
    vars v and v_common_interosseous_L_Nout;
  enddef;
  def map between ulnar_L_I_module and ulnar_L_II_module for
    vars u and u_in;
  enddef;
  def map between ulnar_L_II_module and generic_junction_connection for
    vars v and v_ulnar_L_II_Nout;
  enddef;
  def map between generic_junction_connection and ulnar_L_I_module for
    vars v_ulnar_L_I_sum_Nout and v_out_sum;
  enddef;
  def map between thoracic_aorta_I_module and posterior_intercostal_T6_R_module for
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T6_R_module and generic_junction_connection for
    vars v and v_posterior_intercostal_T6_R_Nout;
  enddef;
  def map between thoracic_aorta_I_module and thoracic_aorta_II_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_II_module and generic_junction_connection for
    vars v and v_thoracic_aorta_II_Nout;
  enddef;
  def map between generic_junction_connection and thoracic_aorta_I_module for
    vars v_thoracic_aorta_I_sum_Nout and v_out_sum;
  enddef;
  def map between thoracic_aorta_II_module and posterior_intercostal_T6_L_module for
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T6_L_module and generic_junction_connection for
    vars v and v_posterior_intercostal_T6_L_Nout;
  enddef;
  def map between thoracic_aorta_II_module and thoracic_aorta_III_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_III_module and generic_junction_connection for
    vars v and v_thoracic_aorta_III_Nout;
  enddef;
  def map between generic_junction_connection and thoracic_aorta_II_module for
    vars v_thoracic_aorta_II_sum_Nout and v_out_sum;
  enddef;
  def map between thoracic_aorta_III_module and posterior_intercostal_T7_R_module for
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T7_R_module and generic_junction_connection for
    vars v and v_posterior_intercostal_T7_R_Nout;
  enddef;
  def map between thoracic_aorta_III_module and thoracic_aorta_IV_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_IV_module and generic_junction_connection for
    vars v and v_thoracic_aorta_IV_Nout;
  enddef;
  def map between generic_junction_connection and thoracic_aorta_III_module for
    vars v_thoracic_aorta_III_sum_Nout and v_out_sum;
  enddef;
  def map between thoracic_aorta_IV_module and posterior_intercostal_T7_L_module for
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T7_L_module and generic_junction_connection for
    vars v and v_posterior_intercostal_T7_L_Nout;
  enddef;
  def map between thoracic_aorta_IV_module and thoracic_aorta_V_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_V_module and generic_junction_connection for
    vars v and v_thoracic_aorta_V_Nout;
  enddef;
  def map between generic_junction_connection and thoracic_aorta_IV_module for
    vars v_thoracic_aorta_IV_sum_Nout and v_out_sum;
  enddef;
  def map between thoracic_aorta_VI_module and celiac_trunk_module for
    vars u and u_in;
  enddef;
  def map between celiac_trunk_module and generic_junction_connection for
    vars v and v_celiac_trunk_Nout;
  enddef;
  def map between thoracic_aorta_VI_module and abdominal_aorta_I_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_I_module and generic_junction_connection for
    vars v and v_abdominal_aorta_I_Nout;
  enddef;
  def map between generic_junction_connection and thoracic_aorta_VI_module for
    vars v_thoracic_aorta_VI_sum_Nout and v_out_sum;
  enddef;
  def map between celiac_trunk_module and common_hepatic_module for
    vars u and u_in;
  enddef;
  def map between common_hepatic_module and generic_junction_connection for
    vars v and v_common_hepatic_Nout;
  enddef;
  def map between celiac_trunk_module and splenic_I_module for
    vars u and u_in;
  enddef;
  def map between splenic_I_module and generic_junction_connection for
    vars v and v_splenic_I_Nout;
  enddef;
  def map between generic_junction_connection and celiac_trunk_module for
    vars v_celiac_trunk_sum_Nout and v_out_sum;
  enddef;
  def map between abdominal_aorta_I_module and superior_mesenteric_module for
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_module and generic_junction_connection for
    vars v and v_superior_mesenteric_Nout;
  enddef;
  def map between abdominal_aorta_I_module and abdominal_aorta_II_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_II_module and generic_junction_connection for
    vars v and v_abdominal_aorta_II_Nout;
  enddef;
  def map between generic_junction_connection and abdominal_aorta_I_module for
    vars v_abdominal_aorta_I_sum_Nout and v_out_sum;
  enddef;
  def map between splenic_I_module and left_gastric_module for
    vars u and u_in;
  enddef;
  def map between left_gastric_module and generic_junction_connection for
    vars v and v_left_gastric_Nout;
  enddef;
  def map between splenic_I_module and splenic_II_module for
    vars u and u_in;
  enddef;
  def map between splenic_II_module and generic_junction_connection for
    vars v and v_splenic_II_Nout;
  enddef;
  def map between generic_junction_connection and splenic_I_module for
    vars v_splenic_I_sum_Nout and v_out_sum;
  enddef;
  def map between renal_L_module and abdominal_aorta_II_module for
    vars u and u_out;
  enddef;
  def map between abdominal_aorta_II_module and generic_junction_connection for
    vars v_d and v_d_abdominal_aorta_II_Min;
  enddef;
  def map between renal_L_module and abdominal_aorta_III_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_III_module and generic_junction_connection for
    vars v and v_abdominal_aorta_III_Min;
  enddef;
  def map between generic_junction_connection and renal_L_module for
    vars v_renal_L_sum_Min and v_in_sum;
  enddef;
  def map between abdominal_aorta_III_module and renal_R_module for
    vars u and u_in;
  enddef;
  def map between renal_R_module and generic_junction_connection for
    vars v and v_renal_R_Nout;
  enddef;
  def map between abdominal_aorta_III_module and abdominal_aorta_IV_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_IV_module and generic_junction_connection for
    vars v and v_abdominal_aorta_IV_Nout;
  enddef;
  def map between generic_junction_connection and abdominal_aorta_III_module for
    vars v_abdominal_aorta_III_sum_Nout and v_out_sum;
  enddef;
  def map between abdominal_aorta_IV_module and inferior_mesenteric_module for
    vars u and u_in;
  enddef;
  def map between inferior_mesenteric_module and generic_junction_connection for
    vars v and v_inferior_mesenteric_Nout;
  enddef;
  def map between abdominal_aorta_IV_module and abdominal_aorta_V_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_V_module and generic_junction_connection for
    vars v and v_abdominal_aorta_V_Nout;
  enddef;
  def map between generic_junction_connection and abdominal_aorta_IV_module for
    vars v_abdominal_aorta_IV_sum_Nout and v_out_sum;
  enddef;
  def map between common_iliac_R_module and external_iliac_R_module for
    vars u and u_in;
  enddef;
  def map between external_iliac_R_module and generic_junction_connection for
    vars v and v_external_iliac_R_Nout;
  enddef;
  def map between common_iliac_R_module and internal_iliac_R_module for
    vars u and u_in;
  enddef;
  def map between internal_iliac_R_module and generic_junction_connection for
    vars v and v_internal_iliac_R_Nout;
  enddef;
  def map between generic_junction_connection and common_iliac_R_module for
    vars v_common_iliac_R_sum_Nout and v_out_sum;
  enddef;
  def map between common_iliac_L_module and abdominal_aorta_V_module for
    vars u and u_out;
  enddef;
  def map between abdominal_aorta_V_module and generic_junction_connection for
    vars v_d and v_d_abdominal_aorta_V_Min;
  enddef;
  def map between common_iliac_L_module and common_iliac_R_module for
    vars u and u_in;
  enddef;
  def map between common_iliac_R_module and generic_junction_connection for
    vars v and v_common_iliac_R_Min;
  enddef;
  def map between common_iliac_L_module and external_iliac_L_module for
    vars u_d and u_in;
  enddef;
  def map between external_iliac_L_module and generic_junction_connection for
    vars v and v_external_iliac_L_Nout;
  enddef;
  def map between common_iliac_L_module and internal_iliac_L_module for
    vars u_d and u_in;
  enddef;
  def map between internal_iliac_L_module and generic_junction_connection for
    vars v and v_internal_iliac_L_Nout;
  enddef;
  def map between generic_junction_connection and common_iliac_L_module for
    vars v_common_iliac_L_sum_Min and v_in_sum;
  enddef;
  def map between generic_junction_connection and common_iliac_L_module for
    vars v_common_iliac_L_sum_Nout and v_out_sum;
  enddef;
  def map between femoral_R_I_module and profunda_femoris_R_module for
    vars u and u_in;
  enddef;
  def map between profunda_femoris_R_module and generic_junction_connection for
    vars v and v_profunda_femoris_R_Nout;
  enddef;
  def map between femoral_R_I_module and femoral_R_II_module for
    vars u and u_in;
  enddef;
  def map between femoral_R_II_module and generic_junction_connection for
    vars v and v_femoral_R_II_Nout;
  enddef;
  def map between generic_junction_connection and femoral_R_I_module for
    vars v_femoral_R_I_sum_Nout and v_out_sum;
  enddef;
  def map between popliteal_R_I_module and anterior_tibial_R_module for
    vars u and u_in;
  enddef;
  def map between anterior_tibial_R_module and generic_junction_connection for
    vars v and v_anterior_tibial_R_Nout;
  enddef;
  def map between popliteal_R_I_module and popliteal_R_II_module for
    vars u and u_in;
  enddef;
  def map between popliteal_R_II_module and generic_junction_connection for
    vars v and v_popliteal_R_II_Nout;
  enddef;
  def map between generic_junction_connection and popliteal_R_I_module for
    vars v_popliteal_R_I_sum_Nout and v_out_sum;
  enddef;
  def map between femoral_L_I_module and profunda_femoris_L_module for
    vars u and u_in;
  enddef;
  def map between profunda_femoris_L_module and generic_junction_connection for
    vars v and v_profunda_femoris_L_Nout;
  enddef;
  def map between femoral_L_I_module and femoral_L_II_module for
    vars u and u_in;
  enddef;
  def map between femoral_L_II_module and generic_junction_connection for
    vars v and v_femoral_L_II_Nout;
  enddef;
  def map between generic_junction_connection and femoral_L_I_module for
    vars v_femoral_L_I_sum_Nout and v_out_sum;
  enddef;
  def map between popliteal_L_I_module and anterior_tibial_L_module for
    vars u and u_in;
  enddef;
  def map between anterior_tibial_L_module and generic_junction_connection for
    vars v and v_anterior_tibial_L_Nout;
  enddef;
  def map between popliteal_L_I_module and popliteal_L_II_module for
    vars u and u_in;
  enddef;
  def map between popliteal_L_II_module and generic_junction_connection for
    vars v and v_popliteal_L_II_Nout;
  enddef;
  def map between generic_junction_connection and popliteal_L_I_module for
    vars v_popliteal_L_I_sum_Nout and v_out_sum;
  enddef;

  def comp generic_junction_connection as
    var v_brachiocephalic_trunk_Nout: m3_per_s {pub: in};
    var v_aortic_arch_II_Nout: m3_per_s {pub: in};
    var v_aortic_arch_I_sum_Nout: m3_per_s {pub: out};
    var v_subclavian_R_I_Nout: m3_per_s {pub: in};
    var v_common_carotid_R_Nout: m3_per_s {pub: in};
    var v_brachiocephalic_trunk_sum_Nout: m3_per_s {pub: out};
    var v_vertebral_R_Nout: m3_per_s {pub: in};
    var v_subclavian_R_II_Nout: m3_per_s {pub: in};
    var v_subclavian_R_I_sum_Nout: m3_per_s {pub: out};
    var v_external_carotid_R_Nout: m3_per_s {pub: in};
    var v_internal_carotid_R_Nout: m3_per_s {pub: in};
    var v_common_carotid_R_sum_Nout: m3_per_s {pub: out};
    var v_radial_R_Nout: m3_per_s {pub: in};
    var v_ulnar_R_I_Nout: m3_per_s {pub: in};
    var v_brachial_R_sum_Nout: m3_per_s {pub: out};
    var v_d_ulnar_R_I_Min: m3_per_s {pub: in};
    var v_common_interosseous_R_Min: m3_per_s {pub: in};
    var v_ulnar_R_II_sum_Min: m3_per_s {pub: out};
    var v_external_carotid_L_Nout: m3_per_s {pub: in};
    var v_internal_carotid_L_Nout: m3_per_s {pub: in};
    var v_common_carotid_L_sum_Nout: m3_per_s {pub: out};
    var v_subclavian_L_I_Nout: m3_per_s {pub: in};
    var v_aortic_arch_IV_Nout: m3_per_s {pub: in};
    var v_aortic_arch_III_sum_Nout: m3_per_s {pub: out};
    var v_d_aortic_arch_II_Min: m3_per_s {pub: in};
    var v_common_carotid_L_Min: m3_per_s {pub: in};
    var v_aortic_arch_III_sum_Min: m3_per_s {pub: out};
    var v_vertebral_L_Nout: m3_per_s {pub: in};
    var v_subclavian_L_II_Nout: m3_per_s {pub: in};
    var v_subclavian_L_I_sum_Nout: m3_per_s {pub: out};
    var v_radial_L_Nout: m3_per_s {pub: in};
    var v_ulnar_L_I_Nout: m3_per_s {pub: in};
    var v_brachial_L_sum_Nout: m3_per_s {pub: out};
    var v_common_interosseous_L_Nout: m3_per_s {pub: in};
    var v_ulnar_L_II_Nout: m3_per_s {pub: in};
    var v_ulnar_L_I_sum_Nout: m3_per_s {pub: out};
    var v_posterior_intercostal_T6_R_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_II_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_I_sum_Nout: m3_per_s {pub: out};
    var v_posterior_intercostal_T6_L_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_III_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_II_sum_Nout: m3_per_s {pub: out};
    var v_posterior_intercostal_T7_R_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_IV_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_III_sum_Nout: m3_per_s {pub: out};
    var v_posterior_intercostal_T7_L_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_V_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_IV_sum_Nout: m3_per_s {pub: out};
    var v_celiac_trunk_Nout: m3_per_s {pub: in};
    var v_abdominal_aorta_I_Nout: m3_per_s {pub: in};
    var v_thoracic_aorta_VI_sum_Nout: m3_per_s {pub: out};
    var v_common_hepatic_Nout: m3_per_s {pub: in};
    var v_splenic_I_Nout: m3_per_s {pub: in};
    var v_celiac_trunk_sum_Nout: m3_per_s {pub: out};
    var v_superior_mesenteric_Nout: m3_per_s {pub: in};
    var v_abdominal_aorta_II_Nout: m3_per_s {pub: in};
    var v_abdominal_aorta_I_sum_Nout: m3_per_s {pub: out};
    var v_left_gastric_Nout: m3_per_s {pub: in};
    var v_splenic_II_Nout: m3_per_s {pub: in};
    var v_splenic_I_sum_Nout: m3_per_s {pub: out};
    var v_d_abdominal_aorta_II_Min: m3_per_s {pub: in};
    var v_abdominal_aorta_III_Min: m3_per_s {pub: in};
    var v_renal_L_sum_Min: m3_per_s {pub: out};
    var v_renal_R_Nout: m3_per_s {pub: in};
    var v_abdominal_aorta_IV_Nout: m3_per_s {pub: in};
    var v_abdominal_aorta_III_sum_Nout: m3_per_s {pub: out};
    var v_inferior_mesenteric_Nout: m3_per_s {pub: in};
    var v_abdominal_aorta_V_Nout: m3_per_s {pub: in};
    var v_abdominal_aorta_IV_sum_Nout: m3_per_s {pub: out};
    var v_external_iliac_R_Nout: m3_per_s {pub: in};
    var v_internal_iliac_R_Nout: m3_per_s {pub: in};
    var v_common_iliac_R_sum_Nout: m3_per_s {pub: out};
    var v_external_iliac_L_Nout: m3_per_s {pub: in};
    var v_internal_iliac_L_Nout: m3_per_s {pub: in};
    var v_common_iliac_L_sum_Nout: m3_per_s {pub: out};
    var v_d_abdominal_aorta_V_Min: m3_per_s {pub: in};
    var v_common_iliac_R_Min: m3_per_s {pub: in};
    var v_common_iliac_L_sum_Min: m3_per_s {pub: out};
    var v_profunda_femoris_R_Nout: m3_per_s {pub: in};
    var v_femoral_R_II_Nout: m3_per_s {pub: in};
    var v_femoral_R_I_sum_Nout: m3_per_s {pub: out};
    var v_anterior_tibial_R_Nout: m3_per_s {pub: in};
    var v_popliteal_R_II_Nout: m3_per_s {pub: in};
    var v_popliteal_R_I_sum_Nout: m3_per_s {pub: out};
    var v_profunda_femoris_L_Nout: m3_per_s {pub: in};
    var v_femoral_L_II_Nout: m3_per_s {pub: in};
    var v_femoral_L_I_sum_Nout: m3_per_s {pub: out};
    var v_anterior_tibial_L_Nout: m3_per_s {pub: in};
    var v_popliteal_L_II_Nout: m3_per_s {pub: in};
    var v_popliteal_L_I_sum_Nout: m3_per_s {pub: out};
    v_aortic_arch_I_sum_Nout = v_brachiocephalic_trunk_Nout+v_aortic_arch_II_Nout;
    v_brachiocephalic_trunk_sum_Nout = v_subclavian_R_I_Nout+v_common_carotid_R_Nout;
    v_subclavian_R_I_sum_Nout = v_vertebral_R_Nout+v_subclavian_R_II_Nout;
    v_common_carotid_R_sum_Nout = v_external_carotid_R_Nout+v_internal_carotid_R_Nout;
    v_brachial_R_sum_Nout = v_radial_R_Nout+v_ulnar_R_I_Nout;
    v_ulnar_R_II_sum_Min = v_d_ulnar_R_I_Min+(-v_common_interosseous_R_Min);
    v_common_carotid_L_sum_Nout = v_external_carotid_L_Nout+v_internal_carotid_L_Nout;
    v_aortic_arch_III_sum_Min = v_d_aortic_arch_II_Min+(-v_common_carotid_L_Min);
    v_aortic_arch_III_sum_Nout = v_subclavian_L_I_Nout+v_aortic_arch_IV_Nout;
    v_subclavian_L_I_sum_Nout = v_vertebral_L_Nout+v_subclavian_L_II_Nout;
    v_brachial_L_sum_Nout = v_radial_L_Nout+v_ulnar_L_I_Nout;
    v_ulnar_L_I_sum_Nout = v_common_interosseous_L_Nout+v_ulnar_L_II_Nout;
    v_thoracic_aorta_I_sum_Nout = v_posterior_intercostal_T6_R_Nout+v_thoracic_aorta_II_Nout;
    v_thoracic_aorta_II_sum_Nout = v_posterior_intercostal_T6_L_Nout+v_thoracic_aorta_III_Nout;
    v_thoracic_aorta_III_sum_Nout = v_posterior_intercostal_T7_R_Nout+v_thoracic_aorta_IV_Nout;
    v_thoracic_aorta_IV_sum_Nout = v_posterior_intercostal_T7_L_Nout+v_thoracic_aorta_V_Nout;
    v_thoracic_aorta_VI_sum_Nout = v_celiac_trunk_Nout+v_abdominal_aorta_I_Nout;
    v_celiac_trunk_sum_Nout = v_common_hepatic_Nout+v_splenic_I_Nout;
    v_abdominal_aorta_I_sum_Nout = v_superior_mesenteric_Nout+v_abdominal_aorta_II_Nout;
    v_splenic_I_sum_Nout = v_left_gastric_Nout+v_splenic_II_Nout;
    v_renal_L_sum_Min = v_d_abdominal_aorta_II_Min+(-v_abdominal_aorta_III_Min);
    v_abdominal_aorta_III_sum_Nout = v_renal_R_Nout+v_abdominal_aorta_IV_Nout;
    v_abdominal_aorta_IV_sum_Nout = v_inferior_mesenteric_Nout+v_abdominal_aorta_V_Nout;
    v_common_iliac_R_sum_Nout = v_external_iliac_R_Nout+v_internal_iliac_R_Nout;
    v_common_iliac_L_sum_Min = v_d_abdominal_aorta_V_Min+(-v_common_iliac_R_Min);
    v_common_iliac_L_sum_Nout = v_external_iliac_L_Nout+v_internal_iliac_L_Nout;
    v_femoral_R_I_sum_Nout = v_profunda_femoris_R_Nout+v_femoral_R_II_Nout;
    v_popliteal_R_I_sum_Nout = v_anterior_tibial_R_Nout+v_popliteal_R_II_Nout;
    v_femoral_L_I_sum_Nout = v_profunda_femoris_L_Nout+v_femoral_L_II_Nout;
    v_popliteal_L_I_sum_Nout = v_anterior_tibial_L_Nout+v_popliteal_L_II_Nout;
  enddef;
  // ------------applying multiport operations for ports------------//

  def comp sum_blood_volume as
  enddef;
  // ------------access_variables------------//

  def comp input_flow_aorticroot as
    var v: m3_per_s {pub: in};
    var T: second {pub: in};
  enddef;

  def comp aortic_arch_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0_2: m3 {pub: in};
    var q_p: m3 {pub: in};
    var q_d: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp brachiocephalic_trunk as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp subclavian_R_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp common_carotid_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp vertebral_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp subclavian_R_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp axillary_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp brachial_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp radial_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp ulnar_R_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp common_interosseous_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp ulnar_R_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0_2: m3 {pub: in};
    var q_p: m3 {pub: in};
    var q_d: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp posterior_interosseous_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp external_carotid_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp common_carotid_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_III as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0_2: m3 {pub: in};
    var q_p: m3 {pub: in};
    var q_d: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp external_carotid_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp subclavian_L_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_IV as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp vertebral_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp subclavian_L_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp axillary_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp brachial_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp radial_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp ulnar_L_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp common_interosseous_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp ulnar_L_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp posterior_interosseous_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp posterior_intercostal_T6_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp posterior_intercostal_T6_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_III as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp posterior_intercostal_T7_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_IV as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp posterior_intercostal_T7_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_V as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_VI as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp celiac_trunk as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp common_hepatic as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp splenic_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp left_gastric as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp splenic_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp superior_mesenteric as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp renal_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0_2: m3 {pub: in};
    var q_p: m3 {pub: in};
    var q_d: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_III as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp renal_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_IV as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp inferior_mesenteric as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_V as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp common_iliac_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp common_iliac_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0_2: m3 {pub: in};
    var q_p: m3 {pub: in};
    var q_d: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp external_iliac_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp internal_iliac_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp femoral_R_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp profunda_femoris_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp femoral_R_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp popliteal_R_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp anterior_tibial_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp popliteal_R_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp tibiofibular_trunk_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp posterior_tibial_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp external_iliac_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp internal_iliac_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp femoral_L_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp profunda_femoris_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp femoral_L_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp popliteal_L_I as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var du_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp anterior_tibial_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp popliteal_L_II as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp tibiofibular_trunk_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp posterior_tibial_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var r: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
  enddef;

  def comp external_carotid_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp internal_carotid_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp vertebral_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp radial_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_interosseous_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp ulnar_R_II_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp external_carotid_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp internal_carotid_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp vertebral_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp radial_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_interosseous_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp ulnar_L_II_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T6_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T6_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T7_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T7_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp common_hepatic_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp left_gastric_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp splenic_II_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp renal_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp renal_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp inferior_mesenteric_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp internal_iliac_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp profunda_femoris_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp anterior_tibial_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_tibial_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp internal_iliac_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp profunda_femoris_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp anterior_tibial_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_tibial_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp K_tube_aortic_arch_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_brachiocephalic_trunk as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_aortic_arch_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_subclavian_R_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_common_carotid_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_vertebral_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_subclavian_R_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_axillary_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_brachial_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_radial_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_ulnar_R_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_common_interosseous_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_ulnar_R_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_posterior_interosseous_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_external_carotid_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_internal_carotid_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_common_carotid_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_aortic_arch_III as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_external_carotid_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_internal_carotid_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_subclavian_L_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_aortic_arch_IV as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_vertebral_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_subclavian_L_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_axillary_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_brachial_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_radial_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_ulnar_L_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_common_interosseous_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_ulnar_L_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_posterior_interosseous_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_thoracic_aorta_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_posterior_intercostal_T6_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_thoracic_aorta_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_posterior_intercostal_T6_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_thoracic_aorta_III as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_posterior_intercostal_T7_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_thoracic_aorta_IV as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_posterior_intercostal_T7_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_thoracic_aorta_V as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_thoracic_aorta_VI as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_celiac_trunk as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_abdominal_aorta_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_common_hepatic as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_splenic_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_left_gastric as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_splenic_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_superior_mesenteric as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_abdominal_aorta_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_renal_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_abdominal_aorta_III as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_renal_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_abdominal_aorta_IV as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_inferior_mesenteric as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_abdominal_aorta_V as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_common_iliac_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_common_iliac_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_external_iliac_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_internal_iliac_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_femoral_R_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_profunda_femoris_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_femoral_R_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_popliteal_R_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_anterior_tibial_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_popliteal_R_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_tibiofibular_trunk_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_posterior_tibial_R as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_external_iliac_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_internal_iliac_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_femoral_L_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_profunda_femoris_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_femoral_L_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_popliteal_L_I as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_anterior_tibial_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_popliteal_L_II as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_tibiofibular_trunk_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;

  def comp K_tube_posterior_tibial_L as
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
  enddef;
  // ------------global_parameters_access------------//

  def comp global as
    var T: second {pub: in};
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var R_flag: dimensionless {pub: in};
    var nu: dimensionless {pub: in};
    var SMvolfrac_art: dimensionless {pub: in};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
  enddef;
  // ------------own vessel mappings------------//
  def map between input_flow_aorticroot and input_flow_aorticroot_module for
    vars v and v;
    vars T and T;
  enddef;
  def map between aortic_arch_I and aortic_arch_I_module for
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0_2 and q_0_2;
    vars q_p and q_p;
    vars q_d and q_d;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between brachiocephalic_trunk and brachiocephalic_trunk_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between aortic_arch_II and aortic_arch_II_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between subclavian_R_I and subclavian_R_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_carotid_R and common_carotid_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between vertebral_R and vertebral_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between subclavian_R_II and subclavian_R_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between axillary_R and axillary_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between brachial_R and brachial_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between radial_R and radial_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between ulnar_R_I and ulnar_R_I_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_interosseous_R and common_interosseous_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between ulnar_R_II and ulnar_R_II_module for
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0_2 and q_0_2;
    vars q_p and q_p;
    vars q_d and q_d;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_interosseous_R and posterior_interosseous_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_carotid_R and external_carotid_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between internal_carotid_R and internal_carotid_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_carotid_L and common_carotid_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between aortic_arch_III and aortic_arch_III_module for
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0_2 and q_0_2;
    vars q_p and q_p;
    vars q_d and q_d;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_carotid_L and external_carotid_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between internal_carotid_L and internal_carotid_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between subclavian_L_I and subclavian_L_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between aortic_arch_IV and aortic_arch_IV_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between vertebral_L and vertebral_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between subclavian_L_II and subclavian_L_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between axillary_L and axillary_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between brachial_L and brachial_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between radial_L and radial_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between ulnar_L_I and ulnar_L_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_interosseous_L and common_interosseous_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between ulnar_L_II and ulnar_L_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_interosseous_L and posterior_interosseous_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_I and thoracic_aorta_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_intercostal_T6_R and posterior_intercostal_T6_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_II and thoracic_aorta_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_intercostal_T6_L and posterior_intercostal_T6_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_III and thoracic_aorta_III_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_intercostal_T7_R and posterior_intercostal_T7_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_IV and thoracic_aorta_IV_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_intercostal_T7_L and posterior_intercostal_T7_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_V and thoracic_aorta_V_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_VI and thoracic_aorta_VI_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between celiac_trunk and celiac_trunk_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_I and abdominal_aorta_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_hepatic and common_hepatic_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between splenic_I and splenic_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between left_gastric and left_gastric_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between splenic_II and splenic_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between superior_mesenteric and superior_mesenteric_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_II and abdominal_aorta_II_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between renal_L and renal_L_module for
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0_2 and q_0_2;
    vars q_p and q_p;
    vars q_d and q_d;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_III and abdominal_aorta_III_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between renal_R and renal_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_IV and abdominal_aorta_IV_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between inferior_mesenteric and inferior_mesenteric_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_V and abdominal_aorta_V_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_iliac_R and common_iliac_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_iliac_L and common_iliac_L_module for
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0_2 and q_0_2;
    vars q_p and q_p;
    vars q_d and q_d;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_iliac_R and external_iliac_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between internal_iliac_R and internal_iliac_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between femoral_R_I and femoral_R_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between profunda_femoris_R and profunda_femoris_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between femoral_R_II and femoral_R_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between popliteal_R_I and popliteal_R_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between anterior_tibial_R and anterior_tibial_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between popliteal_R_II and popliteal_R_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between tibiofibular_trunk_R and tibiofibular_trunk_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_tibial_R and posterior_tibial_R_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_iliac_L and external_iliac_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between internal_iliac_L and internal_iliac_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between femoral_L_I and femoral_L_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between profunda_femoris_L and profunda_femoris_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between femoral_L_II and femoral_L_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between popliteal_L_I and popliteal_L_I_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between anterior_tibial_L and anterior_tibial_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between popliteal_L_II and popliteal_L_II_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between tibiofibular_trunk_L and tibiofibular_trunk_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_tibial_L and posterior_tibial_L_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_carotid_R_T and external_carotid_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between internal_carotid_R_T and internal_carotid_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between vertebral_R_T and vertebral_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between radial_R_T and radial_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_interosseous_R_T and posterior_interosseous_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between ulnar_R_II_T and ulnar_R_II_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between external_carotid_L_T and external_carotid_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between internal_carotid_L_T and internal_carotid_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between vertebral_L_T and vertebral_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between radial_L_T and radial_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_interosseous_L_T and posterior_interosseous_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between ulnar_L_II_T and ulnar_L_II_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_intercostal_T6_R_T and posterior_intercostal_T6_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_intercostal_T6_L_T and posterior_intercostal_T6_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_intercostal_T7_R_T and posterior_intercostal_T7_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_intercostal_T7_L_T and posterior_intercostal_T7_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between common_hepatic_T and common_hepatic_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between left_gastric_T and left_gastric_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between splenic_II_T and splenic_II_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between superior_mesenteric_T and superior_mesenteric_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between renal_L_T and renal_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between renal_R_T and renal_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between inferior_mesenteric_T and inferior_mesenteric_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between internal_iliac_R_T and internal_iliac_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between profunda_femoris_R_T and profunda_femoris_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between anterior_tibial_R_T and anterior_tibial_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_tibial_R_T and posterior_tibial_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between internal_iliac_L_T and internal_iliac_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between profunda_femoris_L_T and profunda_femoris_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between anterior_tibial_L_T and anterior_tibial_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_tibial_L_T and posterior_tibial_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between K_tube_aortic_arch_I and K_tube_aortic_arch_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_brachiocephalic_trunk and K_tube_brachiocephalic_trunk_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_aortic_arch_II and K_tube_aortic_arch_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_subclavian_R_I and K_tube_subclavian_R_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_common_carotid_R and K_tube_common_carotid_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_vertebral_R and K_tube_vertebral_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_subclavian_R_II and K_tube_subclavian_R_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_axillary_R and K_tube_axillary_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_brachial_R and K_tube_brachial_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_radial_R and K_tube_radial_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_ulnar_R_I and K_tube_ulnar_R_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_common_interosseous_R and K_tube_common_interosseous_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_ulnar_R_II and K_tube_ulnar_R_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_posterior_interosseous_R and K_tube_posterior_interosseous_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_external_carotid_R and K_tube_external_carotid_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_internal_carotid_R and K_tube_internal_carotid_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_common_carotid_L and K_tube_common_carotid_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_aortic_arch_III and K_tube_aortic_arch_III_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_external_carotid_L and K_tube_external_carotid_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_internal_carotid_L and K_tube_internal_carotid_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_subclavian_L_I and K_tube_subclavian_L_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_aortic_arch_IV and K_tube_aortic_arch_IV_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_vertebral_L and K_tube_vertebral_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_subclavian_L_II and K_tube_subclavian_L_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_axillary_L and K_tube_axillary_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_brachial_L and K_tube_brachial_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_radial_L and K_tube_radial_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_ulnar_L_I and K_tube_ulnar_L_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_common_interosseous_L and K_tube_common_interosseous_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_ulnar_L_II and K_tube_ulnar_L_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_posterior_interosseous_L and K_tube_posterior_interosseous_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_thoracic_aorta_I and K_tube_thoracic_aorta_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_posterior_intercostal_T6_R and K_tube_posterior_intercostal_T6_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_thoracic_aorta_II and K_tube_thoracic_aorta_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_posterior_intercostal_T6_L and K_tube_posterior_intercostal_T6_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_thoracic_aorta_III and K_tube_thoracic_aorta_III_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_posterior_intercostal_T7_R and K_tube_posterior_intercostal_T7_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_thoracic_aorta_IV and K_tube_thoracic_aorta_IV_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_posterior_intercostal_T7_L and K_tube_posterior_intercostal_T7_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_thoracic_aorta_V and K_tube_thoracic_aorta_V_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_thoracic_aorta_VI and K_tube_thoracic_aorta_VI_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_celiac_trunk and K_tube_celiac_trunk_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_abdominal_aorta_I and K_tube_abdominal_aorta_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_common_hepatic and K_tube_common_hepatic_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_splenic_I and K_tube_splenic_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_left_gastric and K_tube_left_gastric_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_splenic_II and K_tube_splenic_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_superior_mesenteric and K_tube_superior_mesenteric_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_abdominal_aorta_II and K_tube_abdominal_aorta_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_renal_L and K_tube_renal_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_abdominal_aorta_III and K_tube_abdominal_aorta_III_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_renal_R and K_tube_renal_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_abdominal_aorta_IV and K_tube_abdominal_aorta_IV_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_inferior_mesenteric and K_tube_inferior_mesenteric_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_abdominal_aorta_V and K_tube_abdominal_aorta_V_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_common_iliac_R and K_tube_common_iliac_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_common_iliac_L and K_tube_common_iliac_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_external_iliac_R and K_tube_external_iliac_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_internal_iliac_R and K_tube_internal_iliac_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_femoral_R_I and K_tube_femoral_R_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_profunda_femoris_R and K_tube_profunda_femoris_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_femoral_R_II and K_tube_femoral_R_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_popliteal_R_I and K_tube_popliteal_R_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_anterior_tibial_R and K_tube_anterior_tibial_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_popliteal_R_II and K_tube_popliteal_R_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_tibiofibular_trunk_R and K_tube_tibiofibular_trunk_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_posterior_tibial_R and K_tube_posterior_tibial_R_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_external_iliac_L and K_tube_external_iliac_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_internal_iliac_L and K_tube_internal_iliac_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_femoral_L_I and K_tube_femoral_L_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_profunda_femoris_L and K_tube_profunda_femoris_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_femoral_L_II and K_tube_femoral_L_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_popliteal_L_I and K_tube_popliteal_L_I_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_anterior_tibial_L and K_tube_anterior_tibial_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_popliteal_L_II and K_tube_popliteal_L_II_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_tibiofibular_trunk_L and K_tube_tibiofibular_trunk_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  def map between K_tube_posterior_tibial_L and K_tube_posterior_tibial_L_module for
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
    vars E and E;
    vars K_m and K_m;
  enddef;
  // ------------own global parameters mapping------------//
  def map between global and parameters_global for
    vars T and T;
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters_global and input_flow_aorticroot_module for
    vars T and T;
  enddef;
  def map between parameters and aortic_arch_I_module for
    vars u_ext_aortic_arch_I and u_ext;
    vars u_0_aortic_arch_I and u_0;
    vars theta_aortic_arch_I and theta;
    vars l_aortic_arch_I and l;
    vars r_0_aortic_arch_I and r_0;
    vars m_tube_aortic_arch_I and m_tube;
    vars n_tube_aortic_arch_I and n_tube;
    vars I_scale_aortic_arch_I and I_scale;
  enddef;
  def map between parameters_global and aortic_arch_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and brachiocephalic_trunk_module for
    vars u_ext_brachiocephalic_trunk and u_ext;
    vars u_0_brachiocephalic_trunk and u_0;
    vars theta_brachiocephalic_trunk and theta;
    vars l_brachiocephalic_trunk and l;
    vars r_0_brachiocephalic_trunk and r_0;
    vars m_tube_brachiocephalic_trunk and m_tube;
    vars n_tube_brachiocephalic_trunk and n_tube;
    vars I_scale_brachiocephalic_trunk and I_scale;
  enddef;
  def map between parameters_global and brachiocephalic_trunk_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and aortic_arch_II_module for
    vars u_ext_aortic_arch_II and u_ext;
    vars theta_aortic_arch_II and theta;
    vars l_aortic_arch_II and l;
    vars r_0_aortic_arch_II and r_0;
    vars u_0_aortic_arch_II and u_0;
    vars m_tube_aortic_arch_II and m_tube;
    vars n_tube_aortic_arch_II and n_tube;
    vars I_scale_aortic_arch_II and I_scale;
  enddef;
  def map between parameters_global and aortic_arch_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and subclavian_R_I_module for
    vars u_ext_subclavian_R_I and u_ext;
    vars u_0_subclavian_R_I and u_0;
    vars theta_subclavian_R_I and theta;
    vars l_subclavian_R_I and l;
    vars r_0_subclavian_R_I and r_0;
    vars m_tube_subclavian_R_I and m_tube;
    vars n_tube_subclavian_R_I and n_tube;
    vars I_scale_subclavian_R_I and I_scale;
  enddef;
  def map between parameters_global and subclavian_R_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and common_carotid_R_module for
    vars u_ext_common_carotid_R and u_ext;
    vars u_0_common_carotid_R and u_0;
    vars theta_common_carotid_R and theta;
    vars l_common_carotid_R and l;
    vars r_0_common_carotid_R and r_0;
    vars m_tube_common_carotid_R and m_tube;
    vars n_tube_common_carotid_R and n_tube;
    vars I_scale_common_carotid_R and I_scale;
  enddef;
  def map between parameters_global and common_carotid_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and vertebral_R_module for
    vars u_ext_vertebral_R and u_ext;
    vars theta_vertebral_R and theta;
    vars l_vertebral_R and l;
    vars r_0_vertebral_R and r_0;
    vars u_0_vertebral_R and u_0;
    vars m_tube_vertebral_R and m_tube;
    vars n_tube_vertebral_R and n_tube;
    vars I_scale_vertebral_R and I_scale;
  enddef;
  def map between parameters_global and vertebral_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and subclavian_R_II_module for
    vars u_ext_subclavian_R_II and u_ext;
    vars theta_subclavian_R_II and theta;
    vars l_subclavian_R_II and l;
    vars r_0_subclavian_R_II and r_0;
    vars u_0_subclavian_R_II and u_0;
    vars m_tube_subclavian_R_II and m_tube;
    vars n_tube_subclavian_R_II and n_tube;
    vars I_scale_subclavian_R_II and I_scale;
  enddef;
  def map between parameters_global and subclavian_R_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and axillary_R_module for
    vars u_ext_axillary_R and u_ext;
    vars theta_axillary_R and theta;
    vars l_axillary_R and l;
    vars r_0_axillary_R and r_0;
    vars u_0_axillary_R and u_0;
    vars m_tube_axillary_R and m_tube;
    vars n_tube_axillary_R and n_tube;
    vars I_scale_axillary_R and I_scale;
  enddef;
  def map between parameters_global and axillary_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and brachial_R_module for
    vars u_ext_brachial_R and u_ext;
    vars u_0_brachial_R and u_0;
    vars theta_brachial_R and theta;
    vars l_brachial_R and l;
    vars r_0_brachial_R and r_0;
    vars m_tube_brachial_R and m_tube;
    vars n_tube_brachial_R and n_tube;
    vars I_scale_brachial_R and I_scale;
  enddef;
  def map between parameters_global and brachial_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and radial_R_module for
    vars u_ext_radial_R and u_ext;
    vars theta_radial_R and theta;
    vars l_radial_R and l;
    vars r_0_radial_R and r_0;
    vars u_0_radial_R and u_0;
    vars m_tube_radial_R and m_tube;
    vars n_tube_radial_R and n_tube;
    vars I_scale_radial_R and I_scale;
  enddef;
  def map between parameters_global and radial_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and ulnar_R_I_module for
    vars u_ext_ulnar_R_I and u_ext;
    vars theta_ulnar_R_I and theta;
    vars l_ulnar_R_I and l;
    vars r_0_ulnar_R_I and r_0;
    vars u_0_ulnar_R_I and u_0;
    vars m_tube_ulnar_R_I and m_tube;
    vars n_tube_ulnar_R_I and n_tube;
    vars I_scale_ulnar_R_I and I_scale;
  enddef;
  def map between parameters_global and ulnar_R_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and common_interosseous_R_module for
    vars u_ext_common_interosseous_R and u_ext;
    vars theta_common_interosseous_R and theta;
    vars l_common_interosseous_R and l;
    vars r_0_common_interosseous_R and r_0;
    vars u_0_common_interosseous_R and u_0;
    vars m_tube_common_interosseous_R and m_tube;
    vars n_tube_common_interosseous_R and n_tube;
    vars I_scale_common_interosseous_R and I_scale;
  enddef;
  def map between parameters_global and common_interosseous_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and ulnar_R_II_module for
    vars u_ext_ulnar_R_II and u_ext;
    vars u_0_ulnar_R_II and u_0;
    vars theta_ulnar_R_II and theta;
    vars l_ulnar_R_II and l;
    vars r_0_ulnar_R_II and r_0;
    vars m_tube_ulnar_R_II and m_tube;
    vars n_tube_ulnar_R_II and n_tube;
    vars I_scale_ulnar_R_II and I_scale;
  enddef;
  def map between parameters_global and ulnar_R_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and posterior_interosseous_R_module for
    vars u_ext_posterior_interosseous_R and u_ext;
    vars theta_posterior_interosseous_R and theta;
    vars l_posterior_interosseous_R and l;
    vars r_0_posterior_interosseous_R and r_0;
    vars u_0_posterior_interosseous_R and u_0;
    vars m_tube_posterior_interosseous_R and m_tube;
    vars n_tube_posterior_interosseous_R and n_tube;
    vars I_scale_posterior_interosseous_R and I_scale;
  enddef;
  def map between parameters_global and posterior_interosseous_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and external_carotid_R_module for
    vars u_ext_external_carotid_R and u_ext;
    vars theta_external_carotid_R and theta;
    vars l_external_carotid_R and l;
    vars r_0_external_carotid_R and r_0;
    vars u_0_external_carotid_R and u_0;
    vars m_tube_external_carotid_R and m_tube;
    vars n_tube_external_carotid_R and n_tube;
    vars I_scale_external_carotid_R and I_scale;
  enddef;
  def map between parameters_global and external_carotid_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and internal_carotid_R_module for
    vars u_ext_internal_carotid_R and u_ext;
    vars theta_internal_carotid_R and theta;
    vars l_internal_carotid_R and l;
    vars r_0_internal_carotid_R and r_0;
    vars u_0_internal_carotid_R and u_0;
    vars m_tube_internal_carotid_R and m_tube;
    vars n_tube_internal_carotid_R and n_tube;
    vars I_scale_internal_carotid_R and I_scale;
  enddef;
  def map between parameters_global and internal_carotid_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and common_carotid_L_module for
    vars u_ext_common_carotid_L and u_ext;
    vars u_0_common_carotid_L and u_0;
    vars theta_common_carotid_L and theta;
    vars l_common_carotid_L and l;
    vars r_0_common_carotid_L and r_0;
    vars m_tube_common_carotid_L and m_tube;
    vars n_tube_common_carotid_L and n_tube;
    vars I_scale_common_carotid_L and I_scale;
  enddef;
  def map between parameters_global and common_carotid_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and aortic_arch_III_module for
    vars u_ext_aortic_arch_III and u_ext;
    vars u_0_aortic_arch_III and u_0;
    vars theta_aortic_arch_III and theta;
    vars l_aortic_arch_III and l;
    vars r_0_aortic_arch_III and r_0;
    vars m_tube_aortic_arch_III and m_tube;
    vars n_tube_aortic_arch_III and n_tube;
    vars I_scale_aortic_arch_III and I_scale;
  enddef;
  def map between parameters_global and aortic_arch_III_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and external_carotid_L_module for
    vars u_ext_external_carotid_L and u_ext;
    vars theta_external_carotid_L and theta;
    vars l_external_carotid_L and l;
    vars r_0_external_carotid_L and r_0;
    vars u_0_external_carotid_L and u_0;
    vars m_tube_external_carotid_L and m_tube;
    vars n_tube_external_carotid_L and n_tube;
    vars I_scale_external_carotid_L and I_scale;
  enddef;
  def map between parameters_global and external_carotid_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and internal_carotid_L_module for
    vars u_ext_internal_carotid_L and u_ext;
    vars theta_internal_carotid_L and theta;
    vars l_internal_carotid_L and l;
    vars r_0_internal_carotid_L and r_0;
    vars u_0_internal_carotid_L and u_0;
    vars m_tube_internal_carotid_L and m_tube;
    vars n_tube_internal_carotid_L and n_tube;
    vars I_scale_internal_carotid_L and I_scale;
  enddef;
  def map between parameters_global and internal_carotid_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and subclavian_L_I_module for
    vars u_ext_subclavian_L_I and u_ext;
    vars u_0_subclavian_L_I and u_0;
    vars theta_subclavian_L_I and theta;
    vars l_subclavian_L_I and l;
    vars r_0_subclavian_L_I and r_0;
    vars m_tube_subclavian_L_I and m_tube;
    vars n_tube_subclavian_L_I and n_tube;
    vars I_scale_subclavian_L_I and I_scale;
  enddef;
  def map between parameters_global and subclavian_L_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and aortic_arch_IV_module for
    vars u_ext_aortic_arch_IV and u_ext;
    vars theta_aortic_arch_IV and theta;
    vars l_aortic_arch_IV and l;
    vars r_0_aortic_arch_IV and r_0;
    vars u_0_aortic_arch_IV and u_0;
    vars m_tube_aortic_arch_IV and m_tube;
    vars n_tube_aortic_arch_IV and n_tube;
    vars I_scale_aortic_arch_IV and I_scale;
  enddef;
  def map between parameters_global and aortic_arch_IV_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and vertebral_L_module for
    vars u_ext_vertebral_L and u_ext;
    vars theta_vertebral_L and theta;
    vars l_vertebral_L and l;
    vars r_0_vertebral_L and r_0;
    vars u_0_vertebral_L and u_0;
    vars m_tube_vertebral_L and m_tube;
    vars n_tube_vertebral_L and n_tube;
    vars I_scale_vertebral_L and I_scale;
  enddef;
  def map between parameters_global and vertebral_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and subclavian_L_II_module for
    vars u_ext_subclavian_L_II and u_ext;
    vars theta_subclavian_L_II and theta;
    vars l_subclavian_L_II and l;
    vars r_0_subclavian_L_II and r_0;
    vars u_0_subclavian_L_II and u_0;
    vars m_tube_subclavian_L_II and m_tube;
    vars n_tube_subclavian_L_II and n_tube;
    vars I_scale_subclavian_L_II and I_scale;
  enddef;
  def map between parameters_global and subclavian_L_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and axillary_L_module for
    vars u_ext_axillary_L and u_ext;
    vars theta_axillary_L and theta;
    vars l_axillary_L and l;
    vars r_0_axillary_L and r_0;
    vars u_0_axillary_L and u_0;
    vars m_tube_axillary_L and m_tube;
    vars n_tube_axillary_L and n_tube;
    vars I_scale_axillary_L and I_scale;
  enddef;
  def map between parameters_global and axillary_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and brachial_L_module for
    vars u_ext_brachial_L and u_ext;
    vars u_0_brachial_L and u_0;
    vars theta_brachial_L and theta;
    vars l_brachial_L and l;
    vars r_0_brachial_L and r_0;
    vars m_tube_brachial_L and m_tube;
    vars n_tube_brachial_L and n_tube;
    vars I_scale_brachial_L and I_scale;
  enddef;
  def map between parameters_global and brachial_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and radial_L_module for
    vars u_ext_radial_L and u_ext;
    vars theta_radial_L and theta;
    vars l_radial_L and l;
    vars r_0_radial_L and r_0;
    vars u_0_radial_L and u_0;
    vars m_tube_radial_L and m_tube;
    vars n_tube_radial_L and n_tube;
    vars I_scale_radial_L and I_scale;
  enddef;
  def map between parameters_global and radial_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and ulnar_L_I_module for
    vars u_ext_ulnar_L_I and u_ext;
    vars u_0_ulnar_L_I and u_0;
    vars theta_ulnar_L_I and theta;
    vars l_ulnar_L_I and l;
    vars r_0_ulnar_L_I and r_0;
    vars m_tube_ulnar_L_I and m_tube;
    vars n_tube_ulnar_L_I and n_tube;
    vars I_scale_ulnar_L_I and I_scale;
  enddef;
  def map between parameters_global and ulnar_L_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and common_interosseous_L_module for
    vars u_ext_common_interosseous_L and u_ext;
    vars theta_common_interosseous_L and theta;
    vars l_common_interosseous_L and l;
    vars r_0_common_interosseous_L and r_0;
    vars u_0_common_interosseous_L and u_0;
    vars m_tube_common_interosseous_L and m_tube;
    vars n_tube_common_interosseous_L and n_tube;
    vars I_scale_common_interosseous_L and I_scale;
  enddef;
  def map between parameters_global and common_interosseous_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and ulnar_L_II_module for
    vars u_ext_ulnar_L_II and u_ext;
    vars theta_ulnar_L_II and theta;
    vars l_ulnar_L_II and l;
    vars r_0_ulnar_L_II and r_0;
    vars u_0_ulnar_L_II and u_0;
    vars m_tube_ulnar_L_II and m_tube;
    vars n_tube_ulnar_L_II and n_tube;
    vars I_scale_ulnar_L_II and I_scale;
  enddef;
  def map between parameters_global and ulnar_L_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and posterior_interosseous_L_module for
    vars u_ext_posterior_interosseous_L and u_ext;
    vars theta_posterior_interosseous_L and theta;
    vars l_posterior_interosseous_L and l;
    vars r_0_posterior_interosseous_L and r_0;
    vars u_0_posterior_interosseous_L and u_0;
    vars m_tube_posterior_interosseous_L and m_tube;
    vars n_tube_posterior_interosseous_L and n_tube;
    vars I_scale_posterior_interosseous_L and I_scale;
  enddef;
  def map between parameters_global and posterior_interosseous_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and thoracic_aorta_I_module for
    vars u_ext_thoracic_aorta_I and u_ext;
    vars u_0_thoracic_aorta_I and u_0;
    vars theta_thoracic_aorta_I and theta;
    vars l_thoracic_aorta_I and l;
    vars r_0_thoracic_aorta_I and r_0;
    vars m_tube_thoracic_aorta_I and m_tube;
    vars n_tube_thoracic_aorta_I and n_tube;
    vars I_scale_thoracic_aorta_I and I_scale;
  enddef;
  def map between parameters_global and thoracic_aorta_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and posterior_intercostal_T6_R_module for
    vars u_ext_posterior_intercostal_T6_R and u_ext;
    vars theta_posterior_intercostal_T6_R and theta;
    vars l_posterior_intercostal_T6_R and l;
    vars r_0_posterior_intercostal_T6_R and r_0;
    vars u_0_posterior_intercostal_T6_R and u_0;
    vars m_tube_posterior_intercostal_T6_R and m_tube;
    vars n_tube_posterior_intercostal_T6_R and n_tube;
    vars I_scale_posterior_intercostal_T6_R and I_scale;
  enddef;
  def map between parameters_global and posterior_intercostal_T6_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and thoracic_aorta_II_module for
    vars u_ext_thoracic_aorta_II and u_ext;
    vars u_0_thoracic_aorta_II and u_0;
    vars theta_thoracic_aorta_II and theta;
    vars l_thoracic_aorta_II and l;
    vars r_0_thoracic_aorta_II and r_0;
    vars m_tube_thoracic_aorta_II and m_tube;
    vars n_tube_thoracic_aorta_II and n_tube;
    vars I_scale_thoracic_aorta_II and I_scale;
  enddef;
  def map between parameters_global and thoracic_aorta_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and posterior_intercostal_T6_L_module for
    vars u_ext_posterior_intercostal_T6_L and u_ext;
    vars theta_posterior_intercostal_T6_L and theta;
    vars l_posterior_intercostal_T6_L and l;
    vars r_0_posterior_intercostal_T6_L and r_0;
    vars u_0_posterior_intercostal_T6_L and u_0;
    vars m_tube_posterior_intercostal_T6_L and m_tube;
    vars n_tube_posterior_intercostal_T6_L and n_tube;
    vars I_scale_posterior_intercostal_T6_L and I_scale;
  enddef;
  def map between parameters_global and posterior_intercostal_T6_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and thoracic_aorta_III_module for
    vars u_ext_thoracic_aorta_III and u_ext;
    vars u_0_thoracic_aorta_III and u_0;
    vars theta_thoracic_aorta_III and theta;
    vars l_thoracic_aorta_III and l;
    vars r_0_thoracic_aorta_III and r_0;
    vars m_tube_thoracic_aorta_III and m_tube;
    vars n_tube_thoracic_aorta_III and n_tube;
    vars I_scale_thoracic_aorta_III and I_scale;
  enddef;
  def map between parameters_global and thoracic_aorta_III_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and posterior_intercostal_T7_R_module for
    vars u_ext_posterior_intercostal_T7_R and u_ext;
    vars theta_posterior_intercostal_T7_R and theta;
    vars l_posterior_intercostal_T7_R and l;
    vars r_0_posterior_intercostal_T7_R and r_0;
    vars u_0_posterior_intercostal_T7_R and u_0;
    vars m_tube_posterior_intercostal_T7_R and m_tube;
    vars n_tube_posterior_intercostal_T7_R and n_tube;
    vars I_scale_posterior_intercostal_T7_R and I_scale;
  enddef;
  def map between parameters_global and posterior_intercostal_T7_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and thoracic_aorta_IV_module for
    vars u_ext_thoracic_aorta_IV and u_ext;
    vars u_0_thoracic_aorta_IV and u_0;
    vars theta_thoracic_aorta_IV and theta;
    vars l_thoracic_aorta_IV and l;
    vars r_0_thoracic_aorta_IV and r_0;
    vars m_tube_thoracic_aorta_IV and m_tube;
    vars n_tube_thoracic_aorta_IV and n_tube;
    vars I_scale_thoracic_aorta_IV and I_scale;
  enddef;
  def map between parameters_global and thoracic_aorta_IV_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and posterior_intercostal_T7_L_module for
    vars u_ext_posterior_intercostal_T7_L and u_ext;
    vars theta_posterior_intercostal_T7_L and theta;
    vars l_posterior_intercostal_T7_L and l;
    vars r_0_posterior_intercostal_T7_L and r_0;
    vars u_0_posterior_intercostal_T7_L and u_0;
    vars m_tube_posterior_intercostal_T7_L and m_tube;
    vars n_tube_posterior_intercostal_T7_L and n_tube;
    vars I_scale_posterior_intercostal_T7_L and I_scale;
  enddef;
  def map between parameters_global and posterior_intercostal_T7_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and thoracic_aorta_V_module for
    vars u_ext_thoracic_aorta_V and u_ext;
    vars theta_thoracic_aorta_V and theta;
    vars l_thoracic_aorta_V and l;
    vars r_0_thoracic_aorta_V and r_0;
    vars u_0_thoracic_aorta_V and u_0;
    vars m_tube_thoracic_aorta_V and m_tube;
    vars n_tube_thoracic_aorta_V and n_tube;
    vars I_scale_thoracic_aorta_V and I_scale;
  enddef;
  def map between parameters_global and thoracic_aorta_V_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and thoracic_aorta_VI_module for
    vars u_ext_thoracic_aorta_VI and u_ext;
    vars u_0_thoracic_aorta_VI and u_0;
    vars theta_thoracic_aorta_VI and theta;
    vars l_thoracic_aorta_VI and l;
    vars r_0_thoracic_aorta_VI and r_0;
    vars m_tube_thoracic_aorta_VI and m_tube;
    vars n_tube_thoracic_aorta_VI and n_tube;
    vars I_scale_thoracic_aorta_VI and I_scale;
  enddef;
  def map between parameters_global and thoracic_aorta_VI_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and celiac_trunk_module for
    vars u_ext_celiac_trunk and u_ext;
    vars u_0_celiac_trunk and u_0;
    vars theta_celiac_trunk and theta;
    vars l_celiac_trunk and l;
    vars r_0_celiac_trunk and r_0;
    vars m_tube_celiac_trunk and m_tube;
    vars n_tube_celiac_trunk and n_tube;
    vars I_scale_celiac_trunk and I_scale;
  enddef;
  def map between parameters_global and celiac_trunk_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and abdominal_aorta_I_module for
    vars u_ext_abdominal_aorta_I and u_ext;
    vars u_0_abdominal_aorta_I and u_0;
    vars theta_abdominal_aorta_I and theta;
    vars l_abdominal_aorta_I and l;
    vars r_0_abdominal_aorta_I and r_0;
    vars m_tube_abdominal_aorta_I and m_tube;
    vars n_tube_abdominal_aorta_I and n_tube;
    vars I_scale_abdominal_aorta_I and I_scale;
  enddef;
  def map between parameters_global and abdominal_aorta_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and common_hepatic_module for
    vars u_ext_common_hepatic and u_ext;
    vars theta_common_hepatic and theta;
    vars l_common_hepatic and l;
    vars r_0_common_hepatic and r_0;
    vars u_0_common_hepatic and u_0;
    vars m_tube_common_hepatic and m_tube;
    vars n_tube_common_hepatic and n_tube;
    vars I_scale_common_hepatic and I_scale;
  enddef;
  def map between parameters_global and common_hepatic_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and splenic_I_module for
    vars u_ext_splenic_I and u_ext;
    vars u_0_splenic_I and u_0;
    vars theta_splenic_I and theta;
    vars l_splenic_I and l;
    vars r_0_splenic_I and r_0;
    vars m_tube_splenic_I and m_tube;
    vars n_tube_splenic_I and n_tube;
    vars I_scale_splenic_I and I_scale;
  enddef;
  def map between parameters_global and splenic_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and left_gastric_module for
    vars u_ext_left_gastric and u_ext;
    vars theta_left_gastric and theta;
    vars l_left_gastric and l;
    vars r_0_left_gastric and r_0;
    vars u_0_left_gastric and u_0;
    vars m_tube_left_gastric and m_tube;
    vars n_tube_left_gastric and n_tube;
    vars I_scale_left_gastric and I_scale;
  enddef;
  def map between parameters_global and left_gastric_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and splenic_II_module for
    vars u_ext_splenic_II and u_ext;
    vars theta_splenic_II and theta;
    vars l_splenic_II and l;
    vars r_0_splenic_II and r_0;
    vars u_0_splenic_II and u_0;
    vars m_tube_splenic_II and m_tube;
    vars n_tube_splenic_II and n_tube;
    vars I_scale_splenic_II and I_scale;
  enddef;
  def map between parameters_global and splenic_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and superior_mesenteric_module for
    vars u_ext_superior_mesenteric and u_ext;
    vars theta_superior_mesenteric and theta;
    vars l_superior_mesenteric and l;
    vars r_0_superior_mesenteric and r_0;
    vars u_0_superior_mesenteric and u_0;
    vars m_tube_superior_mesenteric and m_tube;
    vars n_tube_superior_mesenteric and n_tube;
    vars I_scale_superior_mesenteric and I_scale;
  enddef;
  def map between parameters_global and superior_mesenteric_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and abdominal_aorta_II_module for
    vars u_ext_abdominal_aorta_II and u_ext;
    vars theta_abdominal_aorta_II and theta;
    vars l_abdominal_aorta_II and l;
    vars r_0_abdominal_aorta_II and r_0;
    vars u_0_abdominal_aorta_II and u_0;
    vars m_tube_abdominal_aorta_II and m_tube;
    vars n_tube_abdominal_aorta_II and n_tube;
    vars I_scale_abdominal_aorta_II and I_scale;
  enddef;
  def map between parameters_global and abdominal_aorta_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and renal_L_module for
    vars u_ext_renal_L and u_ext;
    vars u_0_renal_L and u_0;
    vars theta_renal_L and theta;
    vars l_renal_L and l;
    vars r_0_renal_L and r_0;
    vars m_tube_renal_L and m_tube;
    vars n_tube_renal_L and n_tube;
    vars I_scale_renal_L and I_scale;
  enddef;
  def map between parameters_global and renal_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and abdominal_aorta_III_module for
    vars u_ext_abdominal_aorta_III and u_ext;
    vars u_0_abdominal_aorta_III and u_0;
    vars theta_abdominal_aorta_III and theta;
    vars l_abdominal_aorta_III and l;
    vars r_0_abdominal_aorta_III and r_0;
    vars m_tube_abdominal_aorta_III and m_tube;
    vars n_tube_abdominal_aorta_III and n_tube;
    vars I_scale_abdominal_aorta_III and I_scale;
  enddef;
  def map between parameters_global and abdominal_aorta_III_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and renal_R_module for
    vars u_ext_renal_R and u_ext;
    vars theta_renal_R and theta;
    vars l_renal_R and l;
    vars r_0_renal_R and r_0;
    vars u_0_renal_R and u_0;
    vars m_tube_renal_R and m_tube;
    vars n_tube_renal_R and n_tube;
    vars I_scale_renal_R and I_scale;
  enddef;
  def map between parameters_global and renal_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and abdominal_aorta_IV_module for
    vars u_ext_abdominal_aorta_IV and u_ext;
    vars u_0_abdominal_aorta_IV and u_0;
    vars theta_abdominal_aorta_IV and theta;
    vars l_abdominal_aorta_IV and l;
    vars r_0_abdominal_aorta_IV and r_0;
    vars m_tube_abdominal_aorta_IV and m_tube;
    vars n_tube_abdominal_aorta_IV and n_tube;
    vars I_scale_abdominal_aorta_IV and I_scale;
  enddef;
  def map between parameters_global and abdominal_aorta_IV_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and inferior_mesenteric_module for
    vars u_ext_inferior_mesenteric and u_ext;
    vars theta_inferior_mesenteric and theta;
    vars l_inferior_mesenteric and l;
    vars r_0_inferior_mesenteric and r_0;
    vars u_0_inferior_mesenteric and u_0;
    vars m_tube_inferior_mesenteric and m_tube;
    vars n_tube_inferior_mesenteric and n_tube;
    vars I_scale_inferior_mesenteric and I_scale;
  enddef;
  def map between parameters_global and inferior_mesenteric_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and abdominal_aorta_V_module for
    vars u_ext_abdominal_aorta_V and u_ext;
    vars theta_abdominal_aorta_V and theta;
    vars l_abdominal_aorta_V and l;
    vars r_0_abdominal_aorta_V and r_0;
    vars u_0_abdominal_aorta_V and u_0;
    vars m_tube_abdominal_aorta_V and m_tube;
    vars n_tube_abdominal_aorta_V and n_tube;
    vars I_scale_abdominal_aorta_V and I_scale;
  enddef;
  def map between parameters_global and abdominal_aorta_V_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and common_iliac_R_module for
    vars u_ext_common_iliac_R and u_ext;
    vars u_0_common_iliac_R and u_0;
    vars theta_common_iliac_R and theta;
    vars l_common_iliac_R and l;
    vars r_0_common_iliac_R and r_0;
    vars m_tube_common_iliac_R and m_tube;
    vars n_tube_common_iliac_R and n_tube;
    vars I_scale_common_iliac_R and I_scale;
  enddef;
  def map between parameters_global and common_iliac_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and common_iliac_L_module for
    vars u_ext_common_iliac_L and u_ext;
    vars u_0_common_iliac_L and u_0;
    vars theta_common_iliac_L and theta;
    vars l_common_iliac_L and l;
    vars r_0_common_iliac_L and r_0;
    vars m_tube_common_iliac_L and m_tube;
    vars n_tube_common_iliac_L and n_tube;
    vars I_scale_common_iliac_L and I_scale;
  enddef;
  def map between parameters_global and common_iliac_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and external_iliac_R_module for
    vars u_ext_external_iliac_R and u_ext;
    vars theta_external_iliac_R and theta;
    vars l_external_iliac_R and l;
    vars r_0_external_iliac_R and r_0;
    vars u_0_external_iliac_R and u_0;
    vars m_tube_external_iliac_R and m_tube;
    vars n_tube_external_iliac_R and n_tube;
    vars I_scale_external_iliac_R and I_scale;
  enddef;
  def map between parameters_global and external_iliac_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and internal_iliac_R_module for
    vars u_ext_internal_iliac_R and u_ext;
    vars theta_internal_iliac_R and theta;
    vars l_internal_iliac_R and l;
    vars r_0_internal_iliac_R and r_0;
    vars u_0_internal_iliac_R and u_0;
    vars m_tube_internal_iliac_R and m_tube;
    vars n_tube_internal_iliac_R and n_tube;
    vars I_scale_internal_iliac_R and I_scale;
  enddef;
  def map between parameters_global and internal_iliac_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and femoral_R_I_module for
    vars u_ext_femoral_R_I and u_ext;
    vars u_0_femoral_R_I and u_0;
    vars theta_femoral_R_I and theta;
    vars l_femoral_R_I and l;
    vars r_0_femoral_R_I and r_0;
    vars m_tube_femoral_R_I and m_tube;
    vars n_tube_femoral_R_I and n_tube;
    vars I_scale_femoral_R_I and I_scale;
  enddef;
  def map between parameters_global and femoral_R_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and profunda_femoris_R_module for
    vars u_ext_profunda_femoris_R and u_ext;
    vars theta_profunda_femoris_R and theta;
    vars l_profunda_femoris_R and l;
    vars r_0_profunda_femoris_R and r_0;
    vars u_0_profunda_femoris_R and u_0;
    vars m_tube_profunda_femoris_R and m_tube;
    vars n_tube_profunda_femoris_R and n_tube;
    vars I_scale_profunda_femoris_R and I_scale;
  enddef;
  def map between parameters_global and profunda_femoris_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and femoral_R_II_module for
    vars u_ext_femoral_R_II and u_ext;
    vars theta_femoral_R_II and theta;
    vars l_femoral_R_II and l;
    vars r_0_femoral_R_II and r_0;
    vars u_0_femoral_R_II and u_0;
    vars m_tube_femoral_R_II and m_tube;
    vars n_tube_femoral_R_II and n_tube;
    vars I_scale_femoral_R_II and I_scale;
  enddef;
  def map between parameters_global and femoral_R_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and popliteal_R_I_module for
    vars u_ext_popliteal_R_I and u_ext;
    vars u_0_popliteal_R_I and u_0;
    vars theta_popliteal_R_I and theta;
    vars l_popliteal_R_I and l;
    vars r_0_popliteal_R_I and r_0;
    vars m_tube_popliteal_R_I and m_tube;
    vars n_tube_popliteal_R_I and n_tube;
    vars I_scale_popliteal_R_I and I_scale;
  enddef;
  def map between parameters_global and popliteal_R_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and anterior_tibial_R_module for
    vars u_ext_anterior_tibial_R and u_ext;
    vars theta_anterior_tibial_R and theta;
    vars l_anterior_tibial_R and l;
    vars r_0_anterior_tibial_R and r_0;
    vars u_0_anterior_tibial_R and u_0;
    vars m_tube_anterior_tibial_R and m_tube;
    vars n_tube_anterior_tibial_R and n_tube;
    vars I_scale_anterior_tibial_R and I_scale;
  enddef;
  def map between parameters_global and anterior_tibial_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and popliteal_R_II_module for
    vars u_ext_popliteal_R_II and u_ext;
    vars theta_popliteal_R_II and theta;
    vars l_popliteal_R_II and l;
    vars r_0_popliteal_R_II and r_0;
    vars u_0_popliteal_R_II and u_0;
    vars m_tube_popliteal_R_II and m_tube;
    vars n_tube_popliteal_R_II and n_tube;
    vars I_scale_popliteal_R_II and I_scale;
  enddef;
  def map between parameters_global and popliteal_R_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and tibiofibular_trunk_R_module for
    vars u_ext_tibiofibular_trunk_R and u_ext;
    vars theta_tibiofibular_trunk_R and theta;
    vars l_tibiofibular_trunk_R and l;
    vars r_0_tibiofibular_trunk_R and r_0;
    vars u_0_tibiofibular_trunk_R and u_0;
    vars m_tube_tibiofibular_trunk_R and m_tube;
    vars n_tube_tibiofibular_trunk_R and n_tube;
    vars I_scale_tibiofibular_trunk_R and I_scale;
  enddef;
  def map between parameters_global and tibiofibular_trunk_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and posterior_tibial_R_module for
    vars u_ext_posterior_tibial_R and u_ext;
    vars theta_posterior_tibial_R and theta;
    vars l_posterior_tibial_R and l;
    vars r_0_posterior_tibial_R and r_0;
    vars u_0_posterior_tibial_R and u_0;
    vars m_tube_posterior_tibial_R and m_tube;
    vars n_tube_posterior_tibial_R and n_tube;
    vars I_scale_posterior_tibial_R and I_scale;
  enddef;
  def map between parameters_global and posterior_tibial_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and external_iliac_L_module for
    vars u_ext_external_iliac_L and u_ext;
    vars theta_external_iliac_L and theta;
    vars l_external_iliac_L and l;
    vars r_0_external_iliac_L and r_0;
    vars u_0_external_iliac_L and u_0;
    vars m_tube_external_iliac_L and m_tube;
    vars n_tube_external_iliac_L and n_tube;
    vars I_scale_external_iliac_L and I_scale;
  enddef;
  def map between parameters_global and external_iliac_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and internal_iliac_L_module for
    vars u_ext_internal_iliac_L and u_ext;
    vars theta_internal_iliac_L and theta;
    vars l_internal_iliac_L and l;
    vars r_0_internal_iliac_L and r_0;
    vars u_0_internal_iliac_L and u_0;
    vars m_tube_internal_iliac_L and m_tube;
    vars n_tube_internal_iliac_L and n_tube;
    vars I_scale_internal_iliac_L and I_scale;
  enddef;
  def map between parameters_global and internal_iliac_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and femoral_L_I_module for
    vars u_ext_femoral_L_I and u_ext;
    vars u_0_femoral_L_I and u_0;
    vars theta_femoral_L_I and theta;
    vars l_femoral_L_I and l;
    vars r_0_femoral_L_I and r_0;
    vars m_tube_femoral_L_I and m_tube;
    vars n_tube_femoral_L_I and n_tube;
    vars I_scale_femoral_L_I and I_scale;
  enddef;
  def map between parameters_global and femoral_L_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and profunda_femoris_L_module for
    vars u_ext_profunda_femoris_L and u_ext;
    vars theta_profunda_femoris_L and theta;
    vars l_profunda_femoris_L and l;
    vars r_0_profunda_femoris_L and r_0;
    vars u_0_profunda_femoris_L and u_0;
    vars m_tube_profunda_femoris_L and m_tube;
    vars n_tube_profunda_femoris_L and n_tube;
    vars I_scale_profunda_femoris_L and I_scale;
  enddef;
  def map between parameters_global and profunda_femoris_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and femoral_L_II_module for
    vars u_ext_femoral_L_II and u_ext;
    vars theta_femoral_L_II and theta;
    vars l_femoral_L_II and l;
    vars r_0_femoral_L_II and r_0;
    vars u_0_femoral_L_II and u_0;
    vars m_tube_femoral_L_II and m_tube;
    vars n_tube_femoral_L_II and n_tube;
    vars I_scale_femoral_L_II and I_scale;
  enddef;
  def map between parameters_global and femoral_L_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and popliteal_L_I_module for
    vars u_ext_popliteal_L_I and u_ext;
    vars u_0_popliteal_L_I and u_0;
    vars theta_popliteal_L_I and theta;
    vars l_popliteal_L_I and l;
    vars r_0_popliteal_L_I and r_0;
    vars m_tube_popliteal_L_I and m_tube;
    vars n_tube_popliteal_L_I and n_tube;
    vars I_scale_popliteal_L_I and I_scale;
  enddef;
  def map between parameters_global and popliteal_L_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and anterior_tibial_L_module for
    vars u_ext_anterior_tibial_L and u_ext;
    vars theta_anterior_tibial_L and theta;
    vars l_anterior_tibial_L and l;
    vars r_0_anterior_tibial_L and r_0;
    vars u_0_anterior_tibial_L and u_0;
    vars m_tube_anterior_tibial_L and m_tube;
    vars n_tube_anterior_tibial_L and n_tube;
    vars I_scale_anterior_tibial_L and I_scale;
  enddef;
  def map between parameters_global and anterior_tibial_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and popliteal_L_II_module for
    vars u_ext_popliteal_L_II and u_ext;
    vars theta_popliteal_L_II and theta;
    vars l_popliteal_L_II and l;
    vars r_0_popliteal_L_II and r_0;
    vars u_0_popliteal_L_II and u_0;
    vars m_tube_popliteal_L_II and m_tube;
    vars n_tube_popliteal_L_II and n_tube;
    vars I_scale_popliteal_L_II and I_scale;
  enddef;
  def map between parameters_global and popliteal_L_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and tibiofibular_trunk_L_module for
    vars u_ext_tibiofibular_trunk_L and u_ext;
    vars theta_tibiofibular_trunk_L and theta;
    vars l_tibiofibular_trunk_L and l;
    vars r_0_tibiofibular_trunk_L and r_0;
    vars u_0_tibiofibular_trunk_L and u_0;
    vars m_tube_tibiofibular_trunk_L and m_tube;
    vars n_tube_tibiofibular_trunk_L and n_tube;
    vars I_scale_tibiofibular_trunk_L and I_scale;
  enddef;
  def map between parameters_global and tibiofibular_trunk_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and posterior_tibial_L_module for
    vars u_ext_posterior_tibial_L and u_ext;
    vars theta_posterior_tibial_L and theta;
    vars l_posterior_tibial_L and l;
    vars r_0_posterior_tibial_L and r_0;
    vars u_0_posterior_tibial_L and u_0;
    vars m_tube_posterior_tibial_L and m_tube;
    vars n_tube_posterior_tibial_L and n_tube;
    vars I_scale_posterior_tibial_L and I_scale;
  enddef;
  def map between parameters_global and posterior_tibial_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters and external_carotid_R_T_module for
    vars R_T_external_carotid_R_T and R_T;
    vars C_T_external_carotid_R_T and C_T;
    vars u_ext_external_carotid_R_T and u_ext;
    vars u_out_external_carotid_R_T and u_out;
    vars q_us_external_carotid_R_T and q_us;
    vars q_init_external_carotid_R_T and q_init;
  enddef;
  def map between parameters and internal_carotid_R_T_module for
    vars R_T_internal_carotid_R_T and R_T;
    vars C_T_internal_carotid_R_T and C_T;
    vars u_ext_internal_carotid_R_T and u_ext;
    vars u_out_internal_carotid_R_T and u_out;
    vars q_us_internal_carotid_R_T and q_us;
    vars q_init_internal_carotid_R_T and q_init;
  enddef;
  def map between parameters and vertebral_R_T_module for
    vars R_T_vertebral_R_T and R_T;
    vars C_T_vertebral_R_T and C_T;
    vars u_ext_vertebral_R_T and u_ext;
    vars u_out_vertebral_R_T and u_out;
    vars q_us_vertebral_R_T and q_us;
    vars q_init_vertebral_R_T and q_init;
  enddef;
  def map between parameters and radial_R_T_module for
    vars R_T_radial_R_T and R_T;
    vars C_T_radial_R_T and C_T;
    vars u_ext_radial_R_T and u_ext;
    vars u_out_radial_R_T and u_out;
    vars q_us_radial_R_T and q_us;
    vars q_init_radial_R_T and q_init;
  enddef;
  def map between parameters and posterior_interosseous_R_T_module for
    vars R_T_posterior_interosseous_R_T and R_T;
    vars C_T_posterior_interosseous_R_T and C_T;
    vars u_ext_posterior_interosseous_R_T and u_ext;
    vars u_out_posterior_interosseous_R_T and u_out;
    vars q_us_posterior_interosseous_R_T and q_us;
    vars q_init_posterior_interosseous_R_T and q_init;
  enddef;
  def map between parameters and ulnar_R_II_T_module for
    vars R_T_ulnar_R_II_T and R_T;
    vars C_T_ulnar_R_II_T and C_T;
    vars u_ext_ulnar_R_II_T and u_ext;
    vars u_out_ulnar_R_II_T and u_out;
    vars q_us_ulnar_R_II_T and q_us;
    vars q_init_ulnar_R_II_T and q_init;
  enddef;
  def map between parameters and external_carotid_L_T_module for
    vars R_T_external_carotid_L_T and R_T;
    vars C_T_external_carotid_L_T and C_T;
    vars u_ext_external_carotid_L_T and u_ext;
    vars u_out_external_carotid_L_T and u_out;
    vars q_us_external_carotid_L_T and q_us;
    vars q_init_external_carotid_L_T and q_init;
  enddef;
  def map between parameters and internal_carotid_L_T_module for
    vars R_T_internal_carotid_L_T and R_T;
    vars C_T_internal_carotid_L_T and C_T;
    vars u_ext_internal_carotid_L_T and u_ext;
    vars u_out_internal_carotid_L_T and u_out;
    vars q_us_internal_carotid_L_T and q_us;
    vars q_init_internal_carotid_L_T and q_init;
  enddef;
  def map between parameters and vertebral_L_T_module for
    vars R_T_vertebral_L_T and R_T;
    vars C_T_vertebral_L_T and C_T;
    vars u_ext_vertebral_L_T and u_ext;
    vars u_out_vertebral_L_T and u_out;
    vars q_us_vertebral_L_T and q_us;
    vars q_init_vertebral_L_T and q_init;
  enddef;
  def map between parameters and radial_L_T_module for
    vars R_T_radial_L_T and R_T;
    vars C_T_radial_L_T and C_T;
    vars u_ext_radial_L_T and u_ext;
    vars u_out_radial_L_T and u_out;
    vars q_us_radial_L_T and q_us;
    vars q_init_radial_L_T and q_init;
  enddef;
  def map between parameters and posterior_interosseous_L_T_module for
    vars R_T_posterior_interosseous_L_T and R_T;
    vars C_T_posterior_interosseous_L_T and C_T;
    vars u_ext_posterior_interosseous_L_T and u_ext;
    vars u_out_posterior_interosseous_L_T and u_out;
    vars q_us_posterior_interosseous_L_T and q_us;
    vars q_init_posterior_interosseous_L_T and q_init;
  enddef;
  def map between parameters and ulnar_L_II_T_module for
    vars R_T_ulnar_L_II_T and R_T;
    vars C_T_ulnar_L_II_T and C_T;
    vars u_ext_ulnar_L_II_T and u_ext;
    vars u_out_ulnar_L_II_T and u_out;
    vars q_us_ulnar_L_II_T and q_us;
    vars q_init_ulnar_L_II_T and q_init;
  enddef;
  def map between parameters and posterior_intercostal_T6_R_T_module for
    vars R_T_posterior_intercostal_T6_R_T and R_T;
    vars C_T_posterior_intercostal_T6_R_T and C_T;
    vars u_ext_posterior_intercostal_T6_R_T and u_ext;
    vars u_out_posterior_intercostal_T6_R_T and u_out;
    vars q_us_posterior_intercostal_T6_R_T and q_us;
    vars q_init_posterior_intercostal_T6_R_T and q_init;
  enddef;
  def map between parameters and posterior_intercostal_T6_L_T_module for
    vars R_T_posterior_intercostal_T6_L_T and R_T;
    vars C_T_posterior_intercostal_T6_L_T and C_T;
    vars u_ext_posterior_intercostal_T6_L_T and u_ext;
    vars u_out_posterior_intercostal_T6_L_T and u_out;
    vars q_us_posterior_intercostal_T6_L_T and q_us;
    vars q_init_posterior_intercostal_T6_L_T and q_init;
  enddef;
  def map between parameters and posterior_intercostal_T7_R_T_module for
    vars R_T_posterior_intercostal_T7_R_T and R_T;
    vars C_T_posterior_intercostal_T7_R_T and C_T;
    vars u_ext_posterior_intercostal_T7_R_T and u_ext;
    vars u_out_posterior_intercostal_T7_R_T and u_out;
    vars q_us_posterior_intercostal_T7_R_T and q_us;
    vars q_init_posterior_intercostal_T7_R_T and q_init;
  enddef;
  def map between parameters and posterior_intercostal_T7_L_T_module for
    vars R_T_posterior_intercostal_T7_L_T and R_T;
    vars C_T_posterior_intercostal_T7_L_T and C_T;
    vars u_ext_posterior_intercostal_T7_L_T and u_ext;
    vars u_out_posterior_intercostal_T7_L_T and u_out;
    vars q_us_posterior_intercostal_T7_L_T and q_us;
    vars q_init_posterior_intercostal_T7_L_T and q_init;
  enddef;
  def map between parameters and common_hepatic_T_module for
    vars R_T_common_hepatic_T and R_T;
    vars C_T_common_hepatic_T and C_T;
    vars u_ext_common_hepatic_T and u_ext;
    vars u_out_common_hepatic_T and u_out;
    vars q_us_common_hepatic_T and q_us;
    vars q_init_common_hepatic_T and q_init;
  enddef;
  def map between parameters and left_gastric_T_module for
    vars R_T_left_gastric_T and R_T;
    vars C_T_left_gastric_T and C_T;
    vars u_ext_left_gastric_T and u_ext;
    vars u_out_left_gastric_T and u_out;
    vars q_us_left_gastric_T and q_us;
    vars q_init_left_gastric_T and q_init;
  enddef;
  def map between parameters and splenic_II_T_module for
    vars R_T_splenic_II_T and R_T;
    vars C_T_splenic_II_T and C_T;
    vars u_ext_splenic_II_T and u_ext;
    vars u_out_splenic_II_T and u_out;
    vars q_us_splenic_II_T and q_us;
    vars q_init_splenic_II_T and q_init;
  enddef;
  def map between parameters and superior_mesenteric_T_module for
    vars R_T_superior_mesenteric_T and R_T;
    vars C_T_superior_mesenteric_T and C_T;
    vars u_ext_superior_mesenteric_T and u_ext;
    vars u_out_superior_mesenteric_T and u_out;
    vars q_us_superior_mesenteric_T and q_us;
    vars q_init_superior_mesenteric_T and q_init;
  enddef;
  def map between parameters and renal_L_T_module for
    vars R_T_renal_L_T and R_T;
    vars C_T_renal_L_T and C_T;
    vars u_ext_renal_L_T and u_ext;
    vars u_out_renal_L_T and u_out;
    vars q_us_renal_L_T and q_us;
    vars q_init_renal_L_T and q_init;
  enddef;
  def map between parameters and renal_R_T_module for
    vars R_T_renal_R_T and R_T;
    vars C_T_renal_R_T and C_T;
    vars u_ext_renal_R_T and u_ext;
    vars u_out_renal_R_T and u_out;
    vars q_us_renal_R_T and q_us;
    vars q_init_renal_R_T and q_init;
  enddef;
  def map between parameters and inferior_mesenteric_T_module for
    vars R_T_inferior_mesenteric_T and R_T;
    vars C_T_inferior_mesenteric_T and C_T;
    vars u_ext_inferior_mesenteric_T and u_ext;
    vars u_out_inferior_mesenteric_T and u_out;
    vars q_us_inferior_mesenteric_T and q_us;
    vars q_init_inferior_mesenteric_T and q_init;
  enddef;
  def map between parameters and internal_iliac_R_T_module for
    vars R_T_internal_iliac_R_T and R_T;
    vars C_T_internal_iliac_R_T and C_T;
    vars u_ext_internal_iliac_R_T and u_ext;
    vars u_out_internal_iliac_R_T and u_out;
    vars q_us_internal_iliac_R_T and q_us;
    vars q_init_internal_iliac_R_T and q_init;
  enddef;
  def map between parameters and profunda_femoris_R_T_module for
    vars R_T_profunda_femoris_R_T and R_T;
    vars C_T_profunda_femoris_R_T and C_T;
    vars u_ext_profunda_femoris_R_T and u_ext;
    vars u_out_profunda_femoris_R_T and u_out;
    vars q_us_profunda_femoris_R_T and q_us;
    vars q_init_profunda_femoris_R_T and q_init;
  enddef;
  def map between parameters and anterior_tibial_R_T_module for
    vars R_T_anterior_tibial_R_T and R_T;
    vars C_T_anterior_tibial_R_T and C_T;
    vars u_ext_anterior_tibial_R_T and u_ext;
    vars u_out_anterior_tibial_R_T and u_out;
    vars q_us_anterior_tibial_R_T and q_us;
    vars q_init_anterior_tibial_R_T and q_init;
  enddef;
  def map between parameters and posterior_tibial_R_T_module for
    vars R_T_posterior_tibial_R_T and R_T;
    vars C_T_posterior_tibial_R_T and C_T;
    vars u_ext_posterior_tibial_R_T and u_ext;
    vars u_out_posterior_tibial_R_T and u_out;
    vars q_us_posterior_tibial_R_T and q_us;
    vars q_init_posterior_tibial_R_T and q_init;
  enddef;
  def map between parameters and internal_iliac_L_T_module for
    vars R_T_internal_iliac_L_T and R_T;
    vars C_T_internal_iliac_L_T and C_T;
    vars u_ext_internal_iliac_L_T and u_ext;
    vars u_out_internal_iliac_L_T and u_out;
    vars q_us_internal_iliac_L_T and q_us;
    vars q_init_internal_iliac_L_T and q_init;
  enddef;
  def map between parameters and profunda_femoris_L_T_module for
    vars R_T_profunda_femoris_L_T and R_T;
    vars C_T_profunda_femoris_L_T and C_T;
    vars u_ext_profunda_femoris_L_T and u_ext;
    vars u_out_profunda_femoris_L_T and u_out;
    vars q_us_profunda_femoris_L_T and q_us;
    vars q_init_profunda_femoris_L_T and q_init;
  enddef;
  def map between parameters and anterior_tibial_L_T_module for
    vars R_T_anterior_tibial_L_T and R_T;
    vars C_T_anterior_tibial_L_T and C_T;
    vars u_ext_anterior_tibial_L_T and u_ext;
    vars u_out_anterior_tibial_L_T and u_out;
    vars q_us_anterior_tibial_L_T and q_us;
    vars q_init_anterior_tibial_L_T and q_init;
  enddef;
  def map between parameters and posterior_tibial_L_T_module for
    vars R_T_posterior_tibial_L_T and R_T;
    vars C_T_posterior_tibial_L_T and C_T;
    vars u_ext_posterior_tibial_L_T and u_ext;
    vars u_out_posterior_tibial_L_T and u_out;
    vars q_us_posterior_tibial_L_T and q_us;
    vars q_init_posterior_tibial_L_T and q_init;
  enddef;
  def map between parameters and K_tube_aortic_arch_I_module for
    vars E_K_tube_aortic_arch_I and E;
    vars K_m_K_tube_aortic_arch_I and K_m;
  enddef;
  def map between parameters_global and K_tube_aortic_arch_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_brachiocephalic_trunk_module for
    vars E_K_tube_brachiocephalic_trunk and E;
    vars K_m_K_tube_brachiocephalic_trunk and K_m;
  enddef;
  def map between parameters_global and K_tube_brachiocephalic_trunk_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_aortic_arch_II_module for
    vars E_K_tube_aortic_arch_II and E;
    vars K_m_K_tube_aortic_arch_II and K_m;
  enddef;
  def map between parameters_global and K_tube_aortic_arch_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_subclavian_R_I_module for
    vars E_K_tube_subclavian_R_I and E;
    vars K_m_K_tube_subclavian_R_I and K_m;
  enddef;
  def map between parameters_global and K_tube_subclavian_R_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_common_carotid_R_module for
    vars E_K_tube_common_carotid_R and E;
    vars K_m_K_tube_common_carotid_R and K_m;
  enddef;
  def map between parameters_global and K_tube_common_carotid_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_vertebral_R_module for
    vars E_K_tube_vertebral_R and E;
    vars K_m_K_tube_vertebral_R and K_m;
  enddef;
  def map between parameters_global and K_tube_vertebral_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_subclavian_R_II_module for
    vars E_K_tube_subclavian_R_II and E;
    vars K_m_K_tube_subclavian_R_II and K_m;
  enddef;
  def map between parameters_global and K_tube_subclavian_R_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_axillary_R_module for
    vars E_K_tube_axillary_R and E;
    vars K_m_K_tube_axillary_R and K_m;
  enddef;
  def map between parameters_global and K_tube_axillary_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_brachial_R_module for
    vars E_K_tube_brachial_R and E;
    vars K_m_K_tube_brachial_R and K_m;
  enddef;
  def map between parameters_global and K_tube_brachial_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_radial_R_module for
    vars E_K_tube_radial_R and E;
    vars K_m_K_tube_radial_R and K_m;
  enddef;
  def map between parameters_global and K_tube_radial_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_ulnar_R_I_module for
    vars E_K_tube_ulnar_R_I and E;
    vars K_m_K_tube_ulnar_R_I and K_m;
  enddef;
  def map between parameters_global and K_tube_ulnar_R_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_common_interosseous_R_module for
    vars E_K_tube_common_interosseous_R and E;
    vars K_m_K_tube_common_interosseous_R and K_m;
  enddef;
  def map between parameters_global and K_tube_common_interosseous_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_ulnar_R_II_module for
    vars E_K_tube_ulnar_R_II and E;
    vars K_m_K_tube_ulnar_R_II and K_m;
  enddef;
  def map between parameters_global and K_tube_ulnar_R_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_posterior_interosseous_R_module for
    vars E_K_tube_posterior_interosseous_R and E;
    vars K_m_K_tube_posterior_interosseous_R and K_m;
  enddef;
  def map between parameters_global and K_tube_posterior_interosseous_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_external_carotid_R_module for
    vars E_K_tube_external_carotid_R and E;
    vars K_m_K_tube_external_carotid_R and K_m;
  enddef;
  def map between parameters_global and K_tube_external_carotid_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_internal_carotid_R_module for
    vars E_K_tube_internal_carotid_R and E;
    vars K_m_K_tube_internal_carotid_R and K_m;
  enddef;
  def map between parameters_global and K_tube_internal_carotid_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_common_carotid_L_module for
    vars E_K_tube_common_carotid_L and E;
    vars K_m_K_tube_common_carotid_L and K_m;
  enddef;
  def map between parameters_global and K_tube_common_carotid_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_aortic_arch_III_module for
    vars E_K_tube_aortic_arch_III and E;
    vars K_m_K_tube_aortic_arch_III and K_m;
  enddef;
  def map between parameters_global and K_tube_aortic_arch_III_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_external_carotid_L_module for
    vars E_K_tube_external_carotid_L and E;
    vars K_m_K_tube_external_carotid_L and K_m;
  enddef;
  def map between parameters_global and K_tube_external_carotid_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_internal_carotid_L_module for
    vars E_K_tube_internal_carotid_L and E;
    vars K_m_K_tube_internal_carotid_L and K_m;
  enddef;
  def map between parameters_global and K_tube_internal_carotid_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_subclavian_L_I_module for
    vars E_K_tube_subclavian_L_I and E;
    vars K_m_K_tube_subclavian_L_I and K_m;
  enddef;
  def map between parameters_global and K_tube_subclavian_L_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_aortic_arch_IV_module for
    vars E_K_tube_aortic_arch_IV and E;
    vars K_m_K_tube_aortic_arch_IV and K_m;
  enddef;
  def map between parameters_global and K_tube_aortic_arch_IV_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_vertebral_L_module for
    vars E_K_tube_vertebral_L and E;
    vars K_m_K_tube_vertebral_L and K_m;
  enddef;
  def map between parameters_global and K_tube_vertebral_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_subclavian_L_II_module for
    vars E_K_tube_subclavian_L_II and E;
    vars K_m_K_tube_subclavian_L_II and K_m;
  enddef;
  def map between parameters_global and K_tube_subclavian_L_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_axillary_L_module for
    vars E_K_tube_axillary_L and E;
    vars K_m_K_tube_axillary_L and K_m;
  enddef;
  def map between parameters_global and K_tube_axillary_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_brachial_L_module for
    vars E_K_tube_brachial_L and E;
    vars K_m_K_tube_brachial_L and K_m;
  enddef;
  def map between parameters_global and K_tube_brachial_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_radial_L_module for
    vars E_K_tube_radial_L and E;
    vars K_m_K_tube_radial_L and K_m;
  enddef;
  def map between parameters_global and K_tube_radial_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_ulnar_L_I_module for
    vars E_K_tube_ulnar_L_I and E;
    vars K_m_K_tube_ulnar_L_I and K_m;
  enddef;
  def map between parameters_global and K_tube_ulnar_L_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_common_interosseous_L_module for
    vars E_K_tube_common_interosseous_L and E;
    vars K_m_K_tube_common_interosseous_L and K_m;
  enddef;
  def map between parameters_global and K_tube_common_interosseous_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_ulnar_L_II_module for
    vars E_K_tube_ulnar_L_II and E;
    vars K_m_K_tube_ulnar_L_II and K_m;
  enddef;
  def map between parameters_global and K_tube_ulnar_L_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_posterior_interosseous_L_module for
    vars E_K_tube_posterior_interosseous_L and E;
    vars K_m_K_tube_posterior_interosseous_L and K_m;
  enddef;
  def map between parameters_global and K_tube_posterior_interosseous_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_I_module for
    vars E_K_tube_thoracic_aorta_I and E;
    vars K_m_K_tube_thoracic_aorta_I and K_m;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_posterior_intercostal_T6_R_module for
    vars E_K_tube_posterior_intercostal_T6_R and E;
    vars K_m_K_tube_posterior_intercostal_T6_R and K_m;
  enddef;
  def map between parameters_global and K_tube_posterior_intercostal_T6_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_II_module for
    vars E_K_tube_thoracic_aorta_II and E;
    vars K_m_K_tube_thoracic_aorta_II and K_m;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_posterior_intercostal_T6_L_module for
    vars E_K_tube_posterior_intercostal_T6_L and E;
    vars K_m_K_tube_posterior_intercostal_T6_L and K_m;
  enddef;
  def map between parameters_global and K_tube_posterior_intercostal_T6_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_III_module for
    vars E_K_tube_thoracic_aorta_III and E;
    vars K_m_K_tube_thoracic_aorta_III and K_m;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_III_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_posterior_intercostal_T7_R_module for
    vars E_K_tube_posterior_intercostal_T7_R and E;
    vars K_m_K_tube_posterior_intercostal_T7_R and K_m;
  enddef;
  def map between parameters_global and K_tube_posterior_intercostal_T7_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_IV_module for
    vars E_K_tube_thoracic_aorta_IV and E;
    vars K_m_K_tube_thoracic_aorta_IV and K_m;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_IV_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_posterior_intercostal_T7_L_module for
    vars E_K_tube_posterior_intercostal_T7_L and E;
    vars K_m_K_tube_posterior_intercostal_T7_L and K_m;
  enddef;
  def map between parameters_global and K_tube_posterior_intercostal_T7_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_V_module for
    vars E_K_tube_thoracic_aorta_V and E;
    vars K_m_K_tube_thoracic_aorta_V and K_m;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_V_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_VI_module for
    vars E_K_tube_thoracic_aorta_VI and E;
    vars K_m_K_tube_thoracic_aorta_VI and K_m;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_VI_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_celiac_trunk_module for
    vars E_K_tube_celiac_trunk and E;
    vars K_m_K_tube_celiac_trunk and K_m;
  enddef;
  def map between parameters_global and K_tube_celiac_trunk_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_I_module for
    vars E_K_tube_abdominal_aorta_I and E;
    vars K_m_K_tube_abdominal_aorta_I and K_m;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_common_hepatic_module for
    vars E_K_tube_common_hepatic and E;
    vars K_m_K_tube_common_hepatic and K_m;
  enddef;
  def map between parameters_global and K_tube_common_hepatic_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_splenic_I_module for
    vars E_K_tube_splenic_I and E;
    vars K_m_K_tube_splenic_I and K_m;
  enddef;
  def map between parameters_global and K_tube_splenic_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_left_gastric_module for
    vars E_K_tube_left_gastric and E;
    vars K_m_K_tube_left_gastric and K_m;
  enddef;
  def map between parameters_global and K_tube_left_gastric_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_splenic_II_module for
    vars E_K_tube_splenic_II and E;
    vars K_m_K_tube_splenic_II and K_m;
  enddef;
  def map between parameters_global and K_tube_splenic_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_superior_mesenteric_module for
    vars E_K_tube_superior_mesenteric and E;
    vars K_m_K_tube_superior_mesenteric and K_m;
  enddef;
  def map between parameters_global and K_tube_superior_mesenteric_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_II_module for
    vars E_K_tube_abdominal_aorta_II and E;
    vars K_m_K_tube_abdominal_aorta_II and K_m;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_renal_L_module for
    vars E_K_tube_renal_L and E;
    vars K_m_K_tube_renal_L and K_m;
  enddef;
  def map between parameters_global and K_tube_renal_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_III_module for
    vars E_K_tube_abdominal_aorta_III and E;
    vars K_m_K_tube_abdominal_aorta_III and K_m;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_III_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_renal_R_module for
    vars E_K_tube_renal_R and E;
    vars K_m_K_tube_renal_R and K_m;
  enddef;
  def map between parameters_global and K_tube_renal_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_IV_module for
    vars E_K_tube_abdominal_aorta_IV and E;
    vars K_m_K_tube_abdominal_aorta_IV and K_m;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_IV_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_inferior_mesenteric_module for
    vars E_K_tube_inferior_mesenteric and E;
    vars K_m_K_tube_inferior_mesenteric and K_m;
  enddef;
  def map between parameters_global and K_tube_inferior_mesenteric_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_V_module for
    vars E_K_tube_abdominal_aorta_V and E;
    vars K_m_K_tube_abdominal_aorta_V and K_m;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_V_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_common_iliac_R_module for
    vars E_K_tube_common_iliac_R and E;
    vars K_m_K_tube_common_iliac_R and K_m;
  enddef;
  def map between parameters_global and K_tube_common_iliac_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_common_iliac_L_module for
    vars E_K_tube_common_iliac_L and E;
    vars K_m_K_tube_common_iliac_L and K_m;
  enddef;
  def map between parameters_global and K_tube_common_iliac_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_external_iliac_R_module for
    vars E_K_tube_external_iliac_R and E;
    vars K_m_K_tube_external_iliac_R and K_m;
  enddef;
  def map between parameters_global and K_tube_external_iliac_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_internal_iliac_R_module for
    vars E_K_tube_internal_iliac_R and E;
    vars K_m_K_tube_internal_iliac_R and K_m;
  enddef;
  def map between parameters_global and K_tube_internal_iliac_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_femoral_R_I_module for
    vars E_K_tube_femoral_R_I and E;
    vars K_m_K_tube_femoral_R_I and K_m;
  enddef;
  def map between parameters_global and K_tube_femoral_R_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_profunda_femoris_R_module for
    vars E_K_tube_profunda_femoris_R and E;
    vars K_m_K_tube_profunda_femoris_R and K_m;
  enddef;
  def map between parameters_global and K_tube_profunda_femoris_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_femoral_R_II_module for
    vars E_K_tube_femoral_R_II and E;
    vars K_m_K_tube_femoral_R_II and K_m;
  enddef;
  def map between parameters_global and K_tube_femoral_R_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_popliteal_R_I_module for
    vars E_K_tube_popliteal_R_I and E;
    vars K_m_K_tube_popliteal_R_I and K_m;
  enddef;
  def map between parameters_global and K_tube_popliteal_R_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_anterior_tibial_R_module for
    vars E_K_tube_anterior_tibial_R and E;
    vars K_m_K_tube_anterior_tibial_R and K_m;
  enddef;
  def map between parameters_global and K_tube_anterior_tibial_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_popliteal_R_II_module for
    vars E_K_tube_popliteal_R_II and E;
    vars K_m_K_tube_popliteal_R_II and K_m;
  enddef;
  def map between parameters_global and K_tube_popliteal_R_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_tibiofibular_trunk_R_module for
    vars E_K_tube_tibiofibular_trunk_R and E;
    vars K_m_K_tube_tibiofibular_trunk_R and K_m;
  enddef;
  def map between parameters_global and K_tube_tibiofibular_trunk_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_posterior_tibial_R_module for
    vars E_K_tube_posterior_tibial_R and E;
    vars K_m_K_tube_posterior_tibial_R and K_m;
  enddef;
  def map between parameters_global and K_tube_posterior_tibial_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_external_iliac_L_module for
    vars E_K_tube_external_iliac_L and E;
    vars K_m_K_tube_external_iliac_L and K_m;
  enddef;
  def map between parameters_global and K_tube_external_iliac_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_internal_iliac_L_module for
    vars E_K_tube_internal_iliac_L and E;
    vars K_m_K_tube_internal_iliac_L and K_m;
  enddef;
  def map between parameters_global and K_tube_internal_iliac_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_femoral_L_I_module for
    vars E_K_tube_femoral_L_I and E;
    vars K_m_K_tube_femoral_L_I and K_m;
  enddef;
  def map between parameters_global and K_tube_femoral_L_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_profunda_femoris_L_module for
    vars E_K_tube_profunda_femoris_L and E;
    vars K_m_K_tube_profunda_femoris_L and K_m;
  enddef;
  def map between parameters_global and K_tube_profunda_femoris_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_femoral_L_II_module for
    vars E_K_tube_femoral_L_II and E;
    vars K_m_K_tube_femoral_L_II and K_m;
  enddef;
  def map between parameters_global and K_tube_femoral_L_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_popliteal_L_I_module for
    vars E_K_tube_popliteal_L_I and E;
    vars K_m_K_tube_popliteal_L_I and K_m;
  enddef;
  def map between parameters_global and K_tube_popliteal_L_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_anterior_tibial_L_module for
    vars E_K_tube_anterior_tibial_L and E;
    vars K_m_K_tube_anterior_tibial_L and K_m;
  enddef;
  def map between parameters_global and K_tube_anterior_tibial_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_popliteal_L_II_module for
    vars E_K_tube_popliteal_L_II and E;
    vars K_m_K_tube_popliteal_L_II and K_m;
  enddef;
  def map between parameters_global and K_tube_popliteal_L_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_tibiofibular_trunk_L_module for
    vars E_K_tube_tibiofibular_trunk_L and E;
    vars K_m_K_tube_tibiofibular_trunk_L and K_m;
  enddef;
  def map between parameters_global and K_tube_tibiofibular_trunk_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and K_tube_posterior_tibial_L_module for
    vars E_K_tube_posterior_tibial_L and E;
    vars K_m_K_tube_posterior_tibial_L and K_m;
  enddef;
  def map between parameters_global and K_tube_posterior_tibial_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  // ------------time mapping------------//
  def map between environment and input_flow_aorticroot_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_I_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_II_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R_I_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R_II_module for
    vars time and t;
  enddef;
  def map between environment and axillary_R_module for
    vars time and t;
  enddef;
  def map between environment and brachial_R_module for
    vars time and t;
  enddef;
  def map between environment and radial_R_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_R_I_module for
    vars time and t;
  enddef;
  def map between environment and common_interosseous_R_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_R_II_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_R_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_III_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L_I_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_IV_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L_II_module for
    vars time and t;
  enddef;
  def map between environment and axillary_L_module for
    vars time and t;
  enddef;
  def map between environment and brachial_L_module for
    vars time and t;
  enddef;
  def map between environment and radial_L_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_L_I_module for
    vars time and t;
  enddef;
  def map between environment and common_interosseous_L_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_L_II_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_L_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_I_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T6_R_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_II_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T6_L_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_III_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T7_R_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_IV_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T7_L_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_V_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_VI_module for
    vars time and t;
  enddef;
  def map between environment and celiac_trunk_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_I_module for
    vars time and t;
  enddef;
  def map between environment and common_hepatic_module for
    vars time and t;
  enddef;
  def map between environment and splenic_I_module for
    vars time and t;
  enddef;
  def map between environment and left_gastric_module for
    vars time and t;
  enddef;
  def map between environment and splenic_II_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_II_module for
    vars time and t;
  enddef;
  def map between environment and renal_L_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_III_module for
    vars time and t;
  enddef;
  def map between environment and renal_R_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_IV_module for
    vars time and t;
  enddef;
  def map between environment and inferior_mesenteric_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_V_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R_I_module for
    vars time and t;
  enddef;
  def map between environment and profunda_femoris_R_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R_II_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_R_I_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_R_II_module for
    vars time and t;
  enddef;
  def map between environment and tibiofibular_trunk_R_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L_I_module for
    vars time and t;
  enddef;
  def map between environment and profunda_femoris_L_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L_II_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_L_I_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_L_II_module for
    vars time and t;
  enddef;
  def map between environment and tibiofibular_trunk_L_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and radial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_R_T_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_R_II_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and radial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_L_T_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_L_II_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T6_R_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T6_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T7_R_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T7_L_T_module for
    vars time and t;
  enddef;
  def map between environment and common_hepatic_T_module for
    vars time and t;
  enddef;
  def map between environment and left_gastric_T_module for
    vars time and t;
  enddef;
  def map between environment and splenic_II_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T_module for
    vars time and t;
  enddef;
  def map between environment and renal_L_T_module for
    vars time and t;
  enddef;
  def map between environment and renal_R_T_module for
    vars time and t;
  enddef;
  def map between environment and inferior_mesenteric_T_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_R_T_module for
    vars time and t;
  enddef;
  def map between environment and profunda_femoris_R_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_L_T_module for
    vars time and t;
  enddef;
  def map between environment and profunda_femoris_L_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_aortic_arch_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_brachiocephalic_trunk_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_aortic_arch_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_subclavian_R_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_vertebral_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_subclavian_R_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_axillary_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_brachial_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_radial_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_ulnar_R_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_interosseous_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_ulnar_R_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_interosseous_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_external_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_internal_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_aortic_arch_III_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_external_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_internal_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_subclavian_L_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_aortic_arch_IV_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_vertebral_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_subclavian_L_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_axillary_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_brachial_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_radial_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_ulnar_L_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_interosseous_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_ulnar_L_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_interosseous_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_intercostal_T6_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_intercostal_T6_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_III_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_intercostal_T7_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_IV_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_intercostal_T7_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_V_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_VI_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_celiac_trunk_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_hepatic_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_splenic_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_left_gastric_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_splenic_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_superior_mesenteric_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_renal_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_III_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_renal_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_IV_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_inferior_mesenteric_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_V_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_external_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_internal_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_femoral_R_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_profunda_femoris_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_femoral_R_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_popliteal_R_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_anterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_popliteal_R_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_tibiofibular_trunk_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_external_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_internal_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_femoral_L_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_profunda_femoris_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_femoral_L_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_popliteal_L_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_anterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_popliteal_L_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_tibiofibular_trunk_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_tibial_L_module for
    vars time and t;
  enddef;
enddef;
