def model modules as
  // ------------module_units------------//
  def import using "generic_junction_test2_open_loop_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_s2 using unit per_s2;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit mmol_per_l using unit mmol_per_l;
    unit l_per_mmol using unit l_per_mmol;
    unit l_per_mmol_per_s using unit l_per_mmol_per_s;
    unit l2_per_mmol_per_s using unit l2_per_mmol_per_s;
    unit mmol_per_s2 using unit mmol_per_s2;
    unit mmol using unit mmol;
    unit mmol_per_l_per_s using unit mmol_per_l_per_s;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
  enddef;

  def comp material_prop_visco_const_type as
    var t: second {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var Gamma: Js_per_m3 {pub: out};
    var SMvolfrac_art: dimensionless {pub: in};
    var nu: dimensionless {pub: in};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    var h: metre {pub: out};
    var K_tube: J_per_m3 {pub: out};
    var K_tube_visco: Js_per_m6 {pub: out};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp adan_flow_interp_BC_type as
    var t: second {pub: in};
    var T: second {pub: in};
    var v: m3_per_s {pub: out};
    var P: J_per_m3 {pub: in};
    var t_loc: second {pub: out};
    t_loc = t-floor(t/T)*T;
    var t_0: second {pub: out};
    var t_1: second {pub: out};
    var t_2: second {pub: out};
    var t_3: second {pub: out};
    var t_4: second {pub: out};
    var t_5: second {pub: out};
    var t_6: second {pub: out};
    var t_7: second {pub: out};
    var t_8: second {pub: out};
    var t_9: second {pub: out};
    var t_10: second {pub: out};
    var t_11: second {pub: out};
    var t_12: second {pub: out};
    var t_13: second {pub: out};
    var t_14: second {pub: out};
    var t_15: second {pub: out};
    var t_16: second {pub: out};
    var t_17: second {pub: out};
    var t_18: second {pub: out};
    var t_19: second {pub: out};
    var t_20: second {pub: out};
    var t_21: second {pub: out};
    var q_0: m3_per_s {pub: out};
    var q_1: m3_per_s {pub: out};
    var q_2: m3_per_s {pub: out};
    var q_3: m3_per_s {pub: out};
    var q_4: m3_per_s {pub: out};
    var q_5: m3_per_s {pub: out};
    var q_6: m3_per_s {pub: out};
    var q_7: m3_per_s {pub: out};
    var q_8: m3_per_s {pub: out};
    var q_9: m3_per_s {pub: out};
    var q_10: m3_per_s {pub: out};
    var q_11: m3_per_s {pub: out};
    var q_12: m3_per_s {pub: out};
    var q_13: m3_per_s {pub: out};
    var q_14: m3_per_s {pub: out};
    var q_15: m3_per_s {pub: out};
    var q_16: m3_per_s {pub: out};
    var q_17: m3_per_s {pub: out};
    var q_18: m3_per_s {pub: out};
    var q_19: m3_per_s {pub: out};
    var q_20: m3_per_s {pub: out};
    var q_21: m3_per_s {pub: out};
    t_0 = 0.0{second};
    t_1 = 0.02193{second};
    t_2 = 0.041305{second};
    t_3 = 0.06068{second};
    t_4 = 0.080055{second};
    t_5 = 0.09943{second};
    t_6 = 0.118805{second};
    t_7 = 0.128492{second};
    t_8 = 0.13818{second};
    t_9 = 0.157555{second};
    t_10 = 0.17693{second};
    t_11 = 0.196305{second};
    t_12 = 0.244742{second};
    t_13 = 0.322242{second};
    t_14 = 0.351305{second};
    t_15 = 0.390055{second};
    t_16 = 0.415117{second};
    t_17 = 0.437555{second};
    t_18 = 0.48693{second};
    t_19 = 0.515992{second};
    t_20 = 0.583805{second};
    t_21 = 1.0{second};
    q_0 = 0.0{m3_per_s};
    q_1 = 0.0{m3_per_s};
    q_2 = 0.000105089{m3_per_s};
    q_3 = 0.00027323{m3_per_s};
    q_4 = 0.000404592{m3_per_s};
    q_5 = 0.000535952{m3_per_s};
    q_6 = 0.000567479{m3_per_s};
    q_7 = 0.000572734{m3_per_s};
    q_8 = 0.000567479{m3_per_s};
    q_9 = 0.000535952{m3_per_s};
    q_10 = 0.000488663{m3_per_s};
    q_11 = 0.000451882{m3_per_s};
    q_12 = 0.000315266{m3_per_s};
    q_13 = 0.000178651{m3_per_s};
    q_14 = 0.000136615{m3_per_s};
    q_15 = 0.0{m3_per_s};
    q_16 = -0.000162888{m3_per_s};
    q_17 = -2.10178e-05{m3_per_s};
    q_18 = 0.0{m3_per_s};
    q_19 = 5.25444e-06{m3_per_s};
    q_20 = 0.0{m3_per_s};
    q_21 = 0.0{m3_per_s};
    v = sel
      case (t_loc >= t_0) and (t_loc <= t_1):
        (1{dimensionless}-(t_loc-t_0)/(t_1-t_0))*q_0+(t_loc-t_0)/(t_1-t_0)*q_1;
      case (t_loc >= t_1) and (t_loc <= t_2):
        (1{dimensionless}-(t_loc-t_1)/(t_2-t_1))*q_1+(t_loc-t_1)/(t_2-t_1)*q_2;
      case (t_loc >= t_2) and (t_loc <= t_3):
        (1{dimensionless}-(t_loc-t_2)/(t_3-t_2))*q_2+(t_loc-t_2)/(t_3-t_2)*q_3;
      case (t_loc >= t_3) and (t_loc <= t_4):
        (1{dimensionless}-(t_loc-t_3)/(t_4-t_3))*q_3+(t_loc-t_3)/(t_4-t_3)*q_4;
      case (t_loc >= t_4) and (t_loc <= t_5):
        (1{dimensionless}-(t_loc-t_4)/(t_5-t_4))*q_4+(t_loc-t_4)/(t_5-t_4)*q_5;
      case (t_loc >= t_5) and (t_loc <= t_6):
        (1{dimensionless}-(t_loc-t_5)/(t_6-t_5))*q_5+(t_loc-t_5)/(t_6-t_5)*q_6;
      case (t_loc >= t_6) and (t_loc <= t_7):
        (1{dimensionless}-(t_loc-t_6)/(t_7-t_6))*q_6+(t_loc-t_6)/(t_7-t_6)*q_7;
      case (t_loc >= t_7) and (t_loc <= t_8):
        (1{dimensionless}-(t_loc-t_7)/(t_8-t_7))*q_7+(t_loc-t_7)/(t_8-t_7)*q_8;
      case (t_loc >= t_8) and (t_loc <= t_9):
        (1{dimensionless}-(t_loc-t_8)/(t_9-t_8))*q_8+(t_loc-t_8)/(t_9-t_8)*q_9;
      case (t_loc >= t_9) and (t_loc <= t_10):
        (1{dimensionless}-(t_loc-t_9)/(t_10-t_9))*q_9+(t_loc-t_9)/(t_10-t_9)*q_10;
      case (t_loc >= t_10) and (t_loc <= t_11):
        (1{dimensionless}-(t_loc-t_10)/(t_11-t_10))*q_10+(t_loc-t_10)/(t_11-t_10)*q_11;
      case (t_loc >= t_11) and (t_loc <= t_12):
        (1{dimensionless}-(t_loc-t_11)/(t_12-t_11))*q_11+(t_loc-t_11)/(t_12-t_11)*q_12;
      case (t_loc >= t_12) and (t_loc <= t_13):
        (1{dimensionless}-(t_loc-t_12)/(t_13-t_12))*q_12+(t_loc-t_12)/(t_13-t_12)*q_13;
      case (t_loc >= t_13) and (t_loc <= t_14):
        (1{dimensionless}-(t_loc-t_13)/(t_14-t_13))*q_13+(t_loc-t_13)/(t_14-t_13)*q_14;
      case (t_loc >= t_14) and (t_loc <= t_15):
        (1{dimensionless}-(t_loc-t_14)/(t_15-t_14))*q_14+(t_loc-t_14)/(t_15-t_14)*q_15;
      case (t_loc >= t_15) and (t_loc <= t_16):
        (1{dimensionless}-(t_loc-t_15)/(t_16-t_15))*q_15+(t_loc-t_15)/(t_16-t_15)*q_16;
      case (t_loc >= t_16) and (t_loc <= t_17):
        (1{dimensionless}-(t_loc-t_16)/(t_17-t_16))*q_16+(t_loc-t_16)/(t_17-t_16)*q_17;
      case (t_loc >= t_17) and (t_loc <= t_18):
        (1{dimensionless}-(t_loc-t_17)/(t_18-t_17))*q_17+(t_loc-t_17)/(t_18-t_17)*q_18;
      case (t_loc >= t_18) and (t_loc <= t_19):
        (1{dimensionless}-(t_loc-t_18)/(t_19-t_18))*q_18+(t_loc-t_18)/(t_19-t_18)*q_19;
      case (t_loc >= t_19) and (t_loc <= t_20):
        (1{dimensionless}-(t_loc-t_19)/(t_20-t_19))*q_19+(t_loc-t_19)/(t_20-t_19)*q_20;
      case (t_loc >= t_20) and (t_loc <= t_21):
        (1{dimensionless}-(t_loc-t_20)/(t_21-t_20))*q_20+(t_loc-t_20)/(t_21-t_20)*q_21;
    endsel;
  enddef;

  def comp pp_T_fixed_I_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp pv_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp pp_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_d)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_MinNout_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_Min_nonlinear_visco_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp pv_Nout_nonlinear_visco_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_Nout_nonlinear_visco_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
  // ----- Capillary types below ---- //

  def comp material_prop_visco_const_type as
    var t: second {pub: in};
    var l: metre {pub: in};
    var r_us: metre {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var Gamma: Js_per_m3 {pub: out};
    Gamma = 0.1{dimensionless}*K_m;
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    var h: metre {pub: out};
    var K_tube: J_per_m3 {pub: out};
    var K_tube_visco: Js_per_m6 {pub: out};
    h = r_us*(a_vessel*exp(b_vessel*r_us)+c_vessel*exp(d_vessel*r_us));
    K_tube = 4{dimensionless}/3{dimensionless}*E*h/r_us;
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_us, 3{dimensionless}));
  enddef;
enddef;
