// #This model was automatically generated with the circulatory_autogen software
// # https://github.com/FinbarArgus/circulatory_autogen
def model CardiovascularSystem as
  def import using "image_to_model_parameters.cellml" for
    comp parameters using comp parameters;
    comp parameters_global using comp parameters_global;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // #STARTGENBELOW
  // ------------units------------//
  def import using "image_to_model_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_s2 using unit per_s2;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit mmol_per_l using unit mmol_per_l;
    unit l_per_mmol using unit l_per_mmol;
    unit l_per_mmol_per_s using unit l_per_mmol_per_s;
    unit l2_per_mmol_per_s using unit l2_per_mmol_per_s;
    unit mmol_per_s2 using unit mmol_per_s2;
    unit mmol using unit mmol;
    unit mmol_per_l_per_s using unit mmol_per_l_per_s;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
  enddef;
  // ------------imports------------//
  def import using "image_to_model_modules.cellml" for
    comp L2_E0_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E1_module using comp vp_Min_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E2_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E3_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E4_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E5_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E6_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E7_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E8_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E9_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E10_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E11_module using comp vp_Min_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E12_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E13_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E14_module using comp vp_Min_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E15_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E16_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E17_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E18_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E19_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E20_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E21_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E22_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E23_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E24_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E25_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E26_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E27_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E28_module using comp vp_Min_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E29_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E30_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E31_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E32_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E33_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E34_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E35_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E36_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E37_module using comp vp_Min_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E38_module using comp vp_Min_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E39_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E40_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E41_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E42_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E43_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E44_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E45_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E46_module using comp vp_Noutlet_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E47_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E48_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E49_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E50_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E51_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E52_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E53_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E54_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E55_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E56_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E57_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E58_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E59_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E60_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E61_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E62_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E63_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E64_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E65_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E66_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E67_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E68_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E69_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E70_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E71_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E72_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E73_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E74_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E75_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E76_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E77_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E78_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E79_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E80_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E81_module using comp pv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E82_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E83_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E84_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E85_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E86_module using comp vv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E87_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E88_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E89_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E90_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E91_module using comp pp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E92_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E93_module using comp vp_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E94_module using comp vv_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E95_module using comp pv_Nout_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E47_PI_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E48_PI_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E79_PI_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E9_PO_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E13_PO_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E16_PO_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E20_PO_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E40_PO_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E45_PO_module using comp constant_pressure_BC_type_dale;
  enddef;
  def import using "image_to_model_modules.cellml" for
    comp L2_E46_PO_module using comp constant_pressure_BC_type_dale;
  enddef;
  // ------------vessel mappings------------//
  def map between L2_E1_module and L2_E2_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E2_module and L2_E49_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E3_module and L2_E51_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E4_module and L2_E0_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E6_module and L2_E60_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E7_module and L2_E62_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E8_module and L2_E65_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E9_module and L2_E9_PO_module for
    vars v_d and v;
    vars u_out and P;
  enddef;
  def map between L2_E10_module and L2_E9_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E11_module and L2_E69_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E12_module and L2_E59_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E13_module and L2_E13_PO_module for
    vars v_d and v;
    vars u_out and P;
  enddef;
  def map between L2_E14_module and L2_E74_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E15_module and L2_E19_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E16_module and L2_E16_PO_module for
    vars v_d and v;
    vars u_out and P;
  enddef;
  def map between L2_E19_module and L2_E77_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E20_module and L2_E20_PO_module for
    vars v_d and v;
    vars u_out and P;
  enddef;
  def map between L2_E21_module and L2_E76_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E22_module and L2_E78_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E23_module and L2_E31_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E24_module and L2_E70_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E25_module and L2_E56_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E26_module and L2_E83_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E27_module and L2_E20_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E28_module and L2_E86_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E29_module and L2_E32_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E30_module and L2_E85_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E31_module and L2_E27_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E32_module and L2_E30_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E33_module and L2_E73_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E34_module and L2_E87_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E35_module and L2_E88_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E36_module and L2_E68_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E37_module and L2_E39_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E38_module and L2_E90_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E39_module and L2_E93_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E40_module and L2_E40_PO_module for
    vars v_d and v;
    vars u_out and P;
  enddef;
  def map between L2_E41_module and L2_E94_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E42_module and L2_E92_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E43_module and L2_E95_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E44_module and L2_E42_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E45_module and L2_E45_PO_module for
    vars v_d and v;
    vars u_out and P;
  enddef;
  def map between L2_E46_module and L2_E46_PO_module for
    vars v and v;
    vars u_out and P;
  enddef;
  def map between L2_E47_module and L2_E82_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E49_module and L2_E50_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E51_module and L2_E52_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E52_module and L2_E53_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E54_module and L2_E3_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E55_module and L2_E54_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E56_module and L2_E55_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E58_module and L2_E57_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E59_module and L2_E58_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E60_module and L2_E61_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E62_module and L2_E63_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E63_module and L2_E64_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E65_module and L2_E66_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E66_module and L2_E29_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E67_module and L2_E10_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E68_module and L2_E67_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E69_module and L2_E35_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E72_module and L2_E71_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E73_module and L2_E72_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E74_module and L2_E75_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E81_module and L2_E80_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between L2_E82_module and L2_E81_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E83_module and L2_E84_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E84_module and L2_E34_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E87_module and L2_E33_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E88_module and L2_E89_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between L2_E90_module and L2_E36_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E92_module and L2_E91_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E94_module and L2_E43_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between L2_E47_PI_module and L2_E47_module for
    vars v and v;
    vars P and u_in;
  enddef;
  def map between L2_E48_PI_module and L2_E48_module for
    vars v and v;
    vars P and u_in;
  enddef;
  def map between L2_E79_PI_module and L2_E79_module for
    vars v and v;
    vars P and u_in;
  enddef;
  // ------------terminal venous connection------------//

  def comp terminal_venous_connection as
  enddef;
  // ------------generic junction connection------------//
  def map between L2_E1_module and L2_E0_module for
    vars u and u_out;
  enddef;
  def map between L2_E1_module and generic_junction_connection for
    vars v_in_sum and v_L2_E1_sum_Min;
  enddef;
  def map between L2_E0_module and generic_junction_connection for
    vars v_d and v_d_L2_E0_Min;
  enddef;
  def map between L2_E1_module and L2_E5_module for
    vars u and u_out;
  enddef;
  def map between L2_E1_module and generic_junction_connection for
    vars v_in_sum and v_L2_E1_sum_Min;
  enddef;
  def map between L2_E5_module and generic_junction_connection for
    vars v_d and v_d_L2_E5_Min;
  enddef;
  def map between L2_E11_module and L2_E17_module for
    vars u and u_out;
  enddef;
  def map between L2_E11_module and generic_junction_connection for
    vars v_in_sum and v_L2_E11_sum_Min;
  enddef;
  def map between L2_E17_module and generic_junction_connection for
    vars v_d and v_d_L2_E17_Min;
  enddef;
  def map between L2_E11_module and L2_E53_module for
    vars u and u_out;
  enddef;
  def map between L2_E11_module and generic_junction_connection for
    vars v_in_sum and v_L2_E11_sum_Min;
  enddef;
  def map between L2_E53_module and generic_junction_connection for
    vars v and v_L2_E53_Min;
  enddef;
  def map between L2_E14_module and L2_E18_module for
    vars u and u_out;
  enddef;
  def map between L2_E14_module and generic_junction_connection for
    vars v_in_sum and v_L2_E14_sum_Min;
  enddef;
  def map between L2_E18_module and generic_junction_connection for
    vars v_d and v_d_L2_E18_Min;
  enddef;
  def map between L2_E14_module and L2_E71_module for
    vars u and u_out;
  enddef;
  def map between L2_E14_module and generic_junction_connection for
    vars v_in_sum and v_L2_E14_sum_Min;
  enddef;
  def map between L2_E71_module and generic_junction_connection for
    vars v_d and v_d_L2_E71_Min;
  enddef;
  def map between L2_E28_module and L2_E64_module for
    vars u and u_out;
  enddef;
  def map between L2_E28_module and generic_junction_connection for
    vars v_in_sum and v_L2_E28_sum_Min;
  enddef;
  def map between L2_E64_module and generic_junction_connection for
    vars v and v_L2_E64_Min;
  enddef;
  def map between L2_E28_module and L2_E85_module for
    vars u and u_out;
  enddef;
  def map between L2_E28_module and generic_junction_connection for
    vars v_in_sum and v_L2_E28_sum_Min;
  enddef;
  def map between L2_E85_module and generic_junction_connection for
    vars v and v_L2_E85_Min;
  enddef;
  def map between L2_E37_module and L2_E75_module for
    vars u and u_out;
  enddef;
  def map between L2_E37_module and generic_junction_connection for
    vars v_in_sum and v_L2_E37_sum_Min;
  enddef;
  def map between L2_E75_module and generic_junction_connection for
    vars v and v_L2_E75_Min;
  enddef;
  def map between L2_E37_module and L2_E79_module for
    vars u and u_out;
  enddef;
  def map between L2_E37_module and generic_junction_connection for
    vars v_in_sum and v_L2_E37_sum_Min;
  enddef;
  def map between L2_E79_module and generic_junction_connection for
    vars v_d and v_d_L2_E79_Min;
  enddef;
  def map between L2_E38_module and L2_E48_module for
    vars u and u_out;
  enddef;
  def map between L2_E38_module and generic_junction_connection for
    vars v_in_sum and v_L2_E38_sum_Min;
  enddef;
  def map between L2_E48_module and generic_junction_connection for
    vars v_d and v_d_L2_E48_Min;
  enddef;
  def map between L2_E38_module and L2_E91_module for
    vars u and u_out;
  enddef;
  def map between L2_E38_module and generic_junction_connection for
    vars v_in_sum and v_L2_E38_sum_Min;
  enddef;
  def map between L2_E91_module and generic_junction_connection for
    vars v_d and v_d_L2_E91_Min;
  enddef;
  def map between L2_E46_module and L2_E89_module for
    vars u and u_out;
  enddef;
  def map between L2_E46_module and generic_junction_connection for
    vars v_in_sum and v_L2_E46_sum_Min;
  enddef;
  def map between L2_E89_module and generic_junction_connection for
    vars v and v_L2_E89_Min;
  enddef;
  def map between L2_E46_module and L2_E93_module for
    vars u and u_out;
  enddef;
  def map between L2_E46_module and generic_junction_connection for
    vars v_in_sum and v_L2_E46_sum_Min;
  enddef;
  def map between L2_E93_module and generic_junction_connection for
    vars v and v_L2_E93_Min;
  enddef;
  def map between L2_E50_module and L2_E6_module for
    vars u and u_in;
  enddef;
  def map between L2_E50_module and generic_junction_connection for
    vars v_out_sum and v_L2_E50_sum_Nout;
  enddef;
  def map between L2_E6_module and generic_junction_connection for
    vars v and v_L2_E6_Nout;
  enddef;
  def map between L2_E50_module and L2_E7_module for
    vars u and u_in;
  enddef;
  def map between L2_E50_module and generic_junction_connection for
    vars v_out_sum and v_L2_E50_sum_Nout;
  enddef;
  def map between L2_E7_module and generic_junction_connection for
    vars v and v_L2_E7_Nout;
  enddef;
  def map between L2_E50_module and L2_E8_module for
    vars u and u_in;
  enddef;
  def map between L2_E50_module and generic_junction_connection for
    vars v_out_sum and v_L2_E50_sum_Nout;
  enddef;
  def map between L2_E8_module and generic_junction_connection for
    vars v and v_L2_E8_Nout;
  enddef;
  def map between L2_E57_module and L2_E4_module for
    vars u and u_in;
  enddef;
  def map between L2_E57_module and generic_junction_connection for
    vars v_out_sum and v_L2_E57_sum_Nout;
  enddef;
  def map between L2_E4_module and generic_junction_connection for
    vars v and v_L2_E4_Nout;
  enddef;
  def map between L2_E57_module and L2_E5_module for
    vars u and u_in;
  enddef;
  def map between L2_E57_module and generic_junction_connection for
    vars v_out_sum and v_L2_E57_sum_Nout;
  enddef;
  def map between L2_E5_module and generic_junction_connection for
    vars v and v_L2_E5_Nout;
  enddef;
  def map between L2_E61_module and L2_E15_module for
    vars u and u_in;
  enddef;
  def map between L2_E61_module and generic_junction_connection for
    vars v_out_sum and v_L2_E61_sum_Nout;
  enddef;
  def map between L2_E15_module and generic_junction_connection for
    vars v and v_L2_E15_Nout;
  enddef;
  def map between L2_E61_module and L2_E16_module for
    vars u and u_in;
  enddef;
  def map between L2_E61_module and generic_junction_connection for
    vars v_out_sum and v_L2_E61_sum_Nout;
  enddef;
  def map between L2_E16_module and generic_junction_connection for
    vars v and v_L2_E16_Nout;
  enddef;
  def map between L2_E70_module and L2_E12_module for
    vars u and u_in;
  enddef;
  def map between L2_E70_module and generic_junction_connection for
    vars v_out_sum and v_L2_E70_sum_Nout;
  enddef;
  def map between L2_E12_module and generic_junction_connection for
    vars v and v_L2_E12_Nout;
  enddef;
  def map between L2_E70_module and L2_E13_module for
    vars u and u_in;
  enddef;
  def map between L2_E70_module and generic_junction_connection for
    vars v_out_sum and v_L2_E70_sum_Nout;
  enddef;
  def map between L2_E13_module and generic_junction_connection for
    vars v and v_L2_E13_Nout;
  enddef;
  def map between L2_E76_module and L2_E17_module for
    vars u and u_in;
  enddef;
  def map between L2_E76_module and generic_junction_connection for
    vars v_out_sum and v_L2_E76_sum_Nout;
  enddef;
  def map between L2_E17_module and generic_junction_connection for
    vars v and v_L2_E17_Nout;
  enddef;
  def map between L2_E76_module and L2_E18_module for
    vars u and u_in;
  enddef;
  def map between L2_E76_module and generic_junction_connection for
    vars v_out_sum and v_L2_E76_sum_Nout;
  enddef;
  def map between L2_E18_module and generic_junction_connection for
    vars v and v_L2_E18_Nout;
  enddef;
  def map between L2_E77_module and L2_E21_module for
    vars u and u_in;
  enddef;
  def map between L2_E77_module and generic_junction_connection for
    vars v_out_sum and v_L2_E77_sum_Nout;
  enddef;
  def map between L2_E21_module and generic_junction_connection for
    vars v and v_L2_E21_Nout;
  enddef;
  def map between L2_E77_module and L2_E22_module for
    vars u and u_in;
  enddef;
  def map between L2_E77_module and generic_junction_connection for
    vars v_out_sum and v_L2_E77_sum_Nout;
  enddef;
  def map between L2_E22_module and generic_junction_connection for
    vars v and v_L2_E22_Nout;
  enddef;
  def map between L2_E78_module and L2_E25_module for
    vars u and u_in;
  enddef;
  def map between L2_E78_module and generic_junction_connection for
    vars v_out_sum and v_L2_E78_sum_Nout;
  enddef;
  def map between L2_E25_module and generic_junction_connection for
    vars v and v_L2_E25_Nout;
  enddef;
  def map between L2_E78_module and L2_E26_module for
    vars u and u_in;
  enddef;
  def map between L2_E78_module and generic_junction_connection for
    vars v_out_sum and v_L2_E78_sum_Nout;
  enddef;
  def map between L2_E26_module and generic_junction_connection for
    vars v and v_L2_E26_Nout;
  enddef;
  def map between L2_E80_module and L2_E23_module for
    vars u and u_in;
  enddef;
  def map between L2_E80_module and generic_junction_connection for
    vars v_out_sum and v_L2_E80_sum_Nout;
  enddef;
  def map between L2_E23_module and generic_junction_connection for
    vars v and v_L2_E23_Nout;
  enddef;
  def map between L2_E80_module and L2_E24_module for
    vars u and u_in;
  enddef;
  def map between L2_E80_module and generic_junction_connection for
    vars v_out_sum and v_L2_E80_sum_Nout;
  enddef;
  def map between L2_E24_module and generic_junction_connection for
    vars v and v_L2_E24_Nout;
  enddef;
  def map between L2_E86_module and L2_E40_module for
    vars u_d and u_in;
  enddef;
  def map between L2_E86_module and generic_junction_connection for
    vars v_out_sum and v_L2_E86_sum_Nout;
  enddef;
  def map between L2_E40_module and generic_junction_connection for
    vars v and v_L2_E40_Nout;
  enddef;
  def map between L2_E86_module and L2_E41_module for
    vars u_d and u_in;
  enddef;
  def map between L2_E86_module and generic_junction_connection for
    vars v_out_sum and v_L2_E86_sum_Nout;
  enddef;
  def map between L2_E41_module and generic_junction_connection for
    vars v and v_L2_E41_Nout;
  enddef;
  def map between L2_E95_module and L2_E44_module for
    vars u and u_in;
  enddef;
  def map between L2_E95_module and generic_junction_connection for
    vars v_out_sum and v_L2_E95_sum_Nout;
  enddef;
  def map between L2_E44_module and generic_junction_connection for
    vars v and v_L2_E44_Nout;
  enddef;
  def map between L2_E95_module and L2_E45_module for
    vars u and u_in;
  enddef;
  def map between L2_E95_module and generic_junction_connection for
    vars v_out_sum and v_L2_E95_sum_Nout;
  enddef;
  def map between L2_E45_module and generic_junction_connection for
    vars v and v_L2_E45_Nout;
  enddef;

  def comp generic_junction_connection as
    var v_d_L2_E0_Min: m3_per_s {pub: in};
    var v_d_L2_E5_Min: m3_per_s {pub: in};
    var v_L2_E1_sum_Min: m3_per_s {pub: out};
    var v_d_L2_E17_Min: m3_per_s {pub: in};
    var v_L2_E53_Min: m3_per_s {pub: in};
    var v_L2_E11_sum_Min: m3_per_s {pub: out};
    var v_d_L2_E18_Min: m3_per_s {pub: in};
    var v_d_L2_E71_Min: m3_per_s {pub: in};
    var v_L2_E14_sum_Min: m3_per_s {pub: out};
    var v_L2_E64_Min: m3_per_s {pub: in};
    var v_L2_E85_Min: m3_per_s {pub: in};
    var v_L2_E28_sum_Min: m3_per_s {pub: out};
    var v_L2_E75_Min: m3_per_s {pub: in};
    var v_d_L2_E79_Min: m3_per_s {pub: in};
    var v_L2_E37_sum_Min: m3_per_s {pub: out};
    var v_d_L2_E48_Min: m3_per_s {pub: in};
    var v_d_L2_E91_Min: m3_per_s {pub: in};
    var v_L2_E38_sum_Min: m3_per_s {pub: out};
    var v_L2_E89_Min: m3_per_s {pub: in};
    var v_L2_E93_Min: m3_per_s {pub: in};
    var v_L2_E46_sum_Min: m3_per_s {pub: out};
    var v_L2_E6_Nout: m3_per_s {pub: in};
    var v_L2_E7_Nout: m3_per_s {pub: in};
    var v_L2_E8_Nout: m3_per_s {pub: in};
    var v_L2_E50_sum_Nout: m3_per_s {pub: out};
    var v_L2_E4_Nout: m3_per_s {pub: in};
    var v_L2_E5_Nout: m3_per_s {pub: in};
    var v_L2_E57_sum_Nout: m3_per_s {pub: out};
    var v_L2_E15_Nout: m3_per_s {pub: in};
    var v_L2_E16_Nout: m3_per_s {pub: in};
    var v_L2_E61_sum_Nout: m3_per_s {pub: out};
    var v_L2_E12_Nout: m3_per_s {pub: in};
    var v_L2_E13_Nout: m3_per_s {pub: in};
    var v_L2_E70_sum_Nout: m3_per_s {pub: out};
    var v_L2_E17_Nout: m3_per_s {pub: in};
    var v_L2_E18_Nout: m3_per_s {pub: in};
    var v_L2_E76_sum_Nout: m3_per_s {pub: out};
    var v_L2_E21_Nout: m3_per_s {pub: in};
    var v_L2_E22_Nout: m3_per_s {pub: in};
    var v_L2_E77_sum_Nout: m3_per_s {pub: out};
    var v_L2_E25_Nout: m3_per_s {pub: in};
    var v_L2_E26_Nout: m3_per_s {pub: in};
    var v_L2_E78_sum_Nout: m3_per_s {pub: out};
    var v_L2_E23_Nout: m3_per_s {pub: in};
    var v_L2_E24_Nout: m3_per_s {pub: in};
    var v_L2_E80_sum_Nout: m3_per_s {pub: out};
    var v_L2_E40_Nout: m3_per_s {pub: in};
    var v_L2_E41_Nout: m3_per_s {pub: in};
    var v_L2_E86_sum_Nout: m3_per_s {pub: out};
    var v_L2_E44_Nout: m3_per_s {pub: in};
    var v_L2_E45_Nout: m3_per_s {pub: in};
    var v_L2_E95_sum_Nout: m3_per_s {pub: out};
    v_L2_E1_sum_Min = v_d_L2_E0_Min+v_d_L2_E5_Min;
    v_L2_E11_sum_Min = v_d_L2_E17_Min+v_L2_E53_Min;
    v_L2_E14_sum_Min = v_d_L2_E18_Min+v_d_L2_E71_Min;
    v_L2_E28_sum_Min = v_L2_E64_Min+v_L2_E85_Min;
    v_L2_E37_sum_Min = v_L2_E75_Min+v_d_L2_E79_Min;
    v_L2_E38_sum_Min = v_d_L2_E48_Min+v_d_L2_E91_Min;
    v_L2_E46_sum_Min = v_L2_E89_Min+v_L2_E93_Min;
    v_L2_E50_sum_Nout = v_L2_E6_Nout+v_L2_E7_Nout+v_L2_E8_Nout;
    v_L2_E57_sum_Nout = v_L2_E4_Nout+v_L2_E5_Nout;
    v_L2_E61_sum_Nout = v_L2_E15_Nout+v_L2_E16_Nout;
    v_L2_E70_sum_Nout = v_L2_E12_Nout+v_L2_E13_Nout;
    v_L2_E76_sum_Nout = v_L2_E17_Nout+v_L2_E18_Nout;
    v_L2_E77_sum_Nout = v_L2_E21_Nout+v_L2_E22_Nout;
    v_L2_E78_sum_Nout = v_L2_E25_Nout+v_L2_E26_Nout;
    v_L2_E80_sum_Nout = v_L2_E23_Nout+v_L2_E24_Nout;
    v_L2_E86_sum_Nout = v_L2_E40_Nout+v_L2_E41_Nout;
    v_L2_E95_sum_Nout = v_L2_E44_Nout+v_L2_E45_Nout;
  enddef;
  // ------------applying multiport operations for ports------------//

  def comp sum_blood_volume as
  enddef;
  // ------------access_variables------------//

  def comp L2_E0 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E1 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E3 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E5 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E6 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E7 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E8 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E9 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E10 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E11 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E12 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E13 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E14 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E15 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E16 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E17 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E18 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E19 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E20 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E21 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E22 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E23 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E24 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E25 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E26 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E27 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E29 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E30 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E31 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E32 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E33 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E34 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E35 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E36 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E37 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E38 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E39 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E40 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E41 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E42 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E43 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E44 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E45 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_0: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E47 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E48 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E49 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E50 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E51 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E52 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E53 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E54 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E55 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E56 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E57 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E58 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E59 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E60 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E61 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E62 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E63 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E64 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E65 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E66 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E67 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E68 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E69 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E70 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E71 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E72 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E73 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E74 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E75 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E76 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E77 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E79 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E80 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E81 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E82 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E83 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E84 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E85 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E86 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E87 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E88 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E89 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E90 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E91 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E92 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E93 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp L2_E94 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp L2_E95 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
  enddef;

  def comp L2_E47_PI as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E48_PI as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E79_PI as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E9_PO as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E13_PO as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E16_PO as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E20_PO as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E40_PO as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E45_PO as
    var P: J_per_m3 {pub: in};
  enddef;

  def comp L2_E46_PO as
    var P: J_per_m3 {pub: in};
  enddef;
  // ------------global_parameters_access------------//

  def comp global as
    var beta_g: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var mu: Js_per_m3 {pub: in};
    var g: m_per_s2 {pub: in};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
  enddef;
  // ------------own vessel mappings------------//
  def map between L2_E0 and L2_E0_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E1 and L2_E1_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E2 and L2_E2_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E3 and L2_E3_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E4 and L2_E4_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E5 and L2_E5_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E6 and L2_E6_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E7 and L2_E7_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E8 and L2_E8_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E9 and L2_E9_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E10 and L2_E10_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E11 and L2_E11_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E12 and L2_E12_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E13 and L2_E13_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E14 and L2_E14_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E15 and L2_E15_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E16 and L2_E16_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E17 and L2_E17_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E18 and L2_E18_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E19 and L2_E19_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E20 and L2_E20_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E21 and L2_E21_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E22 and L2_E22_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E23 and L2_E23_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E24 and L2_E24_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E25 and L2_E25_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E26 and L2_E26_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E27 and L2_E27_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E28 and L2_E28_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E29 and L2_E29_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E30 and L2_E30_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E31 and L2_E31_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E32 and L2_E32_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E33 and L2_E33_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E34 and L2_E34_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E35 and L2_E35_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E36 and L2_E36_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E37 and L2_E37_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E38 and L2_E38_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E39 and L2_E39_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E40 and L2_E40_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E41 and L2_E41_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E42 and L2_E42_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E43 and L2_E43_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E44 and L2_E44_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E45 and L2_E45_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E46 and L2_E46_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E47 and L2_E47_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E48 and L2_E48_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E49 and L2_E49_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E50 and L2_E50_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E51 and L2_E51_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E52 and L2_E52_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E53 and L2_E53_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E54 and L2_E54_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E55 and L2_E55_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E56 and L2_E56_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E57 and L2_E57_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E58 and L2_E58_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E59 and L2_E59_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E60 and L2_E60_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E61 and L2_E61_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E62 and L2_E62_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E63 and L2_E63_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E64 and L2_E64_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E65 and L2_E65_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E66 and L2_E66_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E67 and L2_E67_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E68 and L2_E68_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E69 and L2_E69_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E70 and L2_E70_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E71 and L2_E71_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E72 and L2_E72_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E73 and L2_E73_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E74 and L2_E74_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E75 and L2_E75_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E76 and L2_E76_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E77 and L2_E77_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E78 and L2_E78_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E79 and L2_E79_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E80 and L2_E80_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E81 and L2_E81_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E82 and L2_E82_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E83 and L2_E83_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E84 and L2_E84_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E85 and L2_E85_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E86 and L2_E86_module for
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E87 and L2_E87_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E88 and L2_E88_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E89 and L2_E89_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E90 and L2_E90_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E91 and L2_E91_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E92 and L2_E92_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E93 and L2_E93_module for
    vars u and u;
    vars v and v;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between L2_E94 and L2_E94_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between L2_E95 and L2_E95_module for
    vars u and u;
    vars v and v;
    vars u_ext and u_ext;
    vars u_0 and u_0;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
  enddef;
  def map between L2_E47_PI and L2_E47_PI_module for
    vars P and P;
  enddef;
  def map between L2_E48_PI and L2_E48_PI_module for
    vars P and P;
  enddef;
  def map between L2_E79_PI and L2_E79_PI_module for
    vars P and P;
  enddef;
  def map between L2_E9_PO and L2_E9_PO_module for
    vars P and P;
  enddef;
  def map between L2_E13_PO and L2_E13_PO_module for
    vars P and P;
  enddef;
  def map between L2_E16_PO and L2_E16_PO_module for
    vars P and P;
  enddef;
  def map between L2_E20_PO and L2_E20_PO_module for
    vars P and P;
  enddef;
  def map between L2_E40_PO and L2_E40_PO_module for
    vars P and P;
  enddef;
  def map between L2_E45_PO and L2_E45_PO_module for
    vars P and P;
  enddef;
  def map between L2_E46_PO and L2_E46_PO_module for
    vars P and P;
  enddef;
  // ------------own global parameters mapping------------//
  def map between global and parameters_global for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters and L2_E0_module for
    vars E_L2_E0 and E;
    vars l_L2_E0 and l;
    vars r_0_L2_E0 and r_0;
    vars u_0_L2_E0 and u_0;
    vars u_ext_L2_E0 and u_ext;
    vars theta_L2_E0 and theta;
  enddef;
  def map between parameters_global and L2_E0_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E1_module for
    vars u_ext_L2_E1 and u_ext;
    vars u_0_L2_E1 and u_0;
    vars theta_L2_E1 and theta;
    vars E_L2_E1 and E;
    vars l_L2_E1 and l;
    vars r_0_L2_E1 and r_0;
  enddef;
  def map between parameters_global and L2_E1_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E2_module for
    vars E_L2_E2 and E;
    vars l_L2_E2 and l;
    vars r_0_L2_E2 and r_0;
    vars u_0_L2_E2 and u_0;
    vars u_ext_L2_E2 and u_ext;
    vars theta_L2_E2 and theta;
  enddef;
  def map between parameters_global and L2_E2_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E3_module for
    vars E_L2_E3 and E;
    vars l_L2_E3 and l;
    vars r_0_L2_E3 and r_0;
    vars u_0_L2_E3 and u_0;
    vars u_ext_L2_E3 and u_ext;
    vars theta_L2_E3 and theta;
  enddef;
  def map between parameters_global and L2_E3_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E4_module for
    vars E_L2_E4 and E;
    vars l_L2_E4 and l;
    vars r_0_L2_E4 and r_0;
    vars u_0_L2_E4 and u_0;
    vars u_ext_L2_E4 and u_ext;
    vars theta_L2_E4 and theta;
  enddef;
  def map between parameters_global and L2_E4_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E5_module for
    vars E_L2_E5 and E;
    vars l_L2_E5 and l;
    vars r_0_L2_E5 and r_0;
    vars u_0_L2_E5 and u_0;
    vars u_ext_L2_E5 and u_ext;
    vars theta_L2_E5 and theta;
  enddef;
  def map between parameters_global and L2_E5_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E6_module for
    vars E_L2_E6 and E;
    vars l_L2_E6 and l;
    vars r_0_L2_E6 and r_0;
    vars u_0_L2_E6 and u_0;
    vars u_ext_L2_E6 and u_ext;
    vars theta_L2_E6 and theta;
  enddef;
  def map between parameters_global and L2_E6_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E7_module for
    vars E_L2_E7 and E;
    vars l_L2_E7 and l;
    vars r_0_L2_E7 and r_0;
    vars u_0_L2_E7 and u_0;
    vars u_ext_L2_E7 and u_ext;
    vars theta_L2_E7 and theta;
  enddef;
  def map between parameters_global and L2_E7_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E8_module for
    vars E_L2_E8 and E;
    vars l_L2_E8 and l;
    vars r_0_L2_E8 and r_0;
    vars u_0_L2_E8 and u_0;
    vars u_ext_L2_E8 and u_ext;
    vars theta_L2_E8 and theta;
  enddef;
  def map between parameters_global and L2_E8_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E9_module for
    vars E_L2_E9 and E;
    vars l_L2_E9 and l;
    vars r_0_L2_E9 and r_0;
    vars u_0_L2_E9 and u_0;
    vars u_ext_L2_E9 and u_ext;
    vars theta_L2_E9 and theta;
  enddef;
  def map between parameters_global and L2_E9_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E10_module for
    vars E_L2_E10 and E;
    vars l_L2_E10 and l;
    vars r_0_L2_E10 and r_0;
    vars u_0_L2_E10 and u_0;
    vars u_ext_L2_E10 and u_ext;
    vars theta_L2_E10 and theta;
  enddef;
  def map between parameters_global and L2_E10_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E11_module for
    vars u_ext_L2_E11 and u_ext;
    vars u_0_L2_E11 and u_0;
    vars theta_L2_E11 and theta;
    vars E_L2_E11 and E;
    vars l_L2_E11 and l;
    vars r_0_L2_E11 and r_0;
  enddef;
  def map between parameters_global and L2_E11_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E12_module for
    vars E_L2_E12 and E;
    vars l_L2_E12 and l;
    vars r_0_L2_E12 and r_0;
    vars u_0_L2_E12 and u_0;
    vars u_ext_L2_E12 and u_ext;
    vars theta_L2_E12 and theta;
  enddef;
  def map between parameters_global and L2_E12_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E13_module for
    vars E_L2_E13 and E;
    vars l_L2_E13 and l;
    vars r_0_L2_E13 and r_0;
    vars u_0_L2_E13 and u_0;
    vars u_ext_L2_E13 and u_ext;
    vars theta_L2_E13 and theta;
  enddef;
  def map between parameters_global and L2_E13_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E14_module for
    vars u_ext_L2_E14 and u_ext;
    vars u_0_L2_E14 and u_0;
    vars theta_L2_E14 and theta;
    vars E_L2_E14 and E;
    vars l_L2_E14 and l;
    vars r_0_L2_E14 and r_0;
  enddef;
  def map between parameters_global and L2_E14_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E15_module for
    vars E_L2_E15 and E;
    vars l_L2_E15 and l;
    vars r_0_L2_E15 and r_0;
    vars u_0_L2_E15 and u_0;
    vars u_ext_L2_E15 and u_ext;
    vars theta_L2_E15 and theta;
  enddef;
  def map between parameters_global and L2_E15_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E16_module for
    vars E_L2_E16 and E;
    vars l_L2_E16 and l;
    vars r_0_L2_E16 and r_0;
    vars u_0_L2_E16 and u_0;
    vars u_ext_L2_E16 and u_ext;
    vars theta_L2_E16 and theta;
  enddef;
  def map between parameters_global and L2_E16_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E17_module for
    vars E_L2_E17 and E;
    vars l_L2_E17 and l;
    vars r_0_L2_E17 and r_0;
    vars u_0_L2_E17 and u_0;
    vars u_ext_L2_E17 and u_ext;
    vars theta_L2_E17 and theta;
  enddef;
  def map between parameters_global and L2_E17_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E18_module for
    vars E_L2_E18 and E;
    vars l_L2_E18 and l;
    vars r_0_L2_E18 and r_0;
    vars u_0_L2_E18 and u_0;
    vars u_ext_L2_E18 and u_ext;
    vars theta_L2_E18 and theta;
  enddef;
  def map between parameters_global and L2_E18_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E19_module for
    vars E_L2_E19 and E;
    vars l_L2_E19 and l;
    vars r_0_L2_E19 and r_0;
    vars u_0_L2_E19 and u_0;
    vars theta_L2_E19 and theta;
    vars u_ext_L2_E19 and u_ext;
  enddef;
  def map between parameters_global and L2_E19_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E20_module for
    vars E_L2_E20 and E;
    vars l_L2_E20 and l;
    vars r_0_L2_E20 and r_0;
    vars u_0_L2_E20 and u_0;
    vars u_ext_L2_E20 and u_ext;
    vars theta_L2_E20 and theta;
  enddef;
  def map between parameters_global and L2_E20_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E21_module for
    vars E_L2_E21 and E;
    vars l_L2_E21 and l;
    vars r_0_L2_E21 and r_0;
    vars u_0_L2_E21 and u_0;
    vars u_ext_L2_E21 and u_ext;
    vars theta_L2_E21 and theta;
  enddef;
  def map between parameters_global and L2_E21_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E22_module for
    vars E_L2_E22 and E;
    vars l_L2_E22 and l;
    vars r_0_L2_E22 and r_0;
    vars u_0_L2_E22 and u_0;
    vars u_ext_L2_E22 and u_ext;
    vars theta_L2_E22 and theta;
  enddef;
  def map between parameters_global and L2_E22_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E23_module for
    vars E_L2_E23 and E;
    vars l_L2_E23 and l;
    vars r_0_L2_E23 and r_0;
    vars u_0_L2_E23 and u_0;
    vars u_ext_L2_E23 and u_ext;
    vars theta_L2_E23 and theta;
  enddef;
  def map between parameters_global and L2_E23_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E24_module for
    vars E_L2_E24 and E;
    vars l_L2_E24 and l;
    vars r_0_L2_E24 and r_0;
    vars u_0_L2_E24 and u_0;
    vars u_ext_L2_E24 and u_ext;
    vars theta_L2_E24 and theta;
  enddef;
  def map between parameters_global and L2_E24_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E25_module for
    vars E_L2_E25 and E;
    vars l_L2_E25 and l;
    vars r_0_L2_E25 and r_0;
    vars u_0_L2_E25 and u_0;
    vars u_ext_L2_E25 and u_ext;
    vars theta_L2_E25 and theta;
  enddef;
  def map between parameters_global and L2_E25_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E26_module for
    vars E_L2_E26 and E;
    vars l_L2_E26 and l;
    vars r_0_L2_E26 and r_0;
    vars u_0_L2_E26 and u_0;
    vars u_ext_L2_E26 and u_ext;
    vars theta_L2_E26 and theta;
  enddef;
  def map between parameters_global and L2_E26_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E27_module for
    vars E_L2_E27 and E;
    vars l_L2_E27 and l;
    vars r_0_L2_E27 and r_0;
    vars u_0_L2_E27 and u_0;
    vars u_ext_L2_E27 and u_ext;
    vars theta_L2_E27 and theta;
  enddef;
  def map between parameters_global and L2_E27_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E28_module for
    vars u_ext_L2_E28 and u_ext;
    vars u_0_L2_E28 and u_0;
    vars theta_L2_E28 and theta;
    vars E_L2_E28 and E;
    vars l_L2_E28 and l;
    vars r_0_L2_E28 and r_0;
  enddef;
  def map between parameters_global and L2_E28_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E29_module for
    vars E_L2_E29 and E;
    vars l_L2_E29 and l;
    vars r_0_L2_E29 and r_0;
    vars u_0_L2_E29 and u_0;
    vars u_ext_L2_E29 and u_ext;
    vars theta_L2_E29 and theta;
  enddef;
  def map between parameters_global and L2_E29_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E30_module for
    vars E_L2_E30 and E;
    vars l_L2_E30 and l;
    vars r_0_L2_E30 and r_0;
    vars u_0_L2_E30 and u_0;
    vars u_ext_L2_E30 and u_ext;
    vars theta_L2_E30 and theta;
  enddef;
  def map between parameters_global and L2_E30_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E31_module for
    vars E_L2_E31 and E;
    vars l_L2_E31 and l;
    vars r_0_L2_E31 and r_0;
    vars u_0_L2_E31 and u_0;
    vars theta_L2_E31 and theta;
    vars u_ext_L2_E31 and u_ext;
  enddef;
  def map between parameters_global and L2_E31_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E32_module for
    vars E_L2_E32 and E;
    vars l_L2_E32 and l;
    vars r_0_L2_E32 and r_0;
    vars u_0_L2_E32 and u_0;
    vars theta_L2_E32 and theta;
    vars u_ext_L2_E32 and u_ext;
  enddef;
  def map between parameters_global and L2_E32_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E33_module for
    vars E_L2_E33 and E;
    vars l_L2_E33 and l;
    vars r_0_L2_E33 and r_0;
    vars u_0_L2_E33 and u_0;
    vars u_ext_L2_E33 and u_ext;
    vars theta_L2_E33 and theta;
  enddef;
  def map between parameters_global and L2_E33_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E34_module for
    vars E_L2_E34 and E;
    vars l_L2_E34 and l;
    vars r_0_L2_E34 and r_0;
    vars u_0_L2_E34 and u_0;
    vars u_ext_L2_E34 and u_ext;
    vars theta_L2_E34 and theta;
  enddef;
  def map between parameters_global and L2_E34_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E35_module for
    vars E_L2_E35 and E;
    vars l_L2_E35 and l;
    vars r_0_L2_E35 and r_0;
    vars u_0_L2_E35 and u_0;
    vars u_ext_L2_E35 and u_ext;
    vars theta_L2_E35 and theta;
  enddef;
  def map between parameters_global and L2_E35_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E36_module for
    vars E_L2_E36 and E;
    vars l_L2_E36 and l;
    vars r_0_L2_E36 and r_0;
    vars u_0_L2_E36 and u_0;
    vars u_ext_L2_E36 and u_ext;
    vars theta_L2_E36 and theta;
  enddef;
  def map between parameters_global and L2_E36_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E37_module for
    vars u_ext_L2_E37 and u_ext;
    vars u_0_L2_E37 and u_0;
    vars theta_L2_E37 and theta;
    vars E_L2_E37 and E;
    vars l_L2_E37 and l;
    vars r_0_L2_E37 and r_0;
  enddef;
  def map between parameters_global and L2_E37_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E38_module for
    vars u_ext_L2_E38 and u_ext;
    vars u_0_L2_E38 and u_0;
    vars theta_L2_E38 and theta;
    vars E_L2_E38 and E;
    vars l_L2_E38 and l;
    vars r_0_L2_E38 and r_0;
  enddef;
  def map between parameters_global and L2_E38_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E39_module for
    vars E_L2_E39 and E;
    vars l_L2_E39 and l;
    vars r_0_L2_E39 and r_0;
    vars u_0_L2_E39 and u_0;
    vars u_ext_L2_E39 and u_ext;
    vars theta_L2_E39 and theta;
  enddef;
  def map between parameters_global and L2_E39_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E40_module for
    vars E_L2_E40 and E;
    vars l_L2_E40 and l;
    vars r_0_L2_E40 and r_0;
    vars u_0_L2_E40 and u_0;
    vars u_ext_L2_E40 and u_ext;
    vars theta_L2_E40 and theta;
  enddef;
  def map between parameters_global and L2_E40_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E41_module for
    vars E_L2_E41 and E;
    vars l_L2_E41 and l;
    vars r_0_L2_E41 and r_0;
    vars u_0_L2_E41 and u_0;
    vars u_ext_L2_E41 and u_ext;
    vars theta_L2_E41 and theta;
  enddef;
  def map between parameters_global and L2_E41_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E42_module for
    vars E_L2_E42 and E;
    vars l_L2_E42 and l;
    vars r_0_L2_E42 and r_0;
    vars u_0_L2_E42 and u_0;
    vars u_ext_L2_E42 and u_ext;
    vars theta_L2_E42 and theta;
  enddef;
  def map between parameters_global and L2_E42_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E43_module for
    vars E_L2_E43 and E;
    vars l_L2_E43 and l;
    vars r_0_L2_E43 and r_0;
    vars u_0_L2_E43 and u_0;
    vars u_ext_L2_E43 and u_ext;
    vars theta_L2_E43 and theta;
  enddef;
  def map between parameters_global and L2_E43_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E44_module for
    vars E_L2_E44 and E;
    vars l_L2_E44 and l;
    vars r_0_L2_E44 and r_0;
    vars u_0_L2_E44 and u_0;
    vars u_ext_L2_E44 and u_ext;
    vars theta_L2_E44 and theta;
  enddef;
  def map between parameters_global and L2_E44_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E45_module for
    vars E_L2_E45 and E;
    vars l_L2_E45 and l;
    vars r_0_L2_E45 and r_0;
    vars u_0_L2_E45 and u_0;
    vars u_ext_L2_E45 and u_ext;
    vars theta_L2_E45 and theta;
  enddef;
  def map between parameters_global and L2_E45_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E46_module for
    vars u_ext_L2_E46 and u_ext;
    vars u_0_L2_E46 and u_0;
    vars theta_L2_E46 and theta;
    vars E_L2_E46 and E;
    vars l_L2_E46 and l;
    vars r_0_L2_E46 and r_0;
  enddef;
  def map between parameters_global and L2_E46_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E47_module for
    vars E_L2_E47 and E;
    vars l_L2_E47 and l;
    vars r_0_L2_E47 and r_0;
    vars u_0_L2_E47 and u_0;
    vars u_ext_L2_E47 and u_ext;
    vars theta_L2_E47 and theta;
  enddef;
  def map between parameters_global and L2_E47_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E48_module for
    vars E_L2_E48 and E;
    vars l_L2_E48 and l;
    vars r_0_L2_E48 and r_0;
    vars u_0_L2_E48 and u_0;
    vars u_ext_L2_E48 and u_ext;
    vars theta_L2_E48 and theta;
  enddef;
  def map between parameters_global and L2_E48_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E49_module for
    vars E_L2_E49 and E;
    vars l_L2_E49 and l;
    vars r_0_L2_E49 and r_0;
    vars u_0_L2_E49 and u_0;
    vars theta_L2_E49 and theta;
    vars u_ext_L2_E49 and u_ext;
  enddef;
  def map between parameters_global and L2_E49_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E50_module for
    vars u_ext_L2_E50 and u_ext;
    vars u_0_L2_E50 and u_0;
    vars theta_L2_E50 and theta;
    vars E_L2_E50 and E;
    vars l_L2_E50 and l;
    vars r_0_L2_E50 and r_0;
  enddef;
  def map between parameters_global and L2_E50_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E51_module for
    vars E_L2_E51 and E;
    vars l_L2_E51 and l;
    vars r_0_L2_E51 and r_0;
    vars u_0_L2_E51 and u_0;
    vars u_ext_L2_E51 and u_ext;
    vars theta_L2_E51 and theta;
  enddef;
  def map between parameters_global and L2_E51_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E52_module for
    vars E_L2_E52 and E;
    vars l_L2_E52 and l;
    vars r_0_L2_E52 and r_0;
    vars u_0_L2_E52 and u_0;
    vars u_ext_L2_E52 and u_ext;
    vars theta_L2_E52 and theta;
  enddef;
  def map between parameters_global and L2_E52_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E53_module for
    vars E_L2_E53 and E;
    vars l_L2_E53 and l;
    vars r_0_L2_E53 and r_0;
    vars u_0_L2_E53 and u_0;
    vars u_ext_L2_E53 and u_ext;
    vars theta_L2_E53 and theta;
  enddef;
  def map between parameters_global and L2_E53_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E54_module for
    vars E_L2_E54 and E;
    vars l_L2_E54 and l;
    vars r_0_L2_E54 and r_0;
    vars u_0_L2_E54 and u_0;
    vars u_ext_L2_E54 and u_ext;
    vars theta_L2_E54 and theta;
  enddef;
  def map between parameters_global and L2_E54_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E55_module for
    vars E_L2_E55 and E;
    vars l_L2_E55 and l;
    vars r_0_L2_E55 and r_0;
    vars u_0_L2_E55 and u_0;
    vars u_ext_L2_E55 and u_ext;
    vars theta_L2_E55 and theta;
  enddef;
  def map between parameters_global and L2_E55_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E56_module for
    vars E_L2_E56 and E;
    vars l_L2_E56 and l;
    vars r_0_L2_E56 and r_0;
    vars u_0_L2_E56 and u_0;
    vars theta_L2_E56 and theta;
    vars u_ext_L2_E56 and u_ext;
  enddef;
  def map between parameters_global and L2_E56_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E57_module for
    vars u_ext_L2_E57 and u_ext;
    vars u_0_L2_E57 and u_0;
    vars theta_L2_E57 and theta;
    vars E_L2_E57 and E;
    vars l_L2_E57 and l;
    vars r_0_L2_E57 and r_0;
  enddef;
  def map between parameters_global and L2_E57_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E58_module for
    vars E_L2_E58 and E;
    vars l_L2_E58 and l;
    vars r_0_L2_E58 and r_0;
    vars u_0_L2_E58 and u_0;
    vars u_ext_L2_E58 and u_ext;
    vars theta_L2_E58 and theta;
  enddef;
  def map between parameters_global and L2_E58_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E59_module for
    vars E_L2_E59 and E;
    vars l_L2_E59 and l;
    vars r_0_L2_E59 and r_0;
    vars u_0_L2_E59 and u_0;
    vars theta_L2_E59 and theta;
    vars u_ext_L2_E59 and u_ext;
  enddef;
  def map between parameters_global and L2_E59_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E60_module for
    vars E_L2_E60 and E;
    vars l_L2_E60 and l;
    vars r_0_L2_E60 and r_0;
    vars u_0_L2_E60 and u_0;
    vars theta_L2_E60 and theta;
    vars u_ext_L2_E60 and u_ext;
  enddef;
  def map between parameters_global and L2_E60_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E61_module for
    vars u_ext_L2_E61 and u_ext;
    vars u_0_L2_E61 and u_0;
    vars theta_L2_E61 and theta;
    vars E_L2_E61 and E;
    vars l_L2_E61 and l;
    vars r_0_L2_E61 and r_0;
  enddef;
  def map between parameters_global and L2_E61_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E62_module for
    vars E_L2_E62 and E;
    vars l_L2_E62 and l;
    vars r_0_L2_E62 and r_0;
    vars u_0_L2_E62 and u_0;
    vars u_ext_L2_E62 and u_ext;
    vars theta_L2_E62 and theta;
  enddef;
  def map between parameters_global and L2_E62_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E63_module for
    vars E_L2_E63 and E;
    vars l_L2_E63 and l;
    vars r_0_L2_E63 and r_0;
    vars u_0_L2_E63 and u_0;
    vars u_ext_L2_E63 and u_ext;
    vars theta_L2_E63 and theta;
  enddef;
  def map between parameters_global and L2_E63_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E64_module for
    vars E_L2_E64 and E;
    vars l_L2_E64 and l;
    vars r_0_L2_E64 and r_0;
    vars u_0_L2_E64 and u_0;
    vars u_ext_L2_E64 and u_ext;
    vars theta_L2_E64 and theta;
  enddef;
  def map between parameters_global and L2_E64_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E65_module for
    vars E_L2_E65 and E;
    vars l_L2_E65 and l;
    vars r_0_L2_E65 and r_0;
    vars u_0_L2_E65 and u_0;
    vars u_ext_L2_E65 and u_ext;
    vars theta_L2_E65 and theta;
  enddef;
  def map between parameters_global and L2_E65_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E66_module for
    vars E_L2_E66 and E;
    vars l_L2_E66 and l;
    vars r_0_L2_E66 and r_0;
    vars u_0_L2_E66 and u_0;
    vars theta_L2_E66 and theta;
    vars u_ext_L2_E66 and u_ext;
  enddef;
  def map between parameters_global and L2_E66_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E67_module for
    vars E_L2_E67 and E;
    vars l_L2_E67 and l;
    vars r_0_L2_E67 and r_0;
    vars u_0_L2_E67 and u_0;
    vars u_ext_L2_E67 and u_ext;
    vars theta_L2_E67 and theta;
  enddef;
  def map between parameters_global and L2_E67_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E68_module for
    vars E_L2_E68 and E;
    vars l_L2_E68 and l;
    vars r_0_L2_E68 and r_0;
    vars u_0_L2_E68 and u_0;
    vars theta_L2_E68 and theta;
    vars u_ext_L2_E68 and u_ext;
  enddef;
  def map between parameters_global and L2_E68_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E69_module for
    vars E_L2_E69 and E;
    vars l_L2_E69 and l;
    vars r_0_L2_E69 and r_0;
    vars u_0_L2_E69 and u_0;
    vars theta_L2_E69 and theta;
    vars u_ext_L2_E69 and u_ext;
  enddef;
  def map between parameters_global and L2_E69_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E70_module for
    vars u_ext_L2_E70 and u_ext;
    vars u_0_L2_E70 and u_0;
    vars theta_L2_E70 and theta;
    vars E_L2_E70 and E;
    vars l_L2_E70 and l;
    vars r_0_L2_E70 and r_0;
  enddef;
  def map between parameters_global and L2_E70_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E71_module for
    vars E_L2_E71 and E;
    vars l_L2_E71 and l;
    vars r_0_L2_E71 and r_0;
    vars u_0_L2_E71 and u_0;
    vars u_ext_L2_E71 and u_ext;
    vars theta_L2_E71 and theta;
  enddef;
  def map between parameters_global and L2_E71_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E72_module for
    vars E_L2_E72 and E;
    vars l_L2_E72 and l;
    vars r_0_L2_E72 and r_0;
    vars u_0_L2_E72 and u_0;
    vars u_ext_L2_E72 and u_ext;
    vars theta_L2_E72 and theta;
  enddef;
  def map between parameters_global and L2_E72_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E73_module for
    vars E_L2_E73 and E;
    vars l_L2_E73 and l;
    vars r_0_L2_E73 and r_0;
    vars u_0_L2_E73 and u_0;
    vars theta_L2_E73 and theta;
    vars u_ext_L2_E73 and u_ext;
  enddef;
  def map between parameters_global and L2_E73_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E74_module for
    vars E_L2_E74 and E;
    vars l_L2_E74 and l;
    vars r_0_L2_E74 and r_0;
    vars u_0_L2_E74 and u_0;
    vars u_ext_L2_E74 and u_ext;
    vars theta_L2_E74 and theta;
  enddef;
  def map between parameters_global and L2_E74_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E75_module for
    vars E_L2_E75 and E;
    vars l_L2_E75 and l;
    vars r_0_L2_E75 and r_0;
    vars u_0_L2_E75 and u_0;
    vars u_ext_L2_E75 and u_ext;
    vars theta_L2_E75 and theta;
  enddef;
  def map between parameters_global and L2_E75_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E76_module for
    vars u_ext_L2_E76 and u_ext;
    vars u_0_L2_E76 and u_0;
    vars theta_L2_E76 and theta;
    vars E_L2_E76 and E;
    vars l_L2_E76 and l;
    vars r_0_L2_E76 and r_0;
  enddef;
  def map between parameters_global and L2_E76_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E77_module for
    vars u_ext_L2_E77 and u_ext;
    vars u_0_L2_E77 and u_0;
    vars theta_L2_E77 and theta;
    vars E_L2_E77 and E;
    vars l_L2_E77 and l;
    vars r_0_L2_E77 and r_0;
  enddef;
  def map between parameters_global and L2_E77_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E78_module for
    vars u_ext_L2_E78 and u_ext;
    vars u_0_L2_E78 and u_0;
    vars theta_L2_E78 and theta;
    vars E_L2_E78 and E;
    vars l_L2_E78 and l;
    vars r_0_L2_E78 and r_0;
  enddef;
  def map between parameters_global and L2_E78_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E79_module for
    vars E_L2_E79 and E;
    vars l_L2_E79 and l;
    vars r_0_L2_E79 and r_0;
    vars u_0_L2_E79 and u_0;
    vars u_ext_L2_E79 and u_ext;
    vars theta_L2_E79 and theta;
  enddef;
  def map between parameters_global and L2_E79_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E80_module for
    vars u_ext_L2_E80 and u_ext;
    vars u_0_L2_E80 and u_0;
    vars theta_L2_E80 and theta;
    vars E_L2_E80 and E;
    vars l_L2_E80 and l;
    vars r_0_L2_E80 and r_0;
  enddef;
  def map between parameters_global and L2_E80_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E81_module for
    vars E_L2_E81 and E;
    vars l_L2_E81 and l;
    vars r_0_L2_E81 and r_0;
    vars u_0_L2_E81 and u_0;
    vars u_ext_L2_E81 and u_ext;
    vars theta_L2_E81 and theta;
  enddef;
  def map between parameters_global and L2_E81_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E82_module for
    vars E_L2_E82 and E;
    vars l_L2_E82 and l;
    vars r_0_L2_E82 and r_0;
    vars u_0_L2_E82 and u_0;
    vars theta_L2_E82 and theta;
    vars u_ext_L2_E82 and u_ext;
  enddef;
  def map between parameters_global and L2_E82_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E83_module for
    vars E_L2_E83 and E;
    vars l_L2_E83 and l;
    vars r_0_L2_E83 and r_0;
    vars u_0_L2_E83 and u_0;
    vars u_ext_L2_E83 and u_ext;
    vars theta_L2_E83 and theta;
  enddef;
  def map between parameters_global and L2_E83_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E84_module for
    vars E_L2_E84 and E;
    vars l_L2_E84 and l;
    vars r_0_L2_E84 and r_0;
    vars u_0_L2_E84 and u_0;
    vars theta_L2_E84 and theta;
    vars u_ext_L2_E84 and u_ext;
  enddef;
  def map between parameters_global and L2_E84_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E85_module for
    vars E_L2_E85 and E;
    vars l_L2_E85 and l;
    vars r_0_L2_E85 and r_0;
    vars u_0_L2_E85 and u_0;
    vars u_ext_L2_E85 and u_ext;
    vars theta_L2_E85 and theta;
  enddef;
  def map between parameters_global and L2_E85_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E86_module for
    vars u_ext_L2_E86 and u_ext;
    vars u_0_L2_E86 and u_0;
    vars theta_L2_E86 and theta;
    vars E_L2_E86 and E;
    vars l_L2_E86 and l;
    vars r_0_L2_E86 and r_0;
  enddef;
  def map between parameters_global and L2_E86_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E87_module for
    vars E_L2_E87 and E;
    vars l_L2_E87 and l;
    vars r_0_L2_E87 and r_0;
    vars u_0_L2_E87 and u_0;
    vars theta_L2_E87 and theta;
    vars u_ext_L2_E87 and u_ext;
  enddef;
  def map between parameters_global and L2_E87_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E88_module for
    vars E_L2_E88 and E;
    vars l_L2_E88 and l;
    vars r_0_L2_E88 and r_0;
    vars u_0_L2_E88 and u_0;
    vars u_ext_L2_E88 and u_ext;
    vars theta_L2_E88 and theta;
  enddef;
  def map between parameters_global and L2_E88_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E89_module for
    vars E_L2_E89 and E;
    vars l_L2_E89 and l;
    vars r_0_L2_E89 and r_0;
    vars u_0_L2_E89 and u_0;
    vars u_ext_L2_E89 and u_ext;
    vars theta_L2_E89 and theta;
  enddef;
  def map between parameters_global and L2_E89_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E90_module for
    vars E_L2_E90 and E;
    vars l_L2_E90 and l;
    vars r_0_L2_E90 and r_0;
    vars u_0_L2_E90 and u_0;
    vars theta_L2_E90 and theta;
    vars u_ext_L2_E90 and u_ext;
  enddef;
  def map between parameters_global and L2_E90_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E91_module for
    vars E_L2_E91 and E;
    vars l_L2_E91 and l;
    vars r_0_L2_E91 and r_0;
    vars u_0_L2_E91 and u_0;
    vars u_ext_L2_E91 and u_ext;
    vars theta_L2_E91 and theta;
  enddef;
  def map between parameters_global and L2_E91_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E92_module for
    vars E_L2_E92 and E;
    vars l_L2_E92 and l;
    vars r_0_L2_E92 and r_0;
    vars u_0_L2_E92 and u_0;
    vars theta_L2_E92 and theta;
    vars u_ext_L2_E92 and u_ext;
  enddef;
  def map between parameters_global and L2_E92_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E93_module for
    vars E_L2_E93 and E;
    vars l_L2_E93 and l;
    vars r_0_L2_E93 and r_0;
    vars u_0_L2_E93 and u_0;
    vars u_ext_L2_E93 and u_ext;
    vars theta_L2_E93 and theta;
  enddef;
  def map between parameters_global and L2_E93_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E94_module for
    vars E_L2_E94 and E;
    vars l_L2_E94 and l;
    vars r_0_L2_E94 and r_0;
    vars u_0_L2_E94 and u_0;
    vars theta_L2_E94 and theta;
    vars u_ext_L2_E94 and u_ext;
  enddef;
  def map between parameters_global and L2_E94_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E95_module for
    vars u_ext_L2_E95 and u_ext;
    vars u_0_L2_E95 and u_0;
    vars theta_L2_E95 and theta;
    vars E_L2_E95 and E;
    vars l_L2_E95 and l;
    vars r_0_L2_E95 and r_0;
  enddef;
  def map between parameters_global and L2_E95_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and L2_E47_PI_module for
    vars P_L2_E47_PI and P;
  enddef;
  def map between parameters and L2_E48_PI_module for
    vars P_L2_E48_PI and P;
  enddef;
  def map between parameters and L2_E79_PI_module for
    vars P_L2_E79_PI and P;
  enddef;
  def map between parameters and L2_E9_PO_module for
    vars P_L2_E9_PO and P;
  enddef;
  def map between parameters and L2_E13_PO_module for
    vars P_L2_E13_PO and P;
  enddef;
  def map between parameters and L2_E16_PO_module for
    vars P_L2_E16_PO and P;
  enddef;
  def map between parameters and L2_E20_PO_module for
    vars P_L2_E20_PO and P;
  enddef;
  def map between parameters and L2_E40_PO_module for
    vars P_L2_E40_PO and P;
  enddef;
  def map between parameters and L2_E45_PO_module for
    vars P_L2_E45_PO and P;
  enddef;
  def map between parameters and L2_E46_PO_module for
    vars P_L2_E46_PO and P;
  enddef;
  // ------------time mapping------------//
  def map between environment and L2_E0_module for
    vars time and t;
  enddef;
  def map between environment and L2_E1_module for
    vars time and t;
  enddef;
  def map between environment and L2_E2_module for
    vars time and t;
  enddef;
  def map between environment and L2_E3_module for
    vars time and t;
  enddef;
  def map between environment and L2_E4_module for
    vars time and t;
  enddef;
  def map between environment and L2_E5_module for
    vars time and t;
  enddef;
  def map between environment and L2_E6_module for
    vars time and t;
  enddef;
  def map between environment and L2_E7_module for
    vars time and t;
  enddef;
  def map between environment and L2_E8_module for
    vars time and t;
  enddef;
  def map between environment and L2_E9_module for
    vars time and t;
  enddef;
  def map between environment and L2_E10_module for
    vars time and t;
  enddef;
  def map between environment and L2_E11_module for
    vars time and t;
  enddef;
  def map between environment and L2_E12_module for
    vars time and t;
  enddef;
  def map between environment and L2_E13_module for
    vars time and t;
  enddef;
  def map between environment and L2_E14_module for
    vars time and t;
  enddef;
  def map between environment and L2_E15_module for
    vars time and t;
  enddef;
  def map between environment and L2_E16_module for
    vars time and t;
  enddef;
  def map between environment and L2_E17_module for
    vars time and t;
  enddef;
  def map between environment and L2_E18_module for
    vars time and t;
  enddef;
  def map between environment and L2_E19_module for
    vars time and t;
  enddef;
  def map between environment and L2_E20_module for
    vars time and t;
  enddef;
  def map between environment and L2_E21_module for
    vars time and t;
  enddef;
  def map between environment and L2_E22_module for
    vars time and t;
  enddef;
  def map between environment and L2_E23_module for
    vars time and t;
  enddef;
  def map between environment and L2_E24_module for
    vars time and t;
  enddef;
  def map between environment and L2_E25_module for
    vars time and t;
  enddef;
  def map between environment and L2_E26_module for
    vars time and t;
  enddef;
  def map between environment and L2_E27_module for
    vars time and t;
  enddef;
  def map between environment and L2_E28_module for
    vars time and t;
  enddef;
  def map between environment and L2_E29_module for
    vars time and t;
  enddef;
  def map between environment and L2_E30_module for
    vars time and t;
  enddef;
  def map between environment and L2_E31_module for
    vars time and t;
  enddef;
  def map between environment and L2_E32_module for
    vars time and t;
  enddef;
  def map between environment and L2_E33_module for
    vars time and t;
  enddef;
  def map between environment and L2_E34_module for
    vars time and t;
  enddef;
  def map between environment and L2_E35_module for
    vars time and t;
  enddef;
  def map between environment and L2_E36_module for
    vars time and t;
  enddef;
  def map between environment and L2_E37_module for
    vars time and t;
  enddef;
  def map between environment and L2_E38_module for
    vars time and t;
  enddef;
  def map between environment and L2_E39_module for
    vars time and t;
  enddef;
  def map between environment and L2_E40_module for
    vars time and t;
  enddef;
  def map between environment and L2_E41_module for
    vars time and t;
  enddef;
  def map between environment and L2_E42_module for
    vars time and t;
  enddef;
  def map between environment and L2_E43_module for
    vars time and t;
  enddef;
  def map between environment and L2_E44_module for
    vars time and t;
  enddef;
  def map between environment and L2_E45_module for
    vars time and t;
  enddef;
  def map between environment and L2_E46_module for
    vars time and t;
  enddef;
  def map between environment and L2_E47_module for
    vars time and t;
  enddef;
  def map between environment and L2_E48_module for
    vars time and t;
  enddef;
  def map between environment and L2_E49_module for
    vars time and t;
  enddef;
  def map between environment and L2_E50_module for
    vars time and t;
  enddef;
  def map between environment and L2_E51_module for
    vars time and t;
  enddef;
  def map between environment and L2_E52_module for
    vars time and t;
  enddef;
  def map between environment and L2_E53_module for
    vars time and t;
  enddef;
  def map between environment and L2_E54_module for
    vars time and t;
  enddef;
  def map between environment and L2_E55_module for
    vars time and t;
  enddef;
  def map between environment and L2_E56_module for
    vars time and t;
  enddef;
  def map between environment and L2_E57_module for
    vars time and t;
  enddef;
  def map between environment and L2_E58_module for
    vars time and t;
  enddef;
  def map between environment and L2_E59_module for
    vars time and t;
  enddef;
  def map between environment and L2_E60_module for
    vars time and t;
  enddef;
  def map between environment and L2_E61_module for
    vars time and t;
  enddef;
  def map between environment and L2_E62_module for
    vars time and t;
  enddef;
  def map between environment and L2_E63_module for
    vars time and t;
  enddef;
  def map between environment and L2_E64_module for
    vars time and t;
  enddef;
  def map between environment and L2_E65_module for
    vars time and t;
  enddef;
  def map between environment and L2_E66_module for
    vars time and t;
  enddef;
  def map between environment and L2_E67_module for
    vars time and t;
  enddef;
  def map between environment and L2_E68_module for
    vars time and t;
  enddef;
  def map between environment and L2_E69_module for
    vars time and t;
  enddef;
  def map between environment and L2_E70_module for
    vars time and t;
  enddef;
  def map between environment and L2_E71_module for
    vars time and t;
  enddef;
  def map between environment and L2_E72_module for
    vars time and t;
  enddef;
  def map between environment and L2_E73_module for
    vars time and t;
  enddef;
  def map between environment and L2_E74_module for
    vars time and t;
  enddef;
  def map between environment and L2_E75_module for
    vars time and t;
  enddef;
  def map between environment and L2_E76_module for
    vars time and t;
  enddef;
  def map between environment and L2_E77_module for
    vars time and t;
  enddef;
  def map between environment and L2_E78_module for
    vars time and t;
  enddef;
  def map between environment and L2_E79_module for
    vars time and t;
  enddef;
  def map between environment and L2_E80_module for
    vars time and t;
  enddef;
  def map between environment and L2_E81_module for
    vars time and t;
  enddef;
  def map between environment and L2_E82_module for
    vars time and t;
  enddef;
  def map between environment and L2_E83_module for
    vars time and t;
  enddef;
  def map between environment and L2_E84_module for
    vars time and t;
  enddef;
  def map between environment and L2_E85_module for
    vars time and t;
  enddef;
  def map between environment and L2_E86_module for
    vars time and t;
  enddef;
  def map between environment and L2_E87_module for
    vars time and t;
  enddef;
  def map between environment and L2_E88_module for
    vars time and t;
  enddef;
  def map between environment and L2_E89_module for
    vars time and t;
  enddef;
  def map between environment and L2_E90_module for
    vars time and t;
  enddef;
  def map between environment and L2_E91_module for
    vars time and t;
  enddef;
  def map between environment and L2_E92_module for
    vars time and t;
  enddef;
  def map between environment and L2_E93_module for
    vars time and t;
  enddef;
  def map between environment and L2_E94_module for
    vars time and t;
  enddef;
  def map between environment and L2_E95_module for
    vars time and t;
  enddef;
  def map between environment and L2_E47_PI_module for
    vars time and t;
  enddef;
  def map between environment and L2_E48_PI_module for
    vars time and t;
  enddef;
  def map between environment and L2_E79_PI_module for
    vars time and t;
  enddef;
  def map between environment and L2_E9_PO_module for
    vars time and t;
  enddef;
  def map between environment and L2_E13_PO_module for
    vars time and t;
  enddef;
  def map between environment and L2_E16_PO_module for
    vars time and t;
  enddef;
  def map between environment and L2_E20_PO_module for
    vars time and t;
  enddef;
  def map between environment and L2_E40_PO_module for
    vars time and t;
  enddef;
  def map between environment and L2_E45_PO_module for
    vars time and t;
  enddef;
  def map between environment and L2_E46_PO_module for
    vars time and t;
  enddef;
enddef;
