// #This model was automatically generated with the circulatory_autogen software
// # https://github.com/FinbarArgus/circulatory_autogen
def model CardiovascularSystem as
  def import using "neonatal_parameters.cellml" for
    comp parameters using comp parameters;
    comp parameters_global using comp parameters_global;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // #STARTGENBELOW
  // ------------units------------//
  def import using "neonatal_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_s2 using unit per_s2;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit mmol_per_l using unit mmol_per_l;
    unit l_per_mmol using unit l_per_mmol;
    unit l_per_mmol_per_s using unit l_per_mmol_per_s;
    unit l2_per_mmol_per_s using unit l2_per_mmol_per_s;
    unit mmol_per_s2 using unit mmol_per_s2;
    unit mmol using unit mmol;
    unit mmol_per_l_per_s using unit mmol_per_l_per_s;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
  enddef;
  // ------------imports------------//
  def import using "neonatal_modules.cellml" for
    comp heart_module using comp heart_simple_LVprop;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp aortic_root_module using comp vv_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp ascending_aorta_module using comp pv_split_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp brachiocephalic_module using comp pv_split_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp subclavian_R_module using comp pv_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp common_carotid_R_module using comp pv_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp aortic_arch_I_module using comp pv_split_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp common_carotid_L_module using comp pv_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp aortic_arch_II_module using comp pv_split_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp subclavian_L_module using comp pv_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp descending_aorta_module using comp pv_split_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp abdominal_aorta_module using comp pv_split_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp abdomen_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp head_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp head_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp arm_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp arm_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp leg_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp leg_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp venous_ivc_module using comp vp_ven_simple_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp venous_svc_module using comp vp_ven_simple_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp par_module using comp vp_simple_type;
  enddef;
  def import using "neonatal_modules.cellml" for
    comp pvn_module using comp vp_simple_type;
  enddef;
  // ------------vessel mappings------------//
  def map between heart_module and aortic_root_module for
    vars v_aov and v_in;
    vars u_root and u;
  enddef;
  def map between heart_module and par_module for
    vars v_puv and v_in;
    vars u_par and u;
  enddef;
  def map between aortic_root_module and ascending_aorta_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between ascending_aorta_module and aortic_arch_I_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_module and brachiocephalic_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_module and subclavian_R_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_module and common_carotid_R_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R_module and arm_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R_module and head_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_I_module and aortic_arch_II_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_I_module and common_carotid_L_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L_module and head_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_II_module and descending_aorta_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_II_module and subclavian_L_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L_module and arm_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between descending_aorta_module and abdominal_aorta_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between descending_aorta_module and abdomen_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_module and leg_L_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_module and leg_R_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between venous_ivc_module and heart_module for
    vars v and v_ivc;
    vars u_out and u_ra;
  enddef;
  def map between venous_svc_module and heart_module for
    vars v and v_svc;
    vars u_out and u_ra;
  enddef;
  def map between par_module and pvn_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pvn_module and heart_module for
    vars v and v_pvn;
    vars u_out and u_la;
  enddef;
  // ------------terminal venous connection------------//
  def map between abdomen_T_module and venous_ivc_module for
    vars u_out and u;
  enddef;
  def map between abdomen_T_module and terminal_venous_connection for
    vars v_T and v_abdomen_T;
  enddef;
  def map between head_L_T_module and venous_svc_module for
    vars u_out and u;
  enddef;
  def map between head_L_T_module and terminal_venous_connection for
    vars v_T and v_head_L_T;
  enddef;
  def map between head_R_T_module and venous_svc_module for
    vars u_out and u;
  enddef;
  def map between head_R_T_module and terminal_venous_connection for
    vars v_T and v_head_R_T;
  enddef;
  def map between arm_L_T_module and venous_svc_module for
    vars u_out and u;
  enddef;
  def map between arm_L_T_module and terminal_venous_connection for
    vars v_T and v_arm_L_T;
  enddef;
  def map between arm_R_T_module and venous_svc_module for
    vars u_out and u;
  enddef;
  def map between arm_R_T_module and terminal_venous_connection for
    vars v_T and v_arm_R_T;
  enddef;
  def map between leg_L_T_module and venous_ivc_module for
    vars u_out and u;
  enddef;
  def map between leg_L_T_module and terminal_venous_connection for
    vars v_T and v_leg_L_T;
  enddef;
  def map between leg_R_T_module and venous_ivc_module for
    vars u_out and u;
  enddef;
  def map between leg_R_T_module and terminal_venous_connection for
    vars v_T and v_leg_R_T;
  enddef;
  def map between terminal_venous_connection and venous_ivc_module for
    vars v_venous_ivc and v_in;
  enddef;
  def map between terminal_venous_connection and venous_svc_module for
    vars v_venous_svc and v_in;
  enddef;

  def comp terminal_venous_connection as
    var v_abdomen_T: m3_per_s {pub: in};
    var v_head_L_T: m3_per_s {pub: in};
    var v_head_R_T: m3_per_s {pub: in};
    var v_arm_L_T: m3_per_s {pub: in};
    var v_arm_R_T: m3_per_s {pub: in};
    var v_leg_L_T: m3_per_s {pub: in};
    var v_leg_R_T: m3_per_s {pub: in};
    var v_venous_ivc: m3_per_s {pub: out};
    var v_venous_svc: m3_per_s {pub: out};
    v_venous_ivc = v_abdomen_T+v_leg_L_T+v_leg_R_T;
    v_venous_svc = v_head_L_T+v_head_R_T+v_arm_L_T+v_arm_R_T;
  enddef;
  // ------------generic junction connection------------//

  def comp generic_junction_connection as
  enddef;
  // ------------applying multiport operations for ports------------//

  def comp sum_blood_volume as
  enddef;
  // ------------access_variables------------//

  def comp heart as
    var rho: Js2_per_m5 {pub: in};
    var T: second {pub: in};
    var mt: dimensionless {pub: in};
    var u_ra: J_per_m3 {pub: in};
    var u_rv: J_per_m3 {pub: in};
    var u_la: J_per_m3 {pub: in};
    var u_lv: J_per_m3 {pub: in};
    var q_ra: m3 {pub: in};
    var q_rv: m3 {pub: in};
    var q_la: m3 {pub: in};
    var q_lv: m3 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: in};
    var chi_a: dimensionless {pub: in};
    var chi_afloor: dimensionless {pub: in};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var e_a: dimensionless {pub: in};
    var e_v: dimensionless {pub: in};
    var v_trv: m3_per_s {pub: in};
    var v_puv: m3_per_s {pub: in};
    var v_miv: m3_per_s {pub: in};
    var v_aov: m3_per_s {pub: in};
    var vel_trv: m_per_s {pub: in};
    var vel_puv: m_per_s {pub: in};
    var vel_miv: m_per_s {pub: in};
    var vel_aov: m_per_s {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var l_eff: metre {pub: in};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var A_eff_trv: m2 {pub: in};
    var A_eff_puv: m2 {pub: in};
    var A_eff_miv: m2 {pub: in};
    var A_eff_aov: m2 {pub: in};
    var q_heart: m3 {pub: in};
  enddef;

  def comp aortic_root as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp brachiocephalic as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp subclavian_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_R as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_I as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_II as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp subclavian_L as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp descending_aorta as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp abdomen_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp head_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp head_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp arm_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp arm_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp leg_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp leg_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp venous_ivc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: in};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: in};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
  enddef;

  def comp par as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
  enddef;

  def comp pvn as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
  enddef;
  // ------------global_parameters_access------------//

  def comp global as
    var rho: Js2_per_m5 {pub: in};
    var T: second {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var t_astart: second {pub: in};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var t_vstart: second {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var l_eff: metre {pub: in};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
    var g: m_per_s2 {pub: in};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
  enddef;
  // ------------own vessel mappings------------//
  def map between heart and heart_module for
    vars rho and rho;
    vars T and T;
    vars mt and mt;
    vars u_ra and u_ra;
    vars u_rv and u_rv;
    vars u_la and u_la;
    vars u_lv and u_lv;
    vars q_ra and q_ra;
    vars q_rv and q_rv;
    vars q_la and q_la;
    vars q_lv and q_lv;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars t_astart_norm and t_astart_norm;
    vars chi_a and chi_a;
    vars chi_afloor and chi_afloor;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars t_vstart_norm and t_vstart_norm;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars e_a and e_a;
    vars e_v and e_v;
    vars v_trv and v_trv;
    vars v_puv and v_puv;
    vars v_miv and v_miv;
    vars v_aov and v_aov;
    vars vel_trv and vel_trv;
    vars vel_puv and vel_puv;
    vars vel_miv and vel_miv;
    vars vel_aov and vel_aov;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars A_eff_trv and A_eff_trv;
    vars A_eff_puv and A_eff_puv;
    vars A_eff_miv and A_eff_miv;
    vars A_eff_aov and A_eff_aov;
    vars q_heart and q_heart;
  enddef;
  def map between aortic_root and aortic_root_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between ascending_aorta and ascending_aorta_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between brachiocephalic and brachiocephalic_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between subclavian_R and subclavian_R_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_R and common_carotid_R_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between aortic_arch_I and aortic_arch_I_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_L and common_carotid_L_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between aortic_arch_II and aortic_arch_II_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between subclavian_L and subclavian_L_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between descending_aorta and descending_aorta_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between abdominal_aorta and abdominal_aorta_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between abdomen_T and abdomen_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between head_L_T and head_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between head_R_T and head_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between arm_L_T and arm_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between arm_R_T and arm_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between leg_L_T and leg_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between leg_R_T and leg_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between venous_ivc and venous_ivc_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars u_ext and u_ext;
    vars I and I;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
    vars Delta_C and Delta_C;
  enddef;
  def map between venous_svc and venous_svc_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars u_ext and u_ext;
    vars I and I;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
    vars Delta_C and Delta_C;
  enddef;
  def map between par and par_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R and R;
    vars C and C;
    vars I and I;
    vars u_ext and u_ext;
    vars u_0 and u_0;
  enddef;
  def map between pvn and pvn_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R and R;
    vars C and C;
    vars I and I;
    vars u_ext and u_ext;
    vars u_0 and u_0;
  enddef;
  // ------------own global parameters mapping------------//
  def map between global and parameters_global for
    vars rho and rho;
    vars T and T;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters_global and heart_module for
    vars rho and rho;
    vars T and T;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
  enddef;
  def map between parameters and aortic_root_module for
    vars E_aortic_root and E;
    vars l_aortic_root and l;
    vars r_0_aortic_root and r_0;
    vars u_0_aortic_root and u_0;
    vars theta_aortic_root and theta;
    vars u_ext_aortic_root and u_ext;
  enddef;
  def map between parameters_global and aortic_root_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_module for
    vars E_ascending_aorta and E;
    vars l_ascending_aorta and l;
    vars r_0_ascending_aorta and r_0;
    vars u_0_ascending_aorta and u_0;
    vars theta_ascending_aorta and theta;
    vars u_ext_ascending_aorta and u_ext;
  enddef;
  def map between parameters_global and ascending_aorta_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachiocephalic_module for
    vars E_brachiocephalic and E;
    vars l_brachiocephalic and l;
    vars r_0_brachiocephalic and r_0;
    vars u_0_brachiocephalic and u_0;
    vars theta_brachiocephalic and theta;
    vars u_ext_brachiocephalic and u_ext;
  enddef;
  def map between parameters_global and brachiocephalic_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_R_module for
    vars E_subclavian_R and E;
    vars l_subclavian_R and l;
    vars r_0_subclavian_R and r_0;
    vars u_0_subclavian_R and u_0;
    vars u_ext_subclavian_R and u_ext;
    vars theta_subclavian_R and theta;
  enddef;
  def map between parameters_global and subclavian_R_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_R_module for
    vars E_common_carotid_R and E;
    vars l_common_carotid_R and l;
    vars r_0_common_carotid_R and r_0;
    vars u_0_common_carotid_R and u_0;
    vars u_ext_common_carotid_R and u_ext;
    vars theta_common_carotid_R and theta;
  enddef;
  def map between parameters_global and common_carotid_R_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_I_module for
    vars E_aortic_arch_I and E;
    vars l_aortic_arch_I and l;
    vars r_0_aortic_arch_I and r_0;
    vars u_0_aortic_arch_I and u_0;
    vars theta_aortic_arch_I and theta;
    vars u_ext_aortic_arch_I and u_ext;
  enddef;
  def map between parameters_global and aortic_arch_I_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L_module for
    vars E_common_carotid_L and E;
    vars l_common_carotid_L and l;
    vars r_0_common_carotid_L and r_0;
    vars u_0_common_carotid_L and u_0;
    vars u_ext_common_carotid_L and u_ext;
    vars theta_common_carotid_L and theta;
  enddef;
  def map between parameters_global and common_carotid_L_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_II_module for
    vars E_aortic_arch_II and E;
    vars l_aortic_arch_II and l;
    vars r_0_aortic_arch_II and r_0;
    vars u_0_aortic_arch_II and u_0;
    vars theta_aortic_arch_II and theta;
    vars u_ext_aortic_arch_II and u_ext;
  enddef;
  def map between parameters_global and aortic_arch_II_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_L_module for
    vars E_subclavian_L and E;
    vars l_subclavian_L and l;
    vars r_0_subclavian_L and r_0;
    vars u_0_subclavian_L and u_0;
    vars u_ext_subclavian_L and u_ext;
    vars theta_subclavian_L and theta;
  enddef;
  def map between parameters_global and subclavian_L_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and descending_aorta_module for
    vars E_descending_aorta and E;
    vars l_descending_aorta and l;
    vars r_0_descending_aorta and r_0;
    vars u_0_descending_aorta and u_0;
    vars theta_descending_aorta and theta;
    vars u_ext_descending_aorta and u_ext;
  enddef;
  def map between parameters_global and descending_aorta_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_module for
    vars E_abdominal_aorta and E;
    vars l_abdominal_aorta and l;
    vars r_0_abdominal_aorta and r_0;
    vars u_0_abdominal_aorta and u_0;
    vars theta_abdominal_aorta and theta;
    vars u_ext_abdominal_aorta and u_ext;
  enddef;
  def map between parameters_global and abdominal_aorta_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdomen_T_module for
    vars R_T_abdomen_T and R_T;
    vars C_T_abdomen_T and C_T;
    vars u_ext_abdomen_T and u_ext;
    vars q_us_abdomen_T and q_us;
    vars q_init_abdomen_T and q_init;
  enddef;
  def map between parameters and head_L_T_module for
    vars R_T_head_L_T and R_T;
    vars C_T_head_L_T and C_T;
    vars u_ext_head_L_T and u_ext;
    vars q_us_head_L_T and q_us;
    vars q_init_head_L_T and q_init;
  enddef;
  def map between parameters and head_R_T_module for
    vars R_T_head_R_T and R_T;
    vars C_T_head_R_T and C_T;
    vars u_ext_head_R_T and u_ext;
    vars q_us_head_R_T and q_us;
    vars q_init_head_R_T and q_init;
  enddef;
  def map between parameters and arm_L_T_module for
    vars R_T_arm_L_T and R_T;
    vars C_T_arm_L_T and C_T;
    vars u_ext_arm_L_T and u_ext;
    vars q_us_arm_L_T and q_us;
    vars q_init_arm_L_T and q_init;
  enddef;
  def map between parameters and arm_R_T_module for
    vars R_T_arm_R_T and R_T;
    vars C_T_arm_R_T and C_T;
    vars u_ext_arm_R_T and u_ext;
    vars q_us_arm_R_T and q_us;
    vars q_init_arm_R_T and q_init;
  enddef;
  def map between parameters and leg_L_T_module for
    vars R_T_leg_L_T and R_T;
    vars C_T_leg_L_T and C_T;
    vars u_ext_leg_L_T and u_ext;
    vars q_us_leg_L_T and q_us;
    vars q_init_leg_L_T and q_init;
  enddef;
  def map between parameters and leg_R_T_module for
    vars R_T_leg_R_T and R_T;
    vars C_T_leg_R_T and C_T;
    vars u_ext_leg_R_T and u_ext;
    vars q_us_leg_R_T and q_us;
    vars q_init_leg_R_T and q_init;
  enddef;
  def map between parameters and venous_ivc_module for
    vars R_venous_ivc and R;
    vars C_venous_ivc and C;
    vars u_ext_venous_ivc and u_ext;
    vars I_venous_ivc and I;
    vars q_C_init_venous_ivc and q_C_init;
    vars q_us_0_venous_ivc and q_us_0;
    vars Delta_q_us_venous_ivc and Delta_q_us;
    vars Delta_C_venous_ivc and Delta_C;
  enddef;
  def map between parameters and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars u_ext_venous_svc and u_ext;
    vars I_venous_svc and I;
    vars q_C_init_venous_svc and q_C_init;
    vars q_us_0_venous_svc and q_us_0;
    vars Delta_q_us_venous_svc and Delta_q_us;
    vars Delta_C_venous_svc and Delta_C;
  enddef;
  def map between parameters and par_module for
    vars q_0_par and q_0;
    vars R_par and R;
    vars C_par and C;
    vars I_par and I;
    vars u_ext_par and u_ext;
    vars u_0_par and u_0;
  enddef;
  def map between parameters and pvn_module for
    vars q_0_pvn and q_0;
    vars R_pvn and R;
    vars C_pvn and C;
    vars I_pvn and I;
    vars u_ext_pvn and u_ext;
    vars u_0_pvn and u_0;
  enddef;
  // ------------time mapping------------//
  def map between environment and heart_module for
    vars time and t;
  enddef;
  def map between environment and aortic_root_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_I_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_II_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L_module for
    vars time and t;
  enddef;
  def map between environment and descending_aorta_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_module for
    vars time and t;
  enddef;
  def map between environment and abdomen_T_module for
    vars time and t;
  enddef;
  def map between environment and head_L_T_module for
    vars time and t;
  enddef;
  def map between environment and head_R_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_T_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_T_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_ivc_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
  def map between environment and par_module for
    vars time and t;
  enddef;
  def map between environment and pvn_module for
    vars time and t;
  enddef;
enddef;
