def model modules as
  // ------------module_units------------//
  def import using "parasympathetic_model_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_s2 using unit per_s2;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit mmol_per_l using unit mmol_per_l;
    unit l_per_mmol using unit l_per_mmol;
    unit l_per_mmol_per_s using unit l_per_mmol_per_s;
    unit l2_per_mmol_per_s using unit l2_per_mmol_per_s;
    unit mmol_per_s2 using unit mmol_per_s2;
    unit mmol using unit mmol;
    unit mmol_per_l_per_s using unit mmol_per_l_per_s;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
  enddef;

  def comp lung_stretch_receptor_Gee2023 as
    var q_str: m3 {pub: in};
    var t: second {pub: in};
    // V_lung = sel
    //     case t > 50{second}:
    //         0.6{m3};
    //     otherwise:
    //         0{m3};
    // endsel;
    // s.43 (lr firing frequency)
    var f_ls: Hz {init: 0, pub: out};
    // change to 2 from 0.5 as I changed tau to correct unit of second
    var tau_lung: second {pub: in};
    var G_al: per_m3_s {pub: in};
    // ode(f_ls, t) = tau_lung*(-f_ls+G_al*V_lung);
    // changed so that tau has correct units of seconds. tau should be a time constant
    // Finbar has modified this to measure bronchiole stressed volume, and only increase frequency when this
    // stressed volume is above zero.
    ode(f_ls, t) = (-f_ls+G_al*q_str)/tau_lung;
  enddef;

  def comp cardiopulmonary_receptor_Gee2023 as
    var P_pvn: J_per_m3 {pub: in};
    var P_mus: J_per_m3 {pub: in};
    var P_pv_P_thor: J_per_m3 {pub: out};
    var t: second {pub: in};
    // P_mus is closest equivalent to P_thor in Finbar's lung model
    P_pv_P_thor = P_pvn-P_mus;
    // P_pv_P_thor = sel
    //     case t >= 50{second}:
    //         13{mmHg};
    //     otherwise:
    //         6{mmHg};
    // endsel;
    // s.41
    var tau_cp: second {pub: in};
    var P_l_init: J_per_m3 {pub: in};
    var P_l: J_per_m3 {init: P_l_init, pub: out};
    ode(P_l, t) = (-P_l+P_pv_P_thor)/tau_cp;
    // s.42 (cp firing frequency)
    var f_cp: Hz {pub: out};
    var f_maxl: Hz {pub: in};
    var P_tn: J_per_m3 {pub: in};
    var k_l: J_per_m3 {pub: in};
    f_cp = f_maxl/(1{dimensionless}+exp((P_tn-P_l)/k_l));
  enddef;
  // efferent sympatetic outflow /////////////////////////////////////////////////////////
  // afferent input signals --------------------------------------------------------------
  // s.46 (heart)

  def comp sympathetic_afferent_Gee2023 as
    var t: second {pub: in};
    var f_ash: Hz {pub: out};
    var G_abh: dimensionless {pub: in};
    var f_br: Hz {pub: in};
    var G_alh: dimensionless {pub: in};
    var f_ls: Hz {pub: in};
    var G_ach: dimensionless {pub: in};
    var f_cp: Hz {pub: in};
    f_ash = G_abh*f_br-G_alh*f_ls+G_ach*(f_cp-10{Hz});
    // s.47 (peripheral circulation)
    var f_asp: Hz {pub: out};
    var G_abp: dimensionless {pub: in};
    var G_alp: dimensionless {pub: in};
    var G_acp: dimensionless {pub: in};
    f_asp = G_abp*f_br+G_alp*f_ls+G_acp*(f_cp-10{Hz});
    // s.48 (unstressed volumes)
    var f_asv: Hz {pub: out};
    var G_abv: dimensionless {pub: in};
    var G_alv: dimensionless {pub: in};
    var G_acv: dimensionless {pub: in};
    f_asv = G_abv*f_br+G_alv*f_ls+G_acv*(f_cp-10{Hz});
  enddef;
  // efferent neural pathways -----------------------------------------------------------
  // s.49 (heart)

  def comp sympathetic_efferent_Gee2023 as
    var t: second {pub: in};
    var f_esh: Hz {pub: out};
    var f_esinf: Hz {pub: in};
    var f_es0: Hz {pub: in};
    var k_es: second {pub: in};
    var f_ash: Hz {pub: in};
    // (Finbar note) are all three of these supposed to be the same?
    f_esh = f_esinf+(f_es0-f_esinf)*exp(-k_es*f_ash);
    // s. 50 (peripheral circulation)
    var f_esp: Hz {pub: out};
    var f_asp: Hz {pub: in};
    f_esp = f_esinf+(f_es0-f_esinf)*exp(-k_es*f_asp);
    // s. 51 ( unstressed volumes)
    var f_esv: Hz {pub: out};
    var f_asv: Hz {pub: in};
    f_esv = f_esinf+(f_es0-f_esinf)*exp(-k_es*f_asv);
  enddef;
  // effector fxn regulation /////////////////////////////////////////////////////////////////
  //   eqns: s.52 s.53 s.54
  // peripheral circulation efferent neural pathway (f_esp) ----------------------------------
  // rsp -------------------------------------------------------------------------------------

  def comp peripheral_resistance_effector_Gee2023 as
    var sigma_Rsp: Js_per_m6 {pub: out};
    var G_Rsp: Js_per_m6 {pub: in};
    var f_esp: Hz {pub: in};
    var t: second {pub: in};
    var f_es_min: Hz {pub: in};
    sigma_Rsp = sel
      case f_esp >= f_es_min:
        G_Rsp*ln(1{second}*(f_esp-f_es_min+1{Hz}));
      otherwise:
        0{Js_per_m6};
    endsel;
    //
    var Delta_Rsp: Js_per_m6 {init: 0, pub: out};
    var tau_Rsp: second {pub: in};
    ode(Delta_Rsp, t) = 1{dimensionless}/tau_Rsp*(-Delta_Rsp+sigma_Rsp);
  enddef;
  // unstressed volumes efferent neural pathway (f_esv) ----------------------------------
  // vusv --------------------------------------------------------------------------------

  def comp unstressed_volume_effector_Gee2023 as
    var sigma_Vusv: m3 {pub: out};
    var G_Vusv: m3 {pub: in};
    var f_esv: Hz {pub: in};
    var t: second {pub: in};
    var f_es_min: Hz {pub: in};
    sigma_Vusv = sel
      case f_esv >= f_es_min:
        G_Vusv*ln(1{second}*(f_esv-f_es_min+1{Hz}));
      otherwise:
        0{m3};
    endsel;
    var Delta_Vusv: m3 {init: 0, pub: out};
    var tau_Vusv: second {pub: in};
    ode(Delta_Vusv, t) = 1{dimensionless}/tau_Vusv*(-Delta_Vusv+sigma_Vusv);
  enddef;
  // Brainstem vagal efferents ///////////////////////////////////////////////////////
  // NTS ----------------------------------------------------------------------------
  // baroreceptors

  def comp NTS_Gee2023 as
    // baroreceptors
    var t: second {pub: in};
    var f_br: Hz {pub: in};
    var f_min_br: Hz {pub: in};
    var f_max_br: Hz {pub: in};
    var f_mid_br: Hz {pub: in};
    var f_NTS_br: Hz {pub: out};
    var k_NTS_br: dimensionless {pub: in};
    f_NTS_br = (f_min_br-f_max_br)/(1{dimensionless}+pow(f_br/f_mid_br, k_NTS_br))+f_max_br;
    // lung stretch receptors
    var f_ls: Hz {pub: in};
    var f_min_ls: Hz {pub: in};
    var f_max_ls: Hz {pub: in};
    var f_mid_ls: Hz {pub: in};
    var f_NTS_ls: Hz {pub: out};
    var k_NTS_ls: dimensionless {pub: in};
    f_NTS_ls = (f_min_ls-f_max_ls)/(1{dimensionless}+pow(f_ls/f_mid_ls, k_NTS_ls))+f_max_ls;
    // cardiopulmonary receptros
    var f_cp: Hz {pub: in};
    var f_min_cp: Hz {pub: in};
    var f_max_cp: Hz {pub: in};
    var f_mid_cp: Hz {pub: in};
    var f_NTS_cp: Hz {pub: out};
    var k_NTS_cp: dimensionless {pub: in};
    f_NTS_cp = (f_min_cp-f_max_cp)/(1{dimensionless}+pow(f_cp/f_mid_cp, k_NTS_cp))+f_max_cp;
    // chemoreceptors
    var f_apc: Hz {pub: in};
    var f_min_ch: Hz {pub: in};
    var f_max_ch: Hz {pub: in};
    var f_mid_ch: Hz {pub: in};
    var f_NTS_ch: Hz {pub: out};
    var k_NTS_ch: dimensionless {pub: in};
    f_NTS_ch = (f_min_ch-f_max_ch)/(1{dimensionless}+pow(f_apc/f_mid_ch, k_NTS_ch))+f_max_ch;
  enddef;
  // DMV (new sigmoid form2) ------------------------------------------------------------------------------------------

  def comp DMV_Gee2023 as
    // var f_NTS_br: Hz {pub: in}; will just write out f_NTS_ls + f_NTS_cp
    var t: second {pub: in};
    var f_NTS_ls: Hz {pub: in};
    var f_NTS_cp: Hz {pub: in};
    var f_min_DMV: Hz {pub: in};
    var f_max_DMV: Hz {pub: in};
    var f_mid_DMV: Hz {pub: in};
    var f_DMV: Hz {pub: out};
    var k_DMV: dimensionless {pub: in};
    f_DMV = (f_min_DMV-f_max_DMV)/(1{dimensionless}+pow((f_NTS_ls+f_NTS_cp)/f_mid_DMV, k_DMV))+f_max_DMV;
  enddef;
  // step/threshold goes here ******************************************************************************************
  // NA (new sigmoid form1) -------------------------------------------------------------------------------------------

  def comp NA_Gee2023 as
    var t: second {pub: in};
    var f_NTS_br: Hz {pub: in};
    var f_NTS_ls: Hz {pub: in};
    var f_NTS_cp: Hz {pub: in};
    var f_NTS_ch: Hz {pub: in};
    var f_NTS_output: Hz {pub: out};
    var f_NA_input: Hz {pub: out};
    var k_RSA: dimensionless {pub: in};
    var s_floor: dimensionless {pub: in};
    f_NTS_output = f_NTS_br+f_NTS_ls+f_NTS_cp+f_NTS_ch;
    f_NA_input = sel
      case s_floor > 0.4{dimensionless}:
        f_NTS_output;
      otherwise:
        f_NTS_output*k_RSA;
    endsel;
    var f_min_NA: Hz {pub: in};
    var f_max_NA: Hz {pub: in};
    var f_mid_NA: Hz {pub: in};
    var f_NA: Hz {pub: out};
    var k_NA: dimensionless {pub: in};
    f_NA = (f_min_NA-f_max_NA)/(1{dimensionless}+pow(f_NA_input/f_mid_NA, k_NA))+f_max_NA;
  enddef;
  // NActr (new sigmoid form3) ----------------------------------------------------------------------------------------------

  def comp NActr_Gee2023 as
    var t: second {pub: in};
    var f_NA: Hz {pub: in};
    var f_min_NActr: Hz {pub: in};
    var f_max_NActr: Hz {pub: in};
    var f_mid_NActr: Hz {pub: in};
    // off from simulink (9.8)
    // var f_max_NA: Hz {init: 15.78};
    // var G_mid_NActr: dimensionless {init: 0.62};
    var f_NActr: Hz {pub: out};
    var k_NActr: dimensionless {pub: in};
    f_NActr = (f_min_NActr-f_max_NActr)/(1{dimensionless}+pow(f_NA/f_mid_NActr, k_NActr))+f_max_NActr;
  enddef;
  // ICN //////////////////////////////////////////////////////////////////////////////////
  // LCN ---------------------------------------------------------------------------------

  def comp LCN_Gee2023 as
    var t: second {pub: in};
    var k_evEmax_gainLCN: dimensionless {pub: in};
    var f_DMV: Hz {pub: in};
    var f_NActr: Hz {pub: in};
    var k_br_gainLCN: dimensionless {pub: in};
    var f_br: Hz {pub: in};
    var k_esh_gainLCN: dimensionless {pub: in};
    var f_esh: Hz {pub: in};
    var k_cp_gainLCN: dimensionless {pub: in};
    var f_cp: Hz {pub: in};
    var f_input_LCN_sum: Hz {pub: out};
    f_input_LCN_sum = k_evEmax_gainLCN*(f_DMV+f_NActr)+k_br_gainLCN*f_br-k_esh_gainLCN*f_esh+k_cp_gainLCN*f_cp;
    var f_input_LCN: Hz {pub: out};
    f_input_LCN = sel
      case f_input_LCN_sum >= 0{Hz}:
        f_input_LCN_sum;
      otherwise:
        0{Hz};
    endsel;
    var f_LCN: Hz {pub: out};
    var f_mid_LCN: Hz {pub: in};
    var f_min_LCN: Hz {pub: in};
    var f_max_LCN: Hz {pub: in};
    var k_LCN: dimensionless {pub: in};
    f_LCN = (f_min_LCN-f_max_LCN)/(1{dimensionless}+pow(f_input_LCN/f_mid_LCN, k_LCN))+f_max_LCN;
  enddef;
  // PN-NA --------------------------------------------------------------------------------------------

  def comp PNNA_Gee2023 as
    var t: second {pub: in};
    var f_PNNA_natural: Hz {pub: out};
    var f_PNNA: Hz {pub: out};
    var f_NA: Hz {pub: in};
    var f_LCN: Hz {pub: in};
    var f_mid_PNNA: Hz {pub: in};
    var f_min_PNNA: Hz {pub: in};
    var f_max_PNNA: Hz {pub: in};
    var k_PNNA: dimensionless {pub: in};
    var f_vagal_stim: Hz {pub: in};
    f_PNNA_natural = (f_min_PNNA-f_max_PNNA)/(1{dimensionless}+pow((f_NA+f_LCN)/f_mid_PNNA, k_PNNA))+f_max_PNNA;
    f_PNNA = f_PNNA_natural+f_vagal_stim;
  enddef;
  // PN-DMV --------------------------------------------------------------------------------------------

  def comp PNDMV_Gee2023 as
    var f_PNDMV: Hz {pub: out};
    var f_DMV: Hz {pub: in};
    var f_NActr: Hz {pub: in};
    var f_LCN: Hz {pub: in};
    var f_mid_PNDMV: Hz {pub: in};
    var f_min_PNDMV: Hz {pub: in};
    var f_max_PNDMV: Hz {pub: in};
    var k_PNDMV: dimensionless {pub: in};
    f_PNDMV = (f_min_PNDMV-f_max_PNDMV)/(1{dimensionless}+pow((f_DMV+f_NActr+f_LCN)/f_mid_PNDMV, k_PNDMV))+f_max_PNDMV;
    var f_PNDMV_filt: Hz {init: 0, pub: out};
    var tau_PNDMV: second {pub: in};
    var t: second {pub: in};
    ode(f_PNDMV_filt, t) = (f_PNDMV-f_PNDMV_filt)/tau_PNDMV;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
  // ABDONMINAL CAVITY///////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp baroreceptor_type as
    var t: second {pub: in};
    var P_sys: J_per_m3 {pub: in};
    var P_baro_init: J_per_m3 {pub: in};
    var P_baro: J_per_m3 {init: P_baro_init, pub: out};
    var f_ab: per_s {pub: out};
    var dP_sys_dt: J_per_m3s {pub: in};
    // Constants
    var P_nom: J_per_m3 {pub: in};
    var f_ab_min: per_s {pub: in};
    var f_ab_max: per_s {pub: in};
    var k_ab: J_per_m3 {pub: in};
    var tau_zb: second {pub: in};
    var tau_pb: second {pub: in};
    ode(P_baro, t) = (P_sys+tau_zb*dP_sys_dt-P_baro)/tau_pb;
    f_ab = (f_ab_min+f_ab_max*exp((P_baro-P_nom)/k_ab))/(1{dimensionless}+exp((P_baro-P_nom)/k_ab));
  enddef;

  def comp efferent_heart_period_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_Ts: second {pub: in};
    var G_Tv: s2 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_Ts: second {pub: in};
    var tau_Tv: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var f_v: per_s {pub: in};
    var Delta_Ts: second {init: 0.0, pub: out};
    var Delta_Tv: second {init: 0.0, pub: out};
    var Delta_T: second {pub: out};
    var sigma_Ts: second {pub: out};
    var sigma_Tv: second {pub: out};
    // Equations
    sigma_Ts = sel
      case f_s >= f_es_min:
        G_Ts*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_Ts, t) = (-Delta_Ts+sigma_Ts)/tau_Ts;
    sigma_Tv = G_Tv*f_v;
    // DELAY IGNORED
    ode(Delta_Tv, t) = (-Delta_Tv+sigma_Tv)/tau_Tv;
    Delta_T = Delta_Tv+Delta_Ts;
  enddef;

  def comp heart_effector_Gee2023 as
    var sigma_Es: J_per_m6 {pub: out};
    var G_Es: J_per_m6 {pub: in};
    var f_esh: Hz {pub: in};
    var t: second {pub: in};
    var f_es_min: Hz {pub: in};
    // unit consistancy for ln
    sigma_Es = sel
      case f_esh >= f_es_min:
        G_Es*ln(1{second}*(f_esh-f_es_min+1{Hz}));
      otherwise:
        0{J_per_m6};
    endsel;
    // s.56
    var Delta_Es: J_per_m6 {init: 0.0, pub: out};
    var tau_Es: second {pub: in};
    ode(Delta_Es, t) = 1{dimensionless}/tau_Es*(-Delta_Es+sigma_Es);
    // TODO I think it would be better if we changed the control so that it uses a sigmoid rather than a ln, so
    // that the maximum control can be set. G_Es is now the maximum fraction of increase in E_lv that can occur.
    //  ode(sigma_Es, t)         = (max(f_esh-f_esh_min, 0{per_s})-sigma_Es)/tau_Es;
    // Delta_Es                 = G_Es*sigma_Es/(f_esh_min+sigma_Es);
    // Emaxlv_vag--------------------------------------------------------------------------------
    // s.57
    var sigma_Ev: J_per_m6 {pub: out};
    var G_Ev: Js_per_m6 {pub: in};
    var f_PNDMV_filt: Hz {pub: in};
    sigma_Ev = G_Ev*f_PNDMV_filt;
    // s. 58
    var Delta_Ev: J_per_m6 {init: 0.0, pub: out};
    var tau_Ev: second {pub: in};
    ode(Delta_Ev, t) = 1{dimensionless}/tau_Ev*(-Delta_Ev+sigma_Ev);
    var Delta_Emax: J_per_m6 {pub: out};
    var scale: dimensionless {pub: in};
    Delta_Emax = scale*(Delta_Es+Delta_Ev);
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;
enddef;
