// #This model was automatically generated with the circulatory_autogen software
// # https://github.com/FinbarArgus/circulatory_autogen
def model CardiovascularSystem as
  def import using "physiological_parameters.cellml" for
    comp parameters using comp parameters;
    comp parameters_global using comp parameters_global;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // #STARTGENBELOW
  // ------------units------------//
  def import using "physiological_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_s2 using unit per_s2;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit mmol_per_l using unit mmol_per_l;
    unit l_per_mmol using unit l_per_mmol;
    unit l_per_mmol_per_s using unit l_per_mmol_per_s;
    unit l2_per_mmol_per_s using unit l2_per_mmol_per_s;
    unit mmol_per_s2 using unit mmol_per_s2;
    unit mmol using unit mmol;
    unit mmol_per_l_per_s using unit mmol_per_l_per_s;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
  enddef;
  // ------------imports------------//
  def import using "physiological_modules.cellml" for
    comp heart_module using comp heart_simple;
  enddef;
  def import using "physiological_modules.cellml" for
    comp ascending_aorta_A_module using comp vv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp ascending_aorta_B_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp ascending_aorta_C_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp ascending_aorta_D_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp aortic_arch_C2_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp aortic_arch_C46_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp aortic_arch_C64_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp brachiocephalic_trunk_C4_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp subclavian_L66_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp subclavian_L78_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp brachial_L82_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_carotid_L48_A_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_carotid_L48_B_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_carotid_L48_C_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_carotid_L48_D_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_carotid_R6_A_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_carotid_R6_B_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_carotid_R6_C_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp external_carotid_L62_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp external_carotid_R26_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp internal_carotid_L50_A_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp internal_carotid_L50_B_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp internal_carotid_L50_C_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp internal_carotid_R8_A_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp internal_carotid_R8_B_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp internal_carotid_R8_C_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp posterior_communicating_L8_module using comp pp_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp posterior_communicating_R206_module using comp pp_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp internal_carotid_L112_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp internal_carotid_R48_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp middle_cerebral_L114_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp middle_cerebral_R52_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp anterior_cerebral_L110_module using comp pp_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp anterior_cerebral_R46_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp anterior_cerebral_R238_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp anterior_cerebral_L42_module using comp vv_merge_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp anterior_communicating_C44_module using comp pp_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp vertebral_L2_module using comp pp_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp subclavian_R28_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp subclavian_R30_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp brachial_R34_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp vertebral_R272_module using comp pp_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp basilar_C4_module using comp vv_2in2out_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp posterior_cerebral_pre_L6_module using comp pp_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp posterior_cerebral_post_L12_module using comp vv_merge_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp posterior_cerebral_pre_R204_module using comp pp_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp posterior_cerebral_post_R208_module using comp vv_merge_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp posterior_cerebral_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp posterior_cerebral_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp external_carotid_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp external_carotid_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp middle_cerebral_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp middle_cerebral_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp anterior_cerebral_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp anterior_cerebral_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp arm_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp arm_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp aortic_arch_C94_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp thoracic_aorta_C96_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp thoracic_aorta_C100_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp thoracic_aorta_C104_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp thoracic_aorta_C108_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp thoracic_aorta_C112_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp abdominal_aorta_C114_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp trunk_C_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp abdominal_aorta_C136_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp abdominal_aorta_C164_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp abdominal_aorta_C176_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp abdominal_aorta_C188_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp abdominal_aorta_C192_module using comp pv_split_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_iliac_L194_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp external_iliac_L198_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp common_iliac_R216_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp external_iliac_R220_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp femoral_L200_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp femoral_R222_module using comp pv_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp leg_L_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp leg_R_T_module using comp pp_T_fixed_I_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp venous_lb_module using comp vp_ven_simple_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp venous_ub_module using comp vp_ven_simple_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp venous_ivc_module using comp vp_ven_simple_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp venous_svc_module using comp vp_ven_simple_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp par_module using comp vp_simple_type;
  enddef;
  def import using "physiological_modules.cellml" for
    comp pvn_module using comp vp_simple_type;
  enddef;
  // ------------vessel mappings------------//
  def map between heart_module and ascending_aorta_A_module for
    vars v_aov and v_in;
    vars u_root and u;
  enddef;
  def map between heart_module and par_module for
    vars v_puv and v_in;
    vars u_par and u;
  enddef;
  def map between ascending_aorta_A_module and ascending_aorta_B_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between ascending_aorta_B_module and ascending_aorta_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_C_module and ascending_aorta_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_D_module and aortic_arch_C2_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C46_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C64_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and common_carotid_L48_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C94_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and subclavian_L66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and common_carotid_R6_A_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and subclavian_L78_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and vertebral_L2_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L78_module and brachial_L82_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between brachial_L82_module and arm_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_A_module and common_carotid_L48_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_B_module and common_carotid_L48_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_C_module and common_carotid_L48_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and external_carotid_L62_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and internal_carotid_L50_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_A_module and common_carotid_R6_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_B_module and common_carotid_R6_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_C_module and external_carotid_R26_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_C_module and internal_carotid_R8_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between external_carotid_L62_module and external_carotid_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_carotid_R26_module and external_carotid_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_A_module and internal_carotid_L50_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_B_module and internal_carotid_L50_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_C_module and internal_carotid_L112_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_C_module and posterior_communicating_L8_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_A_module and internal_carotid_R8_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_B_module and internal_carotid_R8_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_C_module and internal_carotid_R48_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_C_module and posterior_communicating_R206_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between posterior_communicating_L8_module and posterior_cerebral_post_L12_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between posterior_communicating_R206_module and posterior_cerebral_post_R208_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between internal_carotid_L112_module and middle_cerebral_L114_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L112_module and anterior_cerebral_L110_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and middle_cerebral_R52_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and anterior_cerebral_R46_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L114_module and middle_cerebral_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R52_module and middle_cerebral_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L110_module and anterior_cerebral_L42_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_cerebral_R238_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_communicating_C44_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R238_module and anterior_cerebral_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L_T_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between anterior_communicating_C44_module and anterior_cerebral_L42_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between vertebral_L2_module and basilar_C4_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between subclavian_R28_module and subclavian_R30_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and vertebral_R272_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R30_module and brachial_R34_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between brachial_R34_module and arm_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between vertebral_R272_module and basilar_C4_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_pre_L6_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_pre_R204_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_pre_L6_module and posterior_cerebral_post_L12_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_L12_module and posterior_cerebral_L_T_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_pre_R204_module and posterior_cerebral_post_R208_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_R208_module and posterior_cerebral_R_T_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and trunk_C_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_L194_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_R216_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and external_iliac_L198_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_L198_module and femoral_L200_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and external_iliac_R220_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_R220_module and femoral_R222_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and leg_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and leg_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between venous_lb_module and venous_ivc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ub_module and venous_svc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ivc_module and heart_module for
    vars v and v_ivc;
    vars u_out and u_ra;
  enddef;
  def map between venous_svc_module and heart_module for
    vars v and v_svc;
    vars u_out and u_ra;
  enddef;
  def map between par_module and pvn_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pvn_module and heart_module for
    vars v and v_pvn;
    vars u_out and u_la;
  enddef;
  // ------------terminal venous connection------------//
  def map between posterior_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_cerebral_L_T;
  enddef;
  def map between posterior_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_cerebral_R_T;
  enddef;
  def map between external_carotid_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_L_T;
  enddef;
  def map between external_carotid_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_R_T;
  enddef;
  def map between middle_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_L_T;
  enddef;
  def map between middle_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_R_T;
  enddef;
  def map between anterior_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_anterior_cerebral_L_T;
  enddef;
  def map between anterior_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_anterior_cerebral_R_T;
  enddef;
  def map between arm_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_L_T_module and terminal_venous_connection for
    vars v_T and v_arm_L_T;
  enddef;
  def map between arm_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_R_T_module and terminal_venous_connection for
    vars v_T and v_arm_R_T;
  enddef;
  def map between trunk_C_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between trunk_C_T_module and terminal_venous_connection for
    vars v_T and v_trunk_C_T;
  enddef;
  def map between leg_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between leg_L_T_module and terminal_venous_connection for
    vars v_T and v_leg_L_T;
  enddef;
  def map between leg_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between leg_R_T_module and terminal_venous_connection for
    vars v_T and v_leg_R_T;
  enddef;
  def map between terminal_venous_connection and venous_lb_module for
    vars v_venous_lb and v_in;
  enddef;
  def map between terminal_venous_connection and venous_ub_module for
    vars v_venous_ub and v_in;
  enddef;

  def comp terminal_venous_connection as
    var v_posterior_cerebral_L_T: m3_per_s {pub: in};
    var v_posterior_cerebral_R_T: m3_per_s {pub: in};
    var v_external_carotid_L_T: m3_per_s {pub: in};
    var v_external_carotid_R_T: m3_per_s {pub: in};
    var v_middle_cerebral_L_T: m3_per_s {pub: in};
    var v_middle_cerebral_R_T: m3_per_s {pub: in};
    var v_anterior_cerebral_L_T: m3_per_s {pub: in};
    var v_anterior_cerebral_R_T: m3_per_s {pub: in};
    var v_arm_L_T: m3_per_s {pub: in};
    var v_arm_R_T: m3_per_s {pub: in};
    var v_trunk_C_T: m3_per_s {pub: in};
    var v_leg_L_T: m3_per_s {pub: in};
    var v_leg_R_T: m3_per_s {pub: in};
    var v_venous_lb: m3_per_s {pub: out};
    var v_venous_ub: m3_per_s {pub: out};
    v_venous_lb = v_trunk_C_T+v_leg_L_T+v_leg_R_T;
    v_venous_ub = v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T;
  enddef;
  // ------------generic junction connection------------//

  def comp generic_junction_connection as
  enddef;
  // ------------applying multiport operations for ports------------//

  def comp sum_blood_volume as
  enddef;
  // ------------access_variables------------//

  def comp heart as
    var rho: Js2_per_m5 {pub: in};
    var T: second {pub: in};
    var mt: dimensionless {pub: in};
    var u_ra: J_per_m3 {pub: in};
    var u_rv: J_per_m3 {pub: in};
    var u_la: J_per_m3 {pub: in};
    var u_lv: J_per_m3 {pub: in};
    var q_ra: m3 {pub: in};
    var q_rv: m3 {pub: in};
    var q_la: m3 {pub: in};
    var q_lv: m3 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: in};
    var chi_a: dimensionless {pub: in};
    var chi_afloor: dimensionless {pub: in};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var e_a: dimensionless {pub: in};
    var e_v: dimensionless {pub: in};
    var v_trv: m3_per_s {pub: in};
    var v_puv: m3_per_s {pub: in};
    var v_miv: m3_per_s {pub: in};
    var v_aov: m3_per_s {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var l_eff: metre {pub: in};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var A_eff_trv: m2 {pub: in};
    var A_eff_puv: m2 {pub: in};
    var A_eff_miv: m2 {pub: in};
    var A_eff_aov: m2 {pub: in};
    var q_heart: m3 {pub: in};
  enddef;

  def comp ascending_aorta_A as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp ascending_aorta_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp ascending_aorta_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_C2 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_C46 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_C64 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp brachiocephalic_trunk_C4 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp subclavian_L66 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp subclavian_L78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp brachial_L82 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_L48_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_L48_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_L48_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_L48_D as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_R6_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_R6_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_carotid_R6_C as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp external_carotid_L62 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp external_carotid_R26 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_L50_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_L50_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_L50_C as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_R8_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_R8_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_R8_C as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp posterior_communicating_L8 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp posterior_communicating_R206 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_L112 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp internal_carotid_R48 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp middle_cerebral_L114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp middle_cerebral_R52 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp anterior_cerebral_L110 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp anterior_cerebral_R46 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp anterior_cerebral_R238 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp anterior_cerebral_L42 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp anterior_communicating_C44 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp vertebral_L2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp subclavian_R28 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp subclavian_R30 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp brachial_R34 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp vertebral_R272 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp basilar_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp posterior_cerebral_pre_L6 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp posterior_cerebral_post_L12 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp posterior_cerebral_pre_R204 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp posterior_cerebral_post_R208 as
    var u: J_per_m3 {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var u_C_d: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp posterior_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp posterior_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp external_carotid_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp external_carotid_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp middle_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp middle_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp anterior_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp anterior_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp arm_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp arm_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp aortic_arch_C94 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_C96 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_C100 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_C104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_C108 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp thoracic_aorta_C112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_C114 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp trunk_C_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_C164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_C176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_C188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_C192 as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var du_C_dt: J_per_m3s {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_iliac_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp external_iliac_L198 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp common_iliac_R216 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp external_iliac_R220 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp femoral_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp femoral_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var E: J_per_m3 {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var theta: dimensionless {pub: in};
    var beta_g: dimensionless {pub: in};
  enddef;

  def comp leg_L_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp leg_R_T as
    var u: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
  enddef;

  def comp venous_lb as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: in};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
  enddef;

  def comp venous_ub as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: in};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
  enddef;

  def comp venous_ivc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: in};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: in};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
  enddef;

  def comp par as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
  enddef;

  def comp pvn as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
  enddef;
  // ------------global_parameters_access------------//

  def comp global as
    var rho: Js2_per_m5 {pub: in};
    var T: second {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var t_astart: second {pub: in};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var t_vstart: second {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var l_eff: metre {pub: in};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
    var g: m_per_s2 {pub: in};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
  enddef;
  // ------------own vessel mappings------------//
  def map between heart and heart_module for
    vars rho and rho;
    vars T and T;
    vars mt and mt;
    vars u_ra and u_ra;
    vars u_rv and u_rv;
    vars u_la and u_la;
    vars u_lv and u_lv;
    vars q_ra and q_ra;
    vars q_rv and q_rv;
    vars q_la and q_la;
    vars q_lv and q_lv;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars t_astart_norm and t_astart_norm;
    vars chi_a and chi_a;
    vars chi_afloor and chi_afloor;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars t_vstart_norm and t_vstart_norm;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars e_a and e_a;
    vars e_v and e_v;
    vars v_trv and v_trv;
    vars v_puv and v_puv;
    vars v_miv and v_miv;
    vars v_aov and v_aov;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars A_eff_trv and A_eff_trv;
    vars A_eff_puv and A_eff_puv;
    vars A_eff_miv and A_eff_miv;
    vars A_eff_aov and A_eff_aov;
    vars q_heart and q_heart;
  enddef;
  def map between ascending_aorta_A and ascending_aorta_A_module for
    vars u and u;
    vars u_d and u_d;
    vars v and v;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
    vars mu and mu;
  enddef;
  def map between ascending_aorta_B and ascending_aorta_B_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between ascending_aorta_C and ascending_aorta_C_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between ascending_aorta_D and ascending_aorta_D_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between aortic_arch_C2 and aortic_arch_C2_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between aortic_arch_C46 and aortic_arch_C46_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between aortic_arch_C64 and aortic_arch_C64_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between brachiocephalic_trunk_C4 and brachiocephalic_trunk_C4_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between subclavian_L66 and subclavian_L66_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between subclavian_L78 and subclavian_L78_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between brachial_L82 and brachial_L82_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_L48_A and common_carotid_L48_A_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_L48_B and common_carotid_L48_B_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_L48_C and common_carotid_L48_C_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_L48_D and common_carotid_L48_D_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_R6_A and common_carotid_R6_A_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_R6_B and common_carotid_R6_B_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between common_carotid_R6_C and common_carotid_R6_C_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between external_carotid_L62 and external_carotid_L62_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between external_carotid_R26 and external_carotid_R26_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between internal_carotid_L50_A and internal_carotid_L50_A_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between internal_carotid_L50_B and internal_carotid_L50_B_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between internal_carotid_L50_C and internal_carotid_L50_C_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between internal_carotid_R8_A and internal_carotid_R8_A_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between internal_carotid_R8_B and internal_carotid_R8_B_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between internal_carotid_R8_C and internal_carotid_R8_C_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between posterior_communicating_L8 and posterior_communicating_L8_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between posterior_communicating_R206 and posterior_communicating_R206_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between internal_carotid_L112 and internal_carotid_L112_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between internal_carotid_R48 and internal_carotid_R48_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between middle_cerebral_L114 and middle_cerebral_L114_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between middle_cerebral_R52 and middle_cerebral_R52_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between anterior_cerebral_L110 and anterior_cerebral_L110_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between anterior_cerebral_R46 and anterior_cerebral_R46_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between anterior_cerebral_R238 and anterior_cerebral_R238_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between anterior_cerebral_L42 and anterior_cerebral_L42_module for
    vars u and u;
    vars u_d and u_d;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars v and v;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between anterior_communicating_C44 and anterior_communicating_C44_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between vertebral_L2 and vertebral_L2_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between subclavian_R28 and subclavian_R28_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between subclavian_R30 and subclavian_R30_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between brachial_R34 and brachial_R34_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between vertebral_R272 and vertebral_R272_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between basilar_C4 and basilar_C4_module for
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between posterior_cerebral_pre_L6 and posterior_cerebral_pre_L6_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between posterior_cerebral_post_L12 and posterior_cerebral_post_L12_module for
    vars u and u;
    vars u_d and u_d;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars v and v;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between posterior_cerebral_pre_R204 and posterior_cerebral_pre_R204_module for
    vars u and u;
    vars v and v;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between posterior_cerebral_post_R208 and posterior_cerebral_post_R208_module for
    vars u and u;
    vars u_d and u_d;
    vars u_C and u_C;
    vars u_C_d and u_C_d;
    vars v and v;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between posterior_cerebral_L_T and posterior_cerebral_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between posterior_cerebral_R_T and posterior_cerebral_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between external_carotid_L_T and external_carotid_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between external_carotid_R_T and external_carotid_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between middle_cerebral_L_T and middle_cerebral_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between middle_cerebral_R_T and middle_cerebral_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between anterior_cerebral_L_T and anterior_cerebral_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between anterior_cerebral_R_T and anterior_cerebral_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between arm_L_T and arm_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between arm_R_T and arm_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between aortic_arch_C94 and aortic_arch_C94_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between thoracic_aorta_C96 and thoracic_aorta_C96_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between thoracic_aorta_C100 and thoracic_aorta_C100_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between thoracic_aorta_C104 and thoracic_aorta_C104_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between thoracic_aorta_C108 and thoracic_aorta_C108_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between thoracic_aorta_C112 and thoracic_aorta_C112_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between abdominal_aorta_C114 and abdominal_aorta_C114_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between trunk_C_T and trunk_C_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between abdominal_aorta_C136 and abdominal_aorta_C136_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between abdominal_aorta_C164 and abdominal_aorta_C164_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between abdominal_aorta_C176 and abdominal_aorta_C176_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between abdominal_aorta_C188 and abdominal_aorta_C188_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between abdominal_aorta_C192 and abdominal_aorta_C192_module for
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars u_0 and u_0;
    vars theta and theta;
    vars u_ext and u_ext;
    vars beta_g and beta_g;
  enddef;
  def map between common_iliac_L194 and common_iliac_L194_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between external_iliac_L198 and external_iliac_L198_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between common_iliac_R216 and common_iliac_R216_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between external_iliac_R220 and external_iliac_R220_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between femoral_L200 and femoral_L200_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between femoral_R222 and femoral_R222_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars theta and theta;
    vars beta_g and beta_g;
  enddef;
  def map between leg_L_T and leg_L_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between leg_R_T and leg_R_T_module for
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars q and q;
    vars q_us and q_us;
    vars q_init and q_init;
  enddef;
  def map between venous_lb and venous_lb_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars u_ext and u_ext;
    vars I and I;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
    vars Delta_C and Delta_C;
  enddef;
  def map between venous_ub and venous_ub_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars u_ext and u_ext;
    vars I and I;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
    vars Delta_C and Delta_C;
  enddef;
  def map between venous_ivc and venous_ivc_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars u_ext and u_ext;
    vars I and I;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
    vars Delta_C and Delta_C;
  enddef;
  def map between venous_svc and venous_svc_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars u_ext and u_ext;
    vars I and I;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
    vars Delta_C and Delta_C;
  enddef;
  def map between par and par_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R and R;
    vars C and C;
    vars I and I;
    vars u_ext and u_ext;
    vars u_0 and u_0;
  enddef;
  def map between pvn and pvn_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R and R;
    vars C and C;
    vars I and I;
    vars u_ext and u_ext;
    vars u_0 and u_0;
  enddef;
  // ------------own global parameters mapping------------//
  def map between global and parameters_global for
    vars rho and rho;
    vars T and T;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters_global and heart_module for
    vars rho and rho;
    vars T and T;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
  enddef;
  def map between parameters and ascending_aorta_A_module for
    vars E_ascending_aorta_A and E;
    vars l_ascending_aorta_A and l;
    vars r_0_ascending_aorta_A and r_0;
    vars u_0_ascending_aorta_A and u_0;
    vars theta_ascending_aorta_A and theta;
    vars u_ext_ascending_aorta_A and u_ext;
  enddef;
  def map between parameters_global and ascending_aorta_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_B_module for
    vars E_ascending_aorta_B and E;
    vars l_ascending_aorta_B and l;
    vars r_0_ascending_aorta_B and r_0;
    vars u_0_ascending_aorta_B and u_0;
    vars u_ext_ascending_aorta_B and u_ext;
    vars theta_ascending_aorta_B and theta;
  enddef;
  def map between parameters_global and ascending_aorta_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_C_module for
    vars E_ascending_aorta_C and E;
    vars l_ascending_aorta_C and l;
    vars r_0_ascending_aorta_C and r_0;
    vars u_0_ascending_aorta_C and u_0;
    vars u_ext_ascending_aorta_C and u_ext;
    vars theta_ascending_aorta_C and theta;
  enddef;
  def map between parameters_global and ascending_aorta_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_D_module for
    vars E_ascending_aorta_D and E;
    vars l_ascending_aorta_D and l;
    vars r_0_ascending_aorta_D and r_0;
    vars u_0_ascending_aorta_D and u_0;
    vars u_ext_ascending_aorta_D and u_ext;
    vars theta_ascending_aorta_D and theta;
  enddef;
  def map between parameters_global and ascending_aorta_D_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C2_module for
    vars E_aortic_arch_C2 and E;
    vars l_aortic_arch_C2 and l;
    vars r_0_aortic_arch_C2 and r_0;
    vars u_0_aortic_arch_C2 and u_0;
    vars theta_aortic_arch_C2 and theta;
    vars u_ext_aortic_arch_C2 and u_ext;
  enddef;
  def map between parameters_global and aortic_arch_C2_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C46_module for
    vars E_aortic_arch_C46 and E;
    vars l_aortic_arch_C46 and l;
    vars r_0_aortic_arch_C46 and r_0;
    vars u_0_aortic_arch_C46 and u_0;
    vars theta_aortic_arch_C46 and theta;
    vars u_ext_aortic_arch_C46 and u_ext;
  enddef;
  def map between parameters_global and aortic_arch_C46_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C64_module for
    vars E_aortic_arch_C64 and E;
    vars l_aortic_arch_C64 and l;
    vars r_0_aortic_arch_C64 and r_0;
    vars u_0_aortic_arch_C64 and u_0;
    vars theta_aortic_arch_C64 and theta;
    vars u_ext_aortic_arch_C64 and u_ext;
  enddef;
  def map between parameters_global and aortic_arch_C64_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachiocephalic_trunk_C4_module for
    vars E_brachiocephalic_trunk_C4 and E;
    vars l_brachiocephalic_trunk_C4 and l;
    vars r_0_brachiocephalic_trunk_C4 and r_0;
    vars u_0_brachiocephalic_trunk_C4 and u_0;
    vars theta_brachiocephalic_trunk_C4 and theta;
    vars u_ext_brachiocephalic_trunk_C4 and u_ext;
  enddef;
  def map between parameters_global and brachiocephalic_trunk_C4_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_L66_module for
    vars E_subclavian_L66 and E;
    vars l_subclavian_L66 and l;
    vars r_0_subclavian_L66 and r_0;
    vars u_0_subclavian_L66 and u_0;
    vars theta_subclavian_L66 and theta;
    vars u_ext_subclavian_L66 and u_ext;
  enddef;
  def map between parameters_global and subclavian_L66_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_L78_module for
    vars E_subclavian_L78 and E;
    vars l_subclavian_L78 and l;
    vars r_0_subclavian_L78 and r_0;
    vars u_0_subclavian_L78 and u_0;
    vars u_ext_subclavian_L78 and u_ext;
    vars theta_subclavian_L78 and theta;
  enddef;
  def map between parameters_global and subclavian_L78_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachial_L82_module for
    vars E_brachial_L82 and E;
    vars l_brachial_L82 and l;
    vars r_0_brachial_L82 and r_0;
    vars u_0_brachial_L82 and u_0;
    vars u_ext_brachial_L82 and u_ext;
    vars theta_brachial_L82 and theta;
  enddef;
  def map between parameters_global and brachial_L82_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L48_A_module for
    vars E_common_carotid_L48_A and E;
    vars l_common_carotid_L48_A and l;
    vars r_0_common_carotid_L48_A and r_0;
    vars u_0_common_carotid_L48_A and u_0;
    vars u_ext_common_carotid_L48_A and u_ext;
    vars theta_common_carotid_L48_A and theta;
  enddef;
  def map between parameters_global and common_carotid_L48_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L48_B_module for
    vars E_common_carotid_L48_B and E;
    vars l_common_carotid_L48_B and l;
    vars r_0_common_carotid_L48_B and r_0;
    vars u_0_common_carotid_L48_B and u_0;
    vars u_ext_common_carotid_L48_B and u_ext;
    vars theta_common_carotid_L48_B and theta;
  enddef;
  def map between parameters_global and common_carotid_L48_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L48_C_module for
    vars E_common_carotid_L48_C and E;
    vars l_common_carotid_L48_C and l;
    vars r_0_common_carotid_L48_C and r_0;
    vars u_0_common_carotid_L48_C and u_0;
    vars u_ext_common_carotid_L48_C and u_ext;
    vars theta_common_carotid_L48_C and theta;
  enddef;
  def map between parameters_global and common_carotid_L48_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L48_D_module for
    vars E_common_carotid_L48_D and E;
    vars l_common_carotid_L48_D and l;
    vars r_0_common_carotid_L48_D and r_0;
    vars u_0_common_carotid_L48_D and u_0;
    vars theta_common_carotid_L48_D and theta;
    vars u_ext_common_carotid_L48_D and u_ext;
  enddef;
  def map between parameters_global and common_carotid_L48_D_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_R6_A_module for
    vars E_common_carotid_R6_A and E;
    vars l_common_carotid_R6_A and l;
    vars r_0_common_carotid_R6_A and r_0;
    vars u_0_common_carotid_R6_A and u_0;
    vars u_ext_common_carotid_R6_A and u_ext;
    vars theta_common_carotid_R6_A and theta;
  enddef;
  def map between parameters_global and common_carotid_R6_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_R6_B_module for
    vars E_common_carotid_R6_B and E;
    vars l_common_carotid_R6_B and l;
    vars r_0_common_carotid_R6_B and r_0;
    vars u_0_common_carotid_R6_B and u_0;
    vars u_ext_common_carotid_R6_B and u_ext;
    vars theta_common_carotid_R6_B and theta;
  enddef;
  def map between parameters_global and common_carotid_R6_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_R6_C_module for
    vars E_common_carotid_R6_C and E;
    vars l_common_carotid_R6_C and l;
    vars r_0_common_carotid_R6_C and r_0;
    vars u_0_common_carotid_R6_C and u_0;
    vars theta_common_carotid_R6_C and theta;
    vars u_ext_common_carotid_R6_C and u_ext;
  enddef;
  def map between parameters_global and common_carotid_R6_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_carotid_L62_module for
    vars E_external_carotid_L62 and E;
    vars l_external_carotid_L62 and l;
    vars r_0_external_carotid_L62 and r_0;
    vars u_0_external_carotid_L62 and u_0;
    vars u_ext_external_carotid_L62 and u_ext;
    vars theta_external_carotid_L62 and theta;
  enddef;
  def map between parameters_global and external_carotid_L62_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_carotid_R26_module for
    vars E_external_carotid_R26 and E;
    vars l_external_carotid_R26 and l;
    vars r_0_external_carotid_R26 and r_0;
    vars u_0_external_carotid_R26 and u_0;
    vars u_ext_external_carotid_R26 and u_ext;
    vars theta_external_carotid_R26 and theta;
  enddef;
  def map between parameters_global and external_carotid_R26_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L50_A_module for
    vars E_internal_carotid_L50_A and E;
    vars l_internal_carotid_L50_A and l;
    vars r_0_internal_carotid_L50_A and r_0;
    vars u_0_internal_carotid_L50_A and u_0;
    vars u_ext_internal_carotid_L50_A and u_ext;
    vars theta_internal_carotid_L50_A and theta;
  enddef;
  def map between parameters_global and internal_carotid_L50_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L50_B_module for
    vars E_internal_carotid_L50_B and E;
    vars l_internal_carotid_L50_B and l;
    vars r_0_internal_carotid_L50_B and r_0;
    vars u_0_internal_carotid_L50_B and u_0;
    vars u_ext_internal_carotid_L50_B and u_ext;
    vars theta_internal_carotid_L50_B and theta;
  enddef;
  def map between parameters_global and internal_carotid_L50_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L50_C_module for
    vars E_internal_carotid_L50_C and E;
    vars l_internal_carotid_L50_C and l;
    vars r_0_internal_carotid_L50_C and r_0;
    vars u_0_internal_carotid_L50_C and u_0;
    vars theta_internal_carotid_L50_C and theta;
    vars u_ext_internal_carotid_L50_C and u_ext;
  enddef;
  def map between parameters_global and internal_carotid_L50_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R8_A_module for
    vars E_internal_carotid_R8_A and E;
    vars l_internal_carotid_R8_A and l;
    vars r_0_internal_carotid_R8_A and r_0;
    vars u_0_internal_carotid_R8_A and u_0;
    vars u_ext_internal_carotid_R8_A and u_ext;
    vars theta_internal_carotid_R8_A and theta;
  enddef;
  def map between parameters_global and internal_carotid_R8_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R8_B_module for
    vars E_internal_carotid_R8_B and E;
    vars l_internal_carotid_R8_B and l;
    vars r_0_internal_carotid_R8_B and r_0;
    vars u_0_internal_carotid_R8_B and u_0;
    vars u_ext_internal_carotid_R8_B and u_ext;
    vars theta_internal_carotid_R8_B and theta;
  enddef;
  def map between parameters_global and internal_carotid_R8_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R8_C_module for
    vars E_internal_carotid_R8_C and E;
    vars l_internal_carotid_R8_C and l;
    vars r_0_internal_carotid_R8_C and r_0;
    vars u_0_internal_carotid_R8_C and u_0;
    vars theta_internal_carotid_R8_C and theta;
    vars u_ext_internal_carotid_R8_C and u_ext;
  enddef;
  def map between parameters_global and internal_carotid_R8_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_communicating_L8_module for
    vars E_posterior_communicating_L8 and E;
    vars l_posterior_communicating_L8 and l;
    vars r_0_posterior_communicating_L8 and r_0;
    vars u_0_posterior_communicating_L8 and u_0;
    vars u_ext_posterior_communicating_L8 and u_ext;
    vars theta_posterior_communicating_L8 and theta;
  enddef;
  def map between parameters_global and posterior_communicating_L8_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_communicating_R206_module for
    vars E_posterior_communicating_R206 and E;
    vars l_posterior_communicating_R206 and l;
    vars r_0_posterior_communicating_R206 and r_0;
    vars u_0_posterior_communicating_R206 and u_0;
    vars u_ext_posterior_communicating_R206 and u_ext;
    vars theta_posterior_communicating_R206 and theta;
  enddef;
  def map between parameters_global and posterior_communicating_R206_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L112_module for
    vars E_internal_carotid_L112 and E;
    vars l_internal_carotid_L112 and l;
    vars r_0_internal_carotid_L112 and r_0;
    vars u_0_internal_carotid_L112 and u_0;
    vars theta_internal_carotid_L112 and theta;
    vars u_ext_internal_carotid_L112 and u_ext;
  enddef;
  def map between parameters_global and internal_carotid_L112_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R48_module for
    vars E_internal_carotid_R48 and E;
    vars l_internal_carotid_R48 and l;
    vars r_0_internal_carotid_R48 and r_0;
    vars u_0_internal_carotid_R48 and u_0;
    vars theta_internal_carotid_R48 and theta;
    vars u_ext_internal_carotid_R48 and u_ext;
  enddef;
  def map between parameters_global and internal_carotid_R48_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_L114_module for
    vars E_middle_cerebral_L114 and E;
    vars l_middle_cerebral_L114 and l;
    vars r_0_middle_cerebral_L114 and r_0;
    vars u_0_middle_cerebral_L114 and u_0;
    vars u_ext_middle_cerebral_L114 and u_ext;
    vars theta_middle_cerebral_L114 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_L114_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_R52_module for
    vars E_middle_cerebral_R52 and E;
    vars l_middle_cerebral_R52 and l;
    vars r_0_middle_cerebral_R52 and r_0;
    vars u_0_middle_cerebral_R52 and u_0;
    vars u_ext_middle_cerebral_R52 and u_ext;
    vars theta_middle_cerebral_R52 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_R52_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_L110_module for
    vars E_anterior_cerebral_L110 and E;
    vars l_anterior_cerebral_L110 and l;
    vars r_0_anterior_cerebral_L110 and r_0;
    vars u_0_anterior_cerebral_L110 and u_0;
    vars u_ext_anterior_cerebral_L110 and u_ext;
    vars theta_anterior_cerebral_L110 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_L110_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_R46_module for
    vars E_anterior_cerebral_R46 and E;
    vars l_anterior_cerebral_R46 and l;
    vars r_0_anterior_cerebral_R46 and r_0;
    vars u_0_anterior_cerebral_R46 and u_0;
    vars theta_anterior_cerebral_R46 and theta;
    vars u_ext_anterior_cerebral_R46 and u_ext;
  enddef;
  def map between parameters_global and anterior_cerebral_R46_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_R238_module for
    vars E_anterior_cerebral_R238 and E;
    vars l_anterior_cerebral_R238 and l;
    vars r_0_anterior_cerebral_R238 and r_0;
    vars u_0_anterior_cerebral_R238 and u_0;
    vars u_ext_anterior_cerebral_R238 and u_ext;
    vars theta_anterior_cerebral_R238 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_R238_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_L42_module for
    vars E_anterior_cerebral_L42 and E;
    vars l_anterior_cerebral_L42 and l;
    vars r_0_anterior_cerebral_L42 and r_0;
    vars u_0_anterior_cerebral_L42 and u_0;
    vars u_ext_anterior_cerebral_L42 and u_ext;
    vars theta_anterior_cerebral_L42 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_L42_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_communicating_C44_module for
    vars E_anterior_communicating_C44 and E;
    vars l_anterior_communicating_C44 and l;
    vars r_0_anterior_communicating_C44 and r_0;
    vars u_0_anterior_communicating_C44 and u_0;
    vars u_ext_anterior_communicating_C44 and u_ext;
    vars theta_anterior_communicating_C44 and theta;
  enddef;
  def map between parameters_global and anterior_communicating_C44_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and vertebral_L2_module for
    vars E_vertebral_L2 and E;
    vars l_vertebral_L2 and l;
    vars r_0_vertebral_L2 and r_0;
    vars u_0_vertebral_L2 and u_0;
    vars u_ext_vertebral_L2 and u_ext;
    vars theta_vertebral_L2 and theta;
  enddef;
  def map between parameters_global and vertebral_L2_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_R28_module for
    vars E_subclavian_R28 and E;
    vars l_subclavian_R28 and l;
    vars r_0_subclavian_R28 and r_0;
    vars u_0_subclavian_R28 and u_0;
    vars theta_subclavian_R28 and theta;
    vars u_ext_subclavian_R28 and u_ext;
  enddef;
  def map between parameters_global and subclavian_R28_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_R30_module for
    vars E_subclavian_R30 and E;
    vars l_subclavian_R30 and l;
    vars r_0_subclavian_R30 and r_0;
    vars u_0_subclavian_R30 and u_0;
    vars u_ext_subclavian_R30 and u_ext;
    vars theta_subclavian_R30 and theta;
  enddef;
  def map between parameters_global and subclavian_R30_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachial_R34_module for
    vars E_brachial_R34 and E;
    vars l_brachial_R34 and l;
    vars r_0_brachial_R34 and r_0;
    vars u_0_brachial_R34 and u_0;
    vars u_ext_brachial_R34 and u_ext;
    vars theta_brachial_R34 and theta;
  enddef;
  def map between parameters_global and brachial_R34_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and vertebral_R272_module for
    vars E_vertebral_R272 and E;
    vars l_vertebral_R272 and l;
    vars r_0_vertebral_R272 and r_0;
    vars u_0_vertebral_R272 and u_0;
    vars u_ext_vertebral_R272 and u_ext;
    vars theta_vertebral_R272 and theta;
  enddef;
  def map between parameters_global and vertebral_R272_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and basilar_C4_module for
    vars E_basilar_C4 and E;
    vars l_basilar_C4 and l;
    vars r_0_basilar_C4 and r_0;
    vars u_0_basilar_C4 and u_0;
    vars theta_basilar_C4 and theta;
    vars u_ext_basilar_C4 and u_ext;
  enddef;
  def map between parameters_global and basilar_C4_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_pre_L6_module for
    vars E_posterior_cerebral_pre_L6 and E;
    vars l_posterior_cerebral_pre_L6 and l;
    vars r_0_posterior_cerebral_pre_L6 and r_0;
    vars u_0_posterior_cerebral_pre_L6 and u_0;
    vars u_ext_posterior_cerebral_pre_L6 and u_ext;
    vars theta_posterior_cerebral_pre_L6 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_pre_L6_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_post_L12_module for
    vars E_posterior_cerebral_post_L12 and E;
    vars l_posterior_cerebral_post_L12 and l;
    vars r_0_posterior_cerebral_post_L12 and r_0;
    vars u_0_posterior_cerebral_post_L12 and u_0;
    vars u_ext_posterior_cerebral_post_L12 and u_ext;
    vars theta_posterior_cerebral_post_L12 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_post_L12_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_pre_R204_module for
    vars E_posterior_cerebral_pre_R204 and E;
    vars l_posterior_cerebral_pre_R204 and l;
    vars r_0_posterior_cerebral_pre_R204 and r_0;
    vars u_0_posterior_cerebral_pre_R204 and u_0;
    vars u_ext_posterior_cerebral_pre_R204 and u_ext;
    vars theta_posterior_cerebral_pre_R204 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_pre_R204_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_post_R208_module for
    vars E_posterior_cerebral_post_R208 and E;
    vars l_posterior_cerebral_post_R208 and l;
    vars r_0_posterior_cerebral_post_R208 and r_0;
    vars u_0_posterior_cerebral_post_R208 and u_0;
    vars u_ext_posterior_cerebral_post_R208 and u_ext;
    vars theta_posterior_cerebral_post_R208 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_post_R208_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_L_T_module for
    vars R_T_posterior_cerebral_L_T and R_T;
    vars C_T_posterior_cerebral_L_T and C_T;
    vars u_ext_posterior_cerebral_L_T and u_ext;
    vars q_us_posterior_cerebral_L_T and q_us;
    vars q_init_posterior_cerebral_L_T and q_init;
  enddef;
  def map between parameters and posterior_cerebral_R_T_module for
    vars R_T_posterior_cerebral_R_T and R_T;
    vars C_T_posterior_cerebral_R_T and C_T;
    vars u_ext_posterior_cerebral_R_T and u_ext;
    vars q_us_posterior_cerebral_R_T and q_us;
    vars q_init_posterior_cerebral_R_T and q_init;
  enddef;
  def map between parameters and external_carotid_L_T_module for
    vars R_T_external_carotid_L_T and R_T;
    vars C_T_external_carotid_L_T and C_T;
    vars u_ext_external_carotid_L_T and u_ext;
    vars q_us_external_carotid_L_T and q_us;
    vars q_init_external_carotid_L_T and q_init;
  enddef;
  def map between parameters and external_carotid_R_T_module for
    vars R_T_external_carotid_R_T and R_T;
    vars C_T_external_carotid_R_T and C_T;
    vars u_ext_external_carotid_R_T and u_ext;
    vars q_us_external_carotid_R_T and q_us;
    vars q_init_external_carotid_R_T and q_init;
  enddef;
  def map between parameters and middle_cerebral_L_T_module for
    vars R_T_middle_cerebral_L_T and R_T;
    vars C_T_middle_cerebral_L_T and C_T;
    vars u_ext_middle_cerebral_L_T and u_ext;
    vars q_us_middle_cerebral_L_T and q_us;
    vars q_init_middle_cerebral_L_T and q_init;
  enddef;
  def map between parameters and middle_cerebral_R_T_module for
    vars R_T_middle_cerebral_R_T and R_T;
    vars C_T_middle_cerebral_R_T and C_T;
    vars u_ext_middle_cerebral_R_T and u_ext;
    vars q_us_middle_cerebral_R_T and q_us;
    vars q_init_middle_cerebral_R_T and q_init;
  enddef;
  def map between parameters and anterior_cerebral_L_T_module for
    vars R_T_anterior_cerebral_L_T and R_T;
    vars C_T_anterior_cerebral_L_T and C_T;
    vars u_ext_anterior_cerebral_L_T and u_ext;
    vars q_us_anterior_cerebral_L_T and q_us;
    vars q_init_anterior_cerebral_L_T and q_init;
  enddef;
  def map between parameters and anterior_cerebral_R_T_module for
    vars R_T_anterior_cerebral_R_T and R_T;
    vars C_T_anterior_cerebral_R_T and C_T;
    vars u_ext_anterior_cerebral_R_T and u_ext;
    vars q_us_anterior_cerebral_R_T and q_us;
    vars q_init_anterior_cerebral_R_T and q_init;
  enddef;
  def map between parameters and arm_L_T_module for
    vars R_T_arm_L_T and R_T;
    vars C_T_arm_L_T and C_T;
    vars u_ext_arm_L_T and u_ext;
    vars q_us_arm_L_T and q_us;
    vars q_init_arm_L_T and q_init;
  enddef;
  def map between parameters and arm_R_T_module for
    vars R_T_arm_R_T and R_T;
    vars C_T_arm_R_T and C_T;
    vars u_ext_arm_R_T and u_ext;
    vars q_us_arm_R_T and q_us;
    vars q_init_arm_R_T and q_init;
  enddef;
  def map between parameters and aortic_arch_C94_module for
    vars E_aortic_arch_C94 and E;
    vars l_aortic_arch_C94 and l;
    vars r_0_aortic_arch_C94 and r_0;
    vars u_0_aortic_arch_C94 and u_0;
    vars u_ext_aortic_arch_C94 and u_ext;
    vars theta_aortic_arch_C94 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C94_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C96_module for
    vars E_thoracic_aorta_C96 and E;
    vars l_thoracic_aorta_C96 and l;
    vars r_0_thoracic_aorta_C96 and r_0;
    vars u_0_thoracic_aorta_C96 and u_0;
    vars u_ext_thoracic_aorta_C96 and u_ext;
    vars theta_thoracic_aorta_C96 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C96_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C100_module for
    vars E_thoracic_aorta_C100 and E;
    vars l_thoracic_aorta_C100 and l;
    vars r_0_thoracic_aorta_C100 and r_0;
    vars u_0_thoracic_aorta_C100 and u_0;
    vars u_ext_thoracic_aorta_C100 and u_ext;
    vars theta_thoracic_aorta_C100 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C100_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C104_module for
    vars E_thoracic_aorta_C104 and E;
    vars l_thoracic_aorta_C104 and l;
    vars r_0_thoracic_aorta_C104 and r_0;
    vars u_0_thoracic_aorta_C104 and u_0;
    vars u_ext_thoracic_aorta_C104 and u_ext;
    vars theta_thoracic_aorta_C104 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C104_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C108_module for
    vars E_thoracic_aorta_C108 and E;
    vars l_thoracic_aorta_C108 and l;
    vars r_0_thoracic_aorta_C108 and r_0;
    vars u_0_thoracic_aorta_C108 and u_0;
    vars u_ext_thoracic_aorta_C108 and u_ext;
    vars theta_thoracic_aorta_C108 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C108_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C112_module for
    vars E_thoracic_aorta_C112 and E;
    vars l_thoracic_aorta_C112 and l;
    vars r_0_thoracic_aorta_C112 and r_0;
    vars u_0_thoracic_aorta_C112 and u_0;
    vars u_ext_thoracic_aorta_C112 and u_ext;
    vars theta_thoracic_aorta_C112 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C112_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C114_module for
    vars E_abdominal_aorta_C114 and E;
    vars l_abdominal_aorta_C114 and l;
    vars r_0_abdominal_aorta_C114 and r_0;
    vars u_0_abdominal_aorta_C114 and u_0;
    vars theta_abdominal_aorta_C114 and theta;
    vars u_ext_abdominal_aorta_C114 and u_ext;
  enddef;
  def map between parameters_global and abdominal_aorta_C114_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and trunk_C_T_module for
    vars R_T_trunk_C_T and R_T;
    vars C_T_trunk_C_T and C_T;
    vars u_ext_trunk_C_T and u_ext;
    vars q_us_trunk_C_T and q_us;
    vars q_init_trunk_C_T and q_init;
  enddef;
  def map between parameters and abdominal_aorta_C136_module for
    vars E_abdominal_aorta_C136 and E;
    vars l_abdominal_aorta_C136 and l;
    vars r_0_abdominal_aorta_C136 and r_0;
    vars u_0_abdominal_aorta_C136 and u_0;
    vars u_ext_abdominal_aorta_C136 and u_ext;
    vars theta_abdominal_aorta_C136 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C136_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C164_module for
    vars E_abdominal_aorta_C164 and E;
    vars l_abdominal_aorta_C164 and l;
    vars r_0_abdominal_aorta_C164 and r_0;
    vars u_0_abdominal_aorta_C164 and u_0;
    vars u_ext_abdominal_aorta_C164 and u_ext;
    vars theta_abdominal_aorta_C164 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C164_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C176_module for
    vars E_abdominal_aorta_C176 and E;
    vars l_abdominal_aorta_C176 and l;
    vars r_0_abdominal_aorta_C176 and r_0;
    vars u_0_abdominal_aorta_C176 and u_0;
    vars u_ext_abdominal_aorta_C176 and u_ext;
    vars theta_abdominal_aorta_C176 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C176_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C188_module for
    vars E_abdominal_aorta_C188 and E;
    vars l_abdominal_aorta_C188 and l;
    vars r_0_abdominal_aorta_C188 and r_0;
    vars u_0_abdominal_aorta_C188 and u_0;
    vars u_ext_abdominal_aorta_C188 and u_ext;
    vars theta_abdominal_aorta_C188 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C188_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C192_module for
    vars E_abdominal_aorta_C192 and E;
    vars l_abdominal_aorta_C192 and l;
    vars r_0_abdominal_aorta_C192 and r_0;
    vars u_0_abdominal_aorta_C192 and u_0;
    vars theta_abdominal_aorta_C192 and theta;
    vars u_ext_abdominal_aorta_C192 and u_ext;
  enddef;
  def map between parameters_global and abdominal_aorta_C192_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_iliac_L194_module for
    vars E_common_iliac_L194 and E;
    vars l_common_iliac_L194 and l;
    vars r_0_common_iliac_L194 and r_0;
    vars u_0_common_iliac_L194 and u_0;
    vars u_ext_common_iliac_L194 and u_ext;
    vars theta_common_iliac_L194 and theta;
  enddef;
  def map between parameters_global and common_iliac_L194_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_iliac_L198_module for
    vars E_external_iliac_L198 and E;
    vars l_external_iliac_L198 and l;
    vars r_0_external_iliac_L198 and r_0;
    vars u_0_external_iliac_L198 and u_0;
    vars u_ext_external_iliac_L198 and u_ext;
    vars theta_external_iliac_L198 and theta;
  enddef;
  def map between parameters_global and external_iliac_L198_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_iliac_R216_module for
    vars E_common_iliac_R216 and E;
    vars l_common_iliac_R216 and l;
    vars r_0_common_iliac_R216 and r_0;
    vars u_0_common_iliac_R216 and u_0;
    vars u_ext_common_iliac_R216 and u_ext;
    vars theta_common_iliac_R216 and theta;
  enddef;
  def map between parameters_global and common_iliac_R216_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_iliac_R220_module for
    vars E_external_iliac_R220 and E;
    vars l_external_iliac_R220 and l;
    vars r_0_external_iliac_R220 and r_0;
    vars u_0_external_iliac_R220 and u_0;
    vars u_ext_external_iliac_R220 and u_ext;
    vars theta_external_iliac_R220 and theta;
  enddef;
  def map between parameters_global and external_iliac_R220_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and femoral_L200_module for
    vars E_femoral_L200 and E;
    vars l_femoral_L200 and l;
    vars r_0_femoral_L200 and r_0;
    vars u_0_femoral_L200 and u_0;
    vars u_ext_femoral_L200 and u_ext;
    vars theta_femoral_L200 and theta;
  enddef;
  def map between parameters_global and femoral_L200_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and femoral_R222_module for
    vars E_femoral_R222 and E;
    vars l_femoral_R222 and l;
    vars r_0_femoral_R222 and r_0;
    vars u_0_femoral_R222 and u_0;
    vars u_ext_femoral_R222 and u_ext;
    vars theta_femoral_R222 and theta;
  enddef;
  def map between parameters_global and femoral_R222_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and leg_L_T_module for
    vars R_T_leg_L_T and R_T;
    vars C_T_leg_L_T and C_T;
    vars u_ext_leg_L_T and u_ext;
    vars q_us_leg_L_T and q_us;
    vars q_init_leg_L_T and q_init;
  enddef;
  def map between parameters and leg_R_T_module for
    vars R_T_leg_R_T and R_T;
    vars C_T_leg_R_T and C_T;
    vars u_ext_leg_R_T and u_ext;
    vars q_us_leg_R_T and q_us;
    vars q_init_leg_R_T and q_init;
  enddef;
  def map between parameters and venous_lb_module for
    vars R_venous_lb and R;
    vars C_venous_lb and C;
    vars u_ext_venous_lb and u_ext;
    vars I_venous_lb and I;
    vars q_C_init_venous_lb and q_C_init;
    vars q_us_0_venous_lb and q_us_0;
    vars Delta_q_us_venous_lb and Delta_q_us;
    vars Delta_C_venous_lb and Delta_C;
  enddef;
  def map between parameters and venous_ub_module for
    vars R_venous_ub and R;
    vars C_venous_ub and C;
    vars u_ext_venous_ub and u_ext;
    vars I_venous_ub and I;
    vars q_C_init_venous_ub and q_C_init;
    vars q_us_0_venous_ub and q_us_0;
    vars Delta_q_us_venous_ub and Delta_q_us;
    vars Delta_C_venous_ub and Delta_C;
  enddef;
  def map between parameters and venous_ivc_module for
    vars R_venous_ivc and R;
    vars C_venous_ivc and C;
    vars u_ext_venous_ivc and u_ext;
    vars I_venous_ivc and I;
    vars q_C_init_venous_ivc and q_C_init;
    vars q_us_0_venous_ivc and q_us_0;
    vars Delta_q_us_venous_ivc and Delta_q_us;
    vars Delta_C_venous_ivc and Delta_C;
  enddef;
  def map between parameters and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars u_ext_venous_svc and u_ext;
    vars I_venous_svc and I;
    vars q_C_init_venous_svc and q_C_init;
    vars q_us_0_venous_svc and q_us_0;
    vars Delta_q_us_venous_svc and Delta_q_us;
    vars Delta_C_venous_svc and Delta_C;
  enddef;
  def map between parameters and par_module for
    vars q_0_par and q_0;
    vars R_par and R;
    vars C_par and C;
    vars I_par and I;
    vars u_ext_par and u_ext;
    vars u_0_par and u_0;
  enddef;
  def map between parameters and pvn_module for
    vars q_0_pvn and q_0;
    vars R_pvn and R;
    vars C_pvn and C;
    vars I_pvn and I;
    vars u_ext_pvn and u_ext;
    vars u_0_pvn and u_0;
  enddef;
  // ------------time mapping------------//
  def map between environment and heart_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_A_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_B_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_C_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_D_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C2_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C46_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C64_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_C4_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L66_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L78_module for
    vars time and t;
  enddef;
  def map between environment and brachial_L82_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_C_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_D_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_C_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L62_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R26_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_C_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_C_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_L8_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_R206_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L112_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R48_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L114_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R52_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L110_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R46_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R238_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L42_module for
    vars time and t;
  enddef;
  def map between environment and anterior_communicating_C44_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L2_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R28_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R30_module for
    vars time and t;
  enddef;
  def map between environment and brachial_R34_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R272_module for
    vars time and t;
  enddef;
  def map between environment and basilar_C4_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_pre_L6_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_post_L12_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_pre_R204_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_post_R208_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_T_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C94_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C96_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C100_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C104_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C108_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C112_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C114_module for
    vars time and t;
  enddef;
  def map between environment and trunk_C_T_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C136_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C164_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C176_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C188_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C192_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L194_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L198_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_R216_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R220_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L200_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R222_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_T_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_lb_module for
    vars time and t;
  enddef;
  def map between environment and venous_ub_module for
    vars time and t;
  enddef;
  def map between environment and venous_ivc_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
  def map between environment and par_module for
    vars time and t;
  enddef;
  def map between environment and pvn_module for
    vars time and t;
  enddef;
enddef;
